// This CellML file was generated on 04/12/2007 at 15:20:38 using:
//
// COR (0.9.31.821)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// title: Computer model of action potential of mouse ventricular myocytes (Apical Cell Description)
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This model represents the APICAL CELL variant as described in Bondarenko et al.'s 2004 paper and is known to run in COR and PCEnv. This model . Version 05 (this version) was created from version 04 by adding a stimulus protocol component to allow simulation of trains of action potentials.
// created: W3CDTF 2006-01-01T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2009-05-28T15:39:04+12:00; Fixed e-notation error, updated curation status.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-12-05T14:40:24+13:00; Fixed error in IKs formulation; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-06-14T12:42:22+12:00; Penny's file was modified to add a stimulus protocol component, which allows the model to produce a train of action potentials. The values for duration (0.5ms) and amplitute (-80 picoA_per_picoF) were used. A period of 200ms was used to represent the high heart beat rate of mice.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-11-27T15:26:19+13:00; Units checked, curated.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2008-06-20T15:07:36+12:00; Added cmeta:id's to variables; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-06-19T13:05:22+12:00; Added cmeta:id's to several variables to allow creation of a session file.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2008-06-16T11:07:04+12:00; Changed stimulus protocol stim length from 70 to 500ms; Given James; Family Lawson; Other Richard
// simulation: endingValue 500; nonstandard-pointDensity 10000; maximumStepSize 0.01
// simulation: endingValue 1000; nonstandard-pointDensity 10000; maximumStepSize 0.1
// simulation: endingValue 1000; nonstandard-pointDensity 1000000; maximumStepSize 0.01
// title: unknown
// comment: FN Catherine Lloyd; This file contains a CellML description of Bondarenko et al.'s 2004 mathematical model of the action potential of mouse ventricular myocytes
// reference: Pubmed_id 15142845; Given B; Family Bondarenko; Other E; Given G; Family Szigeti; Other P; Given G; Family Bett; Other C; Given S; Family Kim; Other J; Given R; Family Rasmusson; Other L; title Computer model of action potential of mouse ventricular myocytes; volume 287; first_page H1378; title American Journal of Physiology Heart and Circulatory Physiology; W3CDTF 2004-09-01; last_page H1403
// reference: subject_type keyword; ventricular; cardiac action potential; Ventricular Myocyte; cardiac electrophysiology; calcium dynamics; ventricular myocyte; electrophysiology; cardiac; myocyte; mouse
def model bondarenko_2004_apical as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar_millisecond as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar3_per_millisecond as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar4_per_millisecond as
    unit micromolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit picoF {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -82.4202, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF_per_cm2 {init: 1, pub: out};
    var Vmyo: microlitre {init: 25.84e-6, pub: out};
    var VJSR: microlitre {init: 0.12e-6, pub: out};
    var VNSR: microlitre {init: 2.098e-6, pub: out};
    var Vss: microlitre {init: 1.485e-9, pub: out};
    var Acap: cm2 {init: 1.534e-4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: micromolar {init: 5400, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: micromolar {init: 140000, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: micromolar {init: 1800, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 298, pub: out};
    var F: coulomb_per_millimole {init: 96.5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: picoA_per_picoF;
    var time: millisecond {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_ClCa: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 0};
    var stim_end: millisecond {init: 100000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 71.43};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA_per_picoF {init: -80};
    i_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -(i_CaL+i_pCa+i_NaCa+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_stim);
  enddef;

  def comp calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: micromolar {init: 0.115001, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Cass: micromolar {init: 0.115001, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var CaJSR: micromolar {init: 1299.5, pub: out};
    var CaNSR: micromolar {init: 1299.5, pub: out};
    var Bi: dimensionless;
    var Bss: dimensionless;
    var BJSR: dimensionless;
    var CMDN_tot: micromolar {init: 50};
    var CSQN_tot: micromolar {init: 15000};
    var Km_CMDN: micromolar {init: 0.238};
    var Km_CSQN: micromolar {init: 800};
    var Acap: cm2 {pub: in};
    var Vmyo: microlitre {pub: in};
    var VJSR: microlitre {pub: in};
    var Vss: microlitre {pub: in};
    var VNSR: microlitre {pub: in};
    var V: millivolt {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var J_leak: micromolar_per_millisecond {pub: in};
    var J_rel: micromolar_per_millisecond {pub: in};
    var J_up: micromolar_per_millisecond {pub: in};
    var J_tr: micromolar_per_millisecond {pub: in};
    var J_trpn: micromolar_per_millisecond {pub: in};
    var J_xfer: micromolar_per_millisecond {pub: in};
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn+(i_Cab+i_pCa-2{dimensionless}*i_NaCa)*Acap*Cm/(2{dimensionless}*Vmyo*F)));
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+i_CaL*Acap*Cm/(2{dimensionless}*Vss*F)));
    ode(CaJSR, time) = BJSR*(J_tr-J_rel);
    ode(CaNSR, time) = (J_up-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    Bi = pow(1{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cai), -1{dimensionless});
    Bss = pow(1{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cass), -1{dimensionless});
    BJSR = pow(1{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1{dimensionless});
  enddef;

  def comp calcium_fluxes as
    var J_leak: micromolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: micromolar_per_millisecond {pub: out};
    var J_up: micromolar_per_millisecond {pub: out};
    var J_tr: micromolar_per_millisecond {pub: out};
    var J_trpn: micromolar_per_millisecond {pub: out};
    var J_xfer: micromolar_per_millisecond {pub: out};
    var k_plus_htrpn: per_micromolar_millisecond {init: 0.00237, pub: out};
    var k_minus_htrpn: per_millisecond {init: 3.2e-5, pub: out};
    var k_plus_ltrpn: per_micromolar_millisecond {init: 0.0327, pub: out};
    var k_minus_ltrpn: per_millisecond {init: 0.0196, pub: out};
    var P_RyR: dimensionless {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var v1: per_millisecond {init: 4.5};
    var tau_tr: millisecond {init: 20};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var v2: per_millisecond {init: 1.74e-5};
    var tau_xfer: millisecond {init: 8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var v3: micromolar_per_millisecond {init: 0.45};
    var Km_up: micromolar {init: 0.5};
    var LTRPN_tot: micromolar {pub: in};
    var HTRPN_tot: micromolar {pub: in};
    var LTRPN_Ca: micromolar {pub: in};
    var HTRPN_Ca: micromolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var i_CaL_max: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var Cai: micromolar {pub: in};
    var Cass: micromolar {pub: in};
    var CaJSR: micromolar {pub: in};
    var CaNSR: micromolar {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    J_rel = v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_xfer = (Cass-Cai)/tau_xfer;
    J_leak = v2*(CaNSR-Cai);
    J_up = v3*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    J_trpn = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)+k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-(k_minus_htrpn*HTRPN_Ca+k_minus_ltrpn*LTRPN_Ca);
    ode(P_RyR, time) = -0.04{per_millisecond}*P_RyR-0.1{per_millisecond}*i_CaL/i_CaL_max*exp(-sqr(V-5{millivolt})/648{millivolt2});
  enddef;

  def comp calcium_buffering as
    var LTRPN_tot: micromolar {init: 70, pub: out};
    var HTRPN_tot: micromolar {init: 140, pub: out};
    var LTRPN_Ca: micromolar {init: 11.2684, pub: out};
    var HTRPN_Ca: micromolar {init: 125.29, pub: out};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var k_plus_htrpn: per_micromolar_millisecond {pub: in};
    var k_minus_htrpn: per_millisecond {pub: in};
    var k_plus_ltrpn: per_micromolar_millisecond {pub: in};
    var k_minus_ltrpn: per_millisecond {pub: in};
    ode(LTRPN_Ca, time) = k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-k_minus_ltrpn*LTRPN_Ca;
    ode(HTRPN_Ca, time) = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)-k_minus_htrpn*HTRPN_Ca;
  enddef;

  def comp ryanodine_receptors as
    var P_O1: dimensionless {init: 0.149102e-4, pub: out};
    var P_O2: dimensionless {init: 0.951726e-10, pub: out};
    var P_C1: dimensionless {pub: out};
    var P_C2: dimensionless {init: 0.16774e-3, pub: out};
    var k_plus_a: micromolar4_per_millisecond {init: 0.006075};
    var k_minus_a: per_millisecond {init: 0.07125};
    var k_plus_b: micromolar3_per_millisecond {init: 0.00405};
    var k_minus_b: per_millisecond {init: 0.965};
    var k_plus_c: per_millisecond {init: 0.009};
    var k_minus_c: per_millisecond {init: 0.0008};
    var m: dimensionless {init: 3};
    var n: dimensionless {init: 4};
    var time: millisecond {pub: in};
    var Cass: micromolar {pub: in};
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    P_C1 = 1{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
  enddef;

  def comp L_type_calcium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: picoA_per_picoF {pub: out};
    var i_CaL_max: picoA_per_picoF {init: 7, pub: out};
    var E_CaL: millivolt {init: 63, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: milliS_per_microF {init: 0.1729};
    var O: dimensionless {init: 0.930308e-18};
    var C1: dimensionless;
    var C2: dimensionless {init: 0.124216e-3};
    var C3: dimensionless {init: 0.578679e-8};
    var C4: dimensionless {init: 0.119816e-12};
    var I1: dimensionless {init: 0.497923e-18};
    var I2: dimensionless {init: 0.345847e-13};
    var I3: dimensionless {init: 0.185106e-13};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var gamma: per_millisecond;
    var Kpcf: per_millisecond;
    var Kpcb: per_millisecond {init: 0.0005};
    var Kpc_max: per_millisecond {init: 0.23324};
    var Kpc_half: micromolar {init: 20};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Cass: micromolar {pub: in};
    i_CaL = g_CaL*O*(V-E_CaL);
    ode(O, time) = alpha*C4+Kpcb*I1+0.001{dimensionless}*(alpha*I2-Kpcf*O)-(4{dimensionless}*beta*O+gamma*O);
    C1 = 1{dimensionless}-(O+C2+C3+C4+I1+I2+I3);
    ode(C2, time) = 4{dimensionless}*alpha*C1+2{dimensionless}*beta*C3-(beta*C2+3{dimensionless}*alpha*C2);
    ode(C3, time) = 3{dimensionless}*alpha*C2+3{dimensionless}*beta*C4-(2{dimensionless}*beta*C3+2{dimensionless}*alpha*C3);
    ode(C4, time) = 2{dimensionless}*alpha*C3+4{dimensionless}*beta*O+0.01{millisecond}*(4{dimensionless}*Kpcb*beta*I1-alpha*gamma*C4)+0.002{dimensionless}*(4{dimensionless}*beta*I2-Kpcf*C4)+4{millisecond}*beta*Kpcb*I3-(3{dimensionless}*beta*C4+alpha*C4+1{millisecond}*gamma*Kpcf*C4);
    ode(I1, time) = gamma*O+0.001{dimensionless}*(alpha*I3-Kpcf*I1)+0.01{millisecond}*(alpha*gamma*C4-4{dimensionless}*beta*Kpcf*I1)-Kpcb*I1;
    ode(I2, time) = 0.001{dimensionless}*(Kpcf*O-alpha*I2)+Kpcb*I3+0.002{dimensionless}*(Kpcf*C4-4{dimensionless}*beta*I2)-gamma*I2;
    ode(I3, time) = 0.001{dimensionless}*(Kpcf*I1-alpha*I3)+gamma*I2+1{millisecond}*gamma*Kpcf*C4-(4{millisecond}*beta*Kpcb*I3+Kpcb*I3);
    alpha = 0.4{per_millisecond}*exp((V+12{millivolt})/10{millivolt})*(1{dimensionless}+0.7{dimensionless}*exp(-sqr(V+40{millivolt})/10{millivolt2})-0.75{dimensionless}*exp(-sqr(V+20{millivolt})/400{millivolt2}))/(1{dimensionless}+0.12{dimensionless}*exp((V+12{millivolt})/10{millivolt}));
    beta = 0.05{per_millisecond}*exp(-(V+12{millivolt})/13{millivolt});
    gamma = Kpc_max*Cass/(Kpc_half+Cass);
    Kpcf = 13{per_millisecond}*(1{dimensionless}-exp(-sqr(V+14.5{millivolt})/100{millivolt2}));
  enddef;

  def comp calcium_pump_current as
    var i_pCa: picoA_per_picoF {pub: out};
    var i_pCa_max: picoA_per_picoF {init: 1};
    var Km_pCa: micromolar {init: 0.5};
    var Cai: micromolar {pub: in};
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
  enddef;

  def comp sodium_calcium_exchange_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: picoA_per_picoF {init: 292.8};
    var K_mNa: micromolar {init: 87500};
    var K_mCa: micromolar {init: 1380};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    i_NaCa = k_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  def comp calcium_background_current as
    var i_Cab: picoA_per_picoF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.000367};
    var E_CaN: millivolt;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    i_Cab = g_Cab*(V-E_CaN);
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
  enddef;

  def comp sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: micromolar {init: 14237.1, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    ode(Nai, time) = -conc_clamp*(i_Na+i_Nab+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA_per_picoF {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: milliS_per_microF {init: 13};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0};
    var O_Na: dimensionless {init: 0.713483e-6};
    var C_Na1: dimensionless {init: 0.279132e-3};
    var C_Na2: dimensionless {init: 0.020752};
    var C_Na3: dimensionless;
    var I1_Na: dimensionless {init: 0.673345e-6};
    var I2_Na: dimensionless {init: 0.155787e-8};
    var IF_Na: dimensionless {init: 0.153176e-3};
    var IC_Na2: dimensionless {init: 0.0113879};
    var IC_Na3: dimensionless {init: 0.34278};
    var alpha_Na11: per_millisecond;
    var beta_Na11: per_millisecond;
    var alpha_Na12: per_millisecond;
    var beta_Na12: per_millisecond;
    var alpha_Na13: per_millisecond;
    var beta_Na13: per_millisecond;
    var alpha_Na3: per_millisecond;
    var beta_Na3: per_millisecond;
    var alpha_Na2: per_millisecond;
    var beta_Na2: per_millisecond;
    var alpha_Na4: per_millisecond;
    var beta_Na4: per_millisecond;
    var alpha_Na5: per_millisecond;
    var beta_Na5: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    i_Na = g_Na*O_Na*(V-E_Na);
    E_Na = R*T/F*ln((0.9{dimensionless}*Nao+0.1{dimensionless}*Ko)/(0.9{dimensionless}*Nai+0.1{dimensionless}*Ki));
    C_Na3 = 1{dimensionless}-(O_Na+C_Na1+C_Na2+IF_Na+I1_Na+I2_Na+IC_Na2+IC_Na3);
    ode(C_Na2, time) = alpha_Na11*C_Na3+beta_Na12*C_Na1+alpha_Na3*IC_Na2-(beta_Na11*C_Na2+alpha_Na12*C_Na2+beta_Na3*C_Na2);
    ode(C_Na1, time) = alpha_Na12*C_Na2+beta_Na13*O_Na+alpha_Na3*IF_Na-(beta_Na12*C_Na1+alpha_Na13*C_Na1+beta_Na3*C_Na1);
    ode(O_Na, time) = alpha_Na13*C_Na1+beta_Na2*IF_Na-(beta_Na13*O_Na+alpha_Na2*O_Na);
    ode(IF_Na, time) = alpha_Na2*O_Na+beta_Na3*C_Na1+beta_Na4*I1_Na+alpha_Na12*IC_Na2-(beta_Na2*IF_Na+alpha_Na3*IF_Na+alpha_Na4*IF_Na+beta_Na12*IF_Na);
    ode(I1_Na, time) = alpha_Na4*IF_Na+beta_Na5*I2_Na-(beta_Na4*I1_Na+alpha_Na5*I1_Na);
    ode(I2_Na, time) = alpha_Na5*I1_Na-beta_Na5*I2_Na;
    ode(IC_Na2, time) = alpha_Na11*IC_Na3+beta_Na12*IF_Na+beta_Na3*C_Na2-(beta_Na11*IC_Na2+alpha_Na12*IC_Na2+alpha_Na3*IC_Na2);
    ode(IC_Na3, time) = beta_Na11*IC_Na2+beta_Na3*C_Na3-(alpha_Na11*IC_Na3+alpha_Na3*IC_Na3);
    alpha_Na11 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/17{millivolt})+0.2{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na12 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/15{millivolt})+0.23{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na13 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/12{millivolt})+0.25{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    beta_Na11 = 0.1917{per_millisecond}*exp(-(V+2.5{millivolt})/20.3{millivolt});
    beta_Na12 = 0.2{per_millisecond}*exp(-(V-2.5{millivolt})/20.3{millivolt});
    beta_Na13 = 0.22{per_millisecond}*exp(-(V-7.5{millivolt})/20.3{millivolt});
    alpha_Na3 = 7e-7{per_millisecond}*exp(-(V+7{millivolt})/7.7{millivolt});
    beta_Na3 = 0.0084{per_millisecond}+0.00002{per_millivolt_millisecond}*(V+7{millivolt});
    alpha_Na2 = 1{per_millisecond}/(0.188495{dimensionless}*exp(-(V+7{millivolt}-shift_INa_inact)/16.6{millivolt})+0.393956{dimensionless});
    beta_Na2 = alpha_Na13*alpha_Na2*alpha_Na3/(beta_Na13*beta_Na3);
    alpha_Na4 = alpha_Na2/1000{dimensionless};
    beta_Na4 = alpha_Na3;
    alpha_Na5 = alpha_Na2/95000{dimensionless};
    beta_Na5 = alpha_Na3/50{dimensionless};
  enddef;

  def comp sodium_background_current as
    var i_Nab: picoA_per_picoF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0026};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: micromolar {init: 143720, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    ode(Ki, time) = -conc_clamp*(i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_transient_outward_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_Kto_f: picoA_per_picoF {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_Kto_f: milliS_per_microF {init: 0.4067};
    var ato_f: dimensionless {init: 0.265563e-2};
    var ito_f: dimensionless {init: 0.999977};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ki: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var time: millisecond {pub: in};
    i_Kto_f = g_Kto_f*pow(ato_f, 3{dimensionless})*ito_f*(V-E_K);
    E_K = R*T/F*ln(Ko/Ki);
    ode(ato_f, time) = alpha_a*(1{dimensionless}-ato_f)-beta_a*ato_f;
    ode(ito_f, time) = alpha_i*(1{dimensionless}-ito_f)-beta_i*ito_f;
    alpha_a = 0.18064{per_millisecond}*exp(0.03577{per_millivolt}*(V+30{millivolt}));
    beta_a = 0.3956{per_millisecond}*exp(-0.06237{per_millivolt}*(V+30{millivolt}));
    alpha_i = 0.000152{per_millisecond}*exp(-(V+13.5{millivolt})/7{millivolt})/(0.0067083{dimensionless}*exp(-(V+33.5{millivolt})/7{millivolt})+1{dimensionless});
    beta_i = 0.00095{per_millisecond}*exp((V+33.5{millivolt})/7{millivolt})/(0.051335{dimensionless}*exp((V+33.5{millivolt})/7{millivolt})+1{dimensionless});
  enddef;

  def comp slow_transient_outward_potassium_current as
    var i_Kto_s: picoA_per_picoF {pub: out};
    var ass: dimensionless {pub: out};
    var iss: dimensionless {pub: out};
    var g_Kto_s: milliS_per_microF {init: 0};
    var ato_s: dimensionless {init: 0.417069e-3};
    var ito_s: dimensionless {init: 0.998543};
    var tau_ta_s: millisecond;
    var tau_ti_s: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Kto_s = g_Kto_s*ato_s*ito_s*(V-E_K);
    ode(ato_s, time) = (ass-ato_s)/tau_ta_s;
    ode(ito_s, time) = (iss-ito_s)/tau_ti_s;
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(V+22.5{millivolt})/7.7{millivolt}));
    iss = 1{dimensionless}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
    tau_ta_s = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_ti_s = 270{millisecond}+1050{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: milliS_per_microF {init: 0.2938};
    var Ko: micromolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_K1 = g_K1*Ko/(Ko+210{micromolar})*(V-E_K)/(1{dimensionless}+exp(0.0896{per_millivolt}*(V-E_K)));
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: milliS_per_microF {init: 0.00575};
    var nKs: dimensionless {init: 0.262753e-3};
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1{dimensionless}-nKs)-beta_n*nKs;
    alpha_n = 0.00000481333{per_millivolt_millisecond}*(V+26.5{millivolt})/(1{dimensionless}-exp(-0.128{per_millivolt}*(V+26.5{millivolt})));
    beta_n = 0.0000953333{per_millisecond}*exp(-0.038{per_millivolt}*(V+26.5{millivolt}));
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_potassium_current as
    var i_Kur: picoA_per_picoF {pub: out};
    var g_Kur: milliS_per_microF {init: 0.16};
    var aur: dimensionless {init: 0.417069e-3};
    var iur: dimensionless {init: 0.998543};
    var tau_aur: millisecond;
    var tau_iur: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    var iss: dimensionless {pub: in};
    i_Kur = g_Kur*aur*iur*(V-E_K);
    ode(aur, time) = (ass-aur)/tau_aur;
    ode(iur, time) = (iss-iur)/tau_iur;
    tau_aur = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_iur = 1200{millisecond}-170{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp non_inactivating_steady_state_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_non_inactivating_steady_state_potassium_current
    var i_Kss: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_non_inactivating_steady_state_potassium_current_conductance
    var g_Kss: milliS_per_microF {init: 0.05};
    var aKss: dimensionless {init: 0.417069e-3};
    var iKss: dimensionless {init: 1};
    var tau_Kss: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    i_Kss = g_Kss*aKss*iKss*(V-E_K);
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    ode(iKss, time) = 0{per_millisecond};
    tau_Kss = 39.3{millisecond}*exp(-0.0862{per_millivolt}*V)+13.17{millisecond};
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: milliS_per_microF {init: 0.078};
    var O_K: dimensionless {init: 0.175298e-3};
    var C_K1: dimensionless {init: 0.992513e-3};
    var C_K2: dimensionless {init: 0.641229e-3};
    var C_K0: dimensionless;
    var I_K: dimensionless {init: 0.319129e-4};
    var alpha_a0: per_millisecond;
    var beta_a0: per_millisecond;
    var kb: per_millisecond {init: 0.036778};
    var kf: per_millisecond {init: 0.023761};
    var alpha_a1: per_millisecond;
    var beta_a1: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    i_Kr = g_Kr*O_K*(V-R*T/F*ln((0.98{dimensionless}*Ko+0.02{dimensionless}*Nao)/(0.98{dimensionless}*Ki+0.02{dimensionless}*Nai)));
    C_K0 = 1{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    alpha_a0 = 0.022348{per_millisecond}*exp(0.01176{per_millivolt}*V);
    beta_a0 = 0.047002{per_millisecond}*exp(-0.0631{per_millivolt}*V);
    alpha_a1 = 0.013733{per_millisecond}*exp(0.038198{per_millivolt}*V);
    beta_a1 = 0.0000689{per_millisecond}*exp(-0.04178{per_millivolt}*V);
    alpha_i = 0.090821{per_millisecond}*exp(0.023391{per_millivolt}*(V+5{millivolt}));
    beta_i = 0.006497{per_millisecond}*exp(-0.03268{per_millivolt}*(V+5{millivolt}));
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var i_NaK_max: picoA_per_picoF {init: 0.88};
    var Km_Nai: micromolar {init: 21000};
    var Km_Ko: micromolar {init: 1500};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    i_NaK = i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 1.5{dimensionless}))*Ko/(Ko+Km_Ko);
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67300{micromolar})-1{dimensionless});
  enddef;

  def comp calcium_activated_chloride_current as
    var i_ClCa: picoA_per_picoF {pub: out};
    var g_ClCa: milliS_per_microF {init: 10};
    var O_ClCa: dimensionless;
    var E_Cl: millivolt {init: -40};
    var Km_Cl: micromolar {init: 10};
    var V: millivolt {pub: in};
    var Cai: micromolar {pub: in};
    i_ClCa = g_ClCa*O_ClCa*Cai/(Cai+Km_Cl)*(V-E_Cl);
    O_ClCa = 0.2{dimensionless}/(1{dimensionless}+exp(-(V-46.7{millivolt})/7.8{millivolt}));
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between calcium_buffering and environment for
    vars time and time;
  enddef;
  def map between ryanodine_receptors and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between non_inactivating_steady_state_potassium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars V and V;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_pCa and i_pCa;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between membrane and calcium_background_current for
    vars i_Cab and i_Cab;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
  enddef;
  def map between membrane and fast_sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and sodium_background_current for
    vars i_Nab and i_Nab;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and fast_transient_outward_potassium_current for
    vars i_Kto_f and i_Kto_f;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
  enddef;
  def map between membrane and slow_transient_outward_potassium_current for
    vars i_Kto_s and i_Kto_s;
    vars V and V;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars i_K1 and i_K1;
    vars V and V;
    vars Ko and Ko;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
    vars V and V;
  enddef;
  def map between membrane and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars i_Kur and i_Kur;
    vars V and V;
  enddef;
  def map between membrane and non_inactivating_steady_state_potassium_current for
    vars i_Kss and i_Kss;
    vars V and V;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars i_Kr and i_Kr;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and calcium_activated_chloride_current for
    vars i_ClCa and i_ClCa;
    vars V and V;
  enddef;
  def map between membrane and calcium_concentration for
    vars Cm and Cm;
    vars V and V;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars VNSR and VNSR;
    vars VJSR and VJSR;
    vars Vss and Vss;
    vars F and F;
  enddef;
  def map between membrane and calcium_fluxes for
    vars V and V;
  enddef;
  def map between membrane and sodium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between membrane and potassium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars Cass and Cass;
    vars CaJSR and CaJSR;
    vars Cai and Cai;
    vars CaNSR and CaNSR;
    vars J_rel and J_rel;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_leak and J_leak;
    vars J_up and J_up;
    vars J_trpn and J_trpn;
  enddef;
  def map between calcium_concentration and calcium_buffering for
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_background_current for
    vars i_Cab and i_Cab;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_activated_chloride_current for
    vars Cai and Cai;
  enddef;
  def map between calcium_fluxes and calcium_buffering for
    vars LTRPN_tot and LTRPN_tot;
    vars HTRPN_tot and HTRPN_tot;
    vars LTRPN_Ca and LTRPN_Ca;
    vars HTRPN_Ca and HTRPN_Ca;
    vars k_plus_htrpn and k_plus_htrpn;
    vars k_minus_htrpn and k_minus_htrpn;
    vars k_plus_ltrpn and k_plus_ltrpn;
    vars k_minus_ltrpn and k_minus_ltrpn;
  enddef;
  def map between calcium_fluxes and L_type_calcium_current for
    vars i_CaL_max and i_CaL_max;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between sodium_concentration and fast_sodium_current for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between sodium_concentration and sodium_background_current for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_concentration and sodium_calcium_exchange_current for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between potassium_concentration and fast_transient_outward_potassium_current for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between potassium_concentration and slow_transient_outward_potassium_current for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between potassium_concentration and time_independent_potassium_current for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_potassium_current for
    vars i_Kr and i_Kr;
    vars Ki and Ki;
  enddef;
  def map between sodium_concentration and rapid_delayed_rectifier_potassium_current for
    vars Nai and Nai;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_concentration and non_inactivating_steady_state_potassium_current for
    vars i_Kss and i_Kss;
  enddef;
  def map between fast_transient_outward_potassium_current and slow_transient_outward_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and slow_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and non_inactivating_steady_state_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between slow_transient_outward_potassium_current and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars ass and ass;
    vars iss and iss;
  enddef;
  def map between slow_transient_outward_potassium_current and non_inactivating_steady_state_potassium_current for
    vars ass and ass;
  enddef;
  def map between sodium_concentration and potassium_concentration for
    vars conc_clamp and conc_clamp;
  enddef;
  // Computer model of action potential of mouse ventricular myocytes
  //
  // Noble Penny
  //
  // Oxford University
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR to reproduce the the action potential traces from Figure 16 of the publication. This model represents the APICAL CELL variant as described in Bondarenko et al.'s 2004 paper.
  //
  // Model Structure
  //
  // ABSTRACT: We have developed a mathematical model of the mouse ventricular myocyte action potential (AP) from voltage-clamp data of the underlying currents and Ca2+ transients. Wherever possible, we used Markov models to represent the molecular structure and function of ion channels. The model includes detailed intracellular Ca2+ dynamics, with simulations of localized events such as sarcoplasmic Ca2+ release into a small intracellular volume bounded by the sarcolemma and sarcoplasmic reticulum. Transporter-mediated Ca2+ fluxes from the bulk cytosol are closely matched to the experimentally reported values and predict stimulation rate-dependent changes in Ca2+ transients. Our model reproduces the properties of cardiac myocytes from two different regions of the heart: the apex and the septum. The septum has a relatively prolonged AP, which reflects a relatively small contribution from the rapid transient outward K+ current in the septum. The attribution of putative molecular bases for several of the component currents enables our mouse model to be used to simulate the behavior of genetically modified transgenic mice.
  //
  // The original paper reference is cited below:
  //
  // Computer model of action potential of mouse ventricular myocytes, Vladimir E. Bondarenko, Gyula P. Szigeti, Glenna C. L. Bett, Song-Jung Kim, and Randall L. Rasmusson, 2004, American Journal of Physiology, 287, H1378-H1403. PubMed ID: 15142845 (http://www.ncbi.nlm.nih.gov/pubmed/15142845)
  //
  // cell diagram
  //
  // Schematic diagram of the mouse model ionic currents and calcium fluxes.
  //
  // reaction diagram
  //
  // State diagram of the Markov model for the sodium channel. CNa denotes a closed channel state, ONa is the open state, IFNa represents the fast, inactivated state, I1Na and I2Na are the intermediate inactivated states, and IC2Na and IC3Na are the closed-inactivation states.
enddef;
// #bondarenko_2004_apica
// named-attribute: name SuggestedForwardEulerTimestep; 0.0002
