<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 24/09/2010 at 1:30:58 using:

COR (0.9.31.1393)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="bueno_2007" cmeta:id="bueno_2007" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
        This CellML model is known to run in both COR and OpenCell to recreate the results of the original model. The units have been checked and they are consistent. 
</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
The applicability and usefulness of the new model have been proved by addressing the study of the Brugada syndrome, an important hereditary genetic disease able to cause sudden cardiac death in human patients even without identifiable structural abnormalities. Despite not incorporating independent descriptions for each of the known currents measured through the cell membrane, the model is however capable to correctly reproduce both the healthy and pathological conditions of the epicardial tissue layer, the latter being characterized by the presence of a much deeper notch in the cardiac action potential as a result of a loss of functionality of sodium channels which leaves unopposed the transient outward potassium current.
</para>
				<para>
Despite being able of reproducing a great amount of available experimental data, one important limitation of the proposed minimal model is that it lacks of a complete description of intracellular calcium dynamics. Hence, the model cannot be used to study particular conditions of importance in the generation and development of arrhythmias, such as calcium overload, spontaneous calcium release or calcium-induced alternans. This limitation could be overcome however by coupling our simplified model of the cardiac transmembrane potential to a reduced model of the intracellular calcium cycling of the ventricular myocyte, such as the one suggested by Shiferaw et al. (2003), therefore yielding the first implementation of a second-generation simplified ionic model of the cardiac myocyte.
</para>
				<para>
This model was taken from the PhD thesis of Alfonso Bueno:
</para>
				<para>
Mathematical modeling and spectral simulation of genetic diseases in the human heart, Alfonso Bueno, Department of Mathematics, University of Castilla-La Mancha, Ciudad Real, May 2007.
</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Seq rdf:about="rdf:#679f10ee-12d7-4474-ad1d-8685b5aab3e9">
			<rdf:li rdf:resource="rdf:#927faa0c-8772-4c18-baec-973b868c6ce4"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#f3061df5-2fd2-4f4c-a840-4c8cbf3c99b4">
			<dcterms:modified rdf:resource="rdf:#acd5ae7b-56ad-43e5-841e-3e1b69b05f73"/>
			<rdf:value>updated curation status</rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#1eed0db6-d2ea-43dc-948b-e0f048014981"/>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher/>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#30daf8a5-05a4-4492-9dea-3cf509e5072d"/>
			<dcterms:created rdf:resource="rdf:#2ab16259-22dd-467a-8d88-da85a853cb66"/>
			<dc:creator rdf:resource="rdf:#b3ec4e5a-01ac-4f03-a847-efbdc8809aaa"/>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#f3061df5-2fd2-4f4c-a840-4c8cbf3c99b4"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fa433c77-a70b-477b-81b6-0121d11471b1">
			<dc:creator rdf:resource="rdf:#b21c1c2f-13f1-4e89-b2da-d0ece71736da"/>
			<rdf:value>This model of a ventricular cell was taken from Alfonso Bueno's 2007 PhD thesis, which can be found at http://matematicas.uclm.es/abueno/webpdfs/abueno_thesis.pdf (as of 2008-06-16)</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b21c1c2f-13f1-4e89-b2da-d0ece71736da">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4c0b675b-b50c-40de-8026-022a54b4ecf7">
			<vCard:Given>Alfonso</vCard:Given>
			<vCard:Family>Bueno</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#acd5ae7b-56ad-43e5-841e-3e1b69b05f73">
			<dcterms:W3CDTF>2009-05-28T16:10:40+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5db67e3d-fa76-42da-bc41-f89649c9aa62">
			<bqs:Pubmed_id/>
			<bqs:JournalArticle rdf:resource="rdf:#f2ae2bd3-7f9f-4812-9700-23139002c009"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#48ebd61a-83c5-44df-9400-4c2b3a81fb6b">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b4f1cc2b-e1e9-4652-8ddf-2cca4ab30114">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>penny.noble@dpag.ox.ac.uk</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1eed0db6-d2ea-43dc-948b-e0f048014981">
			<vCard:N rdf:resource="rdf:#833e0cc1-5ecb-4216-9086-0ba193c74ade"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0915ccb0-e15d-49b2-bb73-e058ea84d8ae">
			<dc:title/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2ab16259-22dd-467a-8d88-da85a853cb66">
			<dcterms:W3CDTF>2008-02-28T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#bueno_2007">
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>electrophysiology</rdf:li>
							<rdf:li>cardiac</rdf:li>
							<rdf:li>Brugada syndrome</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference rdf:resource="rdf:#5db67e3d-fa76-42da-bc41-f89649c9aa62"/>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#fa433c77-a70b-477b-81b6-0121d11471b1"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#927faa0c-8772-4c18-baec-973b868c6ce4">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#4c0b675b-b50c-40de-8026-022a54b4ecf7"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#833e0cc1-5ecb-4216-9086-0ba193c74ade">
			<vCard:Given>James</vCard:Given>
			<vCard:Family>Lawson</vCard:Family>
			<vCard:Other>Richard</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f2ae2bd3-7f9f-4812-9700-23139002c009">
			<dc:creator rdf:resource="rdf:#679f10ee-12d7-4474-ad1d-8685b5aab3e9"/>
			<dc:title>Mathematical modeling and spectral simulation of genetic diseases in the human heart</dc:title>
			<bqs:volume/>
			<bqs:first_page/>
			<bqs:Journal rdf:resource="rdf:#0915ccb0-e15d-49b2-bb73-e058ea84d8ae"/>
			<dcterms:issued rdf:resource="rdf:#0e6ae837-14b7-41fc-bea4-c1bb9aa16225"/>
			<bqs:last_page/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4b1baa5d-3259-40f1-b3c4-3b25006396d9">
			<vCard:Orgname>The University of Oxford</vCard:Orgname>
			<vCard:Orgunit>Department of Physiology, Anatomy and Genetics</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0b09c387-f86a-4586-8e47-8f493a62f324">
			<vCard:Given>Penny</vCard:Given>
			<vCard:Family>Noble</vCard:Family>
			<vCard:Other/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b3ec4e5a-01ac-4f03-a847-efbdc8809aaa">
			<vCard:ORG rdf:resource="rdf:#4b1baa5d-3259-40f1-b3c4-3b25006396d9"/>
			<vCard:EMAIL rdf:resource="rdf:#b4f1cc2b-e1e9-4652-8ddf-2cca4ab30114"/>
			<vCard:N rdf:resource="rdf:#0b09c387-f86a-4586-8e47-8f493a62f324"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0e6ae837-14b7-41fc-bea4-c1bb9aa16225">
			<dcterms:W3CDTF>2007-05-00 00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#30daf8a5-05a4-4492-9dea-3cf509e5072d">
			<dc:creator rdf:resource="rdf:#48ebd61a-83c5-44df-9400-4c2b3a81fb6b"/>
			<rdf:value>This CellML model is known to run in both COR and PCEnv to recreate the results of the original model.  The units have been checked and are consistent. Model has been curated using Bueno 2007 thesis.</rdf:value>
		</rdf:Description>
	</rdf:RDF>   <units name="ms">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_ms">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="mV">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_mV">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_mV_ms">
      <unit units="mV" exponent="-1"/>
      <unit units="ms" exponent="-1"/>
   </units>
   <units name="mS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="uF_per_cm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="uA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="cm2_per_uA">
      <unit units="metre" prefix="centi" exponent="2"/>
      <unit units="ampere" prefix="micro" exponent="-1"/>
   </units>
   <units name="cm2_per_uA_per_ms">
      <unit units="metre" prefix="centi" exponent="2"/>
      <unit units="ampere" prefix="micro" exponent="-1"/>
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="concentration_units">
      <unit units="mole" prefix="nano"/>
      <unit units="metre" prefix="milli" exponent="-3"/>
   </units>
   <component name="environment">
      <variable name="time" units="ms" public_interface="out" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#time">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <component name="membrane">
      <variable name="u" units="dimensionless" public_interface="out"/>
      <variable name="V" units="mV" initial_value="0" cmeta:id="membrane_voltage">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_voltage">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="time" units="ms" public_interface="in"/>
      <variable name="C" units="uF_per_cm2" initial_value="1" cmeta:id="membrane_capacitance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_capacitance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="i_fi" units="uA_per_cm2" public_interface="in"/>
      <variable name="i_so" units="uA_per_cm2" public_interface="in"/>
      <variable name="i_si" units="uA_per_cm2" public_interface="in"/>
      <variable name="i_stim" units="uA_per_cm2" cmeta:id="membrane_stimulus_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimStart" units="ms" initial_value="10" cmeta:id="membrane_stimulus_current_offset">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_offset">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimEnd" units="ms" initial_value="50000"/>
      <variable name="IstimAmplitude" units="uA_per_cm2" initial_value="-0.5" cmeta:id="membrane_stimulus_current_amplitude">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_amplitude">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimPeriod" units="ms" initial_value="1000" cmeta:id="membrane_stimulus_current_period">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_period">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimPulseDuration" units="ms" initial_value="1" cmeta:id="membrane_stimulus_current_duration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_duration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="alpha" units="per_mV" initial_value="1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_stim</ci>
            <piecewise>
               <piece>
                  <ci>IstimAmplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>IstimStart</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <ci>IstimEnd</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>time</ci>
                              <ci>IstimStart</ci>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <apply>
                                       <minus/>
                                       <ci>time</ci>
                                       <ci>IstimStart</ci>
                                    </apply>
                                    <ci>IstimPeriod</ci>
                                 </apply>
                              </apply>
                              <ci>IstimPeriod</ci>
                           </apply>
                        </apply>
                        <ci>IstimPulseDuration</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="uA_per_cm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>

      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
                  <ci>C</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>i_fi</ci>
                  <ci>i_so</ci>
                  <ci>i_si</ci>
                  <ci>i_stim</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>u</ci>
            <apply>
               <times/>
               <ci>V</ci>
               <ci>alpha</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="m">
      <variable name="m" units="dimensionless" public_interface="out"/>
      <variable name="u_m" units="dimensionless" initial_value="0.3" public_interface="out"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>m</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>u</ci>
                     <ci>u_m</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="p">
      <variable name="p" units="dimensionless" public_interface="out"/>
      <variable name="u_p" units="dimensionless" initial_value="0.13" public_interface="out"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>p</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>u</ci>
                     <ci>u_p</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="q">
      <variable name="q" units="dimensionless" public_interface="out"/>
      <variable name="u_q" units="dimensionless" initial_value="0.006" public_interface="out"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>q</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>u</ci>
                     <ci>u_q</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="r">
      <variable name="r" units="dimensionless" public_interface="out"/>
      <variable name="u_r" units="dimensionless" initial_value="0.006"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>r</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>u</ci>
                     <ci>u_r</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="fast_inward_current">
      <variable name="i_fi" units="uA_per_cm2" public_interface="out"/>
      <variable name="tau_fi" units="cm2_per_uA" initial_value="0.11"/>
      <variable name="m" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="q" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="u_p" units="dimensionless" public_interface="in"/>
      <variable name="u_u" units="dimensionless" initial_value="1.55"/>
      <variable name="u_m" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in" private_interface="out"/>
      <variable name="u" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="u_q" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="v" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_fi</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>m</ci>
                  </apply>
                  <ci>v</ci>
                  <apply>
                     <minus/>
                     <ci>u</ci>
                     <ci>u_m</ci>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>u_u</ci>
                     <ci>u</ci>
                  </apply>
               </apply>
               <ci>tau_fi</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="fast_inward_current_v_gate">
      <variable name="v" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="v_inf" units="dimensionless"/>
      <variable name="tau_v_minus" units="ms"/>
      <variable name="tau_v1_minus" units="ms" initial_value="60"/>
      <variable name="tau_v2_minus" units="ms" initial_value="1150"/>
      <variable name="tau_v_plus" units="ms" initial_value="1.4506"/>
      <variable name="q" units="dimensionless" public_interface="in"/>
      <variable name="m" units="dimensionless" public_interface="in"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="u_q" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v_inf</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <lt/>
                     <ci>u</ci>
                     <ci>u_q</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>tau_v_minus</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>q</ci>
                  <ci>tau_v2_minus</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>q</ci>
                  </apply>
                  <ci>tau_v1_minus</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>v</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>m</ci>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>v_inf</ci>
                        <ci>v</ci>
                     </apply>
                  </apply>
                  <ci>tau_v_minus</ci>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>m</ci>
                     <ci>v</ci>
                  </apply>
                  <ci>tau_v_plus</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_outward_current">
      <variable name="i_so" units="uA_per_cm2" public_interface="out"/>
      <variable name="tau_o" units="cm2_per_uA"/>
      <variable name="tau_o1" units="cm2_per_uA" initial_value="400"/>
      <variable name="tau_o2" units="cm2_per_uA" initial_value="6"/>
      <variable name="tau_so" units="cm2_per_uA"/>
      <variable name="tau_so1" units="cm2_per_uA" initial_value="30.0181"/>
      <variable name="tau_so2" units="cm2_per_uA" initial_value="0.9957"/>
      <variable name="k_so" units="dimensionless" initial_value="2.0458"/>
      <variable name="u_so" units="dimensionless" initial_value="0.65"/>
      <variable name="r" units="dimensionless" public_interface="in"/>
      <variable name="p" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>tau_o</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>r</ci>
                  </apply>
                  <ci>tau_o1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>r</ci>
                  <ci>tau_o2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_so</ci>
            <apply>
               <plus/>
               <ci>tau_so1</ci>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>tau_so2</ci>
                        <ci>tau_so1</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <tanh/>
                           <apply>
                              <times/>
                              <ci>k_so</ci>
                              <apply>
                                 <minus/>
                                 <ci>u</ci>
                                 <ci>u_so</ci>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_so</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>u</ci>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>p</ci>
                     </apply>
                  </apply>
                  <ci>tau_o</ci>
               </apply>
               <apply>
                  <divide/>
                  <ci>p</ci>
                  <ci>tau_so</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current">
      <variable name="i_si" units="uA_per_cm2" public_interface="out"/>
      <variable name="tau_si" units="cm2_per_uA" initial_value="1.8875"/>
      <variable name="p" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="r" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="time" units="ms" public_interface="in" private_interface="out"/>
      <variable name="u" units="dimensionless" public_interface="in" private_interface="out"/>
      <variable name="w" units="dimensionless" private_interface="in"/>
      <variable name="s" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_si</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>p</ci>
                  </apply>
                  <ci>w</ci>
                  <ci>s</ci>
               </apply>
               <ci>tau_si</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_w_gate">
      <variable name="w" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="w_inf" units="dimensionless"/>
      <variable name="tau_winf" units="ms" initial_value="0.07"/>
      <variable name="wstar_inf" units="dimensionless" initial_value="0.94"/>
      <variable name="tau_w_minus" units="ms"/>
      <variable name="tau_w1_minus" units="ms" initial_value="60"/>
      <variable name="tau_w2_minus" units="ms" initial_value="15"/>
      <variable name="k_w_minus" units="dimensionless" initial_value="65"/>
      <variable name="u_w_minus" units="dimensionless" initial_value="0.03"/>
      <variable name="tau_w_plus" units="ms" initial_value="200"/>
      <variable name="r" units="dimensionless" public_interface="in"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>w_inf</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>r</ci>
                  </apply>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>u</ci>
                           <cn cellml:units="ms">1</cn>
                        </apply>
                        <ci>tau_winf</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>r</ci>
                  <ci>wstar_inf</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_w_minus</ci>
            <apply>
               <plus/>
               <ci>tau_w1_minus</ci>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>tau_w2_minus</ci>
                        <ci>tau_w1_minus</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <tanh/>
                           <apply>
                              <times/>
                              <ci>k_w_minus</ci>
                              <apply>
                                 <minus/>
                                 <ci>u</ci>
                                 <ci>u_w_minus</ci>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>w</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>r</ci>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>w_inf</ci>
                        <ci>w</ci>
                     </apply>
                  </apply>
                  <ci>tau_w_minus</ci>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>r</ci>
                     <ci>w</ci>
                  </apply>
                  <ci>tau_w_plus</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_s_gate">
      <variable name="s" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="tau_s" units="ms"/>
      <variable name="tau_s1" units="ms" initial_value="2.7342"/>
      <variable name="tau_s2" units="ms" initial_value="16"/>
      <variable name="k_s" units="dimensionless" initial_value="2.0994"/>
      <variable name="u_s" units="dimensionless" initial_value="0.9087"/>
      <variable name="p" units="dimensionless" public_interface="in"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>tau_s</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>p</ci>
                  </apply>
                  <ci>tau_s1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>p</ci>
                  <ci>tau_s2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>s</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <divide/>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <tanh/>
                           <apply>
                              <times/>
                              <ci>k_s</ci>
                              <apply>
                                 <minus/>
                                 <ci>u</ci>
                                 <ci>u_s</ci>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <ci>s</ci>
               </apply>
               <ci>tau_s</ci>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="fast_inward_current">
            <component_ref component="fast_inward_current_v_gate"/>
         </component_ref>
         <component_ref component="slow_outward_current"/>
         <component_ref component="slow_inward_current">
            <component_ref component="slow_inward_current_w_gate"/>
            <component_ref component="slow_inward_current_s_gate"/>
         </component_ref>
         <component_ref component="m"/>
         <component_ref component="p"/>
         <component_ref component="q"/>
         <component_ref component="r"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="fast_inward_current">
         <component_ref component="fast_inward_current_v_gate"/>
      </component_ref>
      <component_ref component="slow_inward_current">
         <component_ref component="slow_inward_current_w_gate"/>
         <component_ref component="slow_inward_current_s_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="m" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="p" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="q" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="r" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="fast_inward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="slow_outward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="fast_inward_current"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="i_fi" variable_2="i_fi"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="slow_outward_current"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="i_so" variable_2="i_so"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="slow_inward_current"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="i_si" variable_2="i_si"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="m"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="p"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="q"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="r"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="m" component_2="fast_inward_current"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="u_m" variable_2="u_m"/>
   </connection>
   <connection>
      <map_components component_1="p" component_2="fast_inward_current"/>
      <map_variables variable_1="u_p" variable_2="u_p"/>
   </connection>
   <connection>
      <map_components component_1="p" component_2="slow_outward_current"/>
      <map_variables variable_1="p" variable_2="p"/>
   </connection>
   <connection>
      <map_components component_1="r" component_2="slow_outward_current"/>
      <map_variables variable_1="r" variable_2="r"/>
   </connection>
   <connection>
      <map_components component_1="p" component_2="slow_inward_current"/>
      <map_variables variable_1="p" variable_2="p"/>
   </connection>
   <connection>
      <map_components component_1="r" component_2="slow_inward_current"/>
      <map_variables variable_1="r" variable_2="r"/>
   </connection>
   <connection>
      <map_components component_1="q" component_2="fast_inward_current"/>
      <map_variables variable_1="q" variable_2="q"/>
      <map_variables variable_1="u_q" variable_2="u_q"/>
   </connection>
   <connection>
      <map_components component_1="fast_inward_current" component_2="fast_inward_current_v_gate"/>
      <map_variables variable_1="v" variable_2="v"/>
      <map_variables variable_1="q" variable_2="q"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="u_q" variable_2="u_q"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="slow_inward_current_w_gate"/>
      <map_variables variable_1="w" variable_2="w"/>
      <map_variables variable_1="r" variable_2="r"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="slow_inward_current_s_gate"/>
      <map_variables variable_1="s" variable_2="s"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
</model>
