// This CellML file was generated on 08/10/2010 at 12:14:46 using:
//
// COR (0.9.31.1393)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model Carro_Rodriguez_Laguna_Pueyo_CinC2010_ENDO as
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt2 as
    unit millivolt {expo: 2};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millimole as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit millimole;
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit decimetre as
    unit metre {pref: deci};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre2 as
    unit metre {pref: micro, expo: 2};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit centter_per_second as
    unit meter {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit joule_per_kmole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit picoA_per_picoF as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit per_milliV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millis as
    unit millisecond {expo: -1};
  enddef;
  def unit per_milliM_per_millis as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliM_per_millis as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_milliM2_per_millis as
    unit millimolar {expo: -2};
    unit millisecond {expo: -1};
  enddef;
  def unit microm_per_L as
    unit metre {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit L_per_millis as
    unit litre;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_microm as
    unit micrometre {expo: -1};
  enddef;
  def unit litre_per_farad_millisecond as
    unit litre;
    unit farad {expo: -1};
    unit second {pref: milli, expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var t: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -8.410546e1, pub: out};
    var R: joule_per_kmole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var Frdy: coulomb_per_mole {init: 96485, pub: out};
    var FoRT: per_milliV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C_mem: farad {init: 1.381e-10, pub: out};
    var t: millisecond {pub: in};
    var I_Na_tot_junc: picoA_per_picoF {pub: in};
    var I_Na_tot_sl: picoA_per_picoF {pub: in};
    var I_ClCa: picoA_per_picoF {pub: in};
    var I_Cl_Bk: picoA_per_picoF {pub: in};
    var I_Ca_tot_junc: picoA_per_picoF {pub: in};
    var I_Ca_tot_sl: picoA_per_picoF {pub: in};
    var I_K_tot: picoA_per_picoF {pub: in};
    var I_Na_tot: picoA_per_picoF {pub: out};
    var I_Cl_tot: picoA_per_picoF {pub: out};
    var I_Ca_tot: picoA_per_picoF {pub: out};
    var I_tot: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_Stim: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var I_Stim_Start: millisecond {init: 0};
    var I_Stim_End: millisecond {init: 100000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var I_Stim_Amplitude: picoA_per_picoF {init: 40};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var I_Stim_Period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var I_Stim_PulseDuration: millisecond {init: 1};
    var F_junc: dimensionless {init: 0.11, pub: out};
    var F_sl: dimensionless {pub: out};
    var F_junc_Ca_L: dimensionless {init: 0.9, pub: out};
    var F_sl_Ca_L: dimensionless {pub: out};
    var V_cell: litre {pub: out};
    var Length_cell: decimetre {init: 100e-5, pub: out};
    var Radius_cell: decimetre {init: 10.25e-5, pub: out};
    var V_myo: litre {pub: out};
    var V_sl: litre {pub: out};
    var V_sr: litre {pub: out};
    var V_junc: litre {pub: out};
    var J_Ca_juncsl: L_per_millis {init: 8.2413e-13, pub: out};
    var J_Ca_slmyo: L_per_millis {init: 3.7243e-12, pub: out};
    var J_Na_juncsl: L_per_millis {init: 1.8313e-14, pub: out};
    var J_Na_slmyo: L_per_millis {init: 1.6386e-12, pub: out};
    V_cell = pi*sqr(Radius_cell)*Length_cell;
    V_myo = 0.65{dimensionless}*V_cell;
    V_sr = 0.035{dimensionless}*V_cell;
    V_sl = 0.02{dimensionless}*V_cell;
    V_junc = 5.39e-4{dimensionless}*V_cell;
    FoRT = Frdy/(R*T);
    F_sl = 1{dimensionless}-F_junc;
    F_sl_Ca_L = 1{dimensionless}-F_junc_Ca_L;
    I_Stim = sel
      case (t >= I_Stim_Start) and (t <= I_Stim_End) and (t-I_Stim_Start-floor((t-I_Stim_Start)/I_Stim_Period)*I_Stim_Period <= I_Stim_PulseDuration):
        I_Stim_Amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    I_Na_tot = I_Na_tot_junc+I_Na_tot_sl;
    I_Cl_tot = I_ClCa+I_Cl_Bk;
    I_Ca_tot = I_Ca_tot_junc+I_Ca_tot_sl;
    I_tot = I_Na_tot+I_Cl_tot+I_Ca_tot+I_K_tot;
    ode(V, t) = -(I_tot-I_Stim);
  enddef;

  def comp Fast_Na_Current as
    var I_Na_junc: picoA_per_picoF {pub: out};
    var I_Na_sl: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var I_Na: picoA_per_picoF {pub: out};
    var E_Na_sl: millivolt {pub: in};
    var E_Na_junc: millivolt {pub: in};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var G_Na: milliS_per_microF {init: 18.86, pub: out};
    var V: millivolt {pub: in};
    var m: dimensionless {init: 2.176608e-3, pub: out};
    var m_ss: dimensionless {pub: out};
    var tau_m: millisecond {pub: out};
    var a_h: dimensionless {pub: out};
    var b_h: dimensionless {pub: out};
    var tau_h: millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 7.126555e-1, pub: out};
    var h_ss: dimensionless {pub: out};
    var a_j: dimensionless {pub: out};
    var b_j: dimensionless {pub: out};
    var tau_j: millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 7.119893e-1, pub: out};
    var j_ss: dimensionless {pub: out};
    var t: millisecond {pub: in};
    m_ss = 1{dimensionless}/sqr(1{dimensionless}+exp(-(56.86{millivolt}+V)/9.03{millivolt}));
    tau_m = 0.1292{millisecond}*exp(-sqr((V+45.79{millivolt})/15.54{millivolt}))+0.06487{millisecond}*exp(-sqr((V-4.823{millivolt})/51.12{millivolt}));
    a_h = sel
      case V >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        0.057{dimensionless}*exp(-(V+80{millivolt})/6.8{millivolt});
    endsel;
    b_h = sel
      case V >= -40{millivolt}:
        5.9231{dimensionless}/(1{dimensionless}+exp(-(V+10.66{millivolt})/11.1{millivolt}));
      otherwise:
        2.7{dimensionless}*exp(0.079{per_milliV}*V)+3.1e5{dimensionless}*exp(0.3485{per_milliV}*V);
    endsel;
    a_j = sel
      case V >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        (-2.5428e4{per_milliV}*exp(0.2444{per_milliV}*V)-6.948e-6{per_milliV}*exp(-0.04391{per_milliV}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_milliV}*(V+79.23{millivolt})));
    endsel;
    b_j = sel
      case V >= -40{millivolt}:
        0.6{dimensionless}*exp(0.057{per_milliV}*V)/(1{dimensionless}+exp(-0.1{per_milliV}*(V+32{millivolt})));
      otherwise:
        0.02424{dimensionless}*exp(-0.01052{per_milliV}*V)/(1{dimensionless}+exp(-0.1378{per_milliV}*(V+40.14{millivolt})));
    endsel;
    tau_h = 1{millisecond}/(a_h+b_h);
    h_ss = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    tau_j = 1{millisecond}/(a_j+b_j);
    j_ss = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    ode(m, t) = (m_ss-m)/tau_m;
    ode(h, t) = (h_ss-h)/tau_h;
    ode(j, t) = (j_ss-j)/tau_j;
    I_Na_junc = F_junc*G_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na_junc);
    I_Na_sl = F_sl*G_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na_sl);
    I_Na = I_Na_junc+I_Na_sl;
  enddef;

  def comp Background_Na_Current as
    var I_Na_Bk_junc: picoA_per_picoF {pub: out};
    var I_Na_Bk_sl: picoA_per_picoF {pub: out};
    var I_Na_Bk: picoA_per_picoF {pub: out};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    var E_Na_junc: millivolt {pub: in};
    var E_Na_sl: millivolt {pub: in};
    var G_Na_B: milliS_per_microF {init: 0.597e-3, pub: out};
    var V: millivolt {pub: in};
    I_Na_Bk_junc = F_junc*G_Na_B*(V-E_Na_junc);
    I_Na_Bk_sl = F_sl*G_Na_B*(V-E_Na_sl);
    I_Na_Bk = I_Na_Bk_junc+I_Na_Bk_sl;
  enddef;

  def comp Na_K_Pump_Current as
    var Na_o: millimolar {pub: in};
    var sigma: dimensionless {pub: out};
    var FoRT: per_milliV {pub: in};
    var V: millivolt {pub: in};
    var f_NaK: dimensionless {pub: out};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    var I_NaK_junc: picoA_per_picoF {pub: out};
    var I_NaK_sl: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var I_NaK: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var Ibar_NaK: picoA_per_picoF {init: 0.99, pub: out};
    var K_o: millimolar {pub: in};
    var Na_j: millimolar {pub: in};
    var Na_sl: millimolar {pub: in};
    var Km_Ko: millimolar {init: 1.5, pub: out};
    var Km_Naip: millimolar {init: 11, pub: out};
    sigma = (exp(Na_o/67.3{millimolar})-1{dimensionless})/7{dimensionless};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FoRT)+0.0365{dimensionless}*sigma*exp(-V*FoRT));
    I_NaK_junc = F_junc*Ibar_NaK*f_NaK*K_o/((1{dimensionless}+pow(Km_Naip/Na_j, 4{dimensionless}))*(K_o+Km_Ko));
    I_NaK_sl = F_sl*Ibar_NaK*f_NaK*K_o/((1{dimensionless}+pow(Km_Naip/Na_sl, 4{dimensionless}))*(K_o+Km_Ko));
    I_NaK = I_NaK_junc+I_NaK_sl;
  enddef;

  def comp Rapidly_Activating_K_Current as
    var V: millivolt {pub: in};
    var x_r_ss: dimensionless {pub: out};
    var x_Kr: dimensionless {init: 1.896559e-2, pub: out};
    var r_Kr: dimensionless {pub: out};
    var E_K: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var G_Kr: milliS_per_microF {init: 0.035, pub: out};
    var tau_xr: millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var I_Kr: picoA_per_picoF {pub: out};
    var K_o: millimolar {pub: in};
    var t: millisecond {pub: in};
    x_r_ss = 1{dimensionless}/(1{dimensionless}+exp(-(V+10{millivolt})/5{millivolt}));
    tau_xr = 3300{millisecond}/((1{dimensionless}+exp((-22{millivolt}-V)/9{millivolt}))*(1{dimensionless}+exp((V+11{millivolt})/9{millivolt})))+230{millisecond}/(1{dimensionless}+exp((V+40{millivolt})/20{millivolt}));
    ode(x_Kr, t) = (x_r_ss-x_Kr)/tau_xr;
    r_Kr = 1{dimensionless}/(1{dimensionless}+exp((V+74{millivolt})/24{millivolt}));
    I_Kr = G_Kr*sqrt(K_o/5.4{millimolar})*x_Kr*r_Kr*(V-E_K);
  enddef;

  def comp Slowly_Activating_K_Current as
    var V: millivolt {pub: in};
    var x_s_ss: dimensionless {pub: out};
    var tau_xs: millisecond {pub: out};
    var t: millisecond {pub: in};
    var x_Ks: dimensionless {init: 3.55636e-3, pub: out};
    var E_Ks: millivolt {pub: in};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var G_Ks: milliS_per_microF {init: 0.0035, pub: out};
    var I_Ks_junc: picoA_per_picoF {pub: out};
    var I_Ks_sl: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var I_Ks: picoA_per_picoF {pub: out};
    x_s_ss = 1{dimensionless}/(1{dimensionless}+exp(-(V+3.8{millivolt})/14.25{millivolt}));
    tau_xs = 990.1{millisecond}/(1{dimensionless}+exp(-(V+2.436{millivolt})/14.12{millivolt}));
    ode(x_Ks, t) = (x_s_ss-x_Ks)/tau_xs;
    I_Ks_junc = F_junc*G_Ks*sqr(x_Ks)*(V-E_Ks);
    I_Ks_sl = F_sl*G_Ks*sqr(x_Ks)*(V-E_Ks);
    I_Ks = I_Ks_junc+I_Ks_sl;
  enddef;

  def comp Plateau_K_Current as
    var V: millivolt {pub: in};
    var kp_Kp: dimensionless {pub: out};
    var E_K: millivolt {pub: in};
    var G_Kp: milliS_per_microF {init: 0.002, pub: out};
    var I_Kp: picoA_per_picoF {pub: out};
    kp_Kp = 1{dimensionless}/(1{dimensionless}+exp(7.488{dimensionless}-V/5.98{millivolt}));
    I_Kp = G_Kp*kp_Kp*(V-E_K);
  enddef;

  def comp Transient_Outward_K_Current as
    var V: millivolt {pub: in};
    var x_to_ss: dimensionless {pub: out};
    var y_to_ss: dimensionless {pub: out};
    var tau_x_tos: millisecond {pub: out};
    var tau_y_tos: millisecond {pub: out};
    var tau_x_tof: millisecond {pub: out};
    var tau_y_tof: millisecond {pub: out};
    var t: millisecond {pub: in};
    var x_to_s: dimensionless {init: 3.592503e-4, pub: out};
    var y_to_s: dimensionless {init: 8.161309e-1, pub: out};
    var x_to_f: dimensionless {init: 3.592405e-4, pub: out};
    var y_to_f: dimensionless {init: 9.999976e-1, pub: out};
    var E_K: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance
    var G_to_s: milliS_per_microF {init: 3.7596e-2, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance
    var G_to_f: milliS_per_microF {init: 1.404e-3, pub: out};
    var I_to_s: picoA_per_picoF {pub: out};
    var I_to_f: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var I_to: picoA_per_picoF {pub: out};
    x_to_ss = 1{dimensionless}/(1{dimensionless}+exp(-(V-19{millivolt})/13{millivolt}));
    y_to_ss = 1{dimensionless}/(1{dimensionless}+exp((V+19.5{millivolt})/5{millivolt}));
    tau_x_tos = 9{millisecond}/(1{dimensionless}+exp((V+3{millivolt})/15{millivolt}))+0.5{millisecond};
    tau_y_tos = 800{millisecond}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+30{millisecond};
    ode(x_to_s, t) = (x_to_ss-x_to_s)/tau_x_tos;
    ode(y_to_s, t) = (y_to_ss-y_to_s)/tau_y_tos;
    tau_x_tof = 8.5{millisecond}*exp(-sqr((V+45{millivolt})/50{millivolt}))+0.5{millisecond};
    tau_y_tof = 85{millisecond}*exp(-sqr(V+40{millivolt})/220{millivolt2})+7{millisecond};
    ode(x_to_f, t) = (x_to_ss-x_to_f)/tau_x_tof;
    ode(y_to_f, t) = (y_to_ss-y_to_f)/tau_y_tof;
    I_to_s = G_to_s*x_to_s*y_to_s*(V-E_K);
    I_to_f = G_to_f*x_to_f*y_to_f*(V-E_K);
    I_to = I_to_s+I_to_f;
  enddef;

  def comp Inward_Rectifier_K_Current as
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var a_K1: dimensionless {pub: out};
    var b_K1: dimensionless {pub: out};
    var K1_ss: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var I_K1: picoA_per_picoF {pub: out};
    var K_o: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var G_K1: milliS_per_microF {init: 0.57153, pub: out};
    a_K1 = 4.0938{dimensionless}/(1{dimensionless}+exp(0.12165{per_milliV}*(V-E_K-49.9344{millivolt})));
    b_K1 = (15.7197{dimensionless}*exp(0.06739{per_milliV}*(V-E_K-3.2571{millivolt}))+exp(0.06175{per_milliV}*(V-E_K-594.31{millivolt})))/(1{dimensionless}+exp(-0.16285{per_milliV}*(V-E_K+14.2067{millivolt})));
    K1_ss = a_K1/(a_K1+b_K1);
    I_K1 = G_K1*sqrt(K_o/5.4{millimolar})*K1_ss*(V-E_K);
  enddef;

  def comp Ca_Activated_Cl_Current as
    var I_ClCa: picoA_per_picoF {pub: out};
    var I_ClCa_junc: picoA_per_picoF {pub: out};
    var I_ClCa_sl: picoA_per_picoF {pub: out};
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var E_Cl: millivolt {pub: in};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    var G_ClCa: milliS_per_microF {init: 0.054813, pub: out};
    var Kd_ClCa: millimolar {init: 100e-3, pub: out};
    var V: millivolt {pub: in};
    I_ClCa_junc = F_junc*G_ClCa/(1{dimensionless}+Kd_ClCa/Ca_j)*(V-E_Cl);
    I_ClCa_sl = F_sl*G_ClCa/(1{dimensionless}+Kd_ClCa/Ca_sl)*(V-E_Cl);
    I_ClCa = I_ClCa_junc+I_ClCa_sl;
  enddef;

  def comp Background_Cl_Current as
    var I_Cl_Bk: picoA_per_picoF {pub: out};
    var V: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    var G_Cl_B: milliS_per_microF {init: 9e-3};
    I_Cl_Bk = G_Cl_B*(V-E_Cl);
  enddef;

  def comp L_Type_Calcium_Current as
    var V: millivolt {pub: in};
    var F_junc_Ca_L: dimensionless {pub: in};
    var F_sl_Ca_L: dimensionless {pub: in};
    var d_ss: dimensionless {pub: out};
    var alpha_d: millisecond {pub: out};
    var beta_d: dimensionless {pub: out};
    var gamma_d: millisecond {pub: out};
    var tau_d: millisecond {pub: out};
    var f_ss: dimensionless {pub: out};
    var alpha_f: millisecond {pub: out};
    var beta_f: millisecond {pub: out};
    var gamma_f: millisecond {pub: out};
    var tau_f: millisecond {pub: out};
    var f_2_ss: dimensionless {pub: out};
    var alpha_f_2: millisecond {pub: out};
    var beta_f_2: millisecond {pub: out};
    var gamma_f_2: millisecond {pub: out};
    var tau_f_2: millisecond {pub: out};
    var d: dimensionless {init: 1.879996e-6, pub: out};
    var f: dimensionless {init: 9.789409e-1, pub: out};
    var f_2: dimensionless {init: 9.993986e-1, pub: out};
    var f_Ca_B_j: dimensionless {init: 2.861794e-2, pub: out};
    var f_Ca_B_sl: dimensionless {init: 1.69833e-2, pub: out};
    var t: millisecond {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    var FoRT: per_milliV {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var Na_j: millimolar {pub: in};
    var Na_sl: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ibar_Ca_j: picoA_per_picoF {pub: out};
    var Ibar_Ca_sl: picoA_per_picoF {pub: out};
    var Ibar_K: picoA_per_picoF {pub: out};
    var Ibar_Na_j: picoA_per_picoF {pub: out};
    var Ibar_Na_sl: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_scale: dimensionless {init: 1.0, pub: out};
    var p_Ca: litre_per_farad_millisecond {init: 1.9887e-4, pub: out};
    var p_Na: litre_per_farad_millisecond {init: 3.0375e-9, pub: out};
    var p_K: litre_per_farad_millisecond {init: 5.4675e-8, pub: out};
    var I_Ca_junc: picoA_per_picoF {pub: out};
    var I_Ca_sl: picoA_per_picoF {pub: out};
    var I_Ca: picoA_per_picoF {pub: out};
    var I_Ca_Na_junc: picoA_per_picoF {pub: out};
    var I_Ca_Na_sl: picoA_per_picoF {pub: out};
    var I_Ca_Na: picoA_per_picoF {pub: out};
    var I_Ca_K: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var I_Ca_L: picoA_per_picoF {pub: out};
    d_ss = 1{dimensionless}/(1{dimensionless}+exp(-(V+5{millivolt})/6{millivolt}));
    alpha_d = 1.4{millisecond}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{millisecond};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = alpha_d*beta_d+gamma_d;
    f_ss = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    alpha_f = 1102.5{millisecond}*exp(-sqr((V+27{millivolt})/15{millivolt}));
    beta_f = 200{millisecond}/(1{dimensionless}+exp((13{millivolt}-V)/10{millivolt}));
    gamma_f = 180{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}))+20{millisecond};
    tau_f = alpha_f+beta_f+gamma_f;
    f_2_ss = 0.67{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/7{millivolt}))+0.33{dimensionless};
    alpha_f_2 = 300{millisecond}*exp(-sqr(V+25{millivolt})/170{millivolt2});
    beta_f_2 = 31{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}));
    gamma_f_2 = 16{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}));
    tau_f_2 = alpha_f_2+beta_f_2+gamma_f_2;
    ode(d, t) = (d_ss-d)/tau_d;
    ode(f, t) = (f_ss-f)/tau_f;
    ode(f_2, t) = (f_2_ss-f_2)/tau_f_2;
    ode(f_Ca_B_j, t) = 1.7{per_milliM_per_millis}*Ca_j*(1{dimensionless}-f_Ca_B_j)-11.9e-3{per_millis}*f_Ca_B_j;
    ode(f_Ca_B_sl, t) = 1.7{per_milliM_per_millis}*Ca_sl*(1{dimensionless}-f_Ca_B_sl)-11.9e-3{per_millis}*f_Ca_B_sl;
    Ibar_Ca_j = P_scale*p_Ca*V*Frdy*FoRT*(Ca_j*exp(2{dimensionless}*V*FoRT)-Ca_o)/(exp(2{dimensionless}*V*FoRT)-1{dimensionless});
    Ibar_Ca_sl = P_scale*p_Ca*V*Frdy*FoRT*(Ca_sl*exp(2{dimensionless}*V*FoRT)-Ca_o)/(exp(2{dimensionless}*V*FoRT)-1{dimensionless});
    Ibar_K = P_scale*p_K*V*Frdy*FoRT*(K_i*exp(V*FoRT)-K_o)/(exp(V*FoRT)-1{dimensionless});
    Ibar_Na_j = P_scale*p_Na*V*Frdy*FoRT*(Na_j*exp(V*FoRT)-Na_o)/(exp(V*FoRT)-1{dimensionless});
    Ibar_Na_sl = P_scale*p_Na*V*Frdy*FoRT*(Na_sl*exp(V*FoRT)-Na_o)/(exp(V*FoRT)-1{dimensionless});
    I_Ca_junc = F_junc_Ca_L*Ibar_Ca_j*d*f*f_2*(1{dimensionless}-f_Ca_B_j);
    I_Ca_sl = F_sl_Ca_L*Ibar_Ca_sl*d*f*f_2*(1{dimensionless}-f_Ca_B_sl);
    I_Ca = I_Ca_junc+I_Ca_sl;
    I_Ca_K = Ibar_K*d*f*f_2*(F_junc_Ca_L*(1{dimensionless}-f_Ca_B_j)+F_sl_Ca_L*(1{dimensionless}-f_Ca_B_sl));
    I_Ca_Na_junc = F_junc_Ca_L*Ibar_Na_j*d*f*f_2*(1{dimensionless}-f_Ca_B_j);
    I_Ca_Na_sl = F_sl_Ca_L*Ibar_Na_sl*d*f*f_2*(1{dimensionless}-f_Ca_B_sl);
    I_Ca_Na = I_Ca_Na_junc+I_Ca_Na_sl;
    I_Ca_L = I_Ca+I_Ca_K+I_Ca_Na;
  enddef;

  def comp Na_Ca_Exchanger_Current as
    var V: millivolt {pub: in};
    var FoRT: per_milliV {pub: in};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_j: millimolar {pub: in};
    var Na_sl: millimolar {pub: in};
    var Ka_junc: dimensionless {pub: out};
    var Ka_sl: dimensionless {pub: out};
    var Kd_act: millimolar {init: 0.15e-3, pub: out};
    var Km_Ca_i: millimolar {init: 3.59e-3, pub: out};
    var Km_Ca_o: millimolar {init: 1.3, pub: out};
    var Km_Na_i: millimolar {init: 12.29, pub: out};
    var Km_Na_o: millimolar {init: 87.5, pub: out};
    var k_sat: dimensionless {init: 0.32, pub: out};
    var nu: dimensionless {init: 0.27, pub: out};
    var s1_junc: millimolar4 {pub: out};
    var s2_junc: millimolar4 {pub: out};
    var s3_junc: millimolar4 {pub: out};
    var s1_sl: millimolar4 {pub: out};
    var s2_sl: millimolar4 {pub: out};
    var s3_sl: millimolar4 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var Ibar_NCX: picoA_per_picoF {init: 4.5, pub: out};
    var I_ncx_sl: picoA_per_picoF {pub: out};
    var I_ncx_junc: picoA_per_picoF {pub: out};
    var I_ncx: picoA_per_picoF {pub: out};
    Ka_junc = 1{dimensionless}/(1{dimensionless}+sqr(Kd_act/Ca_j));
    Ka_sl = 1{dimensionless}/(1{dimensionless}+sqr(Kd_act/Ca_sl));
    s1_junc = exp(nu*V*FoRT)*pow(Na_j, 3{dimensionless})*Ca_o;
    s1_sl = exp(nu*V*FoRT)*pow(Na_sl, 3{dimensionless})*Ca_o;
    s2_junc = exp((nu-1{dimensionless})*V*FoRT)*pow(Na_o, 3{dimensionless})*Ca_j;
    s2_sl = exp((nu-1{dimensionless})*V*FoRT)*pow(Na_o, 3{dimensionless})*Ca_sl;
    s3_junc = Km_Ca_i*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_j/Km_Na_i, 3{dimensionless}))+pow(Km_Na_o, 3{dimensionless})*Ca_j*(1{dimensionless}+Ca_j/Km_Ca_i)+Km_Ca_o*pow(Na_j, 3{dimensionless})+pow(Na_j, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_j;
    s3_sl = Km_Ca_i*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_sl/Km_Na_i, 3{dimensionless}))+pow(Km_Na_o, 3{dimensionless})*Ca_sl*(1{dimensionless}+Ca_sl/Km_Ca_i)+Km_Ca_o*pow(Na_sl, 3{dimensionless})+pow(Na_sl, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_sl;
    I_ncx_junc = F_junc*Ibar_NCX*Ka_junc*(s1_junc-s2_junc)/(s3_junc*(1{dimensionless}+k_sat*exp((nu-1{dimensionless})*V*FoRT)));
    I_ncx_sl = F_sl*Ibar_NCX*Ka_sl*(s1_sl-s2_sl)/(s3_sl*(1{dimensionless}+k_sat*exp((nu-1{dimensionless})*V*FoRT)));
    I_ncx = I_ncx_junc+I_ncx_sl;
  enddef;

  def comp Sarcolemmal_Ca_Pump_Current as
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var F_junc: dimensionless {pub: in};
    var F_sl: dimensionless {pub: in};
    var Km_P_Ca: millimolar {init: 0.5e-3, pub: out};
    var Ibar_PMCA: picoA_per_picoF {init: 0.0673, pub: out};
    var I_pCa_junc: picoA_per_picoF {pub: out};
    var I_pCa_sl: picoA_per_picoF {pub: out};
    var I_pCa: picoA_per_picoF {pub: out};
    I_pCa_junc = F_junc*Ibar_PMCA*pow(Ca_j, 1.6{dimensionless})/(pow(Km_P_Ca, 1.6{dimensionless})+pow(Ca_j, 1.6{dimensionless}));
    I_pCa_sl = F_sl*Ibar_PMCA*pow(Ca_sl, 1.6{dimensionless})/(pow(Km_P_Ca, 1.6{dimensionless})+pow(Ca_sl, 1.6{dimensionless}));
    I_pCa = I_pCa_junc+I_pCa_sl;
  enddef;

  def comp Background_Ca_Current as
    var V: millivolt {pub: in};
    var F_sl: dimensionless {pub: in};
    var F_junc: dimensionless {pub: in};
    var E_Ca_sl: millivolt {pub: in};
    var E_Ca_junc: millivolt {pub: in};
    var G_Ca_B: milliS_per_microF {init: 5.513e-4, pub: out};
    var I_Ca_Bk_sl: picoA_per_picoF {pub: out};
    var I_Ca_Bk_junc: picoA_per_picoF {pub: out};
    var I_Ca_Bk: picoA_per_picoF {pub: out};
    I_Ca_Bk_junc = F_junc*G_Ca_B*(V-E_Ca_junc);
    I_Ca_Bk_sl = F_sl*G_Ca_B*(V-E_Ca_sl);
    I_Ca_Bk = I_Ca_Bk_junc+I_Ca_Bk_sl;
  enddef;

  def comp SR_Fluxes as
    var Max_SR: dimensionless {init: 15, pub: out};
    var Min_SR: dimensionless {init: 1, pub: out};
    var Ca_SR: millimolar {pub: in};
    var ec50_SR: millimolar {init: 0.45, pub: out};
    var k_Ca_SR: dimensionless {pub: out};
    var ko_Ca: per_milliM2_per_millis {init: 10, pub: out};
    var ko_SR_Ca: per_milliM2_per_millis {pub: out};
    var ki_Ca: per_milliM_per_millis {init: 0.5, pub: out};
    var ki_SR_Ca: per_milliM_per_millis {pub: out};
    var ki_m: per_millis {init: 0.005, pub: out};
    var ko_m: per_millis {init: 0.06, pub: out};
    var ks: per_millis {init: 25, pub: out};
    var Km_f: millimolar {init: 0.246e-3, pub: out};
    var Km_r: millimolar {init: 1.7, pub: out};
    var J_SR_Ca_rel: milliM_per_millis {pub: out};
    var J_SR_leak: milliM_per_millis {pub: out};
    var J_ser_Ca: milliM_per_millis {pub: out};
    var t: millisecond {pub: in};
    var RI: dimensionless {pub: out};
    var Ry_Rr: dimensionless {init: 8.888214e-1, pub: out};
    var Ry_Ro: dimensionless {init: 1.149876e-6, pub: out};
    var Ry_Ri: dimensionless {init: 1.43831e-7, pub: out};
    var Ca_j: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var V_max_SR_CaP: milliM_per_millis {init: 5.3114e-3, pub: out};
    var hill_SR_CaP: dimensionless {init: 1.787, pub: out};
    k_Ca_SR = Max_SR-(Max_SR-Min_SR)/(1{dimensionless}+pow(ec50_SR/Ca_SR, 2.5{dimensionless}));
    ko_SR_Ca = ko_Ca/k_Ca_SR;
    ki_SR_Ca = ki_Ca*k_Ca_SR;
    RI = 1{dimensionless}-Ry_Rr-Ry_Ro-Ry_Ri;
    ode(Ry_Rr, t) = ki_m*RI-ki_SR_Ca*Ca_j*Ry_Rr-(ko_SR_Ca*sqr(Ca_j)*Ry_Rr-ko_m*Ry_Ro);
    ode(Ry_Ro, t) = ko_SR_Ca*sqr(Ca_j)*Ry_Rr-ko_m*Ry_Ro-(ki_SR_Ca*Ca_j*Ry_Ro-ki_m*Ry_Ri);
    ode(Ry_Ri, t) = ki_SR_Ca*Ca_j*Ry_Ro-ki_m*Ry_Ri-(ko_m*Ry_Ri-ko_SR_Ca*sqr(Ca_j)*RI);
    J_SR_Ca_rel = ks*Ry_Ro*(Ca_SR-Ca_j);
    J_ser_Ca = V_max_SR_CaP*(pow(Ca_i/Km_f, hill_SR_CaP)-pow(Ca_SR/Km_r, hill_SR_CaP))/(1{dimensionless}+pow(Ca_i/Km_f, hill_SR_CaP)+pow(Ca_SR/Km_r, hill_SR_CaP));
    J_SR_leak = 5.348e-6{per_millis}*(Ca_SR-Ca_j);
  enddef;

  def comp Cytosolic_Ca_Buffers as
    var t: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Mg_i: millimolar {pub: in};
    var TnC_l: millimolar {init: 9.811535e-3, pub: out};
    var TnC_h_c: millimolar {init: 1.225802e-1, pub: out};
    var TnC_h_m: millimolar {init: 8.128604e-3, pub: out};
    var CaM: millimolar {init: 3.288063e-4, pub: out};
    var Myo_c: millimolar {init: 2.522168e-3, pub: out};
    var Myo_m: millimolar {init: 1.369514e-1, pub: out};
    var SRB: millimolar {init: 2.38683e-3, pub: out};
    var k_off_TnC_l: per_millis {init: 19.6e-3, pub: out};
    var k_off_TnC_h_Ca: per_millis {init: 0.032e-3, pub: out};
    var k_off_TnC_h_Mg: per_millis {init: 3.33e-3, pub: out};
    var k_off_CaM: per_millis {init: 238e-3, pub: out};
    var k_off_myo_Ca: per_millis {init: 0.46e-3, pub: out};
    var k_off_myo_Mg: per_millis {init: 0.057e-3, pub: out};
    var k_off_SR: per_millis {init: 60e-3, pub: out};
    var k_on_TnC_l: per_milliM_per_millis {init: 32.7, pub: out};
    var k_on_TnC_h_Ca: per_milliM_per_millis {init: 2.37, pub: out};
    var k_on_TnC_h_Mg: per_milliM_per_millis {init: 3e-3, pub: out};
    var k_on_CaM: per_milliM_per_millis {init: 34, pub: out};
    var k_on_myo_Ca: per_milliM_per_millis {init: 13.8, pub: out};
    var k_on_myo_Mg: per_milliM_per_millis {init: 0.0157, pub: out};
    var k_on_SR: per_milliM_per_millis {init: 100, pub: out};
    var B_max_TnC_low: millimolar {init: 70e-3, pub: out};
    var B_max_TnC_high: millimolar {init: 140e-3, pub: out};
    var B_max_CaM: millimolar {init: 24e-3, pub: out};
    var B_max_myosin: millimolar {init: 140e-3, pub: out};
    var B_max_SR: millimolar {init: 17.1e-3, pub: out};
    var J_Ca_B_cytosol: milliM_per_millis {pub: out};
    ode(TnC_l, t) = k_on_TnC_l*Ca_i*(B_max_TnC_low-TnC_l)-k_off_TnC_l*TnC_l;
    ode(TnC_h_c, t) = k_on_TnC_h_Ca*Ca_i*(B_max_TnC_high-TnC_h_c-TnC_h_m)-k_off_TnC_h_Ca*TnC_h_c;
    ode(TnC_h_m, t) = k_on_TnC_h_Mg*Mg_i*(B_max_TnC_high-TnC_h_c-TnC_h_m)-k_off_TnC_h_Mg*TnC_h_m;
    ode(CaM, t) = k_on_CaM*Ca_i*(B_max_CaM-CaM)-k_off_CaM*CaM;
    ode(Myo_c, t) = k_on_myo_Ca*Ca_i*(B_max_myosin-Myo_c-Myo_m)-k_off_myo_Ca*Myo_c;
    ode(Myo_m, t) = k_on_myo_Mg*Mg_i*(B_max_myosin-Myo_c-Myo_m)-k_off_myo_Mg*Myo_m;
    ode(SRB, t) = k_on_SR*Ca_i*(B_max_SR-SRB)-k_off_SR*SRB;
    J_Ca_B_cytosol = ode(TnC_l, t)+ode(TnC_h_c, t)+ode(TnC_h_m, t)+ode(CaM, t)+ode(Myo_c, t)+ode(Myo_m, t)+ode(SRB, t);
  enddef;

  def comp Junctional_and_SL_Ca_Buffers as
    var t: millisecond {pub: in};
    var V_myo: litre {pub: in};
    var V_sl: litre {pub: in};
    var V_junc: litre {pub: in};
    var B_max_SL_low_j: millimolar {pub: out};
    var B_max_SL_low_sl: millimolar {pub: out};
    var B_max_SL_high_j: millimolar {pub: out};
    var B_max_SL_high_sl: millimolar {pub: out};
    var k_off_sl_l: per_millis {init: 1.3, pub: out};
    var k_off_sl_h: per_millis {init: 30e-3, pub: out};
    var k_on_sl_l: per_milliM_per_millis {init: 100, pub: out};
    var k_on_sl_h: per_milliM_per_millis {init: 100, pub: out};
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var SLL_j: millimolar {init: 8.606485e-3, pub: out};
    var SLL_sl: millimolar {init: 1.101044e-2, pub: out};
    var SLH_j: millimolar {init: 8.078504e-2, pub: out};
    var SLH_sl: millimolar {init: 1.238366e-1, pub: out};
    var J_Ca_B_junction: milliM_per_millis {pub: out};
    var J_Ca_B_sl: milliM_per_millis {pub: out};
    B_max_SL_low_sl = 37.4e-3{millimolar}*V_myo/V_sl;
    B_max_SL_low_j = 4.6e-4{millimolar}*V_myo/V_junc;
    B_max_SL_high_sl = 13.4e-3{millimolar}*V_myo/V_sl;
    B_max_SL_high_j = 1.65e-4{millimolar}*V_myo/V_junc;
    ode(SLL_j, t) = k_on_sl_l*Ca_j*(B_max_SL_low_j-SLL_j)-k_off_sl_l*SLL_j;
    ode(SLL_sl, t) = k_on_sl_l*Ca_sl*(B_max_SL_low_sl-SLL_sl)-k_off_sl_l*SLL_sl;
    ode(SLH_j, t) = k_on_sl_h*Ca_j*(B_max_SL_high_j-SLH_j)-k_off_sl_h*SLH_j;
    ode(SLH_sl, t) = k_on_sl_h*Ca_sl*(B_max_SL_high_sl-SLH_sl)-k_off_sl_h*SLH_sl;
    J_Ca_B_junction = ode(SLL_j, t)+ode(SLH_j, t);
    J_Ca_B_sl = ode(SLL_sl, t)+ode(SLH_sl, t);
  enddef;

  def comp Sodium_Concentrations as
    var B_max_Na_j: millimolar {init: 7.561, pub: out};
    var B_max_Na_sl: millimolar {init: 1.65, pub: out};
    var k_off_Na: per_millis {init: 1e-3, pub: out};
    var k_on_Na: per_milliM_per_millis {init: 0.1e-3, pub: out};
    var I_Na_tot_junc: picoA_per_picoF {pub: out};
    var I_Na_tot_sl: picoA_per_picoF {pub: out};
    var Na_j: millimolar {init: 1.00211e1, pub: out};
    var Na_sl: millimolar {init: 1.001974e1, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 1.001989e1, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
    var Na_B_j: millimolar {init: 3.785209e0, pub: out};
    var Na_B_sl: millimolar {init: 8.259271e-1, pub: out};
    var I_Ca_Na_junc: picoA_per_picoF {pub: in};
    var I_Ca_Na_sl: picoA_per_picoF {pub: in};
    var I_Na_Bk_junc: picoA_per_picoF {pub: in};
    var I_Na_Bk_sl: picoA_per_picoF {pub: in};
    var I_Na_junc: picoA_per_picoF {pub: in};
    var I_Na_sl: picoA_per_picoF {pub: in};
    var I_NaK_junc: picoA_per_picoF {pub: in};
    var I_NaK_sl: picoA_per_picoF {pub: in};
    var I_ncx_junc: picoA_per_picoF {pub: in};
    var I_ncx_sl: picoA_per_picoF {pub: in};
    var J_Na_juncsl: L_per_millis {pub: in};
    var J_Na_slmyo: L_per_millis {pub: in};
    var V_junc: litre {pub: in};
    var V_sl: litre {pub: in};
    var V_myo: litre {pub: in};
    var t: millisecond {pub: in};
    var C_mem: farad {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    I_Na_tot_junc = I_Na_junc+I_Na_Bk_junc+3{dimensionless}*I_ncx_junc+3{dimensionless}*I_NaK_junc+I_Ca_Na_junc;
    I_Na_tot_sl = I_Na_sl+I_Na_Bk_sl+3{dimensionless}*I_ncx_sl+3{dimensionless}*I_NaK_sl+I_Ca_Na_sl;
    ode(Na_j, t) = -I_Na_tot_junc*C_mem/(V_junc*Frdy)+J_Na_juncsl/V_junc*(Na_sl-Na_j)-ode(Na_B_j, t);
    ode(Na_sl, t) = -I_Na_tot_sl*C_mem/(V_sl*Frdy)+J_Na_juncsl/V_sl*(Na_j-Na_sl)+J_Na_slmyo/V_sl*(Na_i-Na_sl)-ode(Na_B_sl, t);
    ode(Na_i, t) = J_Na_slmyo/V_myo*(Na_sl-Na_i);
    ode(Na_B_j, t) = k_on_Na*Na_j*(B_max_Na_j-Na_B_j)-k_off_Na*Na_B_j;
    ode(Na_B_sl, t) = k_on_Na*Na_sl*(B_max_Na_sl-Na_B_sl)-k_off_Na*Na_B_sl;
  enddef;

  def comp Potassium_Concentrations as
    var I_K_tot: picoA_per_picoF {pub: out};
    var I_to: picoA_per_picoF {pub: in};
    var I_Kr: picoA_per_picoF {pub: in};
    var I_Ks: picoA_per_picoF {pub: in};
    var I_K1: picoA_per_picoF {pub: in};
    var I_NaK: picoA_per_picoF {pub: in};
    var I_Ca_K: picoA_per_picoF {pub: in};
    var I_Kp: picoA_per_picoF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 138, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 5.4, pub: out};
    I_K_tot = I_to+I_Kr+I_Ks+I_K1-2{dimensionless}*I_NaK+I_Ca_K+I_Kp;
  enddef;

  def comp Calcium_Concentrations as
    var I_Ca_tot_junc: picoA_per_picoF {pub: out};
    var I_Ca_tot_sl: picoA_per_picoF {pub: out};
    var Ca_j: millimolar {init: 2.048633e-4, pub: out};
    var Ca_sl: millimolar {init: 1.188246e-4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 9.719632e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 1.8, pub: out};
    var Ca_SR: millimolar {init: 6.138856e-1, pub: out};
    var I_Ca_junc: picoA_per_picoF {pub: in};
    var I_Ca_sl: picoA_per_picoF {pub: in};
    var I_Ca_Bk_junc: picoA_per_picoF {pub: in};
    var I_Ca_Bk_sl: picoA_per_picoF {pub: in};
    var I_pCa_junc: picoA_per_picoF {pub: in};
    var I_pCa_sl: picoA_per_picoF {pub: in};
    var I_ncx_junc: picoA_per_picoF {pub: in};
    var I_ncx_sl: picoA_per_picoF {pub: in};
    var J_Ca_B_junction: milliM_per_millis {pub: in};
    var J_Ca_B_sl: milliM_per_millis {pub: in};
    var J_Ca_B_cytosol: milliM_per_millis {pub: in};
    var J_SR_Ca_rel: milliM_per_millis {pub: in};
    var J_SR_leak: milliM_per_millis {pub: in};
    var J_Ca_juncsl: L_per_millis {pub: in};
    var J_Ca_slmyo: L_per_millis {pub: in};
    var J_ser_Ca: milliM_per_millis {pub: in};
    var V_myo: litre {pub: in};
    var V_sl: litre {pub: in};
    var V_sr: litre {pub: in};
    var V_junc: litre {pub: in};
    var t: millisecond {pub: in};
    var C_mem: farad {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    var B_max_csqn: millimolar {pub: out};
    var Csqn_b: millimolar {init: 1.262853, pub: out};
    var k_off_csqn: per_millis {init: 65, pub: out};
    var k_on_csqn: per_milliM_per_millis {init: 100, pub: out};
    I_Ca_tot_junc = I_Ca_junc+I_Ca_Bk_junc+I_pCa_junc-2{dimensionless}*I_ncx_junc;
    I_Ca_tot_sl = I_Ca_sl+I_Ca_Bk_sl+I_pCa_sl-2{dimensionless}*I_ncx_sl;
    B_max_csqn = 140e-3{millimolar}*V_myo/V_sr;
    ode(Csqn_b, t) = k_on_csqn*Ca_SR*(B_max_csqn-Csqn_b)-k_off_csqn*Csqn_b;
    ode(Ca_j, t) = -I_Ca_tot_junc*C_mem/(V_junc*2{dimensionless}*Frdy)+J_Ca_juncsl/V_junc*(Ca_sl-Ca_j)-J_Ca_B_junction+J_SR_Ca_rel*V_sr/V_junc+J_SR_leak*V_myo/V_junc;
    ode(Ca_sl, t) = -I_Ca_tot_sl*C_mem/(V_sl*2{dimensionless}*Frdy)+J_Ca_juncsl/V_sl*(Ca_j-Ca_sl)+J_Ca_slmyo/V_sl*(Ca_i-Ca_sl)-J_Ca_B_sl;
    ode(Ca_i, t) = -J_ser_Ca*V_sr/V_myo-J_Ca_B_cytosol+J_Ca_slmyo/V_myo*(Ca_sl-Ca_i);
    ode(Ca_SR, t) = J_ser_Ca-(J_SR_leak*V_myo/V_sr+J_SR_Ca_rel)-ode(Csqn_b, t);
  enddef;

  def comp Magnesium_Concentrations as
    var Mg_i: millimolar {init: 1, pub: out};
  enddef;

  def comp Chlorine_Concentrations as
    var Cl_i: millimolar {init: 15, pub: out};
    var Cl_o: millimolar {init: 150, pub: out};
  enddef;

  def comp Nerst_Potentials as
    var E_Na_junc: millivolt {pub: out};
    var E_Na_sl: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca_junc: millivolt {pub: out};
    var E_Ca_sl: millivolt {pub: out};
    var E_Cl: millivolt {pub: out};
    var FoRT: per_milliV {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_j: millimolar {pub: in};
    var Na_sl: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_j: millimolar {pub: in};
    var Ca_sl: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var Cl_o: millimolar {pub: in};
    var p_Na_K: dimensionless {init: 0.01833, pub: out};
    E_Na_junc = 1{dimensionless}/FoRT*ln(Na_o/Na_j);
    E_Na_sl = 1{dimensionless}/FoRT*ln(Na_o/Na_sl);
    E_Ks = 1{dimensionless}/FoRT*ln((K_o+p_Na_K*Na_o)/(K_i+p_Na_K*Na_i));
    E_K = 1{dimensionless}/FoRT*ln(K_o/K_i);
    E_Ca_junc = 1{dimensionless}/(2{dimensionless}*FoRT)*ln(Ca_o/Ca_j);
    E_Ca_sl = 1{dimensionless}/(2{dimensionless}*FoRT)*ln(Ca_o/Ca_sl);
    E_Cl = 1{dimensionless}/FoRT*ln(Cl_i/Cl_o);
  enddef;

  def group as containment for
    comp membrane incl
      comp Fast_Na_Current;
      comp L_Type_Calcium_Current;
      comp Inward_Rectifier_K_Current;
      comp Rapidly_Activating_K_Current;
      comp Slowly_Activating_K_Current;
      comp Plateau_K_Current;
      comp Background_Ca_Current;
      comp Na_K_Pump_Current;
      comp Na_Ca_Exchanger_Current;
      comp Transient_Outward_K_Current;
      comp Sarcolemmal_Ca_Pump_Current;
      comp Background_Cl_Current;
      comp Background_Na_Current;
      comp Ca_Activated_Cl_Current;
      comp SR_Fluxes;
      comp Cytosolic_Ca_Buffers;
      comp Junctional_and_SL_Ca_Buffers;
      comp Magnesium_Concentrations;
      comp Nerst_Potentials;
      comp Potassium_Concentrations;
      comp Calcium_Concentrations;
      comp Chlorine_Concentrations;
      comp Sodium_Concentrations;
    endcomp;
  enddef;
  def map between environment and membrane for
    vars t and t;
  enddef;
  def map between environment and Fast_Na_Current for
    vars t and t;
  enddef;
  def map between environment and Rapidly_Activating_K_Current for
    vars t and t;
  enddef;
  def map between environment and Slowly_Activating_K_Current for
    vars t and t;
  enddef;
  def map between environment and Transient_Outward_K_Current for
    vars t and t;
  enddef;
  def map between environment and L_Type_Calcium_Current for
    vars t and t;
  enddef;
  def map between environment and SR_Fluxes for
    vars t and t;
  enddef;
  def map between environment and Cytosolic_Ca_Buffers for
    vars t and t;
  enddef;
  def map between environment and Junctional_and_SL_Ca_Buffers for
    vars t and t;
  enddef;
  def map between environment and Sodium_Concentrations for
    vars t and t;
  enddef;
  def map between environment and Calcium_Concentrations for
    vars t and t;
  enddef;
  def map between membrane and Fast_Na_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and Background_Na_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and Na_K_Pump_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
    vars FoRT and FoRT;
  enddef;
  def map between membrane and Sarcolemmal_Ca_Pump_Current for
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and Rapidly_Activating_K_Current for
    vars V and V;
  enddef;
  def map between membrane and Slowly_Activating_K_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and Plateau_K_Current for
    vars V and V;
  enddef;
  def map between membrane and Inward_Rectifier_K_Current for
    vars V and V;
  enddef;
  def map between membrane and Transient_Outward_K_Current for
    vars V and V;
  enddef;
  def map between membrane and Ca_Activated_Cl_Current for
    vars I_ClCa and I_ClCa;
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and L_Type_Calcium_Current for
    vars V and V;
    vars F_junc_Ca_L and F_junc_Ca_L;
    vars F_sl_Ca_L and F_sl_Ca_L;
    vars Frdy and Frdy;
    vars FoRT and FoRT;
  enddef;
  def map between membrane and Na_Ca_Exchanger_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
    vars FoRT and FoRT;
  enddef;
  def map between membrane and Background_Ca_Current for
    vars V and V;
    vars F_junc and F_junc;
    vars F_sl and F_sl;
  enddef;
  def map between membrane and Background_Cl_Current for
    vars I_Cl_Bk and I_Cl_Bk;
    vars V and V;
  enddef;
  def map between membrane and Sodium_Concentrations for
    vars I_Na_tot_junc and I_Na_tot_junc;
    vars I_Na_tot_sl and I_Na_tot_sl;
    vars J_Na_juncsl and J_Na_juncsl;
    vars J_Na_slmyo and J_Na_slmyo;
    vars Frdy and Frdy;
    vars V_myo and V_myo;
    vars V_sl and V_sl;
    vars V_junc and V_junc;
    vars C_mem and C_mem;
  enddef;
  def map between membrane and Potassium_Concentrations for
    vars I_K_tot and I_K_tot;
  enddef;
  def map between membrane and Calcium_Concentrations for
    vars I_Ca_tot_junc and I_Ca_tot_junc;
    vars I_Ca_tot_sl and I_Ca_tot_sl;
    vars V_myo and V_myo;
    vars V_sl and V_sl;
    vars V_sr and V_sr;
    vars V_junc and V_junc;
    vars C_mem and C_mem;
    vars Frdy and Frdy;
    vars J_Ca_juncsl and J_Ca_juncsl;
    vars J_Ca_slmyo and J_Ca_slmyo;
  enddef;
  def map between membrane and Nerst_Potentials for
    vars FoRT and FoRT;
  enddef;
  def map between membrane and Junctional_and_SL_Ca_Buffers for
    vars V_myo and V_myo;
    vars V_junc and V_junc;
    vars V_sl and V_sl;
  enddef;
  def map between Na_K_Pump_Current and Sodium_Concentrations for
    vars Na_o and Na_o;
    vars Na_sl and Na_sl;
    vars Na_j and Na_j;
    vars I_NaK_junc and I_NaK_junc;
    vars I_NaK_sl and I_NaK_sl;
  enddef;
  def map between Na_Ca_Exchanger_Current and Sodium_Concentrations for
    vars Na_o and Na_o;
    vars Na_sl and Na_sl;
    vars Na_j and Na_j;
    vars I_ncx_junc and I_ncx_junc;
    vars I_ncx_sl and I_ncx_sl;
  enddef;
  def map between L_Type_Calcium_Current and Sodium_Concentrations for
    vars Na_o and Na_o;
    vars Na_sl and Na_sl;
    vars Na_j and Na_j;
    vars I_Ca_Na_junc and I_Ca_Na_junc;
    vars I_Ca_Na_sl and I_Ca_Na_sl;
  enddef;
  def map between Na_K_Pump_Current and Potassium_Concentrations for
    vars I_NaK and I_NaK;
    vars K_o and K_o;
  enddef;
  def map between Nerst_Potentials and Potassium_Concentrations for
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between Inward_Rectifier_K_Current and Potassium_Concentrations for
    vars K_o and K_o;
    vars I_K1 and I_K1;
  enddef;
  def map between Slowly_Activating_K_Current and Potassium_Concentrations for
    vars I_Ks and I_Ks;
  enddef;
  def map between Rapidly_Activating_K_Current and Potassium_Concentrations for
    vars K_o and K_o;
    vars I_Kr and I_Kr;
  enddef;
  def map between Plateau_K_Current and Potassium_Concentrations for
    vars I_Kp and I_Kp;
  enddef;
  def map between L_Type_Calcium_Current and Potassium_Concentrations for
    vars K_o and K_o;
    vars K_i and K_i;
    vars I_Ca_K and I_Ca_K;
  enddef;
  def map between Transient_Outward_K_Current and Potassium_Concentrations for
    vars I_to and I_to;
  enddef;
  def map between L_Type_Calcium_Current and Calcium_Concentrations for
    vars Ca_o and Ca_o;
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars I_Ca_junc and I_Ca_junc;
    vars I_Ca_sl and I_Ca_sl;
  enddef;
  def map between Ca_Activated_Cl_Current and Calcium_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between Na_Ca_Exchanger_Current and Calcium_Concentrations for
    vars Ca_o and Ca_o;
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars I_ncx_sl and I_ncx_sl;
    vars I_ncx_junc and I_ncx_junc;
  enddef;
  def map between Sarcolemmal_Ca_Pump_Current and Calcium_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars I_pCa_junc and I_pCa_junc;
    vars I_pCa_sl and I_pCa_sl;
  enddef;
  def map between SR_Fluxes and Calcium_Concentrations for
    vars Ca_SR and Ca_SR;
    vars Ca_i and Ca_i;
    vars Ca_j and Ca_j;
    vars J_SR_Ca_rel and J_SR_Ca_rel;
    vars J_SR_leak and J_SR_leak;
    vars J_ser_Ca and J_ser_Ca;
  enddef;
  def map between Cytosolic_Ca_Buffers and Calcium_Concentrations for
    vars Ca_i and Ca_i;
    vars J_Ca_B_cytosol and J_Ca_B_cytosol;
  enddef;
  def map between Junctional_and_SL_Ca_Buffers and Calcium_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars J_Ca_B_junction and J_Ca_B_junction;
    vars J_Ca_B_sl and J_Ca_B_sl;
  enddef;
  def map between Background_Ca_Current and Calcium_Concentrations for
    vars I_Ca_Bk_junc and I_Ca_Bk_junc;
    vars I_Ca_Bk_sl and I_Ca_Bk_sl;
  enddef;
  def map between Nerst_Potentials and Calcium_Concentrations for
    vars Ca_o and Ca_o;
    vars Ca_sl and Ca_sl;
    vars Ca_j and Ca_j;
  enddef;
  def map between Fast_Na_Current and Sodium_Concentrations for
    vars I_Na_junc and I_Na_junc;
    vars I_Na_sl and I_Na_sl;
  enddef;
  def map between Background_Na_Current and Sodium_Concentrations for
    vars I_Na_Bk_junc and I_Na_Bk_junc;
    vars I_Na_Bk_sl and I_Na_Bk_sl;
  enddef;
  def map between Cytosolic_Ca_Buffers and Magnesium_Concentrations for
    vars Mg_i and Mg_i;
  enddef;
  def map between Nerst_Potentials and Chlorine_Concentrations for
    vars Cl_o and Cl_o;
    vars Cl_i and Cl_i;
  enddef;
  def map between Nerst_Potentials and Background_Cl_Current for
    vars E_Cl and E_Cl;
  enddef;
  def map between Nerst_Potentials and Fast_Na_Current for
    vars E_Na_sl and E_Na_sl;
    vars E_Na_junc and E_Na_junc;
  enddef;
  def map between Nerst_Potentials and Background_Na_Current for
    vars E_Na_sl and E_Na_sl;
    vars E_Na_junc and E_Na_junc;
  enddef;
  def map between Nerst_Potentials and Rapidly_Activating_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Nerst_Potentials and Slowly_Activating_K_Current for
    vars E_Ks and E_Ks;
  enddef;
  def map between Nerst_Potentials and Plateau_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Nerst_Potentials and Transient_Outward_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Nerst_Potentials and Inward_Rectifier_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Nerst_Potentials and Ca_Activated_Cl_Current for
    vars E_Cl and E_Cl;
  enddef;
  def map between Nerst_Potentials and Background_Ca_Current for
    vars E_Ca_junc and E_Ca_junc;
    vars E_Ca_sl and E_Ca_sl;
  enddef;
  def map between Nerst_Potentials and Sodium_Concentrations for
    vars Na_sl and Na_sl;
    vars Na_j and Na_j;
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
enddef;
