// This CellML file was generated on 29/10/2007 at 15:10:29 using:
//
// COR (0.9.31.801)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This model has been validated by Penny Noble of Oxford University (v02 created from v01,) and is known to run in COR and PCEnv. A PCEnv session is also associated with this file.
// created: W3CDTF 2006-09-27T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2009-06-08T13:24:53+12:00; fixed e-notation errors, updated curation status, removed reference link in documentation; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-03-28; Changed the name and cmeta:id of the model to reflect the proper spelling of Courtemanche.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2007-12-19T13:21:11+13:00; added cmeta:id's for some variables to allow referencing by a PCEnv session file; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-06-19T13:27:57+12:00; Added cmeta:id's to several variables to allow creation of a PCEnv session file.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-06-04; Corrected equations: alpha_j_calculation and beta_j_calculation in fast_sodium_current_j_gate, oa_infinity_calculation in transient_outward_K_current_oa_gate, alpha_ui_calculation in ultrarapid_delayed_rectifier_K_current_ui_gate, i_Ca_L_calculation in L_type_Ca_channel, and i_rel_calculation in Ca_release_current_from_JSR.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2006-09-27T13:25:00+12:00; This model has been validated by Penny Noble of Oxford University.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-11-27T15:56:04+13:00; Units checked and curated.; Given Penny; Family Noble; Other J
// bio_entity: Atrial Myocyte
// simulation: endingValue 5000; nonstandard-pointDensity 100000; maximumStepSize 0.1
// title: Courtemanche et al's 1998 Mathematical Model of the Ionic Mechanisms Underlying Human Atrial Acton Potential Properties.
// species: Homo sapiens
// reference: subject_type keyword; atrial myocyte; electrophysiology
// reference: Pubmed_id 9688927; Given Marc; Family Courtemanche; Given Rafael; Family Ramirez; Other J; Given Stanley; Family Nattel; title Ionic mechanisms underlying human atrial action potential properties: insights from a mathematical model; volume 275; first_page H301; title American Journal of Physiology; W3CDTF 1998-07; last_page H321
// comment: FN Catherine Lloyd; This is the CellML description of Courtemanche et al's mathematical model of the ionic mechanisms underlying human atrial action potential properties.
def model courtemanche_1998 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -81.18, pub: out};
    var R: joule_per_mole_kelvin {init: 8.3143, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: picoF {init: 100, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_st: picoA;
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 100};
    var stim_end: millisecond {init: 50000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA {init: -2000};
    i_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(V, time) = -(i_Na+i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_Ca_L+i_st)/Cm;
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: nanoS_per_picoF {init: 7.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = Cm*g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 2.908e-3, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var m_inf: dimensionless;
    var tau_m: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    m_inf = alpha_m/(alpha_m+beta_m);
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 9.649e-1, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: millisecond;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((V+80{millivolt}-shift_INa_inact)/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+3.1e5{per_millisecond}*exp(0.35{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 9.775e-1, pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: millisecond;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-1.2714e5{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))-3.474e-5{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.3{per_millisecond}*exp(-2.535e-7{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    j_inf = alpha_j*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: nanoS_per_picoF {init: 0.09};
    var Cm: picoF {pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var K_i: millimolar {pub: in};
    E_K = R*T/F*ln(K_o/K_i);
    i_K1 = Cm*g_K1*(V-E_K)/(1{dimensionless}+exp(0.07{per_millivolt}*(V+80{millivolt})));
  enddef;

  def comp transient_outward_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: picoA {pub: out};
    var K_Q10: dimensionless {init: 3, priv: out, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: nanoS_per_picoF {init: 0.1652};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var oa: dimensionless {priv: in};
    var oi: dimensionless {priv: in};
    i_to = Cm*g_to*pow(oa, 3{dimensionless})*oi*(V-E_K);
  enddef;

  def comp transient_outward_K_current_oa_gate as
    var oa: dimensionless {init: 3.043e-2, pub: out};
    var alpha_oa: per_millisecond;
    var beta_oa: per_millisecond;
    var tau_oa: millisecond;
    var oa_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_oa = 0.65{per_millisecond}*pow(exp((V-(-10{millivolt}))/(-8.5{millivolt}))+exp((V-(-10{millivolt})-40{millivolt})/(-59{millivolt})), -1{dimensionless});
    beta_oa = 0.65{per_millisecond}*pow(2.5{dimensionless}+exp((V-(-10{millivolt})+72{millivolt})/17{millivolt}), -1{dimensionless});
    tau_oa = pow(alpha_oa+beta_oa, -1{dimensionless})/K_Q10;
    oa_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+10.47{millivolt})/(-17.54{millivolt})), -1{dimensionless});
    ode(oa, time) = (oa_infinity-oa)/tau_oa;
  enddef;

  def comp transient_outward_K_current_oi_gate as
    var oi: dimensionless {init: 9.992e-1, pub: out};
    var alpha_oi: per_millisecond;
    var beta_oi: per_millisecond;
    var tau_oi: millisecond;
    var oi_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_oi = pow(18.53{millisecond}+1{millisecond}*exp((V-(-10{millivolt})+103.7{millivolt})/10.95{millivolt}), -1{dimensionless});
    beta_oi = pow(35.56{millisecond}+1{millisecond}*exp((V-(-10{millivolt})-8.74{millivolt})/(-7.44{millivolt})), -1{dimensionless});
    tau_oi = pow(alpha_oi+beta_oi, -1{dimensionless})/K_Q10;
    oi_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+33.1{millivolt})/5.3{millivolt}), -1{dimensionless});
    ode(oi, time) = (oi_infinity-oi)/tau_oi;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current as
    var i_Kur: picoA {pub: out};
    var g_Kur: nanoS_per_picoF;
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var K_Q10: dimensionless {priv: out, pub: in};
    var ua: dimensionless {priv: in};
    var ui: dimensionless {priv: in};
    g_Kur = 0.005{nanoS_per_picoF}+0.05{nanoS_per_picoF}/(1{dimensionless}+exp((V-15{millivolt})/(-13{millivolt})));
    i_Kur = Cm*g_Kur*pow(ua, 3{dimensionless})*ui*(V-E_K);
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ua_gate as
    var ua: dimensionless {init: 4.966e-3, pub: out};
    var alpha_ua: per_millisecond;
    var beta_ua: per_millisecond;
    var tau_ua: millisecond;
    var ua_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ua = 0.65{per_millisecond}*pow(exp((V-(-10{millivolt}))/(-8.5{millivolt}))+exp((V-(-10{millivolt})-40{millivolt})/(-59{millivolt})), -1{dimensionless});
    beta_ua = 0.65{per_millisecond}*pow(2.5{dimensionless}+exp((V-(-10{millivolt})+72{millivolt})/17{millivolt}), -1{dimensionless});
    tau_ua = pow(alpha_ua+beta_ua, -1{dimensionless})/K_Q10;
    ua_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+20.3{millivolt})/(-9.6{millivolt})), -1{dimensionless});
    ode(ua, time) = (ua_infinity-ua)/tau_ua;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ui_gate as
    var ui: dimensionless {init: 9.986e-1, pub: out};
    var alpha_ui: per_millisecond;
    var beta_ui: per_millisecond;
    var tau_ui: millisecond;
    var ui_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ui = pow(21{millisecond}+1{millisecond}*exp((V-(-10{millivolt})-195{millivolt})/(-28{millivolt})), -1{dimensionless});
    beta_ui = 1{per_millisecond}/exp((V-(-10{millivolt})-168{millivolt})/(-16{millivolt}));
    tau_ui = pow(alpha_ui+beta_ui, -1{dimensionless})/K_Q10;
    ui_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})-109.45{millivolt})/27.48{millivolt}), -1{dimensionless});
    ode(ui, time) = (ui_infinity-ui)/tau_ui;
  enddef;

  def comp rapid_delayed_rectifier_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: nanoS_per_picoF {init: 0.029411765};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var xr: dimensionless {priv: in};
    i_Kr = Cm*g_Kr*xr*(V-E_K)/(1{dimensionless}+exp((V+15{millivolt})/22.4{millivolt}));
  enddef;

  def comp rapid_delayed_rectifier_K_current_xr_gate as
    var xr: dimensionless {init: 3.296e-5, pub: out};
    var alpha_xr: per_millisecond;
    var beta_xr: per_millisecond;
    var tau_xr: millisecond;
    var xr_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xr = 0.0003{per_millivolt_millisecond}*(V+14.1{millivolt})/(1{dimensionless}-exp((V+14.1{millivolt})/(-5{millivolt})));
    beta_xr = 0.000073898{per_millivolt_millisecond}*(V-3.3328{millivolt})/(exp((V-3.3328{millivolt})/5.1237{millivolt})-1{dimensionless});
    tau_xr = pow(alpha_xr+beta_xr, -1{dimensionless});
    xr_infinity = pow(1{dimensionless}+exp((V+14.1{millivolt})/(-6.5{millivolt})), -1{dimensionless});
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp slow_delayed_rectifier_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: nanoS_per_picoF {init: 0.12941176};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = Cm*g_Ks*sqr(xs)*(V-E_K);
  enddef;

  def comp slow_delayed_rectifier_K_current_xs_gate as
    var xs: dimensionless {init: 1.869e-2, pub: out};
    var alpha_xs: per_millisecond;
    var beta_xs: per_millisecond;
    var tau_xs: millisecond;
    var xs_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xs = 0.00004{per_millivolt_millisecond}*(V-19.9{millivolt})/(1{dimensionless}-exp((V-19.9{millivolt})/(-17{millivolt})));
    beta_xs = 0.000035{per_millivolt_millisecond}*(V-19.9{millivolt})/(exp((V-19.9{millivolt})/9{millivolt})-1{dimensionless});
    tau_xs = 0.5{dimensionless}*pow(alpha_xs+beta_xs, -1{dimensionless});
    xs_infinity = pow(1{dimensionless}+exp((V-19.9{millivolt})/(-12.7{millivolt})), -0.5{dimensionless});
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: nanoS_per_picoF {init: 0.12375};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca_L = Cm*g_Ca_L*d*f*f_Ca*(V-65{millivolt});
  enddef;

  def comp L_type_Ca_channel_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 1.367e-4, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = pow(1{dimensionless}+exp((V+10{millivolt})/(-8{millivolt})), -1{dimensionless});
    tau_d = (1{dimensionless}-exp((V+10{millivolt})/(-6.24{millivolt})))/(0.035{per_millivolt_millisecond}*(V+10{millivolt})*(1{dimensionless}+exp((V+10{millivolt})/(-6.24{millivolt}))));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 9.996e-1, pub: out};
    var f_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = exp(-(V+28{millivolt})/6.9{millivolt})/(1{dimensionless}+exp(-(V+28{millivolt})/6.9{millivolt}));
    tau_f = 9{millisecond}*pow(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt})*sqr(V+10{millivolt}))+0.02{dimensionless}, -1{dimensionless});
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {init: 7.755e-1, pub: out};
    var f_Ca_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_f_Ca: millisecond;
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_Ca_infinity = pow(1{dimensionless}+Ca_i/0.00035{millimolar}, -1{dimensionless});
    tau_f_Ca = 2{millisecond};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var Km_Na_i: millimolar {init: 10};
    var Km_K_o: millimolar {init: 1.5};
    var i_NaK_max: picoA_per_picoF {init: 0.59933874};
    var Cm: picoF {pub: in};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
    f_NaK = pow(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)), -1{dimensionless});
    i_NaK = Cm*i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+Km_K_o);
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_K: picoA {pub: out};
    var g_B_Na: nanoS_per_picoF {init: 0.0006744375};
    var g_B_Ca: nanoS_per_picoF {init: 0.001131};
    var g_B_K: nanoS_per_picoF {init: 0};
    var Cm: picoF {pub: in};
    var E_Ca: millivolt;
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_B_Na = Cm*g_B_Na*(V-E_Na);
    i_B_Ca = Cm*g_B_Ca*(V-E_Ca);
    i_B_K = Cm*g_B_K*(V-E_K);
  enddef;

  def comp Na_Ca_exchanger_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var I_NaCa_max: picoA_per_picoF {init: 1600};
    var Cm: picoF {pub: in};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var gamma: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = Cm*I_NaCa_max*(exp(gamma*F*V/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*F*V/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(K_mNa, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(K_mCa+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA_per_picoF {init: 0.275};
    var Cm: picoF {pub: in};
    var Ca_i: millimolar {pub: in};
    i_CaP = Cm*i_CaP_max*Ca_i/(0.0005{millimolar}+Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_millisecond {pub: out};
    var Fn: dimensionless {priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var K_rel: per_millisecond {init: 30};
    var V_rel: micrometre_3 {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var u: dimensionless {priv: in};
    var v: dimensionless {priv: in};
    var w: dimensionless {priv: in};
    Fn = 1e3{millisecond_per_millimolar}*(1e-15{per_micrometre_3}*V_rel*i_rel-1e-15{per_micrometre_3}/(2{dimensionless}*F)*(0.5{dimensionless}*i_Ca_L-0.2{dimensionless}*i_NaCa));
    i_rel = K_rel*sqr(u)*v*w*(Ca_rel-Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR_u_gate as
    var u: dimensionless {init: 2.35e-112, pub: out};
    var tau_u: millisecond;
    var u_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_u = 8{millisecond};
    u_infinity = pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(u, time) = (u_infinity-u)/tau_u;
  enddef;

  def comp Ca_release_current_from_JSR_v_gate as
    var v: dimensionless {init: 1, pub: out};
    var tau_v: millisecond;
    var v_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_v = 1.91{millisecond}+2.09{millisecond}*pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    v_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(Fn-6.835e-14{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(v, time) = (v_infinity-v)/tau_v;
  enddef;

  def comp Ca_release_current_from_JSR_w_gate as
    var w: dimensionless {init: 0.9992, pub: out};
    var tau_w: millisecond;
    var w_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    tau_w = 6{millisecond}*(1{dimensionless}-exp(-(V-7.9{millivolt})/5{millivolt}))/((1{dimensionless}+0.3{dimensionless}*exp(-(V-7.9{millivolt})/5{millivolt}))*1{per_millivolt}*(V-7.9{millivolt}));
    w_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(V-40{millivolt})/17{millivolt}), -1{dimensionless});
    ode(w, time) = (w_infinity-w)/tau_w;
  enddef;

  def comp transfer_current_from_NSR_to_JSR as
    var i_tr: millimolar_per_millisecond {pub: out};
    var tau_tr: millisecond {init: 180};
    var time: millisecond {pub: in};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    i_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp Ca_uptake_current_by_the_NSR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up_max: millimolar_per_millisecond {init: 0.005, pub: out};
    var i_up: millimolar_per_millisecond {pub: out};
    var K_up: millimolar {init: 0.00092};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    i_up = I_up_max/(1{dimensionless}+K_up/Ca_i);
  enddef;

  def comp Ca_leak_current_by_the_NSR as
    var i_up_leak: millimolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var leak_factor: dimensionless {init: 1};
    var Ca_up_max: millimolar {init: 15};
    var time: millisecond {pub: in};
    var Ca_up: millimolar {pub: in};
    var I_up_max: millimolar_per_millisecond {pub: in};
    i_up_leak = leak_factor*I_up_max*Ca_up/Ca_up_max;
  enddef;

  def comp Ca_buffers as
    var CMDN_max: millimolar {init: 0.05, pub: out};
    var TRPN_max: millimolar {init: 0.07, pub: out};
    var CSQN_max: millimolar {init: 10, pub: out};
    var Km_CMDN: millimolar {init: 0.00238, pub: out};
    var Km_TRPN: millimolar {init: 0.0005, pub: out};
    var Km_CSQN: millimolar {init: 0.8, pub: out};
    var Ca_CMDN: millimolar;
    var Ca_TRPN: millimolar;
    var Ca_CSQN: millimolar;
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    Ca_CMDN = CMDN_max*Ca_i/(Ca_i+Km_CMDN);
    Ca_TRPN = TRPN_max*Ca_i/(Ca_i+Km_TRPN);
    Ca_CSQN = CSQN_max*Ca_rel/(Ca_rel+Km_CSQN);
  enddef;

  def comp intracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 1.117e+01, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 1.013e-4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 1.39e+02, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 1.488, pub: out};
    var Ca_up: millimolar {init: 1.488, pub: out};
    var V_cell: micrometre_3 {init: 20100};
    var V_i: micrometre_3;
    var V_rel: micrometre_3 {pub: out};
    var V_up: micrometre_3;
    var B1: millimolar_per_millisecond;
    var B2: dimensionless;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_K: picoA {pub: in};
    var i_up: millimolar_per_millisecond {pub: in};
    var i_up_leak: millimolar_per_millisecond {pub: in};
    var i_tr: millimolar_per_millisecond {pub: in};
    var i_rel: millimolar_per_millisecond {pub: in};
    var Km_CMDN: millimolar {pub: in};
    var Km_CSQN: millimolar {pub: in};
    var Km_TRPN: millimolar {pub: in};
    var CMDN_max: millimolar {pub: in};
    var CSQN_max: millimolar {pub: in};
    var TRPN_max: millimolar {pub: in};
    V_i = V_cell*0.68{dimensionless};
    V_rel = 0.0048{dimensionless}*V_cell;
    V_up = 0.0552{dimensionless}*V_cell;
    ode(Na_i, time) = conc_clamp*(-3{dimensionless}*i_NaK-(3{dimensionless}*i_NaCa+i_B_Na+i_Na))/(V_i*F);
    ode(K_i, time) = conc_clamp*(2{dimensionless}*i_NaK-(i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_K))/(V_i*F);
    ode(Ca_i, time) = B1/B2;
    B1 = (2{dimensionless}*i_NaCa-(i_CaP+i_Ca_L+i_B_Ca))/(2{dimensionless}*V_i*F)+(V_up*(i_up_leak-i_up)+i_rel*V_rel)/V_i;
    B2 = 1{dimensionless}+TRPN_max*Km_TRPN/sqr(Ca_i+Km_TRPN)+CMDN_max*Km_CMDN/sqr(Ca_i+Km_CMDN);
    ode(Ca_up, time) = i_up-(i_up_leak+i_tr*V_rel/V_up);
    ode(Ca_rel, time) = (i_tr-i_rel)*pow(1{dimensionless}+CSQN_max*Km_CSQN/sqr(Ca_rel+Km_CSQN), -1{dimensionless});
  enddef;

  def comp standard_ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 5.4, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_K_current incl
        comp transient_outward_K_current_oa_gate;
        comp transient_outward_K_current_oi_gate;
      endcomp;
      comp ultrarapid_delayed_rectifier_K_current incl
        comp ultrarapid_delayed_rectifier_K_current_ua_gate;
        comp ultrarapid_delayed_rectifier_K_current_ui_gate;
      endcomp;
      comp rapid_delayed_rectifier_K_current incl
        comp rapid_delayed_rectifier_K_current_xr_gate;
      endcomp;
      comp slow_delayed_rectifier_K_current incl
        comp slow_delayed_rectifier_K_current_xs_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp background_currents;
      comp Na_Ca_exchanger_current;
      comp sarcolemmal_calcium_pump_current;
      comp Ca_release_current_from_JSR incl
        comp Ca_release_current_from_JSR_u_gate;
        comp Ca_release_current_from_JSR_v_gate;
        comp Ca_release_current_from_JSR_w_gate;
      endcomp;
      comp transfer_current_from_NSR_to_JSR;
      comp Ca_uptake_current_by_the_NSR;
      comp Ca_leak_current_by_the_NSR;
      comp Ca_buffers;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp transient_outward_K_current incl
      comp transient_outward_K_current_oa_gate;
      comp transient_outward_K_current_oi_gate;
    endcomp;
    comp ultrarapid_delayed_rectifier_K_current incl
      comp ultrarapid_delayed_rectifier_K_current_ua_gate;
      comp ultrarapid_delayed_rectifier_K_current_ui_gate;
    endcomp;
    comp rapid_delayed_rectifier_K_current incl
      comp rapid_delayed_rectifier_K_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_K_current incl
      comp slow_delayed_rectifier_K_current_xs_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp Ca_release_current_from_JSR incl
      comp Ca_release_current_from_JSR_u_gate;
      comp Ca_release_current_from_JSR_v_gate;
      comp Ca_release_current_from_JSR_w_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR and environment for
    vars time and time;
  enddef;
  def map between transfer_current_from_NSR_to_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_uptake_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_leak_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_buffers and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and transient_outward_K_current for
    vars V and V;
    vars i_to and i_to;
    vars Cm and Cm;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kur and i_Kur;
    vars Cm and Cm;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars Cm and Cm;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars Cm and Cm;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and Na_Ca_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
    vars Cm and Cm;
  enddef;
  def map between Ca_release_current_from_JSR and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ultrarapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and slow_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and transient_outward_K_current for
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kur and i_Kur;
  enddef;
  def map between rapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_K_current for
    vars i_to and i_to;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and Ca_release_current_from_JSR for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between Na_Ca_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger_current and Ca_release_current_from_JSR for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ion_concentrations and Ca_release_current_from_JSR for
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars V_rel and V_rel;
  enddef;
  def map between intracellular_ion_concentrations and transfer_current_from_NSR_to_JSR for
    vars i_tr and i_tr;
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between intracellular_ion_concentrations and Ca_uptake_current_by_the_NSR for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_leak_current_by_the_NSR and Ca_uptake_current_by_the_NSR for
    vars I_up_max and I_up_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and intracellular_ion_concentrations for
    vars i_up_leak and i_up_leak;
    vars Ca_up and Ca_up;
  enddef;
  def map between Ca_buffers and intracellular_ion_concentrations for
    vars CMDN_max and CMDN_max;
    vars CSQN_max and CSQN_max;
    vars TRPN_max and TRPN_max;
    vars Km_CMDN and Km_CMDN;
    vars Km_CSQN and Km_CSQN;
    vars Km_TRPN and Km_TRPN;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oa_gate for
    vars oa and oa;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oi_gate for
    vars oi and oi;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars ua and ua;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars ui and ui;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between rapid_delayed_rectifier_K_current and rapid_delayed_rectifier_K_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_K_current and slow_delayed_rectifier_K_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_u_gate for
    vars u and u;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_v_gate for
    vars v and v;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_w_gate for
    vars w and w;
    vars time and time;
    vars V and V;
  enddef;
  // Mathematical Model Of A Human Atrial Action Potential, 1998
  //
  // Noble Penny
  //
  // Oxford University
  //
  // Model Status
  //
  // This model has been validated by Penny Noble of Oxford University and is known to run in COR and PCEnv.
  //
  // ValidateCellML verifies this model as valid CellML, but detects unit inconsistencies.
  //
  // Model Structure
  //
  // The ionic mechanisms underlying many important properties of the human atrial action potential are poorly understood. Using specific formulations of the K+, Na+ and Ca2+ currents based on experimental data recorded from human atrial myocytes, along with representations of pump, exchange and background currents, Marc Courtemanche, Rafael J. Ramirez and Stanley Nattel developed a mathematical model of the action potential (see the figure below).
  //
  // This mathematical model builds mostly on the classical work of Luo and Rudy (see The Luo-Rudy Ventricular Model II (dynamic), 1994). Courtemanche et al effectively develop a working model of the human atrial action potential from the Luo-Rudy model which is based on guinea pig ventricular cells. Their primary goal was to develop a useful model of the action potential from which they could gain insights into experimental observations made on human atrial cells and tissues and make predictions regarding the behaviour of these cells under previously untested conditions
  //
  // The complete original paper reference is cited below:
  //
  // Ionic mechanisms underlying human atrial action potential properties: insights from a mathematical model, Marc Courtemanche, Rafael J. Ramirez and Stanley Nattel, 1998, American Journal of Physiology , 275, H301-H321. PubMed ID: 9688927 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9688927&dopt=Abstract)
  //
  // schematic diagram of a human atrial myocyte
  //
  // A schematic representation of currents, pumps and exchangers included in the model. The cell includes three intracellular compartments: cytoplasm, sarcoplasmic reticulum (SR) release compartment [junctional SR (JSR)], and SR uptake compartment [network SR (NSR)].
enddef;
