// This CellML file was generated on 03/09/2013 at 11:36:41 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2013 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-02-23
// species: Canine
// bio_entity: ventricular myocyte
// reference: subject_type keyword; electrophysiology; cardiac
// reference: Pubmed_id 19168720; Family Decker; Given K; Other F; Family Heijman; Given J; Family Silva; Given J; Other R; Family Hund; Given T; Other J; Family Rudy; Given Y; title Properties and ionic mechanisms of action potential adaptation, restitution, and accommodation in canine epicardium; W3CDTF 2009-04; title American Journal of Physiology; volume 296; first_page H1017; last_page H1026
def model decker_2009 as
  def unit m2u as
    unit second {pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_ms_mV as
    unit ms {expo: -1};
    unit mV {expo: -1};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit mM4_uA_per_uF as
    unit uA_per_uF;
    unit mM4;
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit J_per_kmole_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit mM3 as
    unit mM {expo: 3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM_per_mV as
    unit mM;
    unit mV {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit cm2 {expo: -1};
  enddef;
  def unit uF_mole_per_C as
    unit uF;
    unit mole;
    unit coulomb {expo: -1};
  enddef;
  def unit cm2_mole_per_C as
    unit cm2;
    unit mole;
    unit coulomb {expo: -1};
  enddef;
  def unit mM_per_uA_per_uF_per_ms as
    unit mM;
    unit uA_per_uF {expo: -1};
    unit per_ms;
  enddef;
  def unit mM_per_uA_per_uF_per_ms_per_ms as
    unit mM_per_uA_per_uF_per_ms;
    unit per_ms;
  enddef;
  def unit L_per_F_ms as
    unit litre;
    unit farad {expo: -1};
    unit per_ms;
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp model_parameters as
    var F: C_per_mole {init: 96485, pub: out};
    var T: kelvin {init: 310, pub: out};
    var R: J_per_kmole_K {init: 8314, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {init: 5.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {init: 140, pub: out};
    var Cl_o: mM {init: 100, pub: out};
  enddef;

  def comp cell_geometry as
    var Vmyo: uL {pub: out};
    var Vnsr: uL {pub: out};
    var Vsr: uL {pub: out};
    var Vjsr: uL {pub: out};
    var Vss_sr: uL {pub: out};
    var Vss_CaL: uL {pub: out};
    var Acap: cm2 {pub: out};
    var AF: uF_mole_per_C {pub: out};
    var l: cm {init: 0.01};
    var a: cm {init: 0.0011};
    var vcell: uL;
    var ageo: cm2;
    var F: C_per_mole {pub: in};
    vcell = 1000{m2u}*pi*a*a*l;
    ageo = 2{dimensionless}*pi*a*a+2{dimensionless}*pi*a*l;
    Acap = ageo*2{dimensionless};
    AF = 1{uF_mole_per_C}*1{C_per_mole}*Acap/(F*1{cm2});
    Vmyo = vcell*0.678{dimensionless};
    Vsr = vcell*0.06{dimensionless};
    Vnsr = vcell*0.0552{dimensionless};
    Vjsr = vcell*0.0048{dimensionless};
    Vss_sr = vcell*0.02{dimensionless};
    Vss_CaL = vcell*0.002{dimensionless};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var Vm: mV {init: -87.4947322902196, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_offset: ms {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: ms {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: uA_per_uF {init: -80};
    var past: ms;
    var caiont: uA_per_uF;
    var naiont: uA_per_uF;
    var kiont: uA_per_uF;
    var clont: uA_per_uF;
    var F: C_per_mole {pub: in};
    var INa: uA_per_uF {pub: in};
    var ICaL: uA_per_uF {pub: in};
    var IK1: uA_per_uF {pub: in};
    var IKp: uA_per_uF {pub: in};
    var IKs: uA_per_uF {pub: in};
    var IKr: uA_per_uF {pub: in};
    var IpCa: uA_per_uF {pub: in};
    var ICab: uA_per_uF {pub: in};
    var INaCa: uA_per_uF {pub: in};
    var INaCa_ss_sr: uA_per_uF {pub: in};
    var INaK: uA_per_uF {pub: in};
    var Ito1: uA_per_uF {pub: in};
    var Ito2: uA_per_uF {pub: in};
    var IClb: uA_per_uF {pub: in};
    var INaL: uA_per_uF {pub: in};
    var INab: uA_per_uF {pub: in};
    var time: ms {pub: in};
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    caiont = ICaL+ICab+IpCa-2{dimensionless}*(INaCa+INaCa_ss_sr);
    naiont = INa+3{dimensionless}*(INaCa+INaCa_ss_sr)+3{dimensionless}*INaK+INaL+INab;
    kiont = IKr+IKs+IK1+IKp+(-2{dimensionless}*INaK)+Ito1+i_Stim;
    clont = IClb+Ito2;
    ode(Vm, time) = -(naiont+kiont+caiont+clont);
  enddef;

  def comp IKs as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: uA_per_uF {pub: out};
    var gKs: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gKs_max: mS_per_uF {init: 0.0826};
    var C1: dimensionless {init: 0.476679784307081};
    var C2: dimensionless {init: 0.255181042718489};
    var C3: dimensionless {init: 0.0512272866698557};
    var C4: dimensionless {init: 0.0045705849736195};
    var C5: dimensionless {init: 0.000152923243503507};
    var C6: dimensionless {init: 0.132814156809568};
    var C7: dimensionless {init: 0.053324572164618};
    var C8: dimensionless {init: 0.00713656414955778};
    var C9: dimensionless {init: 0.000318368292970148};
    var C10: dimensionless {init: 0.0138769647384953};
    var C11: dimensionless {init: 0.00371438476499172};
    var C12: dimensionless {init: 0.000248553788631871};
    var C13: dimensionless {init: 0.000644426171899078};
    var C14: dimensionless {init: 8.62495047666861e-5};
    var C15: dimensionless {init: 1.12344645485893e-5};
    var O1: dimensionless {init: 1.05292905767805e-5};
    var O2: dimensionless;
    var OKs: dimensionless;
    var alpha: per_ms;
    var beta: per_ms;
    var delta: per_ms;
    var gamma: per_ms;
    var eta: per_ms;
    var theta: per_ms;
    var omega: per_ms;
    var psi: per_ms;
    var time: ms {pub: in};
    var Vm: mV {pub: in};
    var EKs: mV {pub: in};
    var Ca_i: mM {pub: in};
    var R: J_per_kmole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    IKs = gKs*OKs*(Vm-EKs);
    gKs = gKs_max*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{mM}/Ca_i, 1.4{dimensionless})));
    O2 = 1{dimensionless}-(C1+C2+C3+C4+C5+C6+C7+C8+C9+C10+C11+C12+C13+C14+C15+O1);
    OKs = O1+O2;
    ode(C1, time) = -4{dimensionless}*alpha*C1+beta*C2;
    ode(C2, time) = -(3{dimensionless}*alpha+beta+gamma)*C2+4{dimensionless}*alpha*C1+2{dimensionless}*beta*C3+delta*C6;
    ode(C3, time) = -(2{dimensionless}*alpha+2{dimensionless}*beta+2{dimensionless}*gamma)*C3+3{dimensionless}*alpha*C2+3{dimensionless}*beta*C4+delta*C7;
    ode(C4, time) = -(alpha+3{dimensionless}*beta+3{dimensionless}*gamma)*C4+2{dimensionless}*alpha*C3+4{dimensionless}*beta*C5+delta*C8;
    ode(C5, time) = -(4{dimensionless}*beta+4{dimensionless}*gamma)*C5+alpha*C4+delta*C9;
    ode(C6, time) = -(3{dimensionless}*alpha+delta)*C6+beta*C7+gamma*C2;
    ode(C7, time) = -(2{dimensionless}*alpha+beta+gamma+delta)*C7+3{dimensionless}*alpha*C6+2{dimensionless}*beta*C8+2{dimensionless}*gamma*C3+2{dimensionless}*delta*C10;
    ode(C8, time) = -(alpha+2{dimensionless}*beta+2{dimensionless}*gamma+delta)*C8+2{dimensionless}*alpha*C7+3{dimensionless}*beta*C9+3{dimensionless}*gamma*C4+2{dimensionless}*delta*C11;
    ode(C9, time) = -(3{dimensionless}*beta+3{dimensionless}*gamma+delta)*C9+alpha*C8+4{dimensionless}*gamma*C5+2{dimensionless}*delta*C12;
    ode(C10, time) = -(2{dimensionless}*alpha+2{dimensionless}*delta)*C10+beta*C11+gamma*C7;
    ode(C11, time) = -(alpha+beta+gamma+2{dimensionless}*delta)*C11+2{dimensionless}*alpha*C10+2{dimensionless}*beta*C12+2{dimensionless}*gamma*C8+3{dimensionless}*delta*C13;
    ode(C12, time) = -(2{dimensionless}*beta+2{dimensionless}*gamma+2{dimensionless}*delta)*C12+alpha*C11+3{dimensionless}*gamma*C9+3{dimensionless}*delta*C14;
    ode(C13, time) = -(alpha+3{dimensionless}*delta)*C13+beta*C14+gamma*C11;
    ode(C14, time) = -(beta+gamma+3{dimensionless}*delta)*C14+alpha*C13+2{dimensionless}*gamma*C12+4{dimensionless}*delta*C15;
    ode(C15, time) = -(4{dimensionless}*delta+theta)*C15+gamma*C14+eta*O1;
    ode(O1, time) = -(eta+psi)*O1+omega*O2+theta*C15;
    alpha = 0.01486459798086{per_ms}*exp(0.02987730123588{dimensionless}*Vm*F/(R*T));
    beta = 0.08398631219983{per_ms}*exp(-0.05546105712664{dimensionless}*Vm*F/(R*T));
    gamma = 0.01460066118316{per_ms}*exp(0.24464953099645{dimensionless}*Vm*F/(R*T));
    delta = 0.0031173268874{per_ms}*exp(-0.42625451944376{dimensionless}*Vm*F/(R*T));
    eta = 0.07731990097331{per_ms}*exp(-0.06472612248871{dimensionless}*Vm*F/(R*T));
    theta = 0.08953830641102{per_ms};
    omega = 0.7940545995864{per_ms}*exp(-0.08017378192977{dimensionless}*Vm*F/(R*T));
    psi = 0.58638228663014{per_ms}*exp(0.28205554331496{dimensionless}*Vm*F/(R*T));
  enddef;

  def comp ICaL as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: uA_per_uF {pub: out};
    var ICaL_max: uA_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var PCa: L_per_F_ms {init: 0.00015552};
    var C: dimensionless {init: 0.99996982093287};
    var O: dimensionless {init: 2.26882961412491e-5};
    var C_star: dimensionless {init: 7.49117189549873e-6};
    var O_star: dimensionless {init: 1.23556404128518e-10};
    var CI: dimensionless {init: 5.89853003114132e-11};
    var OI: dimensionless {init: 8.01952813127322e-17};
    var CI_star: dimensionless {init: 1.9237001017021e-9};
    var OI_star: dimensionless;
    var ACT_tau: ms;
    var IV_tau: ms;
    var IV_tau_star: ms;
    var ACT_infinity: dimensionless;
    var IV_infinity: dimensionless;
    var IV_infinity_star: dimensionless;
    var IV_beta_star: dimensionless;
    var IV_beta_infinity_star: dimensionless;
    var alpha: per_ms;
    var beta: per_ms;
    var delta: per_ms;
    var x: per_ms;
    var y: per_ms;
    var theta: per_ms {init: 1};
    var delta_I: per_ms;
    var x_star: per_ms;
    var y_star: per_ms;
    var theta_I: per_ms {init: 1e-6};
    var gamma_Cai: dimensionless {init: 1};
    var gamma_Cao: dimensionless {init: 0.341};
    var time: ms {pub: in};
    var Vm: mV {pub: in};
    var Ca_ss_CaL: mM {pub: in};
    var Ca_o: mM {pub: in};
    var R: J_per_kmole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var A: uA_per_uF;
    var B: per_mV;
    var v0: mV;
    var U: dimensionless;
    B = 2{dimensionless}*F/(R*T);
    v0 = 0{mV};
    A = PCa*4{dimensionless}*sqr(F)/(R*T)*(gamma_Cai*Ca_ss_CaL*exp(2{dimensionless}*Vm*F/(R*T))-gamma_Cao*Ca_o)/B;
    U = B*(Vm-v0);
    ICaL_max = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    OI_star = 1{dimensionless}-(C+O+C_star+O_star+CI+OI+CI_star);
    ICaL = ICaL_max*(O+O_star);
    // ICaL_max = PCa*4{dimensionless}*Vm*sqr(F)/(R*T)*(gamma_Cai*Ca_ss_CaL*exp(2{dimensionless}*Vm*F/(R*T))-gamma_Cao*Ca_o)/(exp(2{dimensionless}*Vm*F/(R*T))-1{dimensionless});
    ode(C, time) = -(alpha+delta+y)*C+beta*O+theta*C_star+x*CI;
    ode(O, time) = -(beta+delta+y)*O+alpha*C+theta*O_star+x*OI;
    ode(C_star, time) = -(alpha+theta+y_star)*C_star+delta*C+beta*O_star+x_star*CI_star;
    ode(O_star, time) = -(beta+theta+y_star)*O_star+delta*O+alpha*C_star+x_star*OI_star;
    ode(CI, time) = -(alpha+delta_I+x)*CI+y*C+theta_I*CI_star+beta*OI;
    ode(OI, time) = -(beta+delta_I+x)*OI+y*O+theta_I*OI_star+alpha*CI;
    ode(CI_star, time) = -(alpha+theta_I+x_star)*CI_star+delta_I*CI+y_star*C_star+beta*OI_star;
    ACT_tau = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(Vm+13{mV}))/(1{dimensionless}+exp(0.132{per_mV}*(Vm+13{mV})));
    ACT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm-13.56{mV})/9.45{mV}));
    alpha = ACT_infinity/ACT_tau;
    beta = (1{dimensionless}-ACT_infinity)/ACT_tau;
    IV_infinity = (1{dimensionless}/(1{dimensionless}+exp((Vm+17.5{mV})/3{mV}))+0.25{dimensionless})/1.25{dimensionless};
    IV_tau = 1{ms}/(1{dimensionless}/(24.828{dimensionless}*(1{dimensionless}+exp((Vm+49.1{mV})/10.349{mV})))+1{dimensionless}/(30.553{dimensionless}*(1{dimensionless}+exp(-(Vm+0.213{mV})/10.807{mV}))));
    x = IV_infinity/IV_tau;
    y = (1{dimensionless}-IV_infinity)/IV_tau;
    IV_infinity_star = (1{dimensionless}/(1{dimensionless}+exp((Vm+17.5{mV})/3{mV}))+0.0001{dimensionless})/1.0001{dimensionless};
    IV_tau_star = 1{ms}/(1{dimensionless}/(24.828{dimensionless}*(1{dimensionless}+exp((Vm+49.1{mV})/10.349{mV})))+IV_beta_star);
    IV_beta_star = 1{dimensionless}/(IV_beta_infinity_star*(1{dimensionless}+exp(-(Vm+0.213{mV})/10.807{mV})));
    IV_beta_infinity_star = 25{dimensionless}-17.5{dimensionless}/(1{dimensionless}+pow(0.003{mM}/Ca_ss_CaL, 4{dimensionless}));
    x_star = IV_infinity_star/IV_tau_star;
    y_star = (1{dimensionless}-IV_infinity_star)/IV_tau_star;
    delta = 3{per_ms}/(1{dimensionless}+pow(0.003{mM}/Ca_ss_CaL, 4{dimensionless}));
    delta_I = theta_I*x*y_star*delta/(y*x_star*theta);
  enddef;

  def comp INa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 9.075};
    var time: ms {priv: out, pub: in};
    var Vm: mV {priv: out, pub: in};
    var ENa: mV {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    INa = g_Na*pow(m, 3{dimensionless})*h*j*(Vm-ENa);
  enddef;

  def comp INa_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.00101841101248412, pub: out};
    var am: per_ms;
    var bm: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    var A: per_ms;
    var B: per_mV;
    var v0: mV;
    var U: dimensionless;
    B = -0.1{per_mV};
    v0 = -47.13{mV};
    A = -0.32{per_ms_mV}/B;
    U = B*(Vm-v0);
    am = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // am = 0.32{per_ms_mV}*(Vm+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(Vm+47.13{mV})));
    bm = 0.08{per_ms}*exp(-Vm/11{mV});
    ode(m, time) = am*(1{dimensionless}-m)-bm*m;
  enddef;

  def comp INa_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.991354143386887, pub: out};
    var ah: per_ms;
    var bh: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    ah = sel
      case Vm >= -40{mV}:
        0{per_ms};
      otherwise:
        0.135{per_ms}*exp((80{mV}+Vm)/(-6.8{mV}));
    endsel;
    bh = sel
      case Vm >= -40{mV}:
        1{per_ms}/(0.13{dimensionless}*(1{dimensionless}+exp((Vm+10.66{mV})/(-11.1{mV}))));
      otherwise:
        3.56{per_ms}*exp(0.079{per_mV}*Vm)+3.1e5{per_ms}*exp(0.35{per_mV}*Vm);
    endsel;
    ode(h, time) = ah*(1{dimensionless}-h)-bh*h;
  enddef;

  def comp INa_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.99709036251243, pub: out};
    var aj: per_ms;
    var bj: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    aj = sel
      case Vm >= -40{mV}:
        0{per_ms};
      otherwise:
        (-1.2714e5{per_ms_mV}*exp(0.2444{per_mV}*Vm)-6.948e-5{per_ms_mV}*exp(-0.04391{per_mV}*Vm))*(Vm+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(Vm+79.23{mV})));
    endsel;
    bj = sel
      case Vm >= -40{mV}:
        0.3{per_ms}*exp(-2.535e-7{per_mV}*Vm)/(1{dimensionless}+exp(-0.1{per_mV}*(Vm+32{mV})));
      otherwise:
        0.1212{per_ms}*exp(-0.01052{per_mV}*Vm)/(1{dimensionless}+exp(-0.1378{per_mV}*(Vm+40.14{mV})));
    endsel;
    ode(j, time) = aj*(1{dimensionless}-j)-bj*j;
  enddef;

  def comp INaK as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var INaK: uA_per_uF {pub: out};
    var kmnai: mM {init: 2.6};
    var kmko: mM {init: 1.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var ibarnak: uA_per_uF {init: 1.4};
    var sigma: dimensionless {init: 1};
    var V_half: mV {init: -92};
    var phi: dimensionless;
    var fv: dimensionless;
    var PK: dimensionless;
    var PNa: dimensionless;
    var Vm: mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var R: J_per_kmole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    INaK = ibarnak*fv*PK*PNa;
    phi = sigma*(Vm-V_half)*F/(R*T);
    fv = 1{dimensionless}/(1{dimensionless}+exp(-phi));
    PK = K_o/(K_o+kmko);
    PNa = pow(Na_i/(Na_i+kmnai), 3{dimensionless});
  enddef;

  def comp INaCa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: uA_per_uF {pub: out};
    var INaCa_cai: uA_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_dyadic_space_current
    var INaCa_ss_sr: uA_per_uF {pub: out};
    var KmCa_act: mM {init: 0.000125};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var Vmax: uA_per_uF {init: 4.5};
    var ksat: dimensionless {init: 0.32};
    var eta: dimensionless {init: 0.27};
    var KmNai: mM {init: 12.3};
    var KmNao: mM {init: 87.5};
    var KmCai: mM {init: 0.0036};
    var KmCao: mM {init: 1.3};
    var Vm: mV {pub: in};
    var R: J_per_kmole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ss_sr: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_ss_sr: mM {pub: in};
    var numerator: mM4_uA_per_uF;
    var num_ss: mM4_uA_per_uF;
    var denom_1: dimensionless;
    var denom_2: dimensionless;
    var denom_3: mM4;
    var denom_4: mM4;
    var denom_ss_1: dimensionless;
    var denom_ss_2: dimensionless;
    var denom_ss_3: mM4;
    var denom_ss_4: mM4;
    numerator = 0.8{dimensionless}*Vmax*(pow(Na_i, 3{dimensionless})*Ca_o*exp(eta*Vm*F/(R*T))-pow(Na_o, 3{dimensionless})*Ca_i*exp((eta-1{dimensionless})*Vm*F/(R*T)));
    denom_1 = 1{dimensionless}+sqr(KmCa_act/Ca_i);
    denom_2 = 1{dimensionless}+ksat*exp((eta-1{dimensionless})*Vm*F/(R*T));
    denom_3 = KmCao*pow(Na_i, 3{dimensionless})+pow(KmNao, 3{dimensionless})*Ca_i+pow(KmNai, 3{dimensionless})*Ca_o*(1{dimensionless}+Ca_i/KmCai);
    denom_4 = KmCai*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_i/KmNai, 3{dimensionless}))+pow(Na_i, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_i;
    num_ss = 0.2{dimensionless}*Vmax*(pow(Na_ss_sr, 3{dimensionless})*Ca_o*exp(eta*Vm*F/(R*T))-pow(Na_o, 3{dimensionless})*Ca_ss_sr*exp((eta-1{dimensionless})*Vm*F/(R*T)));
    denom_ss_1 = 1{dimensionless}+sqr(KmCa_act/Ca_ss_sr);
    denom_ss_2 = 1{dimensionless}+ksat*exp((eta-1{dimensionless})*Vm*F/(R*T));
    denom_ss_3 = KmCao*pow(Na_ss_sr, 3{dimensionless})+pow(KmNao, 3{dimensionless})*Ca_ss_sr+pow(KmNai, 3{dimensionless})*Ca_o*(1{dimensionless}+Ca_ss_sr/KmCai);
    denom_ss_4 = KmCai*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_ss_sr/KmNai, 3{dimensionless}))+pow(Na_ss_sr, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_ss_sr;
    INaCa_ss_sr = num_ss/(denom_ss_1*denom_ss_2*(denom_ss_3+denom_ss_4));
    INaCa_cai = numerator/(denom_1*denom_2*(denom_3+denom_4));
    INaCa = INaCa_cai+INaCa_ss_sr;
  enddef;

  def comp IKp as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current
    var IKp: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current_conductance
    var gKp: mS_per_uF {init: 0.00276};
    var Kp: dimensionless;
    var Vm: mV {pub: in};
    var EK: mV {pub: in};
    IKp = gKp*Kp*(Vm-EK);
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{mV}-Vm)/5.98{mV}));
  enddef;

  def comp IpCa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current_conductance
    var gpCa: uA_per_uF {init: 0.0575};
    var KmpCa: mM {init: 0.0005};
    var Ca_i: mM {pub: in};
    IpCa = gpCa*Ca_i/(KmpCa+Ca_i);
  enddef;

  def comp ICab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var ICab: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var PCab: L_per_F_ms {init: 1.99508e-7};
    var gamma_Ca_i: dimensionless {init: 1};
    var gamma_Ca_o: dimensionless {init: 0.341};
    var Vm: mV {pub: in};
    var F: C_per_mole {pub: in};
    var R: J_per_kmole_K {pub: in};
    var T: kelvin {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var A: uA_per_uF;
    var B: per_mV;
    var v0: mV;
    var U: dimensionless;
    B = 2{dimensionless}*F/(R*T);
    v0 = 0{mV};
    A = PCab*4{dimensionless}*sqr(F)/(R*T)*(gamma_Ca_i*Ca_i*exp(2{dimensionless}*Vm*F/(R*T))-gamma_Ca_o*Ca_o)/B;
    U = B*(Vm-v0);
    ICab = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // ICab = PCab*4{dimensionless}*Vm*sqr(F)/(R*T)*(gamma_Ca_i*Ca_i*exp(2{dimensionless}*Vm*F/(R*T))-gamma_Ca_o*Ca_o)/(exp(2{dimensionless}*Vm*F/(R*T))-1{dimensionless});
  enddef;

  def comp INab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var INab: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var PNab: L_per_F_ms {init: 3.2e-9};
    var phi: dimensionless;
    var Vm: mV {pub: in};
    var F: C_per_mole {pub: in};
    var R: J_per_kmole_K {pub: in};
    var T: kelvin {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var A: uA_per_uF;
    var B: dimensionless;
    var v0: dimensionless;
    var U: dimensionless;
    phi = F*Vm/(R*T);
    B = 1{dimensionless};
    v0 = 0{dimensionless};
    A = F*PNab*(Na_i*exp(phi)-Na_o)/B;
    U = B*(phi-v0);
    INab = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // INab = F*PNab*phi*(Na_i*exp(phi)-Na_o)/(exp(phi)-1{dimensionless});
  enddef;

  def comp IClb as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_chloride_current
    var IClb: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_chloride_current_conductance
    var gClb: mS_per_uF {init: 0.000225};
    var Vm: mV {pub: in};
    var ECl: mV {pub: in};
    IClb = gClb*(Vm-ECl);
  enddef;

  def comp INaL as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var INaL: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var gNaL: mS_per_uF {init: 0.0065};
    var time: ms {priv: out, pub: in};
    var Vm: mV {priv: out, pub: in};
    var ENa: mV {pub: in};
    var mL: dimensionless {priv: in};
    var hL: dimensionless {priv: in};
    INaL = gNaL*pow(mL, 3{dimensionless})*hL*(Vm-ENa);
  enddef;

  def comp INaL_mL_gate as
    var mL: dimensionless {init: 0.00101841101248412, pub: out};
    var amL: per_ms;
    var bmL: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    var A: per_ms;
    var B: per_mV;
    var v0: mV;
    var U: dimensionless;
    B = -0.1{per_mV};
    v0 = -47.13{mV};
    A = -0.32{per_ms_mV}/B;
    U = B*(Vm-v0);
    amL = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // amL = 0.32{per_ms_mV}*(Vm+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(Vm+47.13{mV})));
    bmL = 0.08{per_ms}*exp(-Vm/11{mV});
    ode(mL, time) = amL*(1{dimensionless}-mL)-bmL*mL;
  enddef;

  def comp INaL_hL_gate as
    var hL: dimensionless {init: 0.319611809402137, pub: out};
    var tau_hL: ms {init: 600};
    var hL_infinity: dimensionless;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    hL_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+91{mV})/6.1{mV}));
    ode(hL, time) = (hL_infinity-hL)/tau_hL;
  enddef;

  def comp reversal_potentials as
    var ENa: mV {pub: out};
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    var ECl: mV {pub: out};
    var prnak: dimensionless {init: 0.01833};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var Cl_i: mM {pub: in};
    var R: J_per_kmole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    ENa = R*T/F*ln(Na_o/Na_i);
    EK = R*T/F*ln(K_o/K_i);
    EKs = R*T/F*ln((K_o+prnak*Na_o)/(K_i+prnak*Na_i));
    ECl = -R*T/F*ln(Cl_o/Cl_i);
  enddef;

  def comp IK1 as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_max: mS_per_uF {init: 0.5};
    var gK1: mS_per_uF;
    var time: ms {pub: in};
    var Vm: mV {priv: out, pub: in};
    var EK: mV {priv: out, pub: in};
    var K_o: mM {pub: in};
    var K1: dimensionless {priv: in};
    IK1 = gK1*K1*(Vm-EK);
    gK1 = g_K1_max*sqrt(K_o/5.4{mM});
  enddef;

  def comp IK1_K1_gate as
    var K1: dimensionless {pub: out};
    var alpha_k1: dimensionless;
    var beta_k1: dimensionless;
    var Vm: mV {pub: in};
    var EK: mV {pub: in};
    alpha_k1 = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{per_mV}*(Vm-EK-59.215{mV})));
    beta_k1 = (0.49124{dimensionless}*exp(0.08032{per_mV}*(Vm-EK+5.476{mV}))+exp(0.06175{per_mV}*(Vm-EK-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(Vm-EK+4.753{mV})));
    K1 = alpha_k1/(alpha_k1+beta_k1);
  enddef;

  def comp CT_Na_Cl as
    var CT_Na_Cl: mM_per_ms {pub: out};
    var CT_Na_Cl_max: mM_per_ms {init: 2.46108e-5};
    var ENa: mV {pub: in};
    var ECl: mV {pub: in};
    CT_Na_Cl = CT_Na_Cl_max*pow(ENa-ECl, 4{dimensionless})/(pow(ENa-ECl, 4{dimensionless})+pow(87.8251{mV}, 4{dimensionless}));
  enddef;

  def comp CT_K_Cl as
    var CT_K_Cl: mM_per_ms {pub: out};
    var CT_K_Cl_max: mM_per_ms {init: 1.77e-5};
    var EK: mV {pub: in};
    var ECl: mV {pub: in};
    CT_K_Cl = CT_K_Cl_max*(EK-ECl)/(EK+87.8251{mV}-ECl);
  enddef;

  def comp IKr as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: uA_per_uF {pub: out};
    var gKr: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gKr_max: mS_per_uF {init: 0.0138542};
    var time: ms {priv: out, pub: in};
    var Vm: mV {priv: out, pub: in};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var r: dimensionless {priv: in};
    var xr: dimensionless {priv: in};
    gKr = gKr_max*sqrt(K_o/5.4{mM});
    IKr = gKr*xr*r*(Vm-EK);
  enddef;

  def comp IKr_xr_gate as
    var xr: dimensionless {init: 4.06959064407486e-6, pub: out};
    var xr_infinity: dimensionless;
    var tau_xr: ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    var A_1: dimensionless;
    var B_1: per_mV;
    var v0_1: mV;
    var U_1: dimensionless;
    var temp_part_1: dimensionless;
    B_1 = -0.136{per_mV};
    v0_1 = 1.7384{mV};
    A_1 = -0.0006{per_mV}/B_1;
    U_1 = B_1*(Vm-v0_1);
    temp_part_1 = sel
      case (-1e-7{dimensionless} <= U_1) and (U_1 <= 1e-7{dimensionless}):
        A_1*(1{dimensionless}-0.5{dimensionless}*U_1);
      otherwise:
        A_1*U_1/(exp(U_1)-1{dimensionless});
    endsel;
    var A_2: dimensionless;
    var B_2: per_mV;
    var v0_2: mV;
    var U_2: dimensionless;
    var temp_part_2: dimensionless;
    B_2 = 0.1522{per_mV};
    v0_2 = -38.3608{mV};
    A_2 = 0.0003{per_mV}/B_2;
    U_2 = B_2*(Vm-v0_2);
    temp_part_2 = sel
      case (-1e-7{dimensionless} <= U_2) and (U_2 <= 1e-7{dimensionless}):
        A_2*(1{dimensionless}-0.5{dimensionless}*U_2);
      otherwise:
        A_2*U_2/(exp(U_2)-1{dimensionless});
    endsel;
    tau_xr = 1{ms}/(temp_part_1+temp_part_2);
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+10.085{mV})/4.25{mV}));
    // tau_xr = 1{ms}/(0.0006{per_mV}*(Vm-1.7384{mV})/(1{dimensionless}-exp(-0.136{per_mV}*(Vm-1.7384{mV})))+0.0003{per_mV}*(Vm+38.3608{mV})/(exp(0.1522{per_mV}*(Vm+38.3608{mV}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp IKr_r_gate as
    var r: dimensionless {pub: out};
    var Vm: mV {pub: in};
    r = 1{dimensionless}/(1{dimensionless}+exp((Vm+10{mV})/15.4{mV}));
  enddef;

  def comp Ito1 as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito1: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gto1: mS_per_uF {init: 0.497458};
    var rto1: dimensionless;
    var EK: mV {pub: in};
    var time: ms {priv: out, pub: in};
    var Vm: mV {priv: out, pub: in};
    var a: dimensionless {priv: in};
    var i1f: dimensionless {priv: in};
    var i1s: dimensionless {priv: in};
    Ito1 = gto1*pow(a, 3{dimensionless})*i1f*i1s*rto1*(Vm-EK);
    rto1 = exp(Vm/550{mV});
  enddef;

  def comp Ito1_a_gate as
    var a: dimensionless {init: 1.76776038804228e-5, pub: out};
    var alpha_a: per_ms;
    var beta_a: per_ms;
    var tau_a: ms;
    var a_infinity: dimensionless;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    alpha_a = 1{per_ms}/(1.2089{dimensionless}*(1{dimensionless}+exp((Vm-18.4099{mV})/(-29.3814{mV}))));
    beta_a = 3.5{per_ms}/(1{dimensionless}+exp((Vm+100{mV})/29.3814{mV}));
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    a_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+9.437{mV})/(-7.133{mV})));
    ode(a, time) = (a_infinity-a)/tau_a;
  enddef;

  def comp Ito1_i1f_gate as
    var i1f: dimensionless {init: 0.997976503910799, pub: out};
    var alpha_i1f: per_ms;
    var beta_i1f: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    beta_i1f = 1{per_ms}/(9.7953{dimensionless}*(1{dimensionless}+exp((Vm+19{mV})/(-9{mV}))));
    alpha_i1f = 0.025{per_ms}/(1{dimensionless}+exp((Vm+58{mV})/5{mV}));
    ode(i1f, time) = alpha_i1f*(1{dimensionless}-i1f)-beta_i1f*i1f;
  enddef;

  def comp Ito1_i1s_gate as
    var i1s: dimensionless {init: 0.947581184798815, pub: out};
    var alpha_i1s: per_ms;
    var beta_i1s: per_ms;
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    beta_i1s = 1{per_ms}/(9.7953{dimensionless}*(1{dimensionless}+exp((Vm+19{mV})/(-9{mV}))));
    alpha_i1s = 1{per_ms}/(250{dimensionless}*(1{dimensionless}+exp((Vm+60{mV})/5{mV})));
    ode(i1s, time) = alpha_i1s*(1{dimensionless}-i1s)-beta_i1s*i1s;
  enddef;

  def comp Ito2 as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_chloride_current
    var Ito2: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_chloride_current_conductance
    var PCl: L_per_F_ms {init: 9e-7};
    var zCl: dimensionless {init: -1};
    var Ito2_max: uA_per_uF;
    var Ito2_max_scaling_factor: dimensionless {init: 1};
    var KCa_ito2: dimensionless;
    var kCa_ito2: mM_per_ms {init: 0.4};
    var time: ms {priv: out, pub: in};
    var Vm: mV {priv: out, pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var R: J_per_kmole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Irel: mM_per_ms {pub: in};
    var i2f: dimensionless {priv: in};
    var A: uA_per_uF;
    var B: per_mV;
    var v0: mV;
    var U: dimensionless;
    B = F/(R*T);
    v0 = 0{mV};
    A = -PCl*sqr(zCl)*sqr(F)/(R*T)*(Cl_i-Cl_o*exp(Vm*F/(R*T)))/B;
    U = B*(Vm-v0);
    Ito2_max = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    Ito2 = Ito2_max*Ito2_max_scaling_factor*i2f*KCa_ito2;
    // Ito2_max = PCl*sqr(zCl)*Vm*sqr(F)/(R*T)*(Cl_i-Cl_o*exp(Vm*F/(R*T)))/(1{dimensionless}-exp(Vm*F/(R*T)));
    KCa_ito2 = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+sqr(Irel/kCa_ito2));
  enddef;

  def comp Ito2_i2f_gate as
    var i2f: dimensionless {init: 0.996044894628276, pub: out};
    var alpha_i2f: per_ms;
    var beta_i2f: per_ms;
    var i2f_infinity: dimensionless;
    var tau_i2f: ms {init: 8};
    var Vm: mV {pub: in};
    var time: ms {pub: in};
    ode(i2f, time) = (i2f_infinity-i2f)/tau_i2f;
    i2f_infinity = alpha_i2f/(alpha_i2f+beta_i2f);
    beta_i2f = 1{per_ms}/(5{dimensionless}*(1{dimensionless}+exp((Vm+19{mV})/(-9{mV}))));
    alpha_i2f = 0.025{per_ms}/(1{dimensionless}+exp((Vm+58{mV})/5{mV}));
  enddef;

  def comp Irel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var Irel: mM_per_ms {init: 0.000714227102027745, pub: out};
    var rel_infinity: mM_per_ms;
    var tau_rel: ms;
    var Krel_infinity: mM {init: 1};
    var alpha_rel: mM_per_uA_per_uF_per_ms;
    var beta_tau: ms;
    var beta_0: ms {init: 4.75};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var kappa: mM_per_uA_per_uF_per_ms_per_ms {init: 0.1125};
    var h_rel: dimensionless {init: 8};
    var h_beta: dimensionless {init: 10};
    var delta_beta_CaMK: dimensionless;
    var delta_beta_0: dimensionless {init: 1};
    var K_beta: mM {init: 0.28};
    var Krel_tau: mM {init: 0.0123};
    var ICaL: uA_per_uF {pub: in};
    var time: ms {pub: in};
    var Ca_JSR: mM {pub: in};
    var CaMK_active: dimensionless {pub: in};
    alpha_rel = beta_tau*kappa;
    beta_tau = beta_0*(1{dimensionless}+delta_beta_CaMK);
    delta_beta_CaMK = delta_beta_0/(1{dimensionless}+pow(K_beta/(1{mM}*CaMK_active), h_beta));
    tau_rel = beta_tau/(1{dimensionless}+Krel_tau/Ca_JSR);
    rel_infinity = ICaL*alpha_rel/(1{dimensionless}+pow(Krel_infinity/Ca_JSR, h_rel));
    ode(Irel, time) = -(rel_infinity+Irel)/tau_rel;
  enddef;

  def comp Iup as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var Iup: mM_per_ms {pub: out};
    var kmup: mM {init: 0.00092};
    var delta_kmPLB: mM;
    var delta_kmPLB_bar: mM {init: 0.00017};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var iupbar: mM_per_ms {init: 0.004375};
    var delta_iupCaMK: dimensionless;
    var delta_iupCaMK_bar: dimensionless {init: 0.75};
    var kmCaMK: mM {init: 0.15};
    var Ca_i: mM {pub: in};
    var CaMK_active: dimensionless {pub: in};
    Iup = (delta_iupCaMK+1{dimensionless})*iupbar*Ca_i/(Ca_i+kmup-delta_kmPLB);
    delta_iupCaMK = delta_iupCaMK_bar*CaMK_active*1{mM}/(kmCaMK+CaMK_active*1{mM});
    delta_kmPLB = delta_kmPLB_bar*CaMK_active*1{mM}/(kmCaMK+CaMK_active*1{mM});
  enddef;

  def comp Ileak as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var Ileak: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var Ileak_max: mM_per_ms {init: 0.004375};
    var nsrbar: mM {init: 15};
    var Ca_NSR: mM {pub: in};
    Ileak = Ileak_max/nsrbar*Ca_NSR;
  enddef;

  def comp Itr as
    var Itr: mM_per_ms {pub: out};
    var tautr: ms {init: 25};
    var Ca_NSR: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    Itr = (Ca_NSR-Ca_JSR)/tautr;
  enddef;

  def comp Ca as
    var Ca_JSR: mM {init: 0.993914988616979, pub: out};
    var Ca_NSR: mM {init: 1.01475649943057, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {init: 8.38749860095482e-5, pub: out};
    var Ca_ss_sr: mM {init: 0.00011296707102434, pub: out};
    var Ca_ss_CaL: mM {init: 0.000119239795531548, pub: out};
    var tau_diff: ms {init: 0.2, pub: out};
    var tau_diff_ss: ms {init: 2};
    var Idiff: mM_per_ms;
    var Idiff_ss: mM_per_ms;
    var bmyo: dimensionless;
    var bss_sr: dimensionless;
    var bss_cal: dimensionless;
    var bcsqn: dimensionless;
    var cmdn_bar: mM {init: 0.05};
    var trpn_bar: mM {init: 0.07};
    var km_cmdn: mM {init: 0.00238};
    var km_trpn: mM {init: 0.0005};
    var kmcsqn: mM {init: 0.8};
    var csqnbar: mM {init: 10};
    var BSRmax: mM {init: 0.047};
    var KmBSR: mM {init: 0.00087};
    var BSLmax: mM {init: 1.124};
    var KmBSL: mM {init: 0.0087};
    var time: ms {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var INaCa: uA_per_uF {pub: in};
    var INaCa_ss_sr: uA_per_uF {pub: in};
    var ICaL: uA_per_uF {pub: in};
    var ICab: uA_per_uF {pub: in};
    var IpCa: uA_per_uF {pub: in};
    var Vmyo: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var Vss_CaL: uL {pub: in};
    var Vnsr: uL {pub: in};
    var Vjsr: uL {pub: in};
    var Iup: mM_per_ms {pub: in};
    var Itr: mM_per_ms {pub: in};
    var Ileak: mM_per_ms {pub: in};
    var Irel: mM_per_ms {pub: in};
    Idiff = (Ca_ss_sr-Ca_i)/tau_diff;
    Idiff_ss = (Ca_ss_sr-Ca_ss_CaL)/tau_diff_ss;
    bmyo = 1{dimensionless}/(1{dimensionless}+cmdn_bar*km_cmdn/sqr(Ca_i+km_cmdn)+km_trpn*trpn_bar/sqr(Ca_i+km_trpn));
    ode(Ca_i, time) = bmyo*(-(ICab+IpCa-2{dimensionless}*INaCa)*AF/(Vmyo*2{dimensionless})+(Ileak-Iup)*Vnsr/Vmyo+Idiff*Vss_sr/Vmyo);
    ode(Ca_ss_sr, time) = -bss_sr*(Idiff+Idiff_ss-(2{dimensionless}*INaCa_ss_sr*AF/(2{dimensionless}*Vss_sr)+Irel*Vjsr/Vss_sr));
    bss_sr = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss_sr)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss_sr));
    ode(Ca_ss_CaL, time) = -bss_cal*(ICaL*AF/(2{dimensionless}*Vss_CaL)-Idiff_ss*Vss_sr/Vss_CaL);
    bss_cal = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss_CaL)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss_CaL));
    ode(Ca_NSR, time) = Iup-(Ileak+Itr*Vjsr/Vnsr);
    bcsqn = 1{dimensionless}/(1{dimensionless}+kmcsqn*csqnbar/sqr(Ca_JSR+kmcsqn));
    ode(Ca_JSR, time) = bcsqn*(Itr-Irel);
  enddef;

  def comp Na as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {init: 8.01031392415197, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_sodium_concentration
    var Na_ss_sr: mM {init: 8.01033434859049, pub: out};
    var Idiff_Na: mM_per_ms;
    var tau_diff: ms {pub: in};
    var time: ms {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var INaCa: uA_per_uF {pub: in};
    var INaCa_ss_sr: uA_per_uF {pub: in};
    var INaK: uA_per_uF {pub: in};
    var INa: uA_per_uF {pub: in};
    var INaL: uA_per_uF {pub: in};
    var INab: uA_per_uF {pub: in};
    var Vmyo: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var CT_Na_Cl: mM_per_ms {pub: in};
    Idiff_Na = (Na_ss_sr-Na_i)/tau_diff;
    ode(Na_i, time) = -((3{dimensionless}*INaCa+3{dimensionless}*INaK+INa+INaL+INab)*AF/Vmyo-(CT_Na_Cl+Idiff_Na*Vss_sr/Vmyo));
    ode(Na_ss_sr, time) = -(3{dimensionless}*INaCa_ss_sr*AF/Vss_sr+Idiff_Na);
  enddef;

  def comp Cl as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_chloride_concentration
    var Cl_i: mM {init: 20.6683603724432, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_chloride_concentration
    var Cl_ss: mM {init: 20.6683605553303, pub: out};
    var Idiff_Cl: mM_per_ms;
    var tau_diff: ms {pub: in};
    var time: ms {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var Ito2: uA_per_uF {pub: in};
    var IClb: uA_per_uF {pub: in};
    var Vmyo: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var CT_Na_Cl: mM_per_ms {pub: in};
    var CT_K_Cl: mM_per_ms {pub: in};
    Idiff_Cl = (Cl_ss-Cl_i)/tau_diff;
    ode(Cl_i, time) = -(IClb*AF/(-1{dimensionless}*Vmyo)-(CT_Na_Cl+CT_K_Cl+Idiff_Cl*Vss_sr/Vmyo));
    ode(Cl_ss, time) = -(Ito2*AF/(-1{dimensionless}*Vss_sr)+Idiff_Cl);
  enddef;

  def comp K as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {init: 144.907134343314, pub: out};
    var time: ms {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var IKs: uA_per_uF {pub: in};
    var IKr: uA_per_uF {pub: in};
    var IK1: uA_per_uF {pub: in};
    var Ito1: uA_per_uF {pub: in};
    var IKp: uA_per_uF {pub: in};
    var INaK: uA_per_uF {pub: in};
    var I_stim: uA_per_uF {pub: in};
    var Vmyo: uL {pub: in};
    var CT_K_Cl: mM_per_ms {pub: in};
    ode(K_i, time) = -((IKs+IKr+IK1+Ito1+IKp+I_stim-2{dimensionless}*INaK)*AF/Vmyo-CT_K_Cl);
  enddef;

  def comp CaMK_active as
    var CaMK_active: dimensionless {pub: out};
    var Km: mM {init: 0.0015, pub: out};
    var CaMK_trap: dimensionless {init: 0.0114911034744777};
    var alpha_CaMK: per_ms {init: 0.05};
    var beta_CaMK: per_ms {init: 0.00068};
    var CaMK_0: dimensionless {init: 0.05};
    var time: ms {pub: in};
    var Ca_ss_sr: mM {pub: in};
    ode(CaMK_trap, time) = alpha_CaMK*CaMK_active*(CaMK_active-CaMK_trap)-beta_CaMK*CaMK_trap;
    CaMK_active = CaMK_0*(1{dimensionless}-CaMK_trap)/(1{dimensionless}+Km/Ca_ss_sr)+CaMK_trap;
  enddef;

  def group as encapsulation for
    comp INa incl
      comp INa_m_gate;
      comp INa_h_gate;
      comp INa_j_gate;
    endcomp;
    comp INaL incl
      comp INaL_mL_gate;
      comp INaL_hL_gate;
    endcomp;
    comp IK1 incl
      comp IK1_K1_gate;
    endcomp;
    comp IKr incl
      comp IKr_r_gate;
      comp IKr_xr_gate;
    endcomp;
    comp Ito1 incl
      comp Ito1_a_gate;
      comp Ito1_i1f_gate;
      comp Ito1_i1s_gate;
    endcomp;
    comp Ito2 incl
      comp Ito2_i2f_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars time and time;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between INaL and environment for
    vars time and time;
  enddef;
  def map between IK1 and environment for
    vars time and time;
  enddef;
  def map between IKr and environment for
    vars time and time;
  enddef;
  def map between Ito1 and environment for
    vars time and time;
  enddef;
  def map between Ito2 and environment for
    vars time and time;
  enddef;
  def map between Irel and environment for
    vars time and time;
  enddef;
  def map between Ca and environment for
    vars time and time;
  enddef;
  def map between Na and environment for
    vars time and time;
  enddef;
  def map between Cl and environment for
    vars time and time;
  enddef;
  def map between K and environment for
    vars time and time;
  enddef;
  def map between CaMK_active and environment for
    vars time and time;
  enddef;
  def map between model_parameters and cell_geometry for
    vars F and F;
  enddef;
  def map between model_parameters and membrane for
    vars F and F;
  enddef;
  def map between IKs and membrane for
    vars Vm and Vm;
    vars IKs and IKs;
  enddef;
  def map between ICaL and membrane for
    vars Vm and Vm;
    vars ICaL and ICaL;
  enddef;
  def map between INa and membrane for
    vars Vm and Vm;
    vars INa and INa;
  enddef;
  def map between INaK and membrane for
    vars Vm and Vm;
    vars INaK and INaK;
  enddef;
  def map between INaCa and membrane for
    vars Vm and Vm;
    vars INaCa and INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
  enddef;
  def map between IKp and membrane for
    vars Vm and Vm;
    vars IKp and IKp;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between ICab and membrane for
    vars Vm and Vm;
    vars ICab and ICab;
  enddef;
  def map between INab and membrane for
    vars Vm and Vm;
    vars INab and INab;
  enddef;
  def map between IClb and membrane for
    vars Vm and Vm;
    vars IClb and IClb;
  enddef;
  def map between INaL and membrane for
    vars Vm and Vm;
    vars INaL and INaL;
  enddef;
  def map between IK1 and membrane for
    vars Vm and Vm;
    vars IK1 and IK1;
  enddef;
  def map between IKr and membrane for
    vars Vm and Vm;
    vars IKr and IKr;
  enddef;
  def map between Ito1 and membrane for
    vars Vm and Vm;
    vars Ito1 and Ito1;
  enddef;
  def map between Ito2 and membrane for
    vars Vm and Vm;
    vars Ito2 and Ito2;
  enddef;
  def map between reversal_potentials and IKs for
    vars EKs and EKs;
  enddef;
  def map between model_parameters and IKs for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between Ca and IKs for
    vars Ca_i and Ca_i;
  enddef;
  def map between model_parameters and ICaL for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
  enddef;
  def map between Ca and ICaL for
    vars Ca_ss_CaL and Ca_ss_CaL;
    vars ICaL and ICaL;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between model_parameters and INaK for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between Na and INaK for
    vars Na_i and Na_i;
    vars INaK and INaK;
  enddef;
  def map between model_parameters and INaCa for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between Ca and INaCa for
    vars Ca_ss_sr and Ca_ss_sr;
    vars Ca_i and Ca_i;
    vars INaCa and INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
  enddef;
  def map between Na and INaCa for
    vars Na_ss_sr and Na_ss_sr;
    vars Na_i and Na_i;
    vars INaCa and INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
  enddef;
  def map between reversal_potentials and IKp for
    vars EK and EK;
  enddef;
  def map between Ca and IpCa for
    vars Ca_i and Ca_i;
    vars IpCa and IpCa;
  enddef;
  def map between Ca and ICab for
    vars Ca_i and Ca_i;
    vars ICab and ICab;
  enddef;
  def map between model_parameters and ICab for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
  enddef;
  def map between model_parameters and INab for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
  enddef;
  def map between Na and INab for
    vars Na_i and Na_i;
    vars INab and INab;
  enddef;
  def map between reversal_potentials and IClb for
    vars ECl and ECl;
  enddef;
  def map between reversal_potentials and INaL for
    vars ENa and ENa;
  enddef;
  def map between model_parameters and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Cl_o and Cl_o;
  enddef;
  def map between Na and reversal_potentials for
    vars Na_i and Na_i;
  enddef;
  def map between K and reversal_potentials for
    vars K_i and K_i;
  enddef;
  def map between Cl and reversal_potentials for
    vars Cl_i and Cl_i;
  enddef;
  def map between reversal_potentials and IK1 for
    vars EK and EK;
  enddef;
  def map between model_parameters and IK1 for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and CT_Na_Cl for
    vars ENa and ENa;
    vars ECl and ECl;
  enddef;
  def map between reversal_potentials and CT_K_Cl for
    vars EK and EK;
    vars ECl and ECl;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between model_parameters and IKr for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and Ito1 for
    vars EK and EK;
  enddef;
  def map between model_parameters and Ito2 for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cl_o and Cl_o;
  enddef;
  def map between Cl and Ito2 for
    vars Cl_i and Cl_i;
    vars Ito2 and Ito2;
  enddef;
  def map between Irel and Ito2 for
    vars Irel and Irel;
  enddef;
  def map between ICaL and Irel for
    vars ICaL and ICaL;
  enddef;
  def map between Ca and Irel for
    vars Ca_JSR and Ca_JSR;
    vars Irel and Irel;
  enddef;
  def map between CaMK_active and Irel for
    vars CaMK_active and CaMK_active;
  enddef;
  def map between Ca and Iup for
    vars Ca_i and Ca_i;
    vars Iup and Iup;
  enddef;
  def map between CaMK_active and Iup for
    vars CaMK_active and CaMK_active;
  enddef;
  def map between Ca and Ileak for
    vars Ca_NSR and Ca_NSR;
    vars Ileak and Ileak;
  enddef;
  def map between Ca and Itr for
    vars Ca_NSR and Ca_NSR;
    vars Ca_JSR and Ca_JSR;
    vars Itr and Itr;
  enddef;
  def map between cell_geometry and Ca for
    vars AF and AF;
    vars Vmyo and Vmyo;
    vars Vnsr and Vnsr;
    vars Vjsr and Vjsr;
    vars Vss_sr and Vss_sr;
    vars Vss_CaL and Vss_CaL;
  enddef;
  def map between cell_geometry and Na for
    vars AF and AF;
    vars Vmyo and Vmyo;
    vars Vss_sr and Vss_sr;
  enddef;
  def map between Ca and Na for
    vars tau_diff and tau_diff;
  enddef;
  def map between INa and Na for
    vars INa and INa;
  enddef;
  def map between INaL and Na for
    vars INaL and INaL;
  enddef;
  def map between CT_Na_Cl and Na for
    vars CT_Na_Cl and CT_Na_Cl;
  enddef;
  def map between cell_geometry and Cl for
    vars AF and AF;
    vars Vmyo and Vmyo;
    vars Vss_sr and Vss_sr;
  enddef;
  def map between Ca and Cl for
    vars tau_diff and tau_diff;
  enddef;
  def map between IClb and Cl for
    vars IClb and IClb;
  enddef;
  def map between CT_Na_Cl and Cl for
    vars CT_Na_Cl and CT_Na_Cl;
  enddef;
  def map between CT_K_Cl and Cl for
    vars CT_K_Cl and CT_K_Cl;
  enddef;
  def map between cell_geometry and K for
    vars AF and AF;
    vars Vmyo and Vmyo;
  enddef;
  def map between IKs and K for
    vars IKs and IKs;
  enddef;
  def map between IKr and K for
    vars IKr and IKr;
  enddef;
  def map between IK1 and K for
    vars IK1 and IK1;
  enddef;
  def map between IKp and K for
    vars IKp and IKp;
  enddef;
  def map between INaK and K for
    vars INaK and INaK;
  enddef;
  def map between Ito1 and K for
    vars Ito1 and Ito1;
  enddef;
  def map between CT_K_Cl and K for
    vars CT_K_Cl and CT_K_Cl;
  enddef;
  def map between Ca and CaMK_active for
    vars Ca_ss_sr and Ca_ss_sr;
  enddef;
  def map between INa and INa_m_gate for
    vars m and m;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between INa and INa_h_gate for
    vars h and h;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between INa and INa_j_gate for
    vars j and j;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between INaL and INaL_mL_gate for
    vars mL and mL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between INaL and INaL_hL_gate for
    vars hL and hL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between IK1 and IK1_K1_gate for
    vars K1 and K1;
    vars EK and EK;
    vars Vm and Vm;
  enddef;
  def map between IKr and IKr_r_gate for
    vars r and r;
    vars Vm and Vm;
  enddef;
  def map between IKr and IKr_xr_gate for
    vars xr and xr;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between Ito1 and Ito1_a_gate for
    vars a and a;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between Ito1 and Ito1_i1s_gate for
    vars i1s and i1s;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between Ito1 and Ito1_i1f_gate for
    vars i1f and i1f;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between Ito2 and Ito2_i2f_gate for
    vars i2f and i2f;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between K and membrane for
    vars I_stim and i_Stim;
  enddef;
enddef;
