// This CellML file was generated on 26/09/2007 at 15:09:33 using:
//
// COR (0.9.31.789)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// named-attribute: name SuggestedCycleLength; 2000
def model difrancesco_noble_model_1985 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt_second as
    unit millivolt;
    unit second;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit microS_per_millimolar as
    unit microS;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -87, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var RTONF: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: microF {init: 0.075};
    var i_pulse: nanoA {pub: in};
    var time: second {pub: in};
    var i_f: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Na_b: nanoA {pub: in};
    var i_Ca_b: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_si: nanoA {pub: in};
    RTONF = R*T/F;
    ode(V, time) = -(i_f+i_K+i_K1+i_to+i_Na_b+i_Ca_b+i_p+i_NaCa+i_Na+i_si+i_pulse)/C;
  enddef;

  def comp stimulus as
    var time: second {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_pulse: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.005};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA {init: -500};
    i_pulse = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp hyperpolarising_activated_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current
    var i_f: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_sodium_component
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_potassium_component
    var i_fK: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_sodium_component_conductance
    var g_f_Na: microS {init: 3};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_potassium_component_conductance
    var g_f_K: microS {init: 3};
    var Km_f: millimolar {init: 45};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var y: dimensionless {priv: in};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Kc/Ki);
    i_fNa = y*Kc/(Kc+Km_f)*g_f_Na*(V-E_Na);
    i_fK = y*Kc/(Kc+Km_f)*g_f_K*(V-E_K);
    i_f = i_fNa+i_fK;
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {init: 0.2, pub: out};
    var alpha_y: per_second;
    var beta_y: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_y = 0.05{per_second}*exp(-0.067{per_millivolt}*(V+52{millivolt}-10{millivolt}));
    beta_y = 1{per_millivolt_second}*(V+52{millivolt}-10{millivolt})/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+52{millivolt}-10{millivolt})));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp time_dependent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current
    var i_K: nanoA {pub: out};
    var I_K: nanoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current_conductance
    var i_K_max: nanoA {init: 180};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Ki: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var x: dimensionless {priv: in};
    I_K = i_K_max*(Ki-Kc*exp(-V/RTONF))/140{millimolar};
    i_K = x*I_K;
  enddef;

  def comp time_dependent_potassium_current_x_gate as
    var x: dimensionless {init: 0.01, pub: out};
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    alpha_x = 0.5{per_second}*exp(0.0826{per_millivolt}*(V+50{millivolt}))/(1{dimensionless}+exp(0.057{per_millivolt}*(V+50{millivolt})));
    beta_x = 1.3{per_second}*exp(-0.06{per_millivolt}*(V+20{millivolt}))/(1{dimensionless}+exp(-0.04{per_millivolt}*(V+20{millivolt})));
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: microS {init: 920};
    var Km_K1: millimolar {init: 210};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    i_K1 = g_K1*Kc/(Kc+Km_K1)*(V-E_K)/(1{dimensionless}+exp((V+10{millivolt}-E_K)*2{dimensionless}/RTONF));
  enddef;

  def comp transient_outward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: nanoA {pub: out};
    var Km_to: millimolar {init: 10};
    var Km_Ca: millimolar {init: 0.0005};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: microS_per_millimolar {init: 0.28};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var s: dimensionless {priv: in};
    i_to = s*g_to*(0.2{dimensionless}+Kc/(Km_to+Kc))*Cai/(Km_Ca+Cai)*(V+10{millivolt})/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+10{millivolt})))*(Ki*exp(0.5{dimensionless}*V/RTONF)-Kc*exp(-0.5{dimensionless}*V/RTONF));
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 1, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-(V+10{millivolt})/8{millivolt}));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp sodium_background_current as
    var i_Na_b: nanoA {pub: out};
    var g_Nab: microS {init: 0.18};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: nanoA {pub: out};
    var E_Ca: millivolt {pub: out};
    var g_Cab: microS {init: 0.02};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_potassium_pump as
    var i_p: nanoA {pub: out};
    var I_p: nanoA {init: 125};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    i_p = I_p*Kc/(K_mK+Kc)*Nai/(K_mNa+Nai);
  enddef;

  def comp Na_Ca_exchanger as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: nanoA {pub: out};
    var n_NaCa: dimensionless {init: 3, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: nanoA {init: 0.02};
    var d_NaCa: dimensionless {init: 0.001};
    var gamma: dimensionless {init: 0.5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var E_Ca: millivolt {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Nai, n_NaCa)*Cao-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Nao, n_NaCa)*Cai)/((1{millimolar4}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa)))*(1{dimensionless}+Cai/0.0069{millimolar}));
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: microS {init: 750};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.01, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 200{per_millivolt_second}*(V+41{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+41{millivolt})));
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.8, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: second;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}-shift_INa_inact));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}-shift_INa_inact)));
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp second_inward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_si: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_si: nanoA_per_millimolar {init: 15};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    i_siCa = 4{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*2{dimensionless}/RTONF)))*(Cai*exp(100{millivolt}/RTONF)-Cao*exp(-2{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_siK = 0.01{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF)))*(Ki*exp(50{millivolt}/RTONF)-Kc*exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_siNa = 0.01{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF)))*(Nai*exp(50{millivolt}/RTONF)-Nao*exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_si = i_siCa+i_siK+i_siNa;
  enddef;

  def comp second_inward_current_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 0.005, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_d = 30{per_millivolt_second}*(V+24{millivolt}-5{millivolt})/(1{dimensionless}-exp(-1{dimensionless}*(V+24{millivolt}-5{millivolt})/4{millivolt}));
    beta_d = 12{per_millivolt_second}*(V+24{millivolt}-5{millivolt})/(exp((V+24{millivolt}-5{millivolt})/10{millivolt})-1{dimensionless});
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp second_inward_current_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 1, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_f = 6.25{per_millivolt_second}*(V+34{millivolt})/(exp((V+34{millivolt})/4{millivolt})-1{dimensionless});
    beta_f = 50{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    tau_f = 1{dimensionless}/(alpha_f+beta_f);
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp second_inward_current_f2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f2: dimensionless {init: 1, pub: out};
    var alpha_f2: per_second {init: 5};
    var beta_f2: per_second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_f2: second;
    var K_mf2: millimolar {init: 0.001};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    ode(f2, time) = alpha_f2-f2*(alpha_f2+beta_f2);
    beta_f2 = Cai*alpha_f2/K_mf2;
    tau_f2 = 1{dimensionless}/(alpha_f2+beta_f2);
  enddef;

  def comp extracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: millimolar {init: 8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    var radius: micrometre {init: 0.05};
    var length: micrometre {init: 2};
    var V_e_ratio: dimensionless {init: 0.1};
    var V_Cell: micrometre3;
    var Vi: micrometre3 {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Na_b: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var n_NaCa: dimensionless {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    Vi = V_Cell*(1{dimensionless}-V_e_ratio);
    ode(Nai, time) = -conc_clamp*1{mA_nA}*(i_Na+i_Na_b+i_fNa+i_siNa+i_p*3{dimensionless}+i_NaCa*n_NaCa/(n_NaCa-2{dimensionless}))/(1{litre_micrometre3}*Vi*F);
  enddef;

  def comp extracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: millimolar {init: 2, pub: out};
  enddef;

  def comp intracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: millimolar {init: 5e-5, pub: out};
    var V_up: micrometre3;
    var V_rel: micrometre3;
    var Vi: micrometre3 {pub: in};
    var i_up: nanoA;
    var i_tr: nanoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: nanoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var release_factor: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var uptake_factor: dimensionless {init: 1};
    var Ca_up: millimolar {init: 2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 1};
    var Ca_up_max: millimolar {init: 5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcacyt
    var K_mCa: millimolar {init: 0.001};
    var p: dimensionless {init: 1};
    var alpha_p: per_second;
    var beta_p: per_second;
    var tau_up: second {init: 0.025};
    var tau_rep: second {init: 2};
    var tau_rel: second {init: 0.05};
    var rCa: dimensionless {init: 2};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Ca_b: nanoA {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var n_NaCa: dimensionless {pub: in};
    i_up = uptake_factor*2{dimensionless}*1{litre_micrometre3}*Vi*F/(1{mA_nA}*tau_up*Ca_up_max)*Cai*(Ca_up_max-Ca_up);
    i_tr = 2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_nA}*tau_rep)*p*(Ca_up-Ca_rel);
    alpha_p = 0.625{per_millivolt_second}*(V+34{millivolt})/(exp((V+34{millivolt})/4{millivolt})-1{dimensionless});
    beta_p = 5{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    i_rel = release_factor*2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_nA}*tau_rel)*Ca_rel*pow(Cai, rCa)/(pow(Cai, rCa)+pow(K_mCa, rCa));
    ode(p, time) = alpha_p*(1{dimensionless}-p)-beta_p*p;
    ode(Ca_up, time) = 1{mA_nA}*(i_up-i_tr)/(2{dimensionless}*1{litre_micrometre3}*V_up*F);
    V_up = Vi*0.05{dimensionless};
    ode(Ca_rel, time) = 1{mA_nA}*(i_tr-i_rel)/(2{dimensionless}*1{litre_micrometre3}*V_rel*F);
    V_rel = Vi*0.02{dimensionless};
    ode(Cai, time) = -1{mA_nA}*(i_siCa+i_Ca_b-2{dimensionless}*i_NaCa/(n_NaCa-2{dimensionless})-i_rel+i_up)/(2{dimensionless}*1{litre_micrometre3}*Vi*F);
  enddef;

  def comp extracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Kc: millimolar {init: 4, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var Ve: micrometre3 {init: 0.00157};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#bath_potassium_concentration
    var Kb: millimolar {init: 4};
    var i_mK: nanoA {pub: out};
    var pf: per_second {init: 0.7};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_K1: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_fK: nanoA {pub: in};
    var i_siK: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    i_mK = i_K1+i_K+i_fK+i_siK+i_to-2{dimensionless}*i_p;
    ode(Kc, time) = conc_clamp*(-pf*(Kc-Kb)+1{mA_nA}*i_mK/(1{litre_micrometre3}*Ve*F));
  enddef;

  def comp intracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: millimolar {init: 140, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var Vi: micrometre3 {pub: in};
    var i_mK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(Ki, time) = -conc_clamp*1{mA_nA}*i_mK/(1{litre_micrometre3}*Vi*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp Na_Ca_exchanger;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp second_inward_current incl
        comp second_inward_current_d_gate;
        comp second_inward_current_f_gate;
        comp second_inward_current_f2_gate;
      endcomp;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_calcium_concentration;
      comp extracellular_calcium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp second_inward_current incl
      comp second_inward_current_d_gate;
      comp second_inward_current_f_gate;
      comp second_inward_current_f2_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between second_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_f and i_f;
  enddef;
  def map between time_dependent_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_K and i_K;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_to and i_to;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars RTONF and RTONF;
  enddef;
  def map between second_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
    vars RTONF and RTONF;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_fK and i_fK;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarising_activated_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and Na_Ca_exchanger for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_sodium_concentration for
    vars i_fNa and i_fNa;
    vars Nai and Nai;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between calcium_background_current and Na_Ca_exchanger for
    vars E_Ca and E_Ca;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K and i_K;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_to and i_to;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between transient_outward_current and intracellular_calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_Ca_b and i_Ca_b;
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars i_p and i_p;
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_p and i_p;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between Na_Ca_exchanger and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between Na_Ca_exchanger and intracellular_sodium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and intracellular_calcium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between second_inward_current and intracellular_calcium_concentration for
    vars i_siCa and i_siCa;
    vars Cai and Cai;
  enddef;
  def map between second_inward_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between second_inward_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between second_inward_current and extracellular_potassium_concentration for
    vars i_siK and i_siK;
    vars Kc and Kc;
  enddef;
  def map between second_inward_current and intracellular_sodium_concentration for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between second_inward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between second_inward_current and second_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars Vi and Vi;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_potassium_concentration for
    vars Vi and Vi;
    vars conc_clamp and conc_clamp;
  enddef;
  def map between intracellular_sodium_concentration and extracellular_potassium_concentration for
    vars conc_clamp and conc_clamp;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_potassium_concentration for
    vars i_mK and i_mK;
  enddef;
  def map between stimulus and membrane for
    vars i_pulse and i_pulse;
  enddef;
  def map between stimulus and environment for
    vars time and time;
  enddef;
enddef;
