// This CellML file was generated on 07/12/2009 at 13:44:52 using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model faber_rudy_2000 as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit ms_per_millivolt as
    unit ms;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_ms as
    unit millivolt {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit millivolt_per_ms as
    unit volt {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_ms as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  def unit litre_per_farad_ms as
    unit litre;
    unit farad {expo: -1};
    unit ms {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp cell as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -85.2119207874627, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_st: microA_per_microF {pub: out};
    var time: ms {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    var i_K_ATP: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_ns_Ca: microA_per_microF {pub: in};
    var dVdt: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: ms {init: 100};
    var stim_end: ms {init: 9000000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: ms {init: 2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: microA_per_microF {init: -25.5};
    I_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    dVdt = -(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_Na+i_K_ATP+i_to+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_st);
    ode(V, time) = -(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_Na+i_K_ATP+i_to+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_st);
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: milliS_per_microF {init: 16};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.00149183115674257, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_m = 0.32{per_millivolt_ms}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_ms}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.985596581239651, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_ms}*exp((80{millivolt}+V-shift_INa_inact)/(-6.8{millivolt}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_ms}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+310000{per_ms}*exp(0.35{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        1{per_ms}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.990898461370389, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        -(127140{per_millivolt_ms}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))+3.474e-5{per_millivolt_ms}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_ms}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.3{per_ms}*exp(-2.535e-7{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    j_inf = alpha_j*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: microA_per_microF {pub: out};
    var i_CaCa: microA_per_microF {pub: out};
    var i_CaK: microA_per_microF {pub: out};
    var i_CaNa: microA_per_microF {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    var gamma_Cai: dimensionless {init: 1};
    var gamma_Cao: dimensionless {init: 0.341};
    var I_CaCa: microA_per_microF;
    var I_CaK: microA_per_microF;
    var I_CaNa: microA_per_microF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_Ca: litre_per_farad_ms {init: 0.00054};
    var P_Na: litre_per_farad_ms {init: 6.75e-7};
    var P_K: litre_per_farad_ms {init: 1.93e-7};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    I_CaCa = P_Ca*sqr(2{dimensionless})*V*sqr(F)/(R*T)*(gamma_Cai*Cai*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaNa = P_Na*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaK = P_K*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 5.82597094505446e-6, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+10{millivolt})/6.24{millivolt}));
    tau_d = 1{ms}*d_infinity*(1{dimensionless}-exp(-(V+10{millivolt})/6.24{millivolt}))/(0.035{per_millivolt}*(V+10{millivolt}));
    alpha_d = d_infinity/tau_d;
    beta_d = (1{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.997765362821995, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+35.06{millivolt})/8.6{millivolt}))+0.6{dimensionless}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_f = 1{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10{millivolt})))+0.02{dimensionless});
    alpha_f = f_infinity/tau_f;
    beta_f = (1{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: millimolar {init: 0.0006};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    f_Ca = 1{dimensionless}/(1{dimensionless}+Cai/Km_Ca);
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: microA_per_microF {pub: out};
    var g_CaT: milliS_per_microF {init: 0.05};
    var E_Ca: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_CaT*b*b*g*(V-E_Ca);
  enddef;

  def comp T_type_Ca_channel_b_gate as
    var b: dimensionless {init: 0.00136737866785149, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var b_inf: dimensionless;
    var tau_b: ms;
    b_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+14{millivolt})/10.8{millivolt}));
    tau_b = 3.7{ms}+6.1{ms}/(1{dimensionless}+exp((V+25{millivolt})/4.5{millivolt}));
    ode(b, time) = (b_inf-b)/tau_b;
  enddef;

  def comp T_type_Ca_channel_g_gate as
    var g: dimensionless {init: 0.98881442877378, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var g_inf: dimensionless;
    var tau_g: ms;
    g_inf = 1{dimensionless}/(1{dimensionless}+exp((V+60{millivolt})/5.6{millivolt}));
    tau_g = sel
      case V <= 0{millivolt}:
        -0.875{ms_per_millivolt}*V+12{ms};
      otherwise:
        12{ms};
    endsel;
    ode(g, time) = (g_inf-g)/tau_g;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: milliS_per_microF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var G_Kr: milliS_per_microF {init: 0.02614};
    var Rect: dimensionless;
    var E_K: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    g_Kr = G_Kr*sqrt(Ko/5.4{millimolar});
    Rect = 1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}));
    i_Kr = g_Kr*xr*Rect*(V-E_K);
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_xr_gate as
    var xr: dimensionless {init: 0.000204700363126417, pub: out};
    var xr_infinity: dimensionless;
    var tau_xr: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+21.5{millivolt})/7.5{millivolt}));
    tau_xr = 1{ms}/(0.00138{per_millivolt}*(V+14.2{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(V+14.2{millivolt})))+0.00061{per_millivolt}*(V+38.9{millivolt})/(exp(0.145{per_millivolt}*(V+38.9{millivolt}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: milliS_per_microF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance_scaling_factor
    var G_Ks: milliS_per_microF {init: 0.433};
    var E_Ks: millivolt;
    var PNaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var xs1: dimensionless {priv: in};
    var xs2: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nai));
    g_Ks = G_Ks*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/Cai, 1.4{dimensionless})));
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs1_gate as
    var xs1: dimensionless {init: 0.00660746743356887, pub: out};
    var xs1_infinity: dimensionless;
    var tau_xs1: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs1_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs1 = 1{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs2_gate as
    var xs2: dimensionless {init: 0.0303768241233812, pub: out};
    var xs2_infinity: dimensionless;
    var tau_xs2: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs2_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs2 = 4{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: microA_per_microF {pub: out};
    var E_K: millivolt {priv: out, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: milliS_per_microF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var G_K1: milliS_per_microF {init: 0.75};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = G_K1*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    alpha_K1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K-59.215{millivolt})));
    beta_K1 = 1{per_ms}*(0.49124{dimensionless}*exp(0.08032{per_millivolt}*(V-E_K+5.476{millivolt}))+exp(0.06175{per_millivolt}*(V-E_K-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var g_Kp: milliS_per_microF {init: 0.00552};
    var Kp: dimensionless;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_K);
  enddef;

  def comp sodium_activated_potassium_current as
    var i_K_Na: microA_per_microF {pub: out};
    var g_K_Na: milliS_per_microF {init: 0.12848};
    var nKNa: dimensionless {init: 2.8};
    var pona: dimensionless;
    var pov: dimensionless;
    var kdKNa: millimolar {init: 66};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    pona = 0.85{dimensionless}/(1{dimensionless}+pow(kdKNa/Nai, nKNa));
    pov = 0.8{dimensionless}-0.65{dimensionless}/(1{dimensionless}+exp((V+125{millivolt})/15{millivolt}));
    i_K_Na = g_K_Na*pona*pov*(V-E_K);
  enddef;

  def comp ATP_sensitive_potassium_current as
    var i_K_ATP: microA_per_microF {pub: out};
    var g_K_ATP: milliS_per_microF;
    var i_K_ATP_on: dimensionless {init: 1};
    var nATP: dimensionless {init: 0.24};
    var nicholsarea: dimensionless {init: 5e-5};
    var ATPi: millimolar {init: 3};
    var hATP: dimensionless {init: 2};
    var kATP: millimolar {init: 0.00025};
    var pATP: dimensionless;
    var GKbaraATP: milliS_per_microF;
    var V: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    g_K_ATP = i_K_ATP_on*0.000193{milliS_per_microF}/nicholsarea;
    pATP = 1{dimensionless}/(1{dimensionless}+pow(ATPi/kATP, hATP));
    GKbaraATP = g_K_ATP*pATP*pow(Ko/4{millimolar}, nATP);
    i_K_ATP = GKbaraATP*(V-E_K);
  enddef;

  def comp transient_outward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: milliS_per_microF {init: 0.5};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var rvdv: dimensionless;
    var zdv: dimensionless {priv: in};
    var ydv: dimensionless {priv: in};
    rvdv = exp(V/100{millivolt});
    i_to = g_to*pow(zdv, 3{dimensionless})*ydv*rvdv*(V-E_K);
  enddef;

  def comp transient_outward_current_zdv_gate as
    var zdv: dimensionless {init: 0.0144622472219576, pub: out};
    var alpha_zdv: per_ms;
    var beta_zdv: per_ms;
    var tau_zdv: ms;
    var zdv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_zdv = 10{per_ms}*exp((V-40{millivolt})/25{millivolt})/(1{dimensionless}+exp((V-40{millivolt})/25{millivolt}));
    beta_zdv = 10{per_ms}*exp(-(V+90{millivolt})/25{millivolt})/(1{dimensionless}+exp(-(V+90{millivolt})/25{millivolt}));
    tau_zdv = 1{dimensionless}/(alpha_zdv+beta_zdv);
    zdv_ss = alpha_zdv/(alpha_zdv+beta_zdv);
    ode(zdv, time) = (zdv_ss-zdv)/tau_zdv;
  enddef;

  def comp transient_outward_current_ydv_gate as
    var ydv: dimensionless {init: 0.999945568566232, pub: out};
    var alpha_ydv: per_ms;
    var beta_ydv: per_ms;
    var tau_ydv: ms;
    var ydv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_ydv = 0.015{per_ms}/(1{dimensionless}+exp((V+60{millivolt})/5{millivolt}));
    beta_ydv = 0.1{per_ms}*exp((V+25{millivolt})/5{millivolt})/(1{dimensionless}+exp((V+25{millivolt})/5{millivolt}));
    tau_ydv = 1{dimensionless}/(alpha_ydv+beta_ydv);
    ydv_ss = alpha_ydv/(alpha_ydv+beta_ydv);
    ode(ydv, time) = (ydv_ss-ydv)/tau_ydv;
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: millimolar {init: 0.0005};
    var I_pCa: microA_per_microF {init: 1.15};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.004};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.003016};
    var E_Ca: millivolt {pub: out};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF {init: 2.25};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{millimolar})-1{dimensionless});
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+sqr(K_mNai/Nai))*Ko/(Ko+K_mKo);
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: microA_per_microF {pub: out};
    var i_ns_Na: microA_per_microF {pub: out};
    var i_ns_K: microA_per_microF {pub: out};
    var P_ns_Ca: litre_per_farad_ms;
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var I_ns_Na: microA_per_microF;
    var I_ns_K: microA_per_microF;
    var K_m_ns_Ca: millimolar {init: 0.0012};
    var time: ms {pub: in};
    var Cai: millimolar {pub: in};
    var V: millivolt {pub: in};
    P_ns_Ca = 1.75e-7{litre_per_farad_ms};
    I_ns_Na = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
  enddef;

  def comp Na_Ca_exchanger as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var c1: microA_per_microF {init: 0.00025};
    var c2: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.15};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = c1*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-pow(Nao, 3{dimensionless})*Cai)/(1{millimolar4}+c2*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Cai));
  enddef;

  def comp calcium_dynamics as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_ms {pub: out};
    var i_up: millimolar_per_ms {pub: out};
    var i_leak: millimolar_per_ms {pub: out};
    var i_tr: millimolar_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_Viswanathan: per_ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var G_rel_max: per_ms {init: 60};
    var G_rel_overload: per_ms {init: 4};
    var tau_tr: ms {init: 180};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcacyt
    var K_mrel: millimolar {init: 0.0008};
    var delta_Ca_ith: millimolar {init: 0.00018};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var K_mup: millimolar {init: 0.00092};
    var K_leak: per_ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var leak_factor: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up: millimolar_per_ms {init: 0.00875};
    var Ca_NSR_max: millimolar {init: 15};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: millimolar {init: 0.000117482029668194, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: millimolar {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: millimolar {init: 1.12791401197882, pub: out};
    var Ca_NSR: millimolar {init: 1.76731003671612, pub: out};
    var V_myo: micro_litre {pub: in};
    var A_cap: cm2 {pub: in};
    var V_JSR: micro_litre {pub: in};
    var V_NSR: micro_litre {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var K_mTn: millimolar {init: 0.0005};
    var K_mCMDN: millimolar {init: 0.00238};
    var Tn_max: millimolar {init: 0.07};
    var CMDN_max: millimolar {init: 0.05};
    var dVdt: microA_per_microF {pub: in};
    var APtrack: dimensionless {init: 9.65910542308504e-196};
    var APtrack2: dimensionless {init: 5.33944967562997e-195};
    var APtrack3: dimensionless {init: 0.000129515197402902};
    var Cainfluxtrack: millimolar {init: 2.69380318286645e-196};
    var OVRLDtrack: dimensionless {init: 0};
    var OVRLDtrack2: dimensionless {init: 0};
    var OVRLDtrack3: dimensionless {init: 0};
    var CSQNthresh: dimensionless {init: 0.7};
    var Logicthresh: dimensionless {init: 0.98};
    var RyRopen: dimensionless;
    var RyRclose: dimensionless;
    ode(APtrack, time) = sel
      case dVdt > 150{millivolt_per_ms}:
        100{per_ms}*(1{dimensionless}-APtrack)-0.5{per_ms}*APtrack;
      otherwise:
        -0.5{per_ms}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack2)-0.5{per_ms}*APtrack2;
      otherwise:
        -0.5{per_ms}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack3)-0.5{per_ms}*APtrack3;
      otherwise:
        -0.01{per_ms}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0{millimolar_per_ms};
      otherwise:
        -0.5{per_ms}*Cainfluxtrack;
    endsel;
    ode(OVRLDtrack, time) = sel
      case (1{dimensionless}/(1{dimensionless}+K_mCSQN/Ca_JSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless}) and (APtrack3 < 0.37{dimensionless}):
        50{per_ms}*(1{dimensionless}-OVRLDtrack);
      otherwise:
        -0.5{per_ms}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack2);
      otherwise:
        -0.5{per_ms}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack3);
      otherwise:
        -0.01{per_ms}*OVRLDtrack3;
    endsel;
    G_rel_Viswanathan = sel
      case Cainfluxtrack > delta_Ca_ith:
        G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0{dimensionless}):
        G_rel_overload*(1{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0{per_ms};
    endsel;
    RyRopen = 1{dimensionless}/(1{dimensionless}+exp(2{dimensionless})*APtrack2);
    RyRclose = 1{dimensionless}-RyRopen;
    G_rel = RyRopen*RyRclose*150{per_ms}/(1{dimensionless}+exp((i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b+5{microA_per_microF})/0.9{microA_per_microF}));
    i_rel = G_rel*(Ca_JSR-Cai);
    i_up = I_up*Cai/(Cai+K_mup);
    K_leak = leak_factor*I_up/Ca_NSR_max;
    i_leak = K_leak*Ca_NSR;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    ode(Ca_JSR, time) = 1{dimensionless}/(1{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR))*(i_tr-i_rel);
    ode(Ca_NSR, time) = -i_tr*V_JSR/V_NSR-i_leak+i_up;
    ode(Cai, time) = 1{dimensionless}/(1{dimensionless}+CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai))*(-1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
  enddef;

  def comp ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: millimolar {init: 13.3649235394859, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: millimolar {init: 141.056872392446, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: millimolar {init: 5.4, pub: out};
    var A_cap: cm2 {pub: in};
    var V_myo: micro_litre {pub: in};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    var i_K_ATP: microA_per_microF {pub: in};
    var i_ns_K: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var I_st: microA_per_microF {pub: in};
    ode(Nai, time) = -conc_clamp*1{microF_per_cm2}*(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap/(V_myo*F);
    ode(Ki, time) = -conc_clamp*1{microF_per_cm2}*(I_st+i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_K_Na+i_K_ATP+i_to+i_ns_K+(-i_NaK*2{dimensionless}))*A_cap/(V_myo*F);
  enddef;

  def comp geometry as
    var preplength: mm {init: 0.1};
    var radius: mm {init: 0.011};
    var volume: micro_litre;
    var V_myo: micro_litre {pub: out};
    var V_JSR: micro_litre {pub: out};
    var V_NSR: micro_litre {pub: out};
    var A_cap: cm2 {init: 0.0001534, pub: out};
    volume = pi*preplength*sqr(radius);
    V_myo = 0.68{dimensionless}*volume;
    V_JSR = 0.0048{dimensionless}*volume;
    V_NSR = 0.0552{dimensionless}*volume;
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp geometry;
      comp transmembrane_currents incl
        comp fast_sodium_current incl
          comp fast_sodium_current_m_gate;
          comp fast_sodium_current_h_gate;
          comp fast_sodium_current_j_gate;
        endcomp;
        comp L_type_Ca_channel incl
          comp L_type_Ca_channel_d_gate;
          comp L_type_Ca_channel_f_gate;
          comp L_type_Ca_channel_f_Ca_gate;
        endcomp;
        comp T_type_Ca_channel incl
          comp T_type_Ca_channel_b_gate;
          comp T_type_Ca_channel_g_gate;
        endcomp;
        comp rapid_delayed_rectifier_potassium_current incl
          comp rapid_delayed_rectifier_potassium_current_xr_gate;
        endcomp;
        comp slow_delayed_rectifier_potassium_current incl
          comp slow_delayed_rectifier_potassium_current_xs1_gate;
          comp slow_delayed_rectifier_potassium_current_xs2_gate;
        endcomp;
        comp time_independent_potassium_current incl
          comp time_independent_potassium_current_K1_gate;
        endcomp;
        comp transient_outward_current incl
          comp transient_outward_current_zdv_gate;
          comp transient_outward_current_ydv_gate;
        endcomp;
        comp Na_Ca_exchanger;
        comp plateau_potassium_current;
        comp sodium_activated_potassium_current;
        comp ATP_sensitive_potassium_current;
        comp sodium_background_current;
        comp calcium_background_current;
        comp sodium_potassium_pump;
        comp non_specific_calcium_activated_current;
      endcomp;
      comp intracellular_currents incl
        comp sarcolemmal_calcium_pump;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp ionic_concentrations;
        comp calcium_dynamics;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs1_gate;
      comp slow_delayed_rectifier_potassium_current_xs2_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_zdv_gate;
      comp transient_outward_current_ydv_gate;
    endcomp;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between cell and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between cell and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and sodium_activated_potassium_current for
    vars V and V;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between cell and ATP_sensitive_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between cell and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between cell and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between cell and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between cell and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between cell and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between cell and ionic_concentrations for
    vars F and F;
    vars I_st and I_st;
  enddef;
  def map between cell and calcium_dynamics for
    vars F and F;
    vars dVdt and dVdt;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_channel and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_CaCa and i_CaCa;
  enddef;
  def map between T_type_Ca_channel and calcium_dynamics for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_Ks and i_Ks;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and calcium_dynamics for
    vars Cai and Cai;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between transient_outward_current and ionic_concentrations for
    vars i_to and i_to;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_activated_potassium_current and ionic_concentrations for
    vars Nai and Nai;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between ATP_sensitive_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between sodium_activated_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between ATP_sensitive_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_dynamics for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between T_type_Ca_channel and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs1_gate for
    vars xs1 and xs1;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs2_gate for
    vars xs2 and xs2;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_ydv_gate for
    vars ydv and ydv;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_zdv_gate for
    vars zdv and zdv;
    vars time and time;
    vars V and V;
  enddef;
  def map between geometry and ionic_concentrations for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
  def map between calcium_dynamics and geometry for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
    vars V_JSR and V_JSR;
    vars V_NSR and V_NSR;
  enddef;
enddef;
