// This CellML file was generated on 30/10/2007 at 17:49:22 using:
//
// COR (0.9.31.801)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// comment: FN Catherine Lloyd; This model is known to run in PCEnv and COR to reproduce the published results. The units have been checked and are consistent.
// created: W3CDTF 2007-12-03T00:00:00+00:00
// creator: Orgname Oxford University; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble
// modification: W3CDTF 2008-10-22T08:59:55+13:00; Changed the connections between "calcium_dynamics" and the "L_type_Ca_current" gates. Because these gates are encapsulated by the parent L_type_Ca_current channel, the variables d, f, and f_Ca need to be passed via the parent component to calcium_dynamics component - and not directly as they were in version 1 of this model.; Given Catherine; Family Lloyd; Other May
// reference: Pubmed_id 11788399; Given Jeffrey; Family Fox; Other J; Given Jennifer; Family McHarg; Other L; Given Robert; Family Gilmour; Other F; title Ionic mechanism of electrical alternans; volume 282; first_page H516; title American Journal of Physiology Heart and Circulatory Physiology; W3CDTF 2002-02-04 00:00; last_page H530
def model fox_model_2001 as
  // Ionic mechanism of electrical alternans
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model is known to run in PCEnv and COR to recreate the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // The duration of a cardiac action potential is largely dependent on the length of the preceding diastolic interval. This relationship is called the action potential duration restitution relation, and if its slope is equal to or greater than 1, and alternation of action potential duration, or electrical alternans, often develops during high frequency pacing. Such rate-dependent electrical alternans may be a precursor to the development of ventricular arrhythmias, especially ventricular fibrillation. In support of this theory, several experiments have demonstrated that when the slope of the restitution relation is greater than 1, rapid pacing induces both alternans and fibrillation in isolated ventricles. However, to date, attempts to intervene with this process have been limited, and alternative, more effective, methods of suppressing alternans need to be identified.
  //
  // To this end, mathematical models of the ventricular myocyte have been developed, with the ultimate aim of facilitating the discovery of new therapeutic targets. In the model described here in CellML, Jeffrey Fox et al. (2001) have developed a mathematical model of the canine ventricular myocyte. This model was, at least in part, based on the model published by Winslow et al. (1999) (also described in CellML), and it extends this model to reproduce sustained alternans at rapid pacing rates.
  //
  // The complete original paper reference is cited below:
  //
  // Ionic mechanism of electrical alternans (http://ajpheart.physiology.org/cgi/content/abstract/282/2/H516), Jeffrey J. Fox, Jennifer L. McHarg, and Robert F. Gilmour Jr, 2001, American Journal of Physiology: Heart and Circulatory Physiology (http://ajpheart.physiology.org/), 282, H516-H530. (Full text (http://ajpheart.physiology.org/cgi/content/full/282/2/H516) and PDF (http://ajpheart.physiology.org/cgi/reprint/282/2/H516) versions of the article are available to journal subscribers on the American Journal of Physiology: Heart and Circulatory Physiology website.) PubMed ID: 11788399 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=11788399&query_hl=1&itool=pubmed_docsum)
  //
  // cell diagram
  //
  // A schematic diagram describing the current flows across the cell membrane and the calcium fluxes between the cytoplasm and the sarcoplasmic reticulum that are captured in the Fox et al. canine ventricular cell model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit centimeter as
    unit meter {pref: centi};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit centimeter {expo: -2};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit uM_mM as
    unit micromolar;
    unit millimolar {expo: -1};
  enddef;
  def unit nM_mM as
    unit mole {pref: nano};
    unit litre {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit cm_per_millisecond as
    unit centimeter;
    unit millisecond {expo: -1};
  enddef;
  def unit cm2 as
    unit centimeter {expo: 2};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -94.7, pub: out};
    var R: joule_per_mole_kelvin {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_millimole {pub: out, init: 96.5};
    var time: millisecond {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 100};
    var stim_end: millisecond {init: 9000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: microA_per_microF {init: -80};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -(i_Na+i_Ca+i_CaK+i_Kr+i_Ks+i_to+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b+i_Stim);
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: milliS_per_microF {init: 12.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.00024676, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var E0_m: millivolt;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    E0_m = V+47.13{millivolt};
    alpha_m = 0.32{per_millivolt_millisecond}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.99869, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = 0.135{per_millisecond}*exp((V+80{millivolt}-shift_INa_inact)/(-6.8{millivolt}));
    beta_h = 7.5{per_millisecond}/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+11{millivolt}-shift_INa_inact)));
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.99887, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = 0.175{per_millisecond}*exp((V+100{millivolt}-shift_INa_inact)/(-23{millivolt}))/(1{dimensionless}+exp(0.15{per_millivolt}*(V+79{millivolt}-shift_INa_inact)));
    beta_j = 0.3{per_millisecond}/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    j_inf = alpha_j*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: milliS_per_microF {init: 2.8};
    var K_mK1: millimolar {init: 13};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in, priv: out};
    var E_K: millivolt {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K1_infinity: dimensionless {priv: in};
    i_K1 = g_K1*K1_infinity*K_o/(K_o+K_mK1)*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    K1_infinity = 1{dimensionless}/(2{dimensionless}+exp(1.62{dimensionless}*F/(R*T)*(V-E_K)));
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: microA_per_microF {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: milliS_per_microF {init: 0.0136};
    var R_V: dimensionless;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_kr: dimensionless {priv: in};
    E_K = R*T/F*ln(K_o/K_i);
    R_V = 1{dimensionless}/(1{dimensionless}+2.5{dimensionless}*exp(0.1{per_millivolt}*(V+28{millivolt})));
    i_Kr = g_Kr*R_V*X_kr*sqrt(K_o/4{millimolar})*(V-E_K);
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    var X_kr: dimensionless {pub: out, init: 0.229};
    var X_kr_inf: dimensionless;
    var tau_X_kr: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    X_kr_inf = 1{dimensionless}/(1{dimensionless}+exp(-2.182{dimensionless}-0.1819{per_millivolt}*V));
    tau_X_kr = 43{millisecond}+1{millisecond}/(exp(-5.495{dimensionless}+0.1691{per_millivolt}*V)+exp(-7.677{dimensionless}-0.0128{per_millivolt}*V));
    ode(X_kr, time) = (X_kr_inf-X_kr)/tau_X_kr;
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: milliS_per_microF {init: 0.0245};
    var E_Ks: millivolt;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_ks: dimensionless {priv: in};
    E_Ks = R*T/F*ln((K_o+0.01833{dimensionless}*Na_o)/(K_i+0.01833{dimensionless}*Na_i));
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    var X_ks: dimensionless {pub: out, init: 0.0001};
    var tau_X_ks: millisecond;
    var X_ks_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    X_ks_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-16{millivolt})/(-13.6{millivolt})));
    tau_X_ks = 1{millisecond}/(0.0000719{per_millivolt}*(V-10{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V-10{millivolt})))+0.000131{per_millivolt}*(V-10{millivolt})/(exp(0.0687{per_millivolt}*(V-10{millivolt}))-1{dimensionless}));
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
  enddef;

  def comp transient_outward_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: milliS_per_microF {init: 0.23815};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var X_to: dimensionless {priv: in};
    var Y_to: dimensionless {priv: in};
    i_to = g_to*X_to*Y_to*(V-E_K);
  enddef;

  def comp transient_outward_potassium_current_X_to_gate as
    var X_to: dimensionless {pub: out, init: 0.00003742};
    var alpha_X_to: per_millisecond;
    var beta_X_to: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_X_to = 0.04516{per_millisecond}*exp(0.03577{per_millivolt}*V);
    beta_X_to = 0.0989{per_millisecond}*exp(-0.06237{per_millivolt}*V);
    ode(X_to, time) = alpha_X_to*(1{dimensionless}-X_to)-beta_X_to*X_to;
  enddef;

  def comp transient_outward_potassium_current_Y_to_gate as
    var Y_to: dimensionless {pub: out, init: 1};
    var alpha_Y_to: per_millisecond;
    var beta_Y_to: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_Y_to = 0.005415{per_millisecond}*exp((V+33.5{millivolt})/(-5{millivolt}))/(1{dimensionless}+0.051335{dimensionless}*exp((V+33.5{millivolt})/(-5{millivolt})));
    beta_Y_to = 0.005415{per_millisecond}*exp((V+33.5{millivolt})/5{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp((V+33.5{millivolt})/5{millivolt}));
    ode(Y_to, time) = alpha_Y_to*(1{dimensionless}-Y_to)-beta_Y_to*Y_to;
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var g_Kp: milliS_per_microF {init: 0.002216};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Kp_V: dimensionless {priv: in};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  def comp plateau_potassium_current_Kp_gate as
    var Kp_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Kp_V = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var i_NaK_max: microA_per_microF {init: 0.693};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
    i_NaK = i_NaK_max*f_NaK/(1{dimensionless}+pow(K_mNai/Na_i, 1.5{dimensionless}))*K_o/(K_o+K_mKo);
  enddef;

  def comp Na_Ca_exchanger as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: microA_per_microF {pub: out};
    var K_mCa: micromolar {init: 1380};
    var K_mNa: millimolar {init: 87.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: microA_per_microF {init: 1500};
    var K_sat: dimensionless {init: 0.2};
    var eta: dimensionless {init: 0.35};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_o: micromolar {pub: in};
    i_NaCa = K_NaCa/((pow(K_mNa, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(K_mCa+Ca_o)*(1{dimensionless}+K_sat*exp((eta-1{dimensionless})*V*F/(R*T))))*(exp(eta*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: micromolar {init: 0.05};
    var i_pCa_max: microA_per_microF {init: 0.05};
    var time: millisecond {pub: in};
    var Ca_i: micromolar {pub: in};
    i_p_Ca = i_pCa_max*Ca_i/(K_mpCa+Ca_i);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.0003842};
    var E_Ca: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_o: micromolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0031};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var time: millisecond {pub: in, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca: microA_per_microF {pub: out};
    var i_CaK: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_Ca: cm_per_millisecond {init: 0.0000226};
    var P_CaK: cm_per_millisecond {init: 0.000000579};
    var i_Ca_half: microA_per_microF {init: -0.265};
    var i_Ca_max: microA_per_microF;
    var V: millivolt {pub: in, priv: out};
    var C_sc: microF_per_cm2 {pub: out, init: 1};
    var Ca_o: micromolar {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Ca_i: micromolar {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var f: dimensionless {pub: out, priv: in};
    var d: dimensionless {pub: out, priv: in};
    var f_Ca: dimensionless {pub: out, priv: in};
    i_Ca = i_Ca_max*f*d*f_Ca;
    i_Ca_max = P_Ca/C_sc*4{uM_mM}*V*sqr(F)/(R*T)*(Ca_i*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Ca_o)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaK = P_CaK/C_sc*f*d*f_Ca/(1{dimensionless}+i_Ca_max/i_Ca_half)*1000{nM_mM}*V*sqr(F)/(R*T)*(K_i*exp(V*F/(R*T))-K_o)/(exp(V*F/(R*T))-1{dimensionless});
  enddef;

  def comp L_type_Ca_current_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.983, pub: out};
    var f_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/5{millivolt}));
    tau_f = 30{millisecond}+200{millisecond}/(1{dimensionless}+exp((V+20{millivolt})/9.5{millivolt}));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_Ca_current_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 0.0001, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E0_m: millivolt;
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10{millivolt})/(-6.24{millivolt})));
    E0_m = V+40{millivolt};
    tau_d = 1{millisecond}/(0.25{dimensionless}*exp(-0.01{per_millivolt}*V)/(1{dimensionless}+exp(-0.07{per_millivolt}*V))+0.07{dimensionless}*exp(-0.05{per_millivolt}*E0_m)/(1{dimensionless}+exp(0.05{per_millivolt}*E0_m)));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_Ca_current_f_Ca_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {init: 0.942, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_f_Ca: millisecond;
    var f_Ca_infinity: dimensionless;
    var K_mfCa: micromolar {init: 0.18};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Ca_i: micromolar {pub: in};
    f_Ca_infinity = 1{dimensionless}/(1{dimensionless}+pow(Ca_i/K_mfCa, 3{dimensionless}));
    tau_f_Ca = 30{millisecond};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
  enddef;

  def comp calcium_dynamics as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: micromolar {init: 0.0472, pub: out};
    var beta_i: dimensionless;
    var K_mCMDN: micromolar {init: 2};
    var CMDN_tot: micromolar {init: 10};
    var V_myo: microlitre {init: 0.00002584};
    var F: coulomb_per_millimole {pub: in};
    var C_sc: microF_per_cm2 {pub: in};
    var A_Cap: cm2 {init: 0.0001534};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: micromolar_per_millisecond;
    var J_leak: micromolar_per_millisecond;
    var J_up: micromolar_per_millisecond;
    var i_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_SR: micromolar {init: 320};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var P_rel: per_millisecond {init: 6};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var P_leak: per_millisecond {init: 0.000001};
    var K_mCSQN: micromolar {init: 600};
    var CSQN_tot: micromolar {init: 10000};
    var V_SR: microlitre {init: 0.000002};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var V_up: micromolar_per_millisecond {init: 0.1};
    var K_mup: micromolar {init: 0.32};
    var gamma: dimensionless;
    var f_Ca: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f: dimensionless {pub: in};
    var d: dimensionless {pub: in};
    var beta_SR: dimensionless;
    J_up = V_up/(1{dimensionless}+sqr(K_mup/Ca_i));
    gamma = 1{dimensionless}/(1{dimensionless}+pow(2000{micromolar}/Ca_SR, 3{dimensionless}));
    J_rel = P_rel*f*d*f_Ca*(gamma*Ca_SR-Ca_i)/(1{dimensionless}+1.65{dimensionless}*exp(V/20{millivolt}));
    J_leak = P_leak*(Ca_SR-Ca_i);
    beta_SR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_SR));
    ode(Ca_SR, time) = beta_SR*(J_up-J_leak-J_rel)*V_myo/V_SR;
    beta_i = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_i));
    ode(Ca_i, time) = beta_i*(J_rel+J_leak-J_up-A_Cap*C_sc/(2{dimensionless}*F*V_myo)*(i_Ca+i_Ca_b+i_p_Ca-2{dimensionless}*i_NaCa));
  enddef;

  def comp standard_ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 10, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {pub: out, init: 138};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: micromolar {pub: out, init: 2000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 149.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 4, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp rapid_activating_delayed_rectifiyer_K_current incl
        comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
      endcomp;
      comp slow_activating_delayed_rectifiyer_K_current incl
        comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
      endcomp;
      comp transient_outward_potassium_current incl
        comp transient_outward_potassium_current_X_to_gate;
        comp transient_outward_potassium_current_Y_to_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current incl
        comp plateau_potassium_current_Kp_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump;
      comp calcium_background_current;
      comp sodium_background_current;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_f_gate;
        comp L_type_Ca_current_d_gate;
        comp L_type_Ca_current_f_Ca_gate;
      endcomp;
      comp calcium_dynamics;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp rapid_activating_delayed_rectifiyer_K_current incl
      comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
    endcomp;
    comp slow_activating_delayed_rectifiyer_K_current incl
      comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp transient_outward_potassium_current_X_to_gate;
      comp transient_outward_potassium_current_Y_to_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp plateau_potassium_current incl
      comp plateau_potassium_current_Kp_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_f_gate;
      comp L_type_Ca_current_d_gate;
      comp L_type_Ca_current_f_Ca_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_CaK and i_CaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between transient_outward_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to_gate for
    vars X_to and X_to;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to_gate for
    vars Y_to and Y_to;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars E_K and E_K;
    vars K1_infinity and K1_infinity;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars Ca_i and Ca_i;
    vars time and time;
    vars V and V;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and standard_ionic_concentrations for
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and standard_ionic_concentrations for
    vars K_i and K_i;
    vars K_o and K_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between calcium_background_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between L_type_Ca_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between environment and L_type_Ca_current for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_Ca and i_Ca;
    vars C_sc and C_sc;
    vars f and f;
    vars d and d;
    vars f_Ca and f_Ca;
  enddef;
enddef;
