// title: A novel computational model of the human ventricular action potential and Ca transient
// creator: Family Nunns; Given Geoffrey; Other Rogan; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-04-01
// title: The Grandi et al. 2010 model of human ventricular action potential and calcium transient
// comment: This is the CellML description of Grandi et al.'s mathematical model of the 2010 model of human ventricular action potential and calcium transient in human ventricular myocytes; FN Geoffrey Nunns
// species: Human
// bio_entity: cardiac myocyte
// reference: subject_type keyword; _1 electrophysiology and signal transduction; _2 cardiac
// reference: Pubmed_id 19835882; Family Grandi; Given Eleonora; Family Pasqualini; Given Francesco; Other S; Family Bers; Given Donald; Other M; title A novel computational model of the human ventricular action potential and Ca transient; W3CDTF 2009-09-30; title Journal of Molecular and Cellular Cardiology; volume 48; first_page 112; last_page 121
def model grandi_pasqualini_bers_2010_epi as
  def unit msec as
    unit second {pref: milli};
  enddef;
  def unit joule_per_kelvin_per_kilomole as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: kilo};
  enddef;
  def unit um as
    unit mole {pref: micro};
  enddef;
  def unit um2 as
    unit mole {expo: 2, pref: micro};
  enddef;
  def unit cm2_per_sec as
    unit meter {expo: 2, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit liters_per_msec as
    unit liter;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit cm_per_sec as
    unit meter {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mM_per_msec as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mM_per_msec as
    unit mM {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit per_msec as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV2 as
    unit mV {expo: 2};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit per_mV2 as
    unit mV {expo: -2};
  enddef;
  def unit per_mM2_per_msec as
    unit mM {expo: -2};
    unit msec {expo: -1};
  enddef;
  def unit liters_per_femtoliter as
    unit liter;
    unit um {expo: -3};
  enddef;
  def unit uF_per_mS as
    unit mS_per_uF {expo: -1};
  enddef;
  def unit correction_factor as
    unit meter {expo: -1, pref: centi};
    unit mM {expo: -1};
    unit mole;
    unit farad {expo: -1};
  enddef;

  def comp interface as
    var time: msec {priv: out, pub: in};
    var V_m: mV {priv: in, pub: out};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: msec {pub: out};
  enddef;

  def comp parameters as
    var epi: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: joule_per_kelvin_per_kilomole {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var Frdy: coulomb_per_mole {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var Temp: kelvin {pub: out};
    var FoRT: per_mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cmem: farad {pub: out};
    var Qpow: dimensionless {pub: out};
    var cellLength: um {pub: out};
    var cellRadius: um {pub: out};
    var junctionLength: um {pub: out};
    var junctionRadius: um {pub: out};
    var distSLcyto: um {pub: out};
    var distJuncSL: um {pub: out};
    var DcaJuncSL: cm2_per_sec {pub: out};
    var DcaSLcyto: cm2_per_sec {pub: out};
    var DnaJuncSL: cm2_per_sec {pub: out};
    var DnaSLcyto: cm2_per_sec {pub: out};
    var Vcell: liter {pub: out};
    var Vmyo: liter {pub: out};
    var Vsr: liter {pub: out};
    var Vsl: liter {pub: out};
    var Vjunc: liter {pub: out};
    var SAjunc: um2 {pub: out};
    var SAsl: um2 {pub: out};
    var J_ca_juncsl: liters_per_msec {pub: out};
    var J_ca_slmyo: liters_per_msec {pub: out};
    var J_na_juncsl: liters_per_msec {pub: out};
    var J_na_slmyo: liters_per_msec {pub: out};
    var Fjunc: dimensionless {pub: out};
    var Fsl: dimensionless {pub: out};
    var Fjunc_CaL: dimensionless {pub: out};
    var Fsl_CaL: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_chloride_concentration
    var Cli: mM {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_chloride_concentration
    var Clo: mM {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: mM {init: 5.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: mM {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: mM {init: 1.8, pub: out};
    var Mgi: mM {pub: out};
    var ena_junc: mV {pub: out};
    var ena_sl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var ek: mV {pub: out};
    var eca_junc: mV {pub: out};
    var eca_sl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#chloride_reversal_potential
    var ecl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var GNa: mS_per_uF {init: 23, pub: out};
    var GNaB: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var IbarNaK: uA_per_uF {init: 1.8, pub: out};
    var KmNaip: mM {pub: out};
    var KmKo: mM {pub: out};
    var Q10NaK: dimensionless {pub: out};
    var Q10KmNai: dimensionless {pub: out};
    var pNaK: dimensionless {pub: out};
    var gkp: mS_per_uF {pub: out};
    var GClCa: mS_per_uF {pub: out};
    var GClB: mS_per_uF {pub: out};
    var KdClCa: mM {pub: out};
    var pNa: cm_per_sec {pub: out};
    var pCa: cm_per_sec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var pCa_max: cm_per_sec {init: 0.5};
    var pK: cm_per_sec {pub: out};
    var Q10CaL: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var IbarNCX: uA_per_uF {init: 4.5, pub: out};
    var KmCai: mM {pub: out};
    var KmCao: mM {pub: out};
    var KmNai: mM {pub: out};
    var KmNao: mM {pub: out};
    var ksat: dimensionless {pub: out};
    var nu: dimensionless {pub: out};
    var Kdact: mM {pub: out};
    var Q10NCX: dimensionless {pub: out};
    var IbarSLCaP: uA_per_uF {pub: out};
    var KmPCa: mM {pub: out};
    var GCaB: mS_per_uF {pub: out};
    var Q10SLCaP: dimensionless {pub: out};
    var Q10SRCaP: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Vmax_SRCaP: mM_per_msec {init: 0.0053114, pub: out};
    var Kmf: mM {pub: out};
    var Kmr: mM {pub: out};
    var hillSRCaP: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var ks: per_msec {init: 25, pub: out};
    var koCa: per_mM2_per_msec {pub: out};
    var kom: per_msec {pub: out};
    var kiCa: per_mM_per_msec {pub: out};
    var kim: per_msec {pub: out};
    var ec50SR: mM {pub: out};
    var Bmax_Naj: mM {pub: out};
    var Bmax_Nasl: mM {pub: out};
    var koff_na: per_msec {pub: out};
    var kon_na: per_mM_per_msec {pub: out};
    var Bmax_TnClow: mM {pub: out};
    var koff_tncl: per_msec {pub: out};
    var kon_tncl: per_mM_per_msec {pub: out};
    var Bmax_TnChigh: mM {pub: out};
    var koff_tnchca: per_msec {pub: out};
    var kon_tnchca: per_mM_per_msec {pub: out};
    var koff_tnchmg: per_msec {pub: out};
    var kon_tnchmg: per_mM_per_msec {pub: out};
    var Bmax_CaM: mM {pub: out};
    var koff_cam: per_msec {pub: out};
    var kon_cam: per_mM_per_msec {pub: out};
    var Bmax_myosin: mM {pub: out};
    var koff_myoca: per_msec {pub: out};
    var kon_myoca: per_mM_per_msec {pub: out};
    var koff_myomg: per_msec {pub: out};
    var kon_myomg: per_mM_per_msec {pub: out};
    var Bmax_SR: mM {pub: out};
    var koff_sr: per_msec {pub: out};
    var kon_sr: per_mM_per_msec {pub: out};
    var Bmax_SLlowsl: mM {pub: out};
    var Bmax_SLlowj: mM {pub: out};
    var koff_sll: per_msec {pub: out};
    var kon_sll: per_mM_per_msec {pub: out};
    var Bmax_SLhighsl: mM {pub: out};
    var Bmax_SLhighj: mM {pub: out};
    var koff_slh: per_msec {pub: out};
    var kon_slh: per_mM_per_msec {pub: out};
    var Bmax_Csqn: mM {pub: out};
    var koff_csqn: per_msec {pub: out};
    var kon_csqn: per_mM_per_msec {pub: out};
    var Na_j: mM {pub: in};
    var Na_sl: mM {pub: in};
    var K_i: mM {pub: in};
    var Ca_j: mM {pub: in};
    var Ca_sl: mM {pub: in};
    epi = 1{dimensionless};
    R = 8314{joule_per_kelvin_per_kilomole};
    Frdy = 96485{coulomb_per_mole};
    Temp = 310{kelvin};
    FoRT = Frdy/(R*Temp);
    Cmem = 1.381e-10{farad};
    Qpow = (Temp-310{kelvin})/10{kelvin};
    cellLength = 100{um};
    cellRadius = 10.25{um};
    junctionLength = 160e-3{um};
    junctionRadius = 15e-3{um};
    distSLcyto = 0.45{um};
    distJuncSL = 0.5{um};
    DcaJuncSL = 1.64e-6{cm2_per_sec};
    DcaSLcyto = 1.22e-6{cm2_per_sec};
    DnaJuncSL = 1.09e-5{cm2_per_sec};
    DnaSLcyto = 1.79e-5{cm2_per_sec};
    Vcell = pi*sqr(cellRadius)*cellLength*1e-15{liters_per_femtoliter};
    Vmyo = 0.65{dimensionless}*Vcell;
    Vsr = 0.035{dimensionless}*Vcell;
    Vsl = 0.02{dimensionless}*Vcell;
    Vjunc = 0.0539{dimensionless}*0.01{dimensionless}*Vcell;
    SAjunc = 20150{dimensionless}*pi*2{dimensionless}*junctionLength*junctionRadius;
    SAsl = pi*2{dimensionless}*cellRadius*cellLength;
    J_ca_juncsl = 8.2413e-13{liters_per_msec};
    J_ca_slmyo = 3.2743e-12{liters_per_msec};
    J_na_juncsl = 1.8313e-14{liters_per_msec};
    J_na_slmyo = 1.6386e-12{liters_per_msec};
    Fjunc = 0.11{dimensionless};
    Fsl = 1{dimensionless}-Fjunc;
    Fjunc_CaL = 0.9{dimensionless};
    Fsl_CaL = 1{dimensionless}-Fjunc_CaL;
    Cli = 15{mM};
    Clo = 150{mM};
    Mgi = 1{mM};
    ena_junc = 1{dimensionless}/FoRT*ln(Nao/Na_j);
    ena_sl = 1{dimensionless}/FoRT*ln(Nao/Na_sl);
    ek = 1{dimensionless}/FoRT*ln(Ko/K_i);
    eca_junc = 1{dimensionless}/FoRT/2{dimensionless}*ln(Cao/Ca_j);
    eca_sl = 1{dimensionless}/FoRT/2{dimensionless}*ln(Cao/Ca_sl);
    ecl = 1{dimensionless}/FoRT*ln(Cli/Clo);
    GNaB = 0.597e-3{mS_per_uF};
    KmNaip = 11{mM};
    KmKo = 1.5{mM};
    Q10NaK = 1.63{dimensionless};
    Q10KmNai = 1.39{dimensionless};
    pNaK = 0.01833{dimensionless};
    gkp = 2{dimensionless}*0.001{mS_per_uF};
    GClCa = 0.5{mS_per_uF}*0.109625{dimensionless};
    GClB = 1{dimensionless}*9e-3{mS_per_uF};
    KdClCa = 100e-3{mM};
    pNa = 0.5{cm_per_sec}*1.5e-8{dimensionless};
    pCa = pCa_max*5.4e-4{dimensionless};
    pK = 0.5{cm_per_sec}*2.7e-7{dimensionless};
    Q10CaL = 1.8{dimensionless};
    KmCai = 3.59e-3{mM};
    KmCao = 1.3{mM};
    KmNai = 12.29{mM};
    KmNao = 87.5{mM};
    ksat = 0.32{dimensionless};
    nu = 0.27{dimensionless};
    Kdact = 0.15e-3{mM};
    Q10NCX = 1.57{dimensionless};
    IbarSLCaP = 0.0673{uA_per_uF};
    KmPCa = 0.5e-3{mM};
    GCaB = 5.513e-4{mS_per_uF};
    Q10SLCaP = 2.35{dimensionless};
    Q10SRCaP = 2.6{dimensionless};
    Kmf = 0.246e-3{mM};
    Kmr = 1.7{mM};
    hillSRCaP = 1.787{dimensionless};
    koCa = 10{per_mM2_per_msec};
    kom = 0.06{per_msec};
    kiCa = 0.5{per_mM_per_msec};
    kim = 0.005{per_msec};
    ec50SR = 0.45{mM};
    Bmax_Naj = 7.561{mM};
    Bmax_Nasl = 1.65{mM};
    koff_na = 1e-3{per_msec};
    kon_na = 0.1e-3{per_mM_per_msec};
    Bmax_TnClow = 70e-3{mM};
    koff_tncl = 19.6e-3{per_msec};
    kon_tncl = 32.7{per_mM_per_msec};
    Bmax_TnChigh = 140e-3{mM};
    koff_tnchca = 0.032e-3{per_msec};
    kon_tnchca = 2.37{per_mM_per_msec};
    koff_tnchmg = 3.33e-3{per_msec};
    kon_tnchmg = 3e-3{per_mM_per_msec};
    Bmax_CaM = 24e-3{mM};
    koff_cam = 238e-3{per_msec};
    kon_cam = 34{per_mM_per_msec};
    Bmax_myosin = 140e-3{mM};
    koff_myoca = 0.46e-3{per_msec};
    kon_myoca = 13.8{per_mM_per_msec};
    koff_myomg = 0.057e-3{per_msec};
    kon_myomg = 0.0157{per_mM_per_msec};
    Bmax_SR = 19{mM}*0.9e-3{dimensionless};
    koff_sr = 60e-3{per_msec};
    kon_sr = 100{per_mM_per_msec};
    Bmax_SLlowsl = 37.4e-3{mM}*Vmyo/Vsl;
    Bmax_SLlowj = 4.6e-3{mM}*Vmyo/Vjunc*0.1{dimensionless};
    koff_sll = 1300e-3{per_msec};
    kon_sll = 100{per_mM_per_msec};
    Bmax_SLhighsl = 13.4e-3{mM}*Vmyo/Vsl;
    Bmax_SLhighj = 1.65e-3{mM}*Vmyo/Vjunc*0.1{dimensionless};
    koff_slh = 30e-3{per_msec};
    kon_slh = 100{per_mM_per_msec};
    Bmax_Csqn = 140e-3{mM}*Vmyo/Vsr;
    koff_csqn = 65{per_msec};
    kon_csqn = 100{per_mM_per_msec};
  enddef;

  def comp I_Na as
    var mss: dimensionless {pub: out};
    var taum: msec {pub: out};
    var ah: dimensionless {pub: out};
    var bh: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tauh: msec {pub: out};
    var hss: dimensionless {pub: out};
    var aj: dimensionless {pub: out};
    var bj: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tauj: msec {pub: out};
    var jss: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.00381858135062259, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.625086621635645, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.62332507235506, pub: out};
    var I_Na_junc: uA_per_uF {pub: out};
    var I_Na_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var I_Na: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var time: msec {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var GNa: mS_per_uF {pub: in};
    var ena_junc: mV {pub: in};
    var ena_sl: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0};
    mss = 1{dimensionless}/sqr(1{dimensionless}+exp(-(56.86{mV}+V_m)/9.03{mV}));
    taum = 0.1292{msec}*exp(-sqr((V_m+45.79{mV})/15.54{mV}))+0.06487{msec}*exp(-sqr((V_m-4.823{mV})/51.12{mV}));
    ah = sel
      case V_m >= -40{mV}:
        0{dimensionless};
      otherwise:
        0.057{dimensionless}*exp(-(V_m+80{mV}-shift_INa_inact)/6.8{mV});
    endsel;
    bh = sel
      case V_m >= -40{mV}:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp(-(V_m+10.66{mV}-shift_INa_inact)/11.1{mV})));
      otherwise:
        2.7{dimensionless}*exp(0.079{per_mV}*(V_m-shift_INa_inact))+3.1e5{dimensionless}*exp(0.3485{per_mV}*(V_m-shift_INa_inact));
    endsel;
    tauh = 1{msec}/(ah+bh);
    hss = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V_m+71.55{mV}-shift_INa_inact)/7.43{mV}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    aj = sel
      case V_m >= -40{mV}:
        0{dimensionless};
      otherwise:
        (-2.5428e4{per_mV}*exp(0.2444{per_mV}*(V_m-shift_INa_inact))-6.948e-6{per_mV}*exp(-0.04391{per_mV}*(V_m-shift_INa_inact)))*(V_m+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V_m+79.23{mV}-shift_INa_inact)));
    endsel;
    bj = sel
      case V_m >= -40{mV}:
        0.6{dimensionless}*exp(0.057{per_mV}*(V_m-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_mV}*(V_m+32{mV}-shift_INa_inact)));
      otherwise:
        0.02424{dimensionless}*exp(-0.01052{per_mV}*(V_m-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_mV}*(V_m+40.14{mV}-shift_INa_inact)));
    endsel;
    tauj = 1{msec}/(aj+bj);
    jss = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V_m+71.55{mV}-shift_INa_inact)/7.43{mV}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    ode(m, time) = (mss-m)/taum;
    ode(h, time) = (hss-h)/tauh;
    ode(j, time) = (jss-j)/tauj;
    I_Na_junc = Fjunc*GNa*pow(m, 3{dimensionless})*h*j*(V_m-ena_junc);
    I_Na_sl = Fsl*GNa*pow(m, 3{dimensionless})*h*j*(V_m-ena_sl);
    I_Na = I_Na_junc+I_Na_sl;
  enddef;

  def comp I_NaBK as
    var I_nabk_junc: uA_per_uF {pub: out};
    var I_nabk_sl: uA_per_uF {pub: out};
    var I_nabk: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var GNaB: mS_per_uF {pub: in};
    var ena_junc: mV {pub: in};
    var ena_sl: mV {pub: in};
    I_nabk_junc = Fjunc*GNaB*(V_m-ena_junc);
    I_nabk_sl = Fsl*GNaB*(V_m-ena_sl);
    I_nabk = I_nabk_junc+I_nabk_sl;
  enddef;

  def comp I_NaK as
    var sigma: dimensionless {pub: out};
    var fnak: dimensionless {pub: out};
    var I_nak_junc: uA_per_uF {pub: out};
    var I_nak_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var I_nak: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var FoRT: per_mV {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IbarNaK: uA_per_uF {pub: in};
    var KmKo: mM {pub: in};
    var KmNaip: mM {pub: in};
    var Na_j: mM {pub: in};
    var Na_sl: mM {pub: in};
    sigma = (exp(Nao/67.3{mM})-1{dimensionless})/7{dimensionless};
    fnak = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V_m*FoRT)+0.0365{dimensionless}*sigma*exp(-V_m*FoRT));
    I_nak_junc = Fjunc*IbarNaK*fnak*Ko/(1{dimensionless}+pow(KmNaip/Na_j, 4{dimensionless}))/(Ko+KmKo);
    I_nak_sl = Fsl*IbarNaK*fnak*Ko/(1{dimensionless}+pow(KmNaip/Na_sl, 4{dimensionless}))/(Ko+KmKo);
    I_nak = I_nak_junc+I_nak_sl;
  enddef;

  def comp I_Kr as
    var gkr: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gkr_max: mS_per_uF {init: 0.035};
    var xrss: dimensionless {pub: out};
    var tauxr: msec {pub: out};
    var x_kr: dimensionless {init: 0.021733554982663, pub: out};
    var rkr: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var I_kr: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var time: msec {pub: in};
    var Ko: mM {pub: in};
    var ek: mV {pub: in};
    gkr = gkr_max*sqrt(Ko/5.4{mM});
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(V_m+10{mV})/5{mV}));
    tauxr = 550{dimensionless}/(1{dimensionless}+exp((-22{mV}-V_m)/9{mV}))*6{msec}/(1{dimensionless}+exp((V_m-(-11{mV}))/9{mV}))+230{msec}/(1{dimensionless}+exp((V_m-(-40{mV}))/20{mV}));
    ode(x_kr, time) = (xrss-x_kr)/tauxr;
    rkr = 1{dimensionless}/(1{dimensionless}+exp((V_m+74{mV})/24{mV}));
    I_kr = gkr*x_kr*rkr*(V_m-ek);
  enddef;

  def comp I_Kp as
    var kp_kp: dimensionless {pub: out};
    var I_kp_junc: uA_per_uF {pub: out};
    var I_kp_sl: uA_per_uF {pub: out};
    var I_kp: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var ek: mV {pub: in};
    var gkp: mS_per_uF {pub: in};
    kp_kp = 1{dimensionless}/(1{dimensionless}+exp(7.488{dimensionless}-V_m/5.98{mV}));
    I_kp_junc = Fjunc*gkp*kp_kp*(V_m-ek);
    I_kp_sl = Fsl*gkp*kp_kp*(V_m-ek);
    I_kp = I_kp_junc+I_kp_sl;
  enddef;

  def comp I_Ks as
    var eks: mV {pub: out};
    var gks_junc: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var GKs_total: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance_scaling_factor
    var GKs_factor: dimensionless {init: 1.0};
    var gks_sl: mS_per_uF {init: 0.0035, pub: out};
    var xsss: dimensionless {pub: out};
    var tauxs: msec {pub: out};
    var x_ks: dimensionless {init: 0.00428981903391989, pub: out};
    var I_ks_junc: uA_per_uF {pub: out};
    var I_ks_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var I_ks: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var time: msec {pub: in};
    var FoRT: per_mV {pub: in};
    var Ko: mM {pub: in};
    var Nao: mM {pub: in};
    var pNaK: dimensionless {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var K_i: mM {pub: in};
    var Na_i: mM {pub: in};
    eks = 1{dimensionless}/FoRT*ln((Ko+pNaK*Nao)/(K_i+pNaK*Na_i));
    gks_junc = 0.0035{mS_per_uF};
    xsss = 1{dimensionless}/(1{dimensionless}+exp(-(V_m+3.8{mV})/14.25{mV}));
    tauxs = 990.1{msec}/(1{dimensionless}+exp(-(V_m+2.436{mV})/14.12{mV}));
    ode(x_ks, time) = (xsss-x_ks)/tauxs;
    I_ks_junc = GKs_factor*Fjunc*gks_junc*sqr(x_ks)*(V_m-eks);
    I_ks_sl = GKs_factor*Fsl*gks_sl*sqr(x_ks)*(V_m-eks);
    GKs_total = GKs_factor*(Fjunc*gks_junc+Fsl*gks_sl);
    I_ks = GKs_total*sqr(x_ks)*(V_m-eks);
  enddef;

  def comp I_to as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance
    var GtoSlow: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance_scaling_factor
    var GtoSlow_factor: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance
    var GtoFast: mS_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance_scaling_factor
    var GtoFast_factor: dimensionless {init: 1};
    var xtoss: dimensionless {pub: out};
    var ytoss: dimensionless {pub: out};
    var tauxtos: msec {pub: out};
    var tauytos: msec {pub: out};
    var x_to_s: dimensionless {init: 0.000441539203559411, pub: out};
    var y_to_s: dimensionless {init: 0.784875334693892, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current
    var I_tos: uA_per_uF {pub: out};
    var tauxtof: msec {pub: out};
    var tauytof: msec {pub: out};
    var x_to_f: dimensionless {init: 0.000441531250866821, pub: out};
    var y_to_f: dimensionless {init: 0.999995817153572, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current
    var I_tof: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var I_to: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var time: msec {pub: in};
    var epi: dimensionless {pub: in};
    var ek: mV {pub: in};
    GtoSlow = sel
      case epi == 1{dimensionless}:
        GtoSlow_factor*1{mS_per_uF}*0.13{dimensionless}*0.12{dimensionless};
      otherwise:
        GtoSlow_factor*0.13{mS_per_uF}*0.3{dimensionless}*0.964{dimensionless};
    endsel;
    GtoFast = sel
      case epi == 1{dimensionless}:
        GtoFast_factor*1{mS_per_uF}*0.13{dimensionless}*0.88{dimensionless};
      otherwise:
        GtoFast_factor*0.13{mS_per_uF}*0.3{dimensionless}*0.036{dimensionless};
    endsel;
    xtoss = 1{dimensionless}/(1{dimensionless}+exp(-(V_m-19{mV})/13{mV}));
    ytoss = 1{dimensionless}/(1{dimensionless}+exp((V_m+19.5{mV})/5{mV}));
    tauxtos = 9{msec}/(1{dimensionless}+exp((V_m+3{mV})/15{mV}))+0.5{msec};
    tauytos = 800{msec}/(1{dimensionless}+exp((V_m+60{mV})/10{mV}))+30{msec};
    ode(x_to_s, time) = (xtoss-x_to_s)/tauxtos;
    ode(y_to_s, time) = (ytoss-y_to_s)/tauytos;
    I_tos = GtoSlow*x_to_s*y_to_s*(V_m-ek);
    tauxtof = 8.5{msec}*exp(-sqr((V_m+45{mV})/50{mV}))+0.5{msec};
    tauytof = 85{msec}*exp(-sqr(V_m+40{mV})/220{mV2})+7{msec};
    ode(x_to_f, time) = (xtoss-x_to_f)/tauxtof;
    ode(y_to_f, time) = (ytoss-y_to_f)/tauytof;
    I_tof = GtoFast*x_to_f*y_to_f*(V_m-ek);
    I_to = I_tos+I_tof;
  enddef;

  def comp I_Ki as
    var aki: dimensionless {pub: out};
    var bki: dimensionless {pub: out};
    var kiss: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var I_ki: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var g_ki_factor: mS_per_uF {init: 0.35};
    var V_m: mV {pub: in};
    var ek: mV {pub: in};
    var Ko: mM {pub: in};
    aki = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{per_mV}*(V_m-ek-59.215{mV})));
    bki = (0.49124{dimensionless}*exp(0.08032{per_mV}*(V_m+5.476{mV}-ek))+exp(0.06175{per_mV}*(V_m-ek-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(V_m-ek+4.753{mV})));
    kiss = aki/(aki+bki);
    g_K1 = g_ki_factor*sqrt(Ko/5.4{mM});
    I_ki = g_K1*kiss*(V_m-ek);
  enddef;

  def comp I_ClCa as
    var I_ClCa_junc: uA_per_uF {pub: out};
    var I_ClCa_sl: uA_per_uF {pub: out};
    var I_ClCa: uA_per_uF {pub: out};
    var I_Clbk: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var ecl: mV {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var GClCa: mS_per_uF {pub: in};
    var GClB: mS_per_uF {pub: in};
    var KdClCa: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Ca_j: mM {pub: in};
    I_ClCa_junc = Fjunc*GClCa/(1{dimensionless}+KdClCa/Ca_j)*(V_m-ecl);
    I_ClCa_sl = Fsl*GClCa/(1{dimensionless}+KdClCa/Ca_sl)*(V_m-ecl);
    I_ClCa = I_ClCa_junc+I_ClCa_sl;
    I_Clbk = GClB*(V_m-ecl);
  enddef;

  def comp I_Ca as
    var fss: dimensionless {pub: out};
    var dss: dimensionless {pub: out};
    var taud: msec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tauf: msec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 2.93982287251302e-6, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.99511673495949, pub: out};
    var f_Ca_Bj: dimensionless {init: 0.0246142436477748, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca_Bsl: dimensionless {init: 0.0152416826209301, pub: out};
    var fcaCaMSL: dimensionless {pub: out};
    var fcaCaj: dimensionless {pub: out};
    var ibarca_j: uA_per_uF {pub: out};
    var ibarca_sl: uA_per_uF {pub: out};
    var ibark: uA_per_uF {pub: out};
    var ibarna_j: uA_per_uF {pub: out};
    var ibarna_sl: uA_per_uF {pub: out};
    var I_Ca_junc: uA_per_uF {pub: out};
    var I_Ca_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var I_Ca: uA_per_uF {pub: out};
    var I_CaK: uA_per_uF {pub: out};
    var I_CaNa_junc: uA_per_uF {pub: out};
    var I_CaNa_sl: uA_per_uF {pub: out};
    var I_CaNa: uA_per_uF {pub: out};
    var I_Catot: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var time: msec {pub: in};
    var FoRT: per_mV {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    var Fjunc_CaL: dimensionless {pub: in};
    var Fsl_CaL: dimensionless {pub: in};
    var Q10CaL: dimensionless {pub: in};
    var Qpow: dimensionless {pub: in};
    var pCa: cm_per_sec {pub: in};
    var pK: cm_per_sec {pub: in};
    var pNa: cm_per_sec {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Ca_j: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Na_j: mM {pub: in};
    var Na_sl: mM {pub: in};
    var K_i: mM {pub: in};
    fss = 1{dimensionless}/(1{dimensionless}+exp((V_m+35{mV})/9{mV}))+0.6{dimensionless}/(1{dimensionless}+exp((50{mV}-V_m)/20{mV}));
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(V_m+5{mV})/6{mV}));
    taud = 1{msec}*dss*(1{dimensionless}-exp(-(V_m+5{mV})/6{mV}))/(0.035{per_mV}*(V_m+5{mV}));
    tauf = 1{msec}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V_m+14.5{mV})))+0.02{dimensionless});
    ode(d, time) = (dss-d)/taud;
    ode(f, time) = (fss-f)/tauf;
    ode(f_Ca_Bj, time) = 1.7{per_msec}*Ca_j/1{mM}*(1{dimensionless}-f_Ca_Bj)-11.9e-3{per_msec}*f_Ca_Bj;
    ode(f_Ca_Bsl, time) = 1.7{per_msec}*Ca_sl/1{mM}*(1{dimensionless}-f_Ca_Bsl)-11.9e-3{per_msec}*f_Ca_Bsl;
    fcaCaMSL = 0{dimensionless};
    fcaCaj = 0{dimensionless};
    ibarca_j = pCa*4{correction_factor}*V_m*Frdy*FoRT*(0.341{dimensionless}*Ca_j*exp(2{dimensionless}*V_m*FoRT)-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V_m*FoRT)-1{dimensionless});
    ibarca_sl = pCa*4{correction_factor}*V_m*Frdy*FoRT*(0.341{dimensionless}*Ca_sl*exp(2{dimensionless}*V_m*FoRT)-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V_m*FoRT)-1{dimensionless});
    ibark = pK*V_m*Frdy*FoRT*(0.75{correction_factor}*K_i*exp(V_m*FoRT)-0.75{correction_factor}*Ko)/(exp(V_m*FoRT)-1{dimensionless});
    ibarna_j = pNa*V_m*Frdy*FoRT*(0.75{correction_factor}*Na_j*exp(V_m*FoRT)-0.75{correction_factor}*Nao)/(exp(V_m*FoRT)-1{dimensionless});
    ibarna_sl = pNa*V_m*Frdy*FoRT*(0.75{correction_factor}*Na_sl*exp(V_m*FoRT)-0.75{correction_factor}*Nao)/(exp(V_m*FoRT)-1{dimensionless});
    I_Ca_junc = Fjunc_CaL*ibarca_j*d*f*(1{dimensionless}-f_Ca_Bj+fcaCaj)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_Ca_sl = Fsl_CaL*ibarca_sl*d*f*(1{dimensionless}-f_Ca_Bsl+fcaCaMSL)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_Ca = I_Ca_junc+I_Ca_sl;
    I_CaK = ibark*d*f*(Fjunc_CaL*(fcaCaj+1{dimensionless}-f_Ca_Bj)+Fsl_CaL*(fcaCaMSL+1{dimensionless}-f_Ca_Bsl))*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa_junc = Fjunc_CaL*ibarna_j*d*f*(1{dimensionless}-f_Ca_Bj+fcaCaj)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa_sl = Fsl_CaL*ibarna_sl*d*f*(1{dimensionless}-f_Ca_Bsl+fcaCaMSL)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa = I_CaNa_junc+I_CaNa_sl;
    I_Catot = I_Ca+I_CaK+I_CaNa;
  enddef;

  def comp I_NCX as
    var Ka_junc: dimensionless {pub: out};
    var Ka_sl: dimensionless {pub: out};
    var s1_junc: mM4 {pub: out};
    var s1_sl: mM4 {pub: out};
    var s2_junc: mM4 {pub: out};
    var s3_junc: mM4 {pub: out};
    var s2_sl: mM4 {pub: out};
    var s3_sl: mM4 {pub: out};
    var I_ncx_junc: uA_per_uF {pub: out};
    var I_ncx_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var I_ncx: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var FoRT: per_mV {pub: in};
    var ksat: dimensionless {pub: in};
    var Kdact: mM {pub: in};
    var KmCai: mM {pub: in};
    var KmCao: mM {pub: in};
    var KmNai: mM {pub: in};
    var KmNao: mM {pub: in};
    var nu: dimensionless {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IbarNCX: uA_per_uF {pub: in};
    var Q10NCX: dimensionless {pub: in};
    var Qpow: dimensionless {pub: in};
    var Ca_sl: mM {pub: in};
    var Ca_j: mM {pub: in};
    var Na_j: mM {pub: in};
    var Na_sl: mM {pub: in};
    Ka_junc = 1{dimensionless}/(1{dimensionless}+sqr(Kdact/Ca_j));
    Ka_sl = 1{dimensionless}/(1{dimensionless}+sqr(Kdact/Ca_sl));
    s1_junc = exp(nu*V_m*FoRT)*pow(Na_j, 3{dimensionless})*Cao;
    s1_sl = exp(nu*V_m*FoRT)*pow(Na_sl, 3{dimensionless})*Cao;
    s2_junc = exp((nu-1{dimensionless})*V_m*FoRT)*pow(Nao, 3{dimensionless})*Ca_j;
    s3_junc = KmCai*pow(Nao, 3{dimensionless})*(1{dimensionless}+pow(Na_j/KmNai, 3{dimensionless}))+pow(KmNao, 3{dimensionless})*Ca_j*(1{dimensionless}+Ca_j/KmCai)+KmCao*pow(Na_j, 3{dimensionless})+pow(Na_j, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Ca_j;
    s2_sl = exp((nu-1{dimensionless})*V_m*FoRT)*pow(Nao, 3{dimensionless})*Ca_sl;
    s3_sl = KmCai*pow(Nao, 3{dimensionless})*(1{dimensionless}+pow(Na_sl/KmNai, 3{dimensionless}))+pow(KmNao, 3{dimensionless})*Ca_sl*(1{dimensionless}+Ca_sl/KmCai)+KmCao*pow(Na_sl, 3{dimensionless})+pow(Na_sl, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Ca_sl;
    I_ncx_junc = Fjunc*IbarNCX*pow(Q10NCX, Qpow)*Ka_junc*(s1_junc-s2_junc)/s3_junc/(1{dimensionless}+ksat*exp((nu-1{dimensionless})*V_m*FoRT));
    I_ncx_sl = Fsl*IbarNCX*pow(Q10NCX, Qpow)*Ka_sl*(s1_sl-s2_sl)/s3_sl/(1{dimensionless}+ksat*exp((nu-1{dimensionless})*V_m*FoRT));
    I_ncx = I_ncx_junc+I_ncx_sl;
  enddef;

  def comp I_PCa as
    var I_pca_junc: uA_per_uF {pub: out};
    var I_pca_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var I_pca: uA_per_uF {pub: out};
    var IbarSLCaP: uA_per_uF {pub: in};
    var KmPCa: mM {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var Q10SLCaP: dimensionless {pub: in};
    var Qpow: dimensionless {pub: in};
    var Ca_sl: mM {pub: in};
    var Ca_j: mM {pub: in};
    I_pca_junc = Fjunc*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(Ca_j, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(Ca_j, 1.6{dimensionless}));
    I_pca_sl = Fsl*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(Ca_sl, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(Ca_sl, 1.6{dimensionless}));
    I_pca = I_pca_junc+I_pca_sl;
  enddef;

  def comp I_CaBK as
    var I_cabk_junc: uA_per_uF {pub: out};
    var I_cabk_sl: uA_per_uF {pub: out};
    var I_cabk: uA_per_uF {pub: out};
    var V_m: mV {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var GCaB: mS_per_uF {pub: in};
    var eca_junc: mV {pub: in};
    var eca_sl: mV {pub: in};
    I_cabk_junc = Fjunc*GCaB*(V_m-eca_junc);
    I_cabk_sl = Fsl*GCaB*(V_m-eca_sl);
    I_cabk = I_cabk_junc+I_cabk_sl;
  enddef;

  def comp SR_Fluxes as
    var MaxSR: dimensionless {pub: out};
    var MinSR: dimensionless {pub: out};
    var kCaSR: dimensionless {pub: out};
    var koSRCa: per_mM2_per_msec {pub: out};
    var kiSRCa: per_mM_per_msec {pub: out};
    var RI: mM {pub: out};
    var Ry_Rr: mM {init: 0.891022230597263, pub: out};
    var Ry_Ro: mM {init: 7.37484660389498e-7, pub: out};
    var Ry_Ri: mM {init: 9.01984485847386e-8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_SRCarel: mM_per_msec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var J_serca: mM_per_msec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var J_SRleak: mM_per_msec {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var SR_leak_max: per_msec {init: 5.348e-6};
    var time: msec {pub: in};
    var ec50SR: mM {pub: in};
    var koCa: per_mM2_per_msec {pub: in};
    var kiCa: per_mM_per_msec {pub: in};
    var kim: per_msec {pub: in};
    var kom: per_msec {pub: in};
    var ks: per_msec {pub: in};
    var Kmf: mM {pub: in};
    var Kmr: mM {pub: in};
    var Q10SRCaP: dimensionless {pub: in};
    var Qpow: dimensionless {pub: in};
    var Vmax_SRCaP: mM_per_msec {pub: in};
    var hillSRCaP: dimensionless {pub: in};
    var Ca_sr: mM {pub: in};
    var Ca_j: mM {pub: in};
    var Ca_i: mM {pub: in};
    MaxSR = 15{dimensionless};
    MinSR = 1{dimensionless};
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(ec50SR/Ca_sr, 2.5{dimensionless}));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    RI = 1{mM}-Ry_Rr-Ry_Ro-Ry_Ri;
    ode(Ry_Rr, time) = kim*RI-kiSRCa*Ca_j*Ry_Rr-(koSRCa*sqr(Ca_j)*Ry_Rr-kom*Ry_Ro);
    ode(Ry_Ro, time) = koSRCa*sqr(Ca_j)*Ry_Rr-kom*Ry_Ro-(kiSRCa*Ca_j*Ry_Ro-kim*Ry_Ri);
    ode(Ry_Ri, time) = kiSRCa*Ca_j*Ry_Ro-kim*Ry_Ri-(kom*Ry_Ri-koSRCa*sqr(Ca_j)*RI);
    J_SRCarel = ks*Ry_Ro/1{mM}*(Ca_sr-Ca_j);
    J_serca = pow(Q10SRCaP, Qpow)*Vmax_SRCaP*(pow(Ca_i/Kmf, hillSRCaP)-pow(Ca_sr/Kmr, hillSRCaP))/(1{dimensionless}+pow(Ca_i/Kmf, hillSRCaP)+pow(Ca_sr/Kmr, hillSRCaP));
    J_SRleak = SR_leak_max*(Ca_sr-Ca_j);
  enddef;

  def comp Na_Buffers as
    var Na_Bj: mM {init: 3.43545459048316, pub: out};
    var Na_Bsl: mM {init: 0.749601264899653, pub: out};
    var dNa_Bj_dt: mM_per_msec {pub: out};
    var dNa_Bsl_dt: mM_per_msec {pub: out};
    var time: msec {pub: in};
    var kon_na: per_mM_per_msec {pub: in};
    var koff_na: per_msec {pub: in};
    var Bmax_Naj: mM {pub: in};
    var Bmax_Nasl: mM {pub: in};
    var Na_j: mM {pub: in};
    var Na_sl: mM {pub: in};
    ode(Na_Bj, time) = dNa_Bj_dt;
    dNa_Bj_dt = kon_na*Na_j*(Bmax_Naj-Na_Bj)-koff_na*Na_Bj;
    ode(Na_Bsl, time) = dNa_Bsl_dt;
    dNa_Bsl_dt = kon_na*Na_sl*(Bmax_Nasl-Na_Bsl)-koff_na*Na_Bsl;
  enddef;

  def comp Cytosolic_Ca_Buffers as
    var Tn_CL: mM {init: 0.00893708435270205, pub: out};
    var Tn_CHc: mM {init: 0.117445983314504, pub: out};
    var Tn_CHm: mM {init: 0.0105996734077994, pub: out};
    var CaM: mM {init: 0.000295653619580701, pub: out};
    var Myo_c: mM {init: 0.00192645052472679, pub: out};
    var Myo_m: mM {init: 0.137557201546068, pub: out};
    var SRB: mM {init: 0.00217414510791738, pub: out};
    var J_CaB_cytosol: mM_per_msec {pub: out};
    var time: msec {pub: in};
    var Bmax_TnClow: mM {pub: in};
    var Bmax_CaM: mM {pub: in};
    var Bmax_TnChigh: mM {pub: in};
    var Bmax_myosin: mM {pub: in};
    var Bmax_SR: mM {pub: in};
    var kon_cam: per_mM_per_msec {pub: in};
    var koff_cam: per_msec {pub: in};
    var kon_tncl: per_mM_per_msec {pub: in};
    var koff_tncl: per_msec {pub: in};
    var kon_tnchca: per_mM_per_msec {pub: in};
    var koff_tnchca: per_msec {pub: in};
    var kon_tnchmg: per_mM_per_msec {pub: in};
    var koff_tnchmg: per_msec {pub: in};
    var kon_myomg: per_mM_per_msec {pub: in};
    var koff_myomg: per_msec {pub: in};
    var kon_myoca: per_mM_per_msec {pub: in};
    var koff_myoca: per_msec {pub: in};
    var kon_sr: per_mM_per_msec {pub: in};
    var koff_sr: per_msec {pub: in};
    var Mgi: mM {pub: in};
    var Ca_i: mM {pub: in};
    ode(Tn_CL, time) = kon_tncl*Ca_i*(Bmax_TnClow-Tn_CL)-koff_tncl*Tn_CL;
    ode(Tn_CHc, time) = kon_tnchca*Ca_i*(Bmax_TnChigh-Tn_CHc-Tn_CHm)-koff_tnchca*Tn_CHc;
    ode(Tn_CHm, time) = kon_tnchmg*Mgi*(Bmax_TnChigh-Tn_CHc-Tn_CHm)-koff_tnchmg*Tn_CHm;
    ode(CaM, time) = kon_cam*Ca_i*(Bmax_CaM-CaM)-koff_cam*CaM;
    ode(Myo_c, time) = kon_myoca*Ca_i*(Bmax_myosin-Myo_c-Myo_m)-koff_myoca*Myo_c;
    ode(Myo_m, time) = kon_myomg*Mgi*(Bmax_myosin-Myo_c-Myo_m)-koff_myomg*Myo_m;
    ode(SRB, time) = kon_sr*Ca_i*(Bmax_SR-SRB)-koff_sr*SRB;
    J_CaB_cytosol = kon_tncl*Ca_i*(Bmax_TnClow-Tn_CL)-koff_tncl*Tn_CL+kon_tnchca*Ca_i*(Bmax_TnChigh-Tn_CHc-Tn_CHm)-koff_tnchca*Tn_CHc+kon_tnchmg*Mgi*(Bmax_TnChigh-Tn_CHc-Tn_CHm)-koff_tnchmg*Tn_CHm+kon_cam*Ca_i*(Bmax_CaM-CaM)-koff_cam*CaM+kon_myoca*Ca_i*(Bmax_myosin-Myo_c-Myo_m)-koff_myoca*Myo_c+kon_myomg*Mgi*(Bmax_myosin-Myo_c-Myo_m)-koff_myomg*Myo_m+kon_sr*Ca_i*(Bmax_SR-SRB)-koff_sr*SRB;
  enddef;

  def comp Junctional_and_SL_Ca_Buffers as
    var SLL_j: mM {init: 0.00738583890572642, pub: out};
    var SLL_sl: mM {init: 0.00988178900584875, pub: out};
    var SLH_j: mM {init: 0.0734662466011574, pub: out};
    var SLH_sl: mM {init: 0.114400081504523, pub: out};
    var J_CaB_junction: mM_per_msec {pub: out};
    var J_CaB_sl: mM_per_msec {pub: out};
    var time: msec {pub: in};
    var Bmax_SLlowj: mM {pub: in};
    var Bmax_SLlowsl: mM {pub: in};
    var Bmax_SLhighj: mM {pub: in};
    var Bmax_SLhighsl: mM {pub: in};
    var kon_sll: per_mM_per_msec {pub: in};
    var koff_sll: per_msec {pub: in};
    var kon_slh: per_mM_per_msec {pub: in};
    var koff_slh: per_msec {pub: in};
    var Ca_j: mM {pub: in};
    var Ca_sl: mM {pub: in};
    ode(SLL_j, time) = kon_sll*Ca_j*(Bmax_SLlowj-SLL_j)-koff_sll*SLL_j;
    ode(SLL_sl, time) = kon_sll*Ca_sl*(Bmax_SLlowsl-SLL_sl)-koff_sll*SLL_sl;
    ode(SLH_j, time) = kon_slh*Ca_j*(Bmax_SLhighj-SLH_j)-koff_slh*SLH_j;
    ode(SLH_sl, time) = kon_slh*Ca_sl*(Bmax_SLhighsl-SLH_sl)-koff_slh*SLH_sl;
    J_CaB_junction = kon_sll*Ca_j*(Bmax_SLlowj-SLL_j)-koff_sll*SLL_j+kon_slh*Ca_j*(Bmax_SLhighj-SLH_j)-koff_slh*SLH_j;
    J_CaB_sl = kon_sll*Ca_sl*(Bmax_SLlowsl-SLL_sl)-koff_sll*SLL_sl+kon_slh*Ca_sl*(Bmax_SLhighsl-SLH_sl)-koff_slh*SLH_sl;
  enddef;

  def comp SR_Ca_Concentrations as
    var Csqn_b: mM {init: 1.19772047585784, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_sr: mM {init: 0.555180633859957, pub: out};
    var time: msec {pub: in};
    var Bmax_Csqn: mM {pub: in};
    var kon_csqn: per_mM_per_msec {pub: in};
    var koff_csqn: per_msec {pub: in};
    var Vmyo: liter {pub: in};
    var Vsr: liter {pub: in};
    var J_serca: mM_per_msec {pub: in};
    var J_SRleak: mM_per_msec {pub: in};
    var J_SRCarel: mM_per_msec {pub: in};
    ode(Csqn_b, time) = kon_csqn*Ca_sr*(Bmax_Csqn-Csqn_b)-koff_csqn*Csqn_b;
    ode(Ca_sr, time) = J_serca-(J_SRleak*Vmyo/Vsr+J_SRCarel)-(kon_csqn*Ca_sr*(Bmax_Csqn-Csqn_b)-koff_csqn*Csqn_b);
  enddef;

  def comp Na_Concentrations as
    var I_Na_tot_junc: uA_per_uF {pub: out};
    var I_Na_tot_sl: uA_per_uF {pub: out};
    var I_Na_tot_sl2: uA_per_uF {pub: out};
    var I_Na_tot_junc2: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_sodium_concentration
    var Na_j: mM {init: 8.3215690202059, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_sodium_concentration
    var Na_sl: mM {init: 8.32094589677861, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {init: 8.32114502072456, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1};
    var time: msec {pub: in};
    var Cmem: farad {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    var J_na_juncsl: liters_per_msec {pub: in};
    var J_na_slmyo: liters_per_msec {pub: in};
    var Vjunc: liter {pub: in};
    var Vsl: liter {pub: in};
    var Vmyo: liter {pub: in};
    var I_Na_junc: uA_per_uF {pub: in};
    var I_nabk_junc: uA_per_uF {pub: in};
    var I_ncx_junc: uA_per_uF {pub: in};
    var I_nak_junc: uA_per_uF {pub: in};
    var I_CaNa_junc: uA_per_uF {pub: in};
    var I_Na_sl: uA_per_uF {pub: in};
    var I_nabk_sl: uA_per_uF {pub: in};
    var I_ncx_sl: uA_per_uF {pub: in};
    var I_nak_sl: uA_per_uF {pub: in};
    var I_CaNa_sl: uA_per_uF {pub: in};
    var dNa_Bj_dt: mM_per_msec {pub: in};
    var dNa_Bsl_dt: mM_per_msec {pub: in};
    I_Na_tot_junc = I_Na_junc+I_nabk_junc+3{dimensionless}*I_ncx_junc+3{dimensionless}*I_nak_junc+I_CaNa_junc;
    I_Na_tot_sl = I_Na_sl+I_nabk_sl+3{dimensionless}*I_ncx_sl+3{dimensionless}*I_nak_sl+I_CaNa_sl;
    I_Na_tot_sl2 = 3{dimensionless}*I_ncx_sl+3{dimensionless}*I_nak_sl+I_CaNa_sl;
    I_Na_tot_junc2 = 3{dimensionless}*I_ncx_junc+3{dimensionless}*I_nak_junc+I_CaNa_junc;
    ode(Na_j, time) = conc_clamp*(-I_Na_tot_junc*Cmem/(Vjunc*Frdy)+J_na_juncsl/Vjunc*(Na_sl-Na_j)-dNa_Bj_dt);
    ode(Na_sl, time) = conc_clamp*(-I_Na_tot_sl*Cmem/(Vsl*Frdy)+J_na_juncsl/Vsl*(Na_j-Na_sl)+J_na_slmyo/Vsl*(Na_i-Na_sl)-dNa_Bsl_dt);
    ode(Na_i, time) = conc_clamp*J_na_slmyo/Vmyo*(Na_sl-Na_i);
  enddef;

  def comp K_Concentration as
    var I_K_tot: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {init: 120, pub: out};
    var time: msec {pub: in};
    var I_to: uA_per_uF {pub: in};
    var I_kr: uA_per_uF {pub: in};
    var I_ks: uA_per_uF {pub: in};
    var I_ki: uA_per_uF {pub: in};
    var I_nak: uA_per_uF {pub: in};
    var I_CaK: uA_per_uF {pub: in};
    var I_kp: uA_per_uF {pub: in};
    I_K_tot = I_to+I_kr+I_ks+I_ki-2{dimensionless}*I_nak+I_CaK+I_kp;
    ode(K_i, time) = 0{mM_per_msec};
  enddef;

  def comp Ca_Concentrations as
    var I_Ca_tot_junc: uA_per_uF {pub: out};
    var I_Ca_tot_sl: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_j: mM {init: 0.000175415190830688, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_concentration
    var Ca_sl: mM {init: 0.000106544589194246, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {init: 8.72745589849657e-5, pub: out};
    var time: msec {pub: in};
    var I_Ca_junc: uA_per_uF {pub: in};
    var I_cabk_junc: uA_per_uF {pub: in};
    var I_pca_junc: uA_per_uF {pub: in};
    var I_ncx_junc: uA_per_uF {pub: in};
    var I_Ca_sl: uA_per_uF {pub: in};
    var I_cabk_sl: uA_per_uF {pub: in};
    var I_pca_sl: uA_per_uF {pub: in};
    var I_ncx_sl: uA_per_uF {pub: in};
    var Cmem: farad {pub: in};
    var Vjunc: liter {pub: in};
    var Vsl: liter {pub: in};
    var Vsr: liter {pub: in};
    var Vmyo: liter {pub: in};
    var Frdy: coulomb_per_mole {pub: in};
    var J_CaB_junction: mM_per_msec {pub: in};
    var J_SRCarel: mM_per_msec {pub: in};
    var J_ca_juncsl: liters_per_msec {pub: in};
    var J_CaB_sl: mM_per_msec {pub: in};
    var J_ca_slmyo: liters_per_msec {pub: in};
    var J_serca: mM_per_msec {pub: in};
    var J_SRleak: mM_per_msec {pub: in};
    var J_CaB_cytosol: mM_per_msec {pub: in};
    I_Ca_tot_junc = I_Ca_junc+I_cabk_junc+I_pca_junc-2{dimensionless}*I_ncx_junc;
    I_Ca_tot_sl = I_Ca_sl+I_cabk_sl+I_pca_sl-2{dimensionless}*I_ncx_sl;
    ode(Ca_j, time) = -I_Ca_tot_junc*Cmem/(Vjunc*2{dimensionless}*Frdy)+J_ca_juncsl/Vjunc*(Ca_sl-Ca_j)-J_CaB_junction+J_SRCarel*Vsr/Vjunc+J_SRleak*Vmyo/Vjunc;
    ode(Ca_sl, time) = -I_Ca_tot_sl*Cmem/(Vsl*2{dimensionless}*Frdy)+J_ca_juncsl/Vsl*(Ca_j-Ca_sl)+J_ca_slmyo/Vsl*(Ca_i-Ca_sl)-J_CaB_sl;
    ode(Ca_i, time) = -J_serca*Vsr/Vmyo-J_CaB_cytosol+J_ca_slmyo/Vmyo*(Ca_sl-Ca_i);
  enddef;

  def comp membrane_potential as
    var I_Na_tot: uA_per_uF;
    var I_Cl_tot: uA_per_uF;
    var I_Ca_tot: uA_per_uF;
    var I_tot: uA_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V_m: mV {init: -81.4229700631461, pub: out};
    var time: msec {pub: in};
    var I_Na_tot_junc: uA_per_uF {pub: in};
    var I_Na_tot_sl: uA_per_uF {pub: in};
    var I_ClCa: uA_per_uF {pub: in};
    var I_Clbk: uA_per_uF {pub: in};
    var I_Ca_tot_junc: uA_per_uF {pub: in};
    var I_Ca_tot_sl: uA_per_uF {pub: in};
    var I_K_tot: uA_per_uF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: uA_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: msec {init: 100};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: msec {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: msec {init: 5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: uA_per_uF {init: -9.5};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    I_Na_tot = I_Na_tot_junc+I_Na_tot_sl;
    I_Cl_tot = I_ClCa+I_Clbk;
    I_Ca_tot = I_Ca_tot_junc+I_Ca_tot_sl;
    I_tot = I_Na_tot+I_Cl_tot+I_Ca_tot+I_K_tot;
    ode(V_m, time) = -(I_tot+i_Stim);
  enddef;

  def group as encapsulation for
    comp interface incl
      comp parameters;
      comp I_Na;
      comp I_NaBK;
      comp I_NaK;
      comp I_Kr;
      comp I_Kp;
      comp I_Ks;
      comp I_to;
      comp I_Ki;
      comp I_ClCa;
      comp I_Ca;
      comp I_NCX;
      comp I_PCa;
      comp I_CaBK;
      comp SR_Fluxes;
      comp Na_Buffers;
      comp Cytosolic_Ca_Buffers;
      comp Junctional_and_SL_Ca_Buffers;
      comp SR_Ca_Concentrations;
      comp Na_Concentrations;
      comp K_Concentration;
      comp Ca_Concentrations;
      comp membrane_potential;
    endcomp;
  enddef;
  def map between interface and environment for
    vars time and time;
  enddef;
  def map between interface and membrane_potential for
    vars time and time;
    vars V_m and V_m;
  enddef;
  def map between I_Na and interface for
    vars time and time;
  enddef;
  def map between I_Na and parameters for
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars GNa and GNa;
    vars ena_junc and ena_junc;
    vars ena_sl and ena_sl;
  enddef;
  def map between I_Na and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_NaBK and parameters for
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars GNaB and GNaB;
    vars ena_junc and ena_junc;
    vars ena_sl and ena_sl;
  enddef;
  def map between I_NaBK and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_NaK and parameters for
    vars Nao and Nao;
    vars Ko and Ko;
    vars FoRT and FoRT;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars IbarNaK and IbarNaK;
    vars KmKo and KmKo;
    vars KmNaip and KmNaip;
  enddef;
  def map between I_NaK and Na_Concentrations for
    vars Na_j and Na_j;
    vars Na_sl and Na_sl;
    vars I_nak_junc and I_nak_junc;
    vars I_nak_sl and I_nak_sl;
  enddef;
  def map between I_NaK and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_Kr and interface for
    vars time and time;
  enddef;
  def map between I_Kr and parameters for
    vars Ko and Ko;
    vars ek and ek;
  enddef;
  def map between I_Kr and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_Kp and parameters for
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars ek and ek;
    vars gkp and gkp;
  enddef;
  def map between I_Kp and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_Ks and interface for
    vars time and time;
  enddef;
  def map between I_Ks and parameters for
    vars FoRT and FoRT;
    vars Ko and Ko;
    vars Nao and Nao;
    vars pNaK and pNaK;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between I_Ks and Na_Concentrations for
    vars Na_i and Na_i;
  enddef;
  def map between I_Ks and K_Concentration for
    vars K_i and K_i;
    vars I_ks and I_ks;
  enddef;
  def map between I_Ks and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_to and interface for
    vars time and time;
  enddef;
  def map between I_to and parameters for
    vars epi and epi;
    vars ek and ek;
  enddef;
  def map between I_to and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_Ki and parameters for
    vars Ko and Ko;
    vars ek and ek;
  enddef;
  def map between I_Ki and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_ClCa and parameters for
    vars ecl and ecl;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars GClCa and GClCa;
    vars GClB and GClB;
    vars KdClCa and KdClCa;
  enddef;
  def map between I_ClCa and Ca_Concentrations for
    vars Ca_sl and Ca_sl;
    vars Ca_j and Ca_j;
  enddef;
  def map between I_ClCa and membrane_potential for
    vars V_m and V_m;
    vars I_ClCa and I_ClCa;
    vars I_Clbk and I_Clbk;
  enddef;
  def map between I_Ca and interface for
    vars time and time;
  enddef;
  def map between I_Ca and parameters for
    vars FoRT and FoRT;
    vars Frdy and Frdy;
    vars Fjunc_CaL and Fjunc_CaL;
    vars Fsl_CaL and Fsl_CaL;
    vars Q10CaL and Q10CaL;
    vars Qpow and Qpow;
    vars pCa and pCa;
    vars pK and pK;
    vars pNa and pNa;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between I_Ca and Na_Concentrations for
    vars Na_j and Na_j;
    vars Na_sl and Na_sl;
    vars I_CaNa_junc and I_CaNa_junc;
    vars I_CaNa_sl and I_CaNa_sl;
  enddef;
  def map between I_Ca and Ca_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars I_Ca_junc and I_Ca_junc;
    vars I_Ca_sl and I_Ca_sl;
  enddef;
  def map between I_Ca and K_Concentration for
    vars K_i and K_i;
    vars I_CaK and I_CaK;
  enddef;
  def map between I_Ca and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_NCX and parameters for
    vars Cao and Cao;
    vars Nao and Nao;
    vars FoRT and FoRT;
    vars ksat and ksat;
    vars Kdact and Kdact;
    vars KmCai and KmCai;
    vars KmCao and KmCao;
    vars KmNai and KmNai;
    vars KmNao and KmNao;
    vars nu and nu;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars IbarNCX and IbarNCX;
    vars Q10NCX and Q10NCX;
    vars Qpow and Qpow;
  enddef;
  def map between I_NCX and Ca_Concentrations for
    vars Ca_sl and Ca_sl;
    vars Ca_j and Ca_j;
    vars I_ncx_sl and I_ncx_sl;
    vars I_ncx_junc and I_ncx_junc;
  enddef;
  def map between I_NCX and Na_Concentrations for
    vars Na_j and Na_j;
    vars Na_sl and Na_sl;
    vars I_ncx_junc and I_ncx_junc;
    vars I_ncx_sl and I_ncx_sl;
  enddef;
  def map between I_NCX and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between I_PCa and parameters for
    vars IbarSLCaP and IbarSLCaP;
    vars KmPCa and KmPCa;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars Q10SLCaP and Q10SLCaP;
    vars Qpow and Qpow;
  enddef;
  def map between I_PCa and Ca_Concentrations for
    vars Ca_sl and Ca_sl;
    vars Ca_j and Ca_j;
    vars I_pca_junc and I_pca_junc;
    vars I_pca_sl and I_pca_sl;
  enddef;
  def map between I_CaBK and parameters for
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
    vars GCaB and GCaB;
    vars eca_junc and eca_junc;
    vars eca_sl and eca_sl;
  enddef;
  def map between I_CaBK and membrane_potential for
    vars V_m and V_m;
  enddef;
  def map between SR_Fluxes and interface for
    vars time and time;
  enddef;
  def map between SR_Fluxes and parameters for
    vars ec50SR and ec50SR;
    vars koCa and koCa;
    vars kiCa and kiCa;
    vars kim and kim;
    vars kom and kom;
    vars ks and ks;
    vars Kmf and Kmf;
    vars Kmr and Kmr;
    vars Q10SRCaP and Q10SRCaP;
    vars Qpow and Qpow;
    vars Vmax_SRCaP and Vmax_SRCaP;
    vars hillSRCaP and hillSRCaP;
  enddef;
  def map between SR_Fluxes and Ca_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_i and Ca_i;
    vars J_SRCarel and J_SRCarel;
    vars J_serca and J_serca;
    vars J_SRleak and J_SRleak;
  enddef;
  def map between SR_Fluxes and SR_Ca_Concentrations for
    vars Ca_sr and Ca_sr;
    vars J_serca and J_serca;
    vars J_SRleak and J_SRleak;
    vars J_SRCarel and J_SRCarel;
  enddef;
  def map between Na_Buffers and interface for
    vars time and time;
  enddef;
  def map between Na_Buffers and parameters for
    vars kon_na and kon_na;
    vars koff_na and koff_na;
    vars Bmax_Naj and Bmax_Naj;
    vars Bmax_Nasl and Bmax_Nasl;
  enddef;
  def map between Na_Buffers and Na_Concentrations for
    vars Na_j and Na_j;
    vars Na_sl and Na_sl;
    vars dNa_Bsl_dt and dNa_Bsl_dt;
    vars dNa_Bj_dt and dNa_Bj_dt;
  enddef;
  def map between Cytosolic_Ca_Buffers and interface for
    vars time and time;
  enddef;
  def map between Cytosolic_Ca_Buffers and parameters for
    vars Bmax_TnClow and Bmax_TnClow;
    vars Bmax_CaM and Bmax_CaM;
    vars Bmax_TnChigh and Bmax_TnChigh;
    vars Bmax_myosin and Bmax_myosin;
    vars Bmax_SR and Bmax_SR;
    vars kon_cam and kon_cam;
    vars koff_cam and koff_cam;
    vars kon_tncl and kon_tncl;
    vars koff_tncl and koff_tncl;
    vars kon_tnchca and kon_tnchca;
    vars koff_tnchca and koff_tnchca;
    vars kon_tnchmg and kon_tnchmg;
    vars koff_tnchmg and koff_tnchmg;
    vars kon_myomg and kon_myomg;
    vars koff_myomg and koff_myomg;
    vars kon_myoca and kon_myoca;
    vars koff_myoca and koff_myoca;
    vars kon_sr and kon_sr;
    vars koff_sr and koff_sr;
    vars Mgi and Mgi;
  enddef;
  def map between Cytosolic_Ca_Buffers and Ca_Concentrations for
    vars Ca_i and Ca_i;
    vars J_CaB_cytosol and J_CaB_cytosol;
  enddef;
  def map between Junctional_and_SL_Ca_Buffers and interface for
    vars time and time;
  enddef;
  def map between Junctional_and_SL_Ca_Buffers and parameters for
    vars Bmax_SLlowj and Bmax_SLlowj;
    vars Bmax_SLlowsl and Bmax_SLlowsl;
    vars Bmax_SLhighj and Bmax_SLhighj;
    vars Bmax_SLhighsl and Bmax_SLhighsl;
    vars kon_sll and kon_sll;
    vars koff_sll and koff_sll;
    vars kon_slh and kon_slh;
    vars koff_slh and koff_slh;
  enddef;
  def map between Junctional_and_SL_Ca_Buffers and Ca_Concentrations for
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
    vars J_CaB_sl and J_CaB_sl;
    vars J_CaB_junction and J_CaB_junction;
  enddef;
  def map between SR_Ca_Concentrations and interface for
    vars time and time;
  enddef;
  def map between SR_Ca_Concentrations and parameters for
    vars Bmax_Csqn and Bmax_Csqn;
    vars kon_csqn and kon_csqn;
    vars koff_csqn and koff_csqn;
    vars Vmyo and Vmyo;
    vars Vsr and Vsr;
  enddef;
  def map between Na_Concentrations and interface for
    vars time and time;
  enddef;
  def map between Na_Concentrations and parameters for
    vars Cmem and Cmem;
    vars Frdy and Frdy;
    vars J_na_juncsl and J_na_juncsl;
    vars J_na_slmyo and J_na_slmyo;
    vars Vjunc and Vjunc;
    vars Vsl and Vsl;
    vars Vmyo and Vmyo;
    vars Na_j and Na_j;
    vars Na_sl and Na_sl;
  enddef;
  def map between Na_Concentrations and I_Na for
    vars I_Na_junc and I_Na_junc;
    vars I_Na_sl and I_Na_sl;
  enddef;
  def map between Na_Concentrations and I_NaBK for
    vars I_nabk_junc and I_nabk_junc;
    vars I_nabk_sl and I_nabk_sl;
  enddef;
  def map between K_Concentration and interface for
    vars time and time;
  enddef;
  def map between K_Concentration and parameters for
    vars K_i and K_i;
  enddef;
  def map between K_Concentration and I_to for
    vars I_to and I_to;
  enddef;
  def map between K_Concentration and I_Ki for
    vars I_ki and I_ki;
  enddef;
  def map between K_Concentration and I_Kr for
    vars I_kr and I_kr;
  enddef;
  def map between K_Concentration and I_NaK for
    vars I_nak and I_nak;
  enddef;
  def map between K_Concentration and I_Kp for
    vars I_kp and I_kp;
  enddef;
  def map between Ca_Concentrations and interface for
    vars time and time;
  enddef;
  def map between Ca_Concentrations and parameters for
    vars Cmem and Cmem;
    vars Vjunc and Vjunc;
    vars Vsl and Vsl;
    vars Vsr and Vsr;
    vars Vmyo and Vmyo;
    vars Frdy and Frdy;
    vars J_ca_juncsl and J_ca_juncsl;
    vars J_ca_slmyo and J_ca_slmyo;
    vars Ca_j and Ca_j;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between Ca_Concentrations and I_CaBK for
    vars I_cabk_sl and I_cabk_sl;
    vars I_cabk_junc and I_cabk_junc;
  enddef;
  def map between membrane_potential and Na_Concentrations for
    vars I_Na_tot_junc and I_Na_tot_junc;
    vars I_Na_tot_sl and I_Na_tot_sl;
  enddef;
  def map between membrane_potential and K_Concentration for
    vars I_K_tot and I_K_tot;
  enddef;
  def map between membrane_potential and Ca_Concentrations for
    vars I_Ca_tot_junc and I_Ca_tot_junc;
    vars I_Ca_tot_sl and I_Ca_tot_sl;
  enddef;
  // A novel computational model of the human ventricular action potential and Ca transient
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model is part of a CellML 1.1 model, this segment contains all the model equations describing cellular species. It is imported by smaller CellML models which describe different voltage protocols, and does not run as a standalone model. The units are consistent throughout.
  //
  // Model Structure
  //
  // ABSTRACT: We have developed a detailed mathematical model for Ca handling and ionic currents in the human ventricular myocyte. Our aims were to: (1) simulate basic excitation-contraction coupling phenomena; (2) use realistic repolarizing K current densities; (3) reach steady-state. The model relies on the framework of the rabbit myocyte model previously developed by our group, with subsarcolemmal and junctional compartments where ion channels sense higher [Ca] vs. bulk cytosol. Ion channels and transporters have been modeled on the basis of the most recent experimental data from human ventricular myocytes. Rapidly and slowly inactivating components of I(to) have been formulated to differentiate between endocardial and epicardial myocytes. Transmural gradients of Ca handling proteins and Na pump were also simulated. The model has been validated against a wide set of experimental data including action potential duration (APD) adaptation and restitution, frequency-dependent increase in Ca transient peak and [Na](i). Interestingly, Na accumulation at fast heart rate is a major determinant of APD shortening, via outward shifts in Na pump and Na-Ca exchange currents. We investigated the effects of blocking K currents on APD and repolarization reserve: I(Ks) block does not affect the former and slightly reduces the latter; I(K1) blockade modestly increases APD and more strongly reduces repolarization reserve; I(Kr) blockers significantly prolong APD, an effect exacerbated as pacing frequency is decreased, in good agreement with experimental results in human myocytes. We conclude that this model provides a useful framework to explore excitation-contraction coupling mechanisms and repolarization abnormalities at the single myocyte level.
  //
  // The original paper reference is cited below:
  //
  // A novel computational model of the human ventricular action potential and Ca transient, Eleonora Grandi, Francesco S. Pasqualini, Donald M. Bers, 2010, Journal of Molecular and Cellular Cardiology, volume 48, 112-121. PubMed ID: 19835882 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=19835882&query_hl=1&itool=pubmed_docsum)
enddef;
