<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 15/04/2009 at 18:08:08 using:

COR (0.9.31.1203)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
-->
<model name="hodgkin_huxley_squid_axon_model_1952_modified" cmeta:id="hodgkin_huxley_squid_axon_model_1952_modified" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
   
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_millisecond">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_millivolt">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit units="millivolt" exponent="-1"/>
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="milliS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microF_per_cm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <component name="environment">
      <variable name="time" units="millisecond" public_interface="out" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#time">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <component name="membrane">
      <variable name="V" units="millivolt" initial_value="-75" public_interface="out" cmeta:id="membrane_voltage">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_voltage">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_R" units="millivolt" initial_value="-75" public_interface="out"/>
      <variable name="Cm" units="microF_per_cm2" initial_value="1" cmeta:id="membrane_capacitance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_capacitance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="i_Na" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_K" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_L" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_Stim" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_stimulus_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_start" units="millisecond" initial_value="10" cmeta:id="membrane_stimulus_current_offset">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_offset">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_end" units="millisecond" initial_value="10000"/>
      <variable name="stim_period" units="millisecond" initial_value="1000" cmeta:id="membrane_stimulus_current_period">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_period">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_duration" units="millisecond" initial_value="0.5" cmeta:id="membrane_stimulus_current_duration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_duration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_amplitude" units="microA_per_cm2" initial_value="-20" cmeta:id="membrane_stimulus_current_amplitude">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_amplitude">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Stim</ci>
            <piecewise>
               <piece>
                  <ci>stim_amplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>stim_start</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <ci>stim_end</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>time</ci>
                              <ci>stim_start</ci>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <apply>
                                       <minus/>
                                       <ci>time</ci>
                                       <ci>stim_start</ci>
                                    </apply>
                                    <ci>stim_period</ci>
                                 </apply>
                              </apply>
                              <ci>stim_period</ci>
                           </apply>
                        </apply>
                        <ci>stim_duration</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="microA_per_cm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Stim</ci>
                     <ci>i_Na</ci>
                     <ci>i_K</ci>
                     <ci>i_L</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel">
      <variable name="i_Na" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_fast_sodium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="g_Na" units="milliS_per_cm2" initial_value="120" cmeta:id="membrane_fast_sodium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_Na" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <variable name="m" units="dimensionless" private_interface="in"/>
      <variable name="h" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_Na</ci>
            <apply>
               <plus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">115</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel_m_gate">
        <variable initial_value="0.05" name="m" public_interface="out" units="dimensionless"/>
        <variable name="alpha_m" units="per_millisecond"/>
        <variable name="beta_m" units="per_millisecond"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable name="A" units="per_millisecond"/>
        <!-- these units are the same as the component's-->
        <variable name="B" units="per_millivolt"/>
        <variable name="v0" units="millivolt"/>
        <variable name="U" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>B</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="per_millivolt">0.1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v0</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="millivolt">50</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>A</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt_millisecond">0.1</cn>
                    </apply>
                    <ci>B</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>U</ci>
                <apply>
                    <times/>
                    <ci>B</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>v0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha_m</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>A</ci>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">0.5</cn>
                                    <ci>U</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <leq/>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="millivolt" type="e-notation">1<sep/>-7</cn>
                                </apply>
                                <ci>U</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>U</ci>
                                <cn cellml:units="millivolt" type="e-notation">1<sep/>-7</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>A</ci>
                                <ci>U</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <apply>
                                    <exp/>
                                    <ci>U</ci>
                                </apply>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
            <!--alpha_m = -0.1{per_millivolt_millisecond}*(V+50{millivolt})/(exp(-(V+50{millivolt})/10{millivolt})-1{dimensionless});-->
            <apply>
                <eq/>
                <ci>beta_m</ci>
                <apply>
                    <times/>
                    <cn cellml:units="per_millisecond">4</cn>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="millivolt">75</cn>
                                </apply>
                            </apply>
                            <cn cellml:units="millivolt">18</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>m</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_m</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>m</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_m</ci>
                        <ci>m</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
   <component name="sodium_channel_h_gate">
      <variable name="h" units="dimensionless" initial_value="0.6" public_interface="out"/>
      <variable name="alpha_h" units="per_millisecond"/>
      <variable name="beta_h" units="per_millisecond"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.07</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">75</cn>
                        </apply>
                     </apply>
                     <cn cellml:units="millivolt">20</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_millisecond">1</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">45</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel">
      <variable name="i_K" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_potassium_current">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_potassium_current">
                <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="g_K" units="milliS_per_cm2" initial_value="36" cmeta:id="membrane_potassium_current_conductance">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_potassium_current_conductance">
                <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_K" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <variable name="n" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_K</ci>
            <apply>
               <minus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">12</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <times/>
               <ci>g_K</ci>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel_n_gate">
        <variable initial_value="0.325" name="n" public_interface="out" units="dimensionless"/>
        <variable name="alpha_n" units="per_millisecond"/>
        <variable name="beta_n" units="per_millisecond"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable name="A" units="per_millisecond"/>
        <!-- these units are the same as the component's-->
        <variable name="B" units="per_millivolt"/>
        <variable name="v0" units="millivolt"/>
        <variable name="U" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>B</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="per_millivolt">0.1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v0</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="millivolt">65</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>A</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt_millisecond">0.01</cn>
                    </apply>
                    <ci>B</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>U</ci>
                <apply>
                    <times/>
                    <ci>B</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>v0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha_n</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>A</ci>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">0.5</cn>
                                    <ci>U</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <leq/>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="millivolt" type="e-notation">1<sep/>-7</cn>
                                </apply>
                                <ci>U</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>U</ci>
                                <cn cellml:units="millivolt" type="e-notation">1<sep/>-7</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>A</ci>
                                <ci>U</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <apply>
                                    <exp/>
                                    <ci>U</ci>
                                </apply>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
            <!--alpha_n = -0.01{per_millivolt_millisecond}*(V+65{millivolt})/(exp(-(V+65{millivolt})/10{millivolt})-1{dimensionless});-->
            <apply>
                <eq/>
                <ci>beta_n</ci>
                <apply>
                    <times/>
                    <cn cellml:units="per_millisecond">0.125</cn>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <plus/>
                                <ci>V</ci>
                                <cn cellml:units="millivolt">75</cn>
                            </apply>
                            <cn cellml:units="millivolt">80</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>n</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_n</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>n</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_n</ci>
                        <ci>n</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
   <component name="leakage_current">
      <variable name="i_L" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_leakage_current">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_leakage_current">
                <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="g_L" units="milliS_per_cm2" initial_value="0.3" cmeta:id="membrane_leakage_current_conductance">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_leakage_current_conductance">
                <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_L" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_L</ci>
            <apply>
               <plus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">10.613</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_L</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_channel">
            <component_ref component="sodium_channel_m_gate"/>
            <component_ref component="sodium_channel_h_gate"/>
         </component_ref>
         <component_ref component="potassium_channel">
            <component_ref component="potassium_channel_n_gate"/>
         </component_ref>
         <component_ref component="leakage_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_channel">
         <component_ref component="sodium_channel_m_gate"/>
         <component_ref component="sodium_channel_h_gate"/>
      </component_ref>
      <component_ref component="potassium_channel">
         <component_ref component="potassium_channel_n_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="leakage_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_K" variable_2="i_K"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="leakage_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_L" variable_2="i_L"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="potassium_channel_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
</model>
