// This CellML file was generated on 06/08/2008 at 14:49:15 using:
//
// COR (0.9.31.1015)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
def model iribe_model_2006 as
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit arbitary as base unit;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit nanoA_per_millimolar4 as
    unit ampere {pref: nano};
    unit millimolar {expo: -4};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_per_second as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_nanocoulomb as
    unit coulomb {pref: nano, expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {pref: milli, expo: -2};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp cell_parameters as
    var R: millijoule_per_mole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF {init: 9.5e-5, pub: out};
    var v_i: microlitre {init: 1.6404e-5, pub: out};
    var v_SR: microlitre {init: 3.3477e-6, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp membrane_potential as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -92.849333, pub: out};
    var Cm: microF {pub: in};
    var i_Na: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: nanoA;
    var time: second {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.002};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA {init: -4};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Na+i_b_Na+i_K1+i_K+i_to+i_b_K+i_Ca_L+i_b_Ca+i_NaCa+i_NaK+i_Stim);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: microS {init: 2.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var E_mh: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var time: second {pub: in, priv: out};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.0013809, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    var time: second {pub: in};
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.99569, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: second;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}-shift_INa_inact));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}-shift_INa_inact)));
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp time_dependent_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current
    var i_K: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current_conductance
    var i_Kmax: nanoA {init: 1};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    var x: dimensionless {priv: in};
    var time: second {pub: in, priv: out};
    i_K = i_Kmax*x*(K_i-K_o*exp(-V*F/(R*T)))/140{millimolar};
  enddef;

  def comp time_dependent_rectifier_potassium_current_x_gate as
    var x: dimensionless {init: 5.1127e-2, pub: out};
    var V: millivolt {pub: in};
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    alpha_x = 0.5{per_second}*exp(0.0826{per_millivolt}*(V+50{millivolt}))/(1{dimensionless}+exp(0.057{per_millivolt}*(V+50{millivolt})));
    beta_x = 1.3{per_second}*exp(-0.06{per_millivolt}*(V+20{millivolt}))/(1{dimensionless}+exp(-0.04{per_millivolt}*(V+20{millivolt})));
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: nanoA {pub: out};
    var K_mk1: millimolar {init: 10};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: microS {init: 1};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp(2{dimensionless}*F*(V-E_K-10{millivolt})/(R*T)));
  enddef;

  def comp transient_outward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: microS {init: 0.005};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    var time: second {pub: in, priv: out};
    i_to = g_to*s*r*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.95854, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 1.5185e-8, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: nanoA {pub: out};
    var i_Ca_L_Na: nanoA {pub: out};
    var i_Ca_L_K: nanoA {pub: out};
    var i_Ca_L_Ca: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_Ca_L_Ca: nanoA_per_millimolar {init: 0.25};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var time: second {pub: in, priv: out};
    i_Ca_L_Ca = 4{dimensionless}*d*f*P_Ca_L_Ca*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-2{dimensionless}*(V-50{millivolt})*F/(R*T))))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-2{dimensionless}*(V-50{millivolt})*F/(R*T)));
    i_Ca_L_K = 0.002{dimensionless}*d*f*P_Ca_L_Ca*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T))))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na = 0.01{dimensionless}*d*f*P_Ca_L_Ca*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T))))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca+i_Ca_L_K+i_Ca_L_Na;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 1.7908e-8, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.00001{millivolt}:
        speed_d*120{per_second};
      otherwise:
        speed_d*30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.00001{millivolt}:
        speed_d*120{per_second};
      otherwise:
        speed_d*(-12{per_millivolt_second})*E0_d/(1{dimensionless}-exp(E0_d/10{millivolt}));
    endsel;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 1, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: second;
    var V: millivolt {pub: in};
    var speed_f: dimensionless {init: 0.5};
    var E0_f: millivolt;
    var time: second {pub: in};
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < 0.00001{millivolt}:
        speed_f*25{per_second};
      otherwise:
        speed_f*6.25{per_millivolt_second}*E0_f/(-1{dimensionless}+exp(E0_f/4{millivolt}));
    endsel;
    beta_f = speed_f*50{per_second}/(1{dimensionless}+exp(-E0_f/4{millivolt}));
    tau_f = 1{dimensionless}/(alpha_f+beta_f);
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp sodium_calcium_exchanger as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: nanoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var i_NaCa_max: nanoA_per_millimolar4 {init: 0.0005};
    var gamma: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    i_NaCa = i_NaCa_max*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i)/(1{dimensionless}+Ca_i/0.0069{millimolar});
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 1.36};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 21.7};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i)*1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: nanoA {pub: out};
    var g_b_Ca: microS {init: 0.00025};
    var E_Ca: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp potassium_background_current as
    var i_b_K: nanoA {pub: out};
    var g_b_K: microS {init: 0.0006};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_b_K = g_b_K*(V-E_K);
  enddef;

  def comp sodium_background_current as
    var i_b_Na: nanoA {pub: out};
    var g_b_Na: microS {init: 0.0006};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp CaMKII_factor as
    var F_CaMK: dimensionless {init: 1.028, pub: out};
    var Inf_CaMK: dimensionless;
    var Tau_CaMK: second {init: 0.8};
    var Cmdn_Ca: millimolar {pub: in};
    var time: second {pub: in};
    Inf_CaMK = Cmdn_Ca/0.00005{millimolar};
    ode(F_CaMK, time) = (Inf_CaMK-F_CaMK)/Tau_CaMK;
  enddef;

  def comp RyR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var j_rel: millimolar_per_second {pub: out};
    var K_rel: per_second;
    var F_rel: dimensionless;
    var Ca_i: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var F_CaMK: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var K_rel_max: per_second {init: 500};
    var F_SRCa_RyR: millimolar {init: 0.25089};
    var Tau_SRCa_RyR: second {init: 0.05};
    var N_CaMK: dimensionless;
    var gain_k1: dimensionless {init: 1};
    var gain_k2: dimensionless {init: 1};
    var gain_k3: dimensionless {init: 1};
    var gain_k4: dimensionless {init: 1};
    var k_1: per_second;
    var k_2: per_second;
    var k_3: per_second;
    var k_4: per_second;
    var F_1: dimensionless {init: 0.5268};
    var F_2: dimensionless {init: 8.7508e-6};
    var F_3: dimensionless;
    var time: second {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var K_leak_rate: per_second {init: 0};
    N_CaMK = sqr(F_CaMK/0.7{dimensionless});
    k_1 = gain_k1*(30625000{per_millimolar2_per_second}*sqr(Ca_i)-245{per_nanocoulomb}*i_Ca_L);
    k_2 = gain_k2*450{per_second}/(1{dimensionless}+0.36{millimolar}/Ca_SR);
    k_3 = gain_k3*1.885{per_second}*pow(F_SRCa_RyR/0.22{millimolar}, N_CaMK);
    k_4 = gain_k4*1.8{per_second};
    ode(F_1, time) = k_3*F_3-k_4*F_1-k_1*F_1;
    ode(F_2, time) = k_1*F_1-k_2*F_2;
    F_3 = 1{dimensionless}-(F_1+F_2);
    F_rel = sqr(F_2/(F_2+0.25{dimensionless}));
    ode(F_SRCa_RyR, time) = (Ca_SR-F_SRCa_RyR)/Tau_SRCa_RyR;
    K_rel = K_rel_max*F_SRCa_RyR/(F_SRCa_RyR+0.2{millimolar});
    j_rel = (K_rel*F_rel+K_leak_rate)*(Ca_SR-Ca_i);
  enddef;

  def comp SERCA as
    var j_up: millimolar_per_second {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var uptake_factor: dimensionless {init: 1.0};
    var F_CaMK: dimensionless {pub: in};
    var V_max_f: millimolar_per_second {init: 0.292};
    var V_max_r: millimolar_per_second {init: 0.391};
    var f_b: dimensionless;
    var r_b: dimensionless;
    var Ca_i: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    f_b = sqr(Ca_i/0.00024{millimolar});
    r_b = sqr(Ca_SR/1.64{millimolar});
    j_up = uptake_factor*(F_CaMK*V_max_f*f_b-V_max_r*r_b)/(1{dimensionless}+f_b+r_b);
  enddef;

  def comp calmodulin as
    var Cmdn_Ca: millimolar {init: 3.9636e-6, pub: out};
    var Ca_i: millimolar {pub: in};
    var Cmdn_tot: millimolar {init: 0.02};
    var alpha_cmdn: per_millimolar_per_second {init: 10000};
    var beta_cmdn: per_second {init: 500};
    var time: second {pub: in};
    var dCmdn_Ca_dtime: millimolar_per_second {pub: out};
    dCmdn_Ca_dtime = alpha_cmdn*(Cmdn_tot-Cmdn_Ca)*Ca_i-beta_cmdn*Cmdn_Ca;
    ode(Cmdn_Ca, time) = alpha_cmdn*(Cmdn_tot-Cmdn_Ca)*Ca_i-beta_cmdn*Cmdn_Ca;
  enddef;

  def comp troponin as
    var Trpn_Ca: millimolar {init: 2.7661e-4, pub: out};
    var Ca_i: millimolar {pub: in};
    var Trpn_tot: millimolar {init: 0.07, pub: out};
    var alpha_trpn: per_millimolar_per_second {init: 80000, pub: out};
    var beta_trpn: per_second {init: 200, pub: out};
    var Force_norm: dimensionless {pub: in};
    var time: second {pub: in};
    var dTrpn_Ca_dtime: millimolar_per_second {pub: out};
    dTrpn_Ca_dtime = alpha_trpn*(Trpn_tot-Trpn_Ca)*Ca_i-beta_trpn*(1{dimensionless}+2{dimensionless}*(1{dimensionless}-Force_norm))/3{dimensionless}*Trpn_Ca;
    ode(Trpn_Ca, time) = alpha_trpn*(Trpn_tot-Trpn_Ca)*Ca_i-beta_trpn*(1{dimensionless}+2{dimensionless}*(1{dimensionless}-Force_norm))/3{dimensionless}*Trpn_Ca;
  enddef;

  def comp intracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 9.91e-6, pub: out};
    var i_Ca_L_Ca: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var Cmdn_Ca: millimolar {pub: in};
    var Trpn_Ca: millimolar {pub: in};
    var j_rel: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var v_SR: microlitre {pub: in};
    var v_i: microlitre {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var dCmdn_Ca_dtime: millimolar_per_second {pub: in};
    var dTrpn_Ca_dtime: millimolar_per_second {pub: in};
    ode(Ca_i, time) = -(i_Ca_L_Ca+i_b_Ca-2{dimensionless}*i_NaCa)/(2{dimensionless}*v_i*F)-j_up+j_rel*v_SR/v_i-dCmdn_Ca_dtime-dTrpn_Ca_dtime;
  enddef;

  def comp SR_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_SR: millimolar {init: 0.24886, pub: out};
    var j_rel: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var v_SR: microlitre {pub: in};
    var v_i: microlitre {pub: in};
    var time: second {pub: in};
    ode(Ca_SR, time) = j_up*v_i/v_SR-j_rel;
  enddef;

  def comp intracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 5.8041, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_Ca_L_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var v_i: microlitre {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    ode(Na_i, time) = -conc_clamp*(i_Na+i_b_Na+i_Ca_L_Na+3{dimensionless}*i_NaCa+3{dimensionless}*i_NaK)/(v_i*F);
  enddef;

  def comp intracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 138.22, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var i_K1: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_Ca_L_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var v_i: microlitre {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    ode(K_i, time) = -conc_clamp*(i_K1+i_K+i_to+i_b_K+i_Ca_L_K-2{dimensionless}*i_NaK)/(v_i*F);
  enddef;

  def comp Force as
    var Force: N_per_mm2;
    var zeta: N_per_mm2 {init: 0.1};
    var Force_max: dimensionless;
    var phi_SL: dimensionless;
    var P_1_max: dimensionless;
    var P_2_max: dimensionless;
    var P_3_max: dimensionless;
    var sigma_paths: dimensionless;
    var N_0: dimensionless {init: 0.99917};
    var P_0: dimensionless {init: 9.8593e-5};
    var P_1: dimensionless {init: 1.3331e-4};
    var P_2: dimensionless {init: 2.3505e-4};
    var P_3: dimensionless {init: 1.5349e-4};
    var N_1: dimensionless;
    var alpha_tm: per_second;
    var beta_tm: per_second {init: 40};
    var K_tm: dimensionless;
    var N_tm: dimensionless;
    var SL: micrometre {init: 2.15};
    var SL_norm: dimensionless;
    var f_01: per_second;
    var f_12: per_second;
    var f_23: per_second;
    var g_01: per_second;
    var g_12: per_second;
    var g_23: per_second;
    var f_XB: per_second {init: 10};
    var g_XB: per_second {init: 30};
    var Trpn_Ca: millimolar {pub: in};
    var Trpn_tot: millimolar {pub: in};
    var alpha_trpn: per_millimolar_per_second {pub: in};
    var beta_trpn: per_second {pub: in};
    var Force_norm: dimensionless {pub: out};
    var time: second {pub: in};
    f_01 = 3{dimensionless}*f_XB;
    f_12 = 10{dimensionless}*f_XB;
    f_23 = 7{dimensionless}*f_XB;
    g_01 = g_XB*(2{dimensionless}-SL_norm);
    g_12 = 2{dimensionless}*g_XB*(2{dimensionless}-SL_norm);
    g_23 = 3{dimensionless}*g_XB*(2{dimensionless}-SL_norm);
    SL_norm = (SL-1.7{micrometre})/0.7{micrometre};
    N_tm = 3.5{dimensionless}+2.5{dimensionless}*SL_norm;
    K_tm = 1{dimensionless}/(1{dimensionless}+beta_trpn/alpha_trpn/(0.0017{millimolar}-0.0009{millimolar}*SL_norm));
    alpha_tm = beta_tm*pow(Trpn_Ca/(Trpn_tot*K_tm), N_tm);
    ode(N_0, time) = beta_tm*P_0-alpha_tm*N_0+g_01*N_1;
    ode(P_0, time) = -(beta_tm+f_01)*P_0+alpha_tm*N_0+g_01*P_1;
    ode(P_1, time) = -(beta_tm+f_12+g_01)*P_1+alpha_tm*N_1+f_01*P_0+g_12*P_2;
    ode(P_2, time) = -(f_23+g_12)*P_2+f_12*P_1+g_23*P_3;
    ode(P_3, time) = -g_23*P_3+f_23*P_2;
    N_1 = 1{dimensionless}-(N_0+P_0+P_1+P_2+P_3);
    sigma_paths = 1{second}*g_XB*2{second}*g_XB*3{second}*g_XB+1{second}*f_01*2{second}*g_XB*3{second}*g_XB+1{second}*f_01*1{second}*f_12*3{second}*g_XB+1{second}*f_01*1{second}*f_12*1{second}*f_23;
    P_1_max = 1{second}*f_01*2{second}*g_XB*3{second}*g_XB/sigma_paths;
    P_2_max = 1{second}*f_01*1{second}*f_12*3{second}*g_XB/sigma_paths;
    P_3_max = 1{second}*f_01*1{second}*f_12*1{second}*f_23/sigma_paths;
    Force_max = P_1_max+2{dimensionless}*P_2_max+3{dimensionless}*P_3_max;
    phi_SL = sel
      case (SL >= 1.7{micrometre}) and (SL <= 2{micrometre}):
        (SL-0.6{micrometre})/1.4{micrometre};
      case (SL > 2{micrometre}) and (SL <= 2.2{micrometre}):
        1{dimensionless};
      case (SL > 2.2{micrometre}) and (SL <= 2.3{micrometre}):
        (3.6{micrometre}-SL)/1.4{micrometre};
    endsel;
    Force_norm = phi_SL*(P_1+N_1+2{dimensionless}*P_2+3{dimensionless}*P_3)/Force_max;
    Force = zeta*Force_norm;
  enddef;

  def group as containment for
    comp Force incl
      comp troponin;
    endcomp;
    comp CaMKII_factor incl
      comp membrane_potential;
      comp RyR;
      comp SERCA;
    endcomp;
    comp intracellular_calcium_concentration incl
      comp SR_calcium_concentration;
      comp intracellular_sodium_concentration;
      comp intracellular_potassium_concentration;
      comp calmodulin;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp time_dependent_rectifier_potassium_current incl
      comp time_dependent_rectifier_potassium_current_x_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp sodium_background_current incl
      comp calcium_background_current;
      comp potassium_background_current;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp time_dependent_rectifier_potassium_current incl
      comp time_dependent_rectifier_potassium_current_x_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
  enddef;
  def map between environment and membrane_potential for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current for
    vars time and time;
  enddef;
  def map between environment and time_dependent_rectifier_potassium_current for
    vars time and time;
  enddef;
  def map between environment and transient_outward_current for
    vars time and time;
  enddef;
  def map between environment and L_type_Ca_channel for
    vars time and time;
  enddef;
  def map between environment and CaMKII_factor for
    vars time and time;
  enddef;
  def map between environment and RyR for
    vars time and time;
  enddef;
  def map between environment and calmodulin for
    vars time and time;
  enddef;
  def map between environment and troponin for
    vars time and time;
  enddef;
  def map between environment and intracellular_calcium_concentration for
    vars time and time;
  enddef;
  def map between environment and SR_calcium_concentration for
    vars time and time;
  enddef;
  def map between environment and intracellular_sodium_concentration for
    vars time and time;
  enddef;
  def map between environment and intracellular_potassium_concentration for
    vars time and time;
  enddef;
  def map between environment and Force for
    vars time and time;
  enddef;
  def map between cell_parameters and membrane_potential for
    vars Cm and Cm;
  enddef;
  def map between cell_parameters and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between cell_parameters and time_dependent_rectifier_potassium_current for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
  enddef;
  def map between cell_parameters and time_independent_potassium_current for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
  enddef;
  def map between cell_parameters and L_type_Ca_channel for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between cell_parameters and sodium_calcium_exchanger for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between cell_parameters and sodium_potassium_pump for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
  enddef;
  def map between cell_parameters and intracellular_calcium_concentration for
    vars F and F;
    vars v_SR and v_SR;
    vars v_i and v_i;
  enddef;
  def map between cell_parameters and SR_calcium_concentration for
    vars v_SR and v_SR;
    vars v_i and v_i;
  enddef;
  def map between cell_parameters and intracellular_sodium_concentration for
    vars F and F;
    vars v_i and v_i;
  enddef;
  def map between cell_parameters and intracellular_potassium_concentration for
    vars F and F;
    vars v_i and v_i;
  enddef;
  def map between membrane_potential and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane_potential and time_dependent_rectifier_potassium_current for
    vars V and V;
    vars i_K and i_K;
  enddef;
  def map between membrane_potential and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane_potential and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane_potential and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane_potential and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane_potential and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane_potential and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane_potential and potassium_background_current for
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane_potential and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between time_dependent_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_K and i_K;
    vars K_i and K_i;
  enddef;
  def map between time_dependent_rectifier_potassium_current and time_dependent_rectifier_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_Ca_L_K and i_Ca_L_K;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_Ca_L_Na and i_Ca_L_Na;
  enddef;
  def map between L_type_Ca_channel and RyR for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between potassium_background_current and intracellular_potassium_concentration for
    vars i_b_K and i_b_K;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between CaMKII_factor and calmodulin for
    vars Cmdn_Ca and Cmdn_Ca;
  enddef;
  def map between CaMKII_factor and RyR for
    vars F_CaMK and F_CaMK;
  enddef;
  def map between CaMKII_factor and SERCA for
    vars F_CaMK and F_CaMK;
  enddef;
  def map between RyR and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars j_rel and j_rel;
  enddef;
  def map between RyR and SR_calcium_concentration for
    vars Ca_SR and Ca_SR;
    vars j_rel and j_rel;
  enddef;
  def map between SERCA and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars j_up and j_up;
  enddef;
  def map between SERCA and SR_calcium_concentration for
    vars Ca_SR and Ca_SR;
    vars j_up and j_up;
  enddef;
  def map between calmodulin and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars Cmdn_Ca and Cmdn_Ca;
    vars dCmdn_Ca_dtime and dCmdn_Ca_dtime;
  enddef;
  def map between troponin and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars Trpn_Ca and Trpn_Ca;
    vars dTrpn_Ca_dtime and dTrpn_Ca_dtime;
  enddef;
  def map between troponin and Force for
    vars Trpn_Ca and Trpn_Ca;
    vars Trpn_tot and Trpn_tot;
    vars alpha_trpn and alpha_trpn;
    vars beta_trpn and beta_trpn;
    vars Force_norm and Force_norm;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_potassium_concentration for
    vars conc_clamp and conc_clamp;
  enddef;
enddef;
