// This CellML file was generated on 30/09/2010 at 17:28:18 using:
//
// COR (0.9.31.1393)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// named-attribute: name SuggestedForwardEulerTimestep; 0.0001
def model jafri_rice_winslow_1998 as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_mm as
    unit metre {pref: milli, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {pref: milli, expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit per_mM3_per_ms as
    unit mM {expo: -3};
    unit ms {expo: -1};
  enddef;
  def unit per_mM4_per_ms as
    unit mM {expo: -4};
    unit ms {expo: -1};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uA_per_mmcu as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -3};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {pref: nano, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {pref: nano, expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {init: -84.1638, pub: out};
    var R: gas_constant_units {init: 8.3145e3, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: faradays_constant_units {init: 9.6845e4, pub: out};
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: uF_per_mm2 {init: 0.01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_stim: uA_per_mm2;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: ms {init: 100};
    var stim_end: ms {init: 9000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 500};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: ms {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: uA_per_mm2 {init: 0.516289};
    I_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_mm2};
    endsel;
    ode(V, time) = (I_stim-(i_Na+i_Ca_L_Ca+i_Ca_L_K+i_K+i_NaCa+i_K1+i_Kp+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_mm2 {init: 0.128};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.0328302, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m = 0.08{per_ms}*exp(-V/11{mV});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.988354, pub: out};
    var shift_INa_inact: mV {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{mV}:
        0.135{per_ms}*exp((80{mV}+V-shift_INa_inact)/(-6.8{mV}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        3.56{per_ms}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000{per_ms}*exp(0.35{per_mV}*(V-shift_INa_inact));
      otherwise:
        1{dimensionless}/(0.13{ms}*(1{dimensionless}+exp((V+10.66{mV}-shift_INa_inact)/(-11.1{mV}))));
    endsel;
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.99254, pub: out};
    var shift_INa_inact: mV {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{mV}:
        (-127140{per_mV_ms}*exp(0.2444{per_mV}*(V-shift_INa_inact))-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV}-shift_INa_inact)));
    endsel;
    j_inf = alpha_j*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L_Ca: uA_per_mm2 {pub: out};
    var i_Ca_L_K: uA_per_mm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_Ca: mm_per_ms {init: 33.75e-6};
    var P_K: mm_per_ms {init: 1e-9};
    var p_k: mm_per_ms;
    var i_Ca_L_Ca_half: uA_per_mm2 {init: -4.58e-3};
    var i_Ca_L_Ca_max: uA_per_mm2;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var O: dimensionless {init: 9.84546e-21, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d2_gate
    var O_Ca: dimensionless {init: 0, pub: out};
    var alpha: per_ms;
    var beta: per_ms;
    var gamma: per_ms;
    var alpha_a: per_ms;
    var beta_b: per_ms;
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var g: per_ms {init: 2};
    var f: per_ms {init: 0.3};
    var g_: per_ms {init: 0};
    var f_: per_ms {init: 0};
    var omega: per_ms {init: 0.01};
    var C0: dimensionless {init: 0.997208};
    var C1: dimensionless {init: 6.38897e-5};
    var C2: dimensionless {init: 1.535e-9};
    var C3: dimensionless {init: 1.63909e-14};
    var C4: dimensionless {init: 6.56337e-20};
    var C_Ca0: dimensionless {init: 2.72826e-3};
    var C_Ca1: dimensionless {init: 6.99215e-7};
    var C_Ca2: dimensionless {init: 6.71989e-11};
    var C_Ca3: dimensionless {init: 2.87031e-15};
    var C_Ca4: dimensionless {init: 4.59752e-20};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ca_SS: mM {pub: in};
    var Cao: mM {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var y: dimensionless {priv: in};
    i_Ca_L_Ca = i_Ca_L_Ca_max*y*(O+O_Ca);
    i_Ca_L_K = p_k*y*(O+O_Ca)*V*sqr(F)/(R*T)*(Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1{dimensionless});
    p_k = P_K/(1{dimensionless}+i_Ca_L_Ca_max/i_Ca_L_Ca_half);
    i_Ca_L_Ca_max = P_Ca*4{dimensionless}*V*sqr(F)/(R*T)*(0.001{mM}*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    alpha = 0.4{per_ms}*exp((V+12{mV})/10{mV});
    beta = 0.05{per_ms}*exp((V+12{mV})/(-13{mV}));
    alpha_a = alpha*a;
    beta_b = beta/b;
    gamma = 0.1875{per_mM_per_ms}*Ca_SS;
    ode(C0, time) = beta*C1+omega*C_Ca0-(4{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4{dimensionless}*alpha*C0+2{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3{dimensionless}*alpha*C1+3{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2{dimensionless}+2{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2{dimensionless}*alpha*C2+4{dimensionless}*beta*C4+omega/pow(b, 3{dimensionless})*C_Ca3-(beta*3{dimensionless}+alpha+gamma*pow(a, 3{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4{dimensionless})*C_Ca4-(beta*4{dimensionless}+f+gamma*pow(a, 4{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C_Ca0-(4{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4{dimensionless}*alpha_a*C_Ca0+2{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3{dimensionless}*alpha_a*C_Ca1+3{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2{dimensionless}+2{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2{dimensionless}*alpha_a*C_Ca2+4{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3{dimensionless})*C3-(beta_b*3{dimensionless}+alpha_a+omega/pow(b, 3{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+g_*O_Ca+gamma*pow(a, 4{dimensionless})*C4-(beta_b*4{dimensionless}+f_+omega/pow(b, 4{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = f_*C_Ca4-g_*O_Ca;
  enddef;

  def comp L_type_Ca_channel_y_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var y: dimensionless {init: 0.998983, pub: out};
    var y_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_y: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+55{mV})/7.5{mV}))+0.1{dimensionless}/(1{dimensionless}+exp((-V+21{mV})/6{mV}));
    tau_y = 20{ms}+600{ms}/(1{dimensionless}+exp((V+30{mV})/9.5{mV}));
  enddef;

  def comp time_dependent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current
    var i_K: uA_per_mm2 {pub: out};
    var g_K: mS_per_mm2;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current_conductance
    var g_K_max: mS_per_mm2 {init: 0.001128};
    var E_K: mV;
    var P_NaK: dimensionless {init: 0.01833};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    E_K = R*T/F*ln((Ko+P_NaK*Nao)/(Ki+P_NaK*Nai));
    i_K = g_K*Xi*sqr(X)*(V-E_K);
  enddef;

  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.000928836, pub: out};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_X = 0.0000719{per_mV_ms}*(V+30{mV})/(1{dimensionless}-exp(-0.148{per_mV}*(V+30{mV})));
    beta_X = 0.000131{per_mV_ms}*(V+30{mV})/(-1{dimensionless}+exp(0.0687{per_mV}*(V+30{mV})));
    ode(X, time) = alpha_X*(1{dimensionless}-X)-beta_X*X;
  enddef;

  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    Xi = 1{dimensionless}/(1{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {pub: out, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_mm2;
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    alpha_K1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    beta_K1 = (0.49124{per_ms}*exp(0.08032{per_mV}*(V+5.476{mV}-E_K1))+1{per_ms}*exp(0.06175{per_mV}*(V-(E_K1+594.31{mV}))))/(1{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 8.28e-5};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    E_Kp = E_K1;
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  def comp Na_Ca_exchanger as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: uA_per_mm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: uA_per_mm2 {init: 50};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    i_NaCa = k_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 6.032e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 0.013};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{mM})-1{dimensionless});
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var EnsCa: mV;
    var VnsCa: mV;
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    VnsCa = V-EnsCa;
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = P_ns_Ca*sqr(1{dimensionless})*VnsCa*sqr(F)/(R*T)*(0.75{dimensionless}*Nai*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Nao)/(exp(VnsCa*F/(R*T))-1{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1{dimensionless})*VnsCa*sqr(F)/(R*T)*(0.75{dimensionless}*Ki*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Ko)/(exp(VnsCa*F/(R*T))-1{dimensionless});
  enddef;

  def comp calcium_subsystem as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: mM {init: 9.94893e-11, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_SS: mM {init: 1.36058e-4, pub: out};
    var Am: per_mm {init: 546.69, pub: out};
    var V_myo: dimensionless {init: 0.92, pub: out};
    var RyR_open: dimensionless;
    var P_O1: dimensionless {init: 1.19168e-3};
    var P_O2: dimensionless {init: 6.30613e-9};
    var P_C1: dimensionless {init: 0.762527};
    var P_C2: dimensionless {init: 0.236283};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var v1: per_ms {init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var v2: per_ms {init: 0.58e-4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var v3: mM_per_ms {init: 1.8e-3};
    var nCa: dimensionless {init: 4};
    var mCa: dimensionless {init: 3};
    var k_a_plus: per_mM4_per_ms {init: 1.215e10};
    var k_a_minus: per_ms {init: 0.1425};
    var k_b_plus: per_mM3_per_ms {init: 4.05e7};
    var k_b_minus: per_ms {init: 1.93};
    var k_c_plus: per_ms {init: 0.018};
    var k_c_minus: per_ms {init: 0.0008};
    var k_htrpn_plus: per_mM_per_ms {init: 20};
    var k_htrpn_minus: per_ms {init: 0.066e-3};
    var k_ltrpn_plus: per_mM_per_ms {init: 40};
    var k_ltrpn_minus: per_ms {init: 0.04};
    var tau_tr: ms {init: 34.48};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: mM {init: 1.17504};
    var Ca_NSR: mM {init: 1.243891};
    var V_JSR: dimensionless;
    var V_NSR: dimensionless;
    var V_SS: dimensionless;
    var K_mup: mM {init: 0.5e-3};
    var K_mCMDN: mM {init: 2.38e-3};
    var K_mCSQN: mM {init: 0.8};
    var tau_xfer: ms {init: 3.125};
    var HTRPN_tot: mM {init: 0.14};
    var LTRPN_tot: mM {init: 0.07};
    var HTRPNCa: mM {init: 0.13598};
    var LTRPNCa: mM {init: 0.00635};
    var CSQN_tot: mM {init: 15};
    var CMDN_tot: mM {init: 0.05};
    var Bi: dimensionless;
    var B_SS: dimensionless;
    var B_JSR: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: mM_per_ms;
    var J_leak: mM_per_ms;
    var J_up: mM_per_ms;
    var J_tr: mM_per_ms;
    var J_xfer: mM_per_ms;
    var J_trpn: mM_per_ms;
    var J_htrpn: mM_per_ms;
    var J_ltrpn: mM_per_ms;
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    V_SS = 5.828e-5{dimensionless}*V_myo;
    V_NSR = 0.081{dimensionless}*V_myo;
    V_JSR = 0.00464{dimensionless}*V_myo;
    J_rel = v1*RyR_open*(Ca_JSR-Ca_SS);
    RyR_open = P_O1+P_O2;
    ode(P_C1, time) = -k_a_plus*pow(Ca_SS, nCa)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_SS, nCa)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_SS, mCa)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_SS, mCa)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_leak = v2*(Ca_NSR-Cai);
    J_up = v3*sqr(Cai)/(sqr(K_mup)+sqr(Cai));
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_SS-Cai)/tau_xfer;
    J_htrpn = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_ltrpn = k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
    J_trpn = J_htrpn+J_ltrpn;
    ode(HTRPNCa, time) = J_htrpn;
    ode(LTRPNCa, time) = J_ltrpn;
    Bi = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Cai));
    B_SS = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_SS));
    B_JSR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn+(i_Ca_b-2{dimensionless}*i_NaCa+i_p_Ca)*Am/(2{dimensionless}*V_myo*F)));
    ode(Ca_SS, time) = B_SS*(J_rel*V_JSR/V_SS-J_xfer*V_myo/V_SS-i_Ca_L_Ca*Am/(2{dimensionless}*V_SS*F));
    ode(Ca_JSR, time) = B_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = (J_up-J_leak)*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
  enddef;

  def comp ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: mM {init: 10.2042, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: mM {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: mM {init: 143.727, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: mM {init: 5.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: mM {init: 1.8, pub: out};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var Am: per_mm {pub: in};
    var V_myo: dimensionless {pub: in};
    ode(Nai, time) = -conc_clamp*(i_Na+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*Am/(V_myo*F);
    ode(Ki, time) = -conc_clamp*(i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-i_NaK*2{dimensionless}))*Am/(V_myo*F);
    ode(Ko, time) = conc_clamp*(i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-i_NaK*2{dimensionless}))*Am/(V_myo*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp calcium_subsystem;
      comp ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between calcium_subsystem and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_K and i_Ca_L_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars i_ns_Ca and i_ns_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_subsystem for
    vars F and F;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and calcium_subsystem for
    vars Ca_SS and Ca_SS;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars i_Ca_L_K and i_Ca_L_K;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_subsystem for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_subsystem for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and calcium_subsystem for
    vars Cai and Cai;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_subsystem for
    vars Cai and Cai;
  enddef;
  def map between ionic_concentrations and calcium_subsystem for
    vars Am and Am;
    vars V_myo and V_myo;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
enddef;
