// This CellML file was generated on 22/01/2008 at 14:33:59 using:
//
// COR (0.9.31.857)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model lindblad_atrial_model_1996 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_4 as
    unit millimolar {expo: -4};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit picoA_per_millimolar_4 as
    unit ampere {pref: pico};
    unit millimolar {expo: -4};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit nanolitre_per_second as
    unit litre {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -69.83663, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 308, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nanoF {init: 0.00005};
    var time: second {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_Cl: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 9};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.0008};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA {init: -2};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Kr+i_Ks+i_Na+i_Ca_L+i_Ca_T+i_to+i_K1+i_B_Na+i_B_Ca+i_B_Cl+i_p+i_CaP+i_NaCa+i_Stim);
  enddef;

  def comp sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var P_Na: nanolitre_per_second {init: 0.0000014};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h1: dimensionless {priv: in};
    var h2: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_c/Na_i);
    i_Na = P_Na*pow(m, 3{dimensionless})*(0.635{dimensionless}*h1+0.365{dimensionless}*h2)*Na_c*V*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless});
  enddef;

  def comp sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.01309, pub: out};
    var E0_m: millivolt;
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_m = V+44.4{millivolt};
    alpha_m = -460{per_millivolt_second}*E0_m/(exp(E0_m/(-12.673{millivolt}))-1{dimensionless});
    beta_m = 18400{per_second}*exp(E0_m/(-12.673{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp sodium_current_h1_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h1: dimensionless {init: 0.706, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 44.9{per_second}*exp((V+66.9{millivolt}-shift_INa_inact)/(-5.57{millivolt}));
    beta_h = 1491{per_second}/(1{dimensionless}+323.3{dimensionless}*exp((V+94.6{millivolt}-shift_INa_inact)/(-12.9{millivolt})));
    h_infinity = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h1 = 0.03{second}/(1{dimensionless}+exp((V+40{millivolt})/6{millivolt}))+3.5e-4{second};
    ode(h1, time) = (h_infinity-h1)/tau_h1;
  enddef;

  def comp sodium_current_h2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var h2: dimensionless {init: 0.61493, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_h2: second;
    var h_infinity: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_h2 = 0.12{second}/(1{dimensionless}+exp((V+60{millivolt})/2{millivolt}))+0.00295{second};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: nanoS {init: 0.004};
    var E_Ca_app: millivolt {init: 60};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d_prime: dimensionless;
    var d_L: dimensionless {priv: in};
    var f_L: dimensionless {priv: in};
    d_prime = 1{dimensionless}/(1{dimensionless}+exp((V-33{millivolt})/(-12{millivolt})));
    i_Ca_L = g_Ca_L*d_L*f_L*d_prime*(V-E_Ca_app);
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d_L: dimensionless {init: 3e-5, pub: out};
    var E0_alpha_d_L: millivolt;
    var E0_beta_d_L: millivolt;
    var alpha_d_L: per_second;
    var beta_d_L: per_second;
    var d_L_infinity: dimensionless;
    var tau_d_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_alpha_d_L = V+35{millivolt};
    E0_beta_d_L = V-5{millivolt};
    alpha_d_L = -16.72{per_millivolt_second}*E0_alpha_d_L/(exp(E0_alpha_d_L/(-2.5{millivolt}))-1{dimensionless})+(-50{per_millivolt_second}*V/(exp(V/(-4.808{millivolt}))-1{dimensionless}));
    beta_d_L = 4.48{per_millivolt_second}*E0_beta_d_L/(exp(E0_beta_d_L/2.5{millivolt})-1{dimensionless});
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+0.95{millivolt})/(-6.6{millivolt})));
    tau_d_L = 1{dimensionless}/(alpha_d_L+beta_d_L);
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
  enddef;

  def comp L_type_Ca_channel_f_L_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f_L: dimensionless {init: 0.99981, pub: out};
    var E0_f_L: millivolt;
    var alpha_f_L: per_second;
    var beta_f_L: per_second;
    var f_L_infinity: dimensionless {pub: out};
    var x_f: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_f_L = V+28{millivolt};
    alpha_f_L = 8.49{per_millivolt_second}*E0_f_L/(exp(E0_f_L/4{millivolt})-1{dimensionless});
    beta_f_L = 67.922{per_second}/(1{dimensionless}+exp(E0_f_L/(-4{millivolt})));
    f_L_infinity = alpha_f_L/(alpha_f_L+beta_f_L);
    x_f = (V+37.427{millivolt})/20.213{millivolt};
    tau_f_L = 0.211{second}*exp(-x_f*x_f)+0.015{second};
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: picoA {pub: out};
    var g_Ca_T: nanoS {init: 0.006};
    var E_Ca_T: millivolt {init: 38};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d_T: dimensionless {priv: in};
    var f_T: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_T_gate as
    var d_T: dimensionless {init: 4.6e-4, pub: out};
    var E0_d_T: millivolt;
    var alpha_d_T: per_second;
    var beta_d_T: per_second;
    var d_T_infinity: dimensionless;
    var tau_d_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_d_T = V+23{millivolt};
    alpha_d_T = 674.173{per_second}*exp(E0_d_T/30{millivolt});
    beta_d_T = 674.173{per_second}*exp(E0_d_T/(-30{millivolt}));
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp(E0_d_T/(-6.1{millivolt})));
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
  enddef;

  def comp T_type_Ca_channel_f_T_gate as
    var f_T: dimensionless {init: 0.30752, pub: out};
    var E0_f_T: millivolt;
    var alpha_f_T: per_second;
    var beta_f_T: per_second;
    var f_T_infinity: dimensionless {pub: out};
    var tau_f_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_f_T = V+75{millivolt};
    alpha_f_T = 9.637{per_second}*exp(E0_f_T/(-83.333{millivolt}));
    beta_f_T = 9.637{per_second}*exp(E0_f_T/15.385{millivolt});
    f_T_infinity = alpha_f_T/(alpha_f_T+beta_f_T);
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: picoA {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: nanoS {init: 0.050002};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s1: dimensionless {priv: in};
    var s2: dimensionless {priv: in};
    var s3: dimensionless {priv: in};
    E_K = R*T/F*ln(K_c/K_i);
    i_to = g_to*r*(0.59{dimensionless}*pow(s1, 3{dimensionless})+0.41{dimensionless}*pow(s2, 3{dimensionless}))*(0.6{dimensionless}*pow(s3, 6{dimensionless})+0.4{dimensionless})*(V-E_K);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 6e-5, pub: out};
    var alpha_r: per_second;
    var beta_r: per_second;
    var tau_r: second;
    var r_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_r = 386.6{per_second}*exp(V/12{millivolt});
    beta_r = 8.011{per_second}*exp(V/(-7.2{millivolt}));
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+15{millivolt})/(-5.633{millivolt})));
    tau_r = 1{dimensionless}/(alpha_r+beta_r)+4e-4{second};
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s1_gate as
    var s1: dimensionless {init: 0.5753, pub: out};
    var tau_s1: second;
    var s1_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s1_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.29{millivolt})/7.06{millivolt}));
    tau_s1 = 0.5466{second}/(1{dimensionless}+exp((V+32.8{millivolt})/0.1{millivolt}))+0.0204{second};
    ode(s1, time) = (s1_infinity-s1)/tau_s1;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s2_gate as
    var s2: dimensionless {init: 0.39871, pub: out};
    var tau_s2: second;
    var s2_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s2_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.29{millivolt})/7.06{millivolt}));
    tau_s2 = 5.75{second}/(1{dimensionless}+exp((V+32.8{millivolt})/0.1{millivolt}))+0.45{second}/(1{dimensionless}+exp((V-13.54{millivolt})/(-13.97{millivolt})));
    ode(s2, time) = (s2_infinity-s2)/tau_s2;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s3_gate as
    var s3: dimensionless {init: 0.57363, pub: out};
    var tau_s3: second;
    var s3_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s3_infinity = (1{dimensionless}/(1{dimensionless}+exp((V+50.67{millivolt})/27.38{millivolt}))+0.666{dimensionless})/1.666{dimensionless};
    tau_s3 = 7.5{second}/(1{dimensionless}+exp((V+23{millivolt})/0.5{millivolt}))+0.5{second};
    ode(s3, time) = (s3_infinity-s3)/tau_s3;
  enddef;

  def comp delayed_rectifier_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: nanoS {init: 0.0025};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: nanoS {init: 0.0035};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var z: dimensionless {priv: in};
    var p_a: dimensionless {priv: in};
    var p_i: dimensionless {priv: in};
    i_Ks = g_Ks*z*(V-E_K);
    i_Kr = g_Kr*p_a*p_i*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_current_z_gate as
    var z: dimensionless {init: 0.02032, pub: out};
    var alpha_z: per_second;
    var beta_z: per_second;
    var tau_z: second;
    var z_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_z = 1.66{per_second}*exp(V/69.452{millivolt});
    beta_z = 0.3{per_second}*exp(V/(-21.826{millivolt}));
    z_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-0.9{millivolt})/(-13.8{millivolt})));
    tau_z = 1{dimensionless}/(alpha_z+beta_z)+0.06{second};
    ode(z, time) = (z_infinity-z)/tau_z;
  enddef;

  def comp delayed_rectifier_K_current_pa_gate as
    var p_a: dimensionless {init: 1.6e-4, pub: out};
    var alpha_p_a: per_second;
    var beta_p_a: per_second;
    var tau_p_a: second;
    var p_a_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_p_a = 9{per_second}*exp(V/25.371{millivolt});
    beta_p_a = 1.3{per_second}*exp(V/(-13.026{millivolt}));
    p_a_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+5.1{millivolt})/(-7.4{millivolt})));
    tau_p_a = 1{dimensionless}/(alpha_p_a+beta_p_a);
    ode(p_a, time) = (p_a_infinity-p_a)/tau_p_a;
  enddef;

  def comp delayed_rectifier_K_current_pi_gate as
    var p_i: dimensionless {init: 0.76898, pub: out};
    var alpha_p_i: per_second;
    var beta_p_i: per_second;
    var tau_p_i: second;
    var p_i_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_p_i = 100{per_second}*exp(V/(-54.645{millivolt}));
    beta_p_i = 656{per_second}*exp(V/106.157{millivolt});
    p_i_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+47.3921{millivolt})/18.6603{millivolt}));
    tau_p_i = 1{dimensionless}/(alpha_p_i+beta_p_i);
    ode(p_i, time) = (p_i_infinity-p_i)/tau_p_i;
  enddef;

  def comp inward_rectifier as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: nanoS {init: 0.005088};
    var KmK1: millimolar {init: 0.59};
    var steepK1: dimensionless {init: 1.393};
    var shiftK1: millivolt {init: -3.6};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1 = g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3{dimensionless})*1{dimensionless}/(1{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_Cl: picoA {pub: out};
    var g_B_Na: nanoS {init: 6.4e-5};
    var g_B_Ca: nanoS {init: 3.1e-5};
    var g_B_Cl: nanoS {init: 1.2e-4};
    var E_Ca: millivolt;
    var E_Cl: millivolt;
    var E_B_Cl: millivolt;
    var E_Na: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Cl_c: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_c/Ca_i);
    E_Cl = R*T/F*ln(Cl_i/Cl_c);
    E_B_Cl = E_Cl-0.49{dimensionless}*(E_Cl+30.59{millivolt});
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    i_B_Cl = g_B_Cl*(V-E_B_Cl)*(1{dimensionless}+exp((V-(E_Cl+36.95{millivolt}))/74.514{millivolt}));
  enddef;

  def comp sodium_potassium_pump as
    var i_p: picoA {pub: out};
    var k_NaK_K: millimolar {init: 1};
    var k_NaK_Na: millimolar {init: 11};
    var i_NaK_max: picoA {init: 0.06441};
    var K_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_p = i_NaK_max*K_c/(K_c+k_NaK_K)*pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(k_NaK_Na, 1.5{dimensionless}))*1.6{dimensionless}/(1.5{dimensionless}+exp((V+60{millivolt})/(-40{millivolt})));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA {init: 0.009509};
    var k_CaP: millimolar {init: 2e-4};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: picoA_per_millimolar_4 {init: 2e-5};
    var d_NaCa: per_millimolar_4 {init: 3e-4};
    var gamma: dimensionless {init: 0.45};
    var Na_i: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_c*exp(gamma*F*V/(R*T))-pow(Na_c, 3{dimensionless})*Ca_i*exp((gamma-1{dimensionless})*V*F/(R*T)))/(1{dimensionless}+d_NaCa*(pow(Na_c, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_c)*(1{dimensionless}+Ca_i/0.0069{millimolar}));
  enddef;

  def comp intracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 8.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 7.305e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 100, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1};
    var Cl_i: millimolar {init: 30, pub: out};
    var Vol_i: nanolitre {init: 1.26e-5, pub: out};
    var Vol_Ca: nanolitre {init: 5.884e-6};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var dOCdt: per_second {pub: in};
    var dOTCdt: per_second {pub: in};
    var dOTMgCdt: per_second {pub: in};
    ode(Na_i, time) = -conc_clamp*(i_Na+i_B_Na+3{dimensionless}*i_p+3{dimensionless}*i_NaCa)/(Vol_i*F);
    ode(K_i, time) = -conc_clamp*(i_to+i_K1+i_Kr+i_Ks-2{dimensionless}*i_p)/(Vol_i*F);
    ode(Ca_i, time) = -(i_Ca_L+i_Ca_T+i_B_Ca+i_CaP-2{dimensionless}*i_NaCa+i_up-i_rel)/(2{dimensionless}*Vol_Ca*F)-(0.08{millimolar}*dOTCdt+0.16{millimolar}*dOTMgCdt+0.045{millimolar}*dOCdt);
  enddef;

  def comp intracellular_Ca_buffering as
    var O_C: dimensionless {init: 0.02981};
    var dOCdt: per_second {pub: out};
    var O_TC: dimensionless {init: 0.01442};
    var dOTCdt: per_second {pub: out};
    var O_TMgC: dimensionless {init: 0.23532};
    var dOTMgCdt: per_second {pub: out};
    var O_TMgMg: dimensionless {init: 0.67476, pub: out};
    var Mg_i: millimolar {init: 2.5};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    dOCdt = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_C)-476{per_second}*O_C;
    ode(O_C, time) = dOCdt;
    dOTCdt = 78400{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TC)-392{per_second}*O_TC;
    ode(O_TC, time) = dOTCdt;
    dOTMgCdt = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TMgC-O_TMgMg)-6.6{per_second}*O_TMgC;
    ode(O_TMgC, time) = dOTMgCdt;
    ode(O_TMgMg, time) = 2000{per_millimolar_second}*Mg_i*(1{dimensionless}-O_TMgC-O_TMgMg)-666{per_second}*O_TMgMg;
  enddef;

  def comp cleft_space_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_c: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_c: millimolar {init: 2.5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_c: millimolar {init: 5, pub: out};
    var Cl_c: millimolar {init: 132, pub: out};
  enddef;

  def comp Ca_handling_by_the_SR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: picoA {pub: out};
    var i_up: picoA {pub: out};
    var i_tr: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up_max: picoA {init: 2.8};
    var k_cyca: millimolar {init: 0.0003};
    var k_srca: millimolar {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var alpha_rel: picoA_per_millimolar {init: 200};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 0.59984};
    var Ca_up: millimolar {init: 0.64913};
    var Vol_up: nanolitre {init: 3.969e-7};
    var Vol_rel: nanolitre {init: 4.41e-8};
    var r_act: per_second;
    var r_inact: per_second;
    var O_Calse: dimensionless {init: 0.41837};
    var F1: dimensionless {init: 0.21603};
    var F2: dimensionless {init: 0.00205};
    var F3: dimensionless {init: 0.68492};
    var tau_tr: second {init: 0.01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcacyt
    var k_rel: millimolar {init: 0.0003};
    var k_F3: per_second {init: 0.815};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(O_Calse, time) = 480{per_millimolar_second}*Ca_rel*(1{dimensionless}-O_Calse)-400{per_second}*O_Calse;
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*Vol_rel*F)-31{millimolar}*ode(O_Calse, time);
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*Vol_up*F);
    ode(F1, time) = k_F3*F3-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    ode(F3, time) = F2*r_inact-k_F3*F3;
    r_act = 203.8{per_second}*exp(0.08{per_millivolt}*(V-40{millivolt}))+203.8{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    r_inact = 33.96{per_second}+339.6{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    i_up = I_up_max*(Ca_i/k_cyca-sqr(k_xcs)*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    i_tr = (Ca_up-Ca_rel)*2{dimensionless}*F*Vol_rel/tau_tr;
    i_rel = alpha_rel*sqr(F2/(F2+0.25{dimensionless}))*(Ca_rel-Ca_i);
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h1_gate;
        comp sodium_current_h2_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_L_gate;
        comp L_type_Ca_channel_f_L_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_d_T_gate;
        comp T_type_Ca_channel_f_T_gate;
      endcomp;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s1_gate;
        comp Ca_independent_transient_outward_K_current_s2_gate;
        comp Ca_independent_transient_outward_K_current_s3_gate;
      endcomp;
      comp delayed_rectifier_K_current incl
        comp delayed_rectifier_K_current_z_gate;
        comp delayed_rectifier_K_current_pa_gate;
        comp delayed_rectifier_K_current_pi_gate;
      endcomp;
      comp inward_rectifier;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
      comp Ca_handling_by_the_SR;
      comp intracellular_ion_concentrations;
      comp intracellular_Ca_buffering;
      comp cleft_space_ion_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h1_gate;
      comp sodium_current_h2_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_L_gate;
      comp L_type_Ca_channel_f_L_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_T_gate;
      comp T_type_Ca_channel_f_T_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s1_gate;
      comp Ca_independent_transient_outward_K_current_s2_gate;
      comp Ca_independent_transient_outward_K_current_s3_gate;
    endcomp;
    comp delayed_rectifier_K_current incl
      comp delayed_rectifier_K_current_z_gate;
      comp delayed_rectifier_K_current_pa_gate;
      comp delayed_rectifier_K_current_pi_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_ion_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars i_to and i_to;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and delayed_rectifier_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Cl and i_B_Cl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between membrane and Ca_handling_by_the_SR for
    vars V and V;
    vars F and F;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and cleft_space_ion_concentrations for
    vars Na_c and Na_c;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between T_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_to and i_to;
    vars K_i and K_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars K_c and K_c;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between inward_rectifier and cleft_space_ion_concentrations for
    vars K_c and K_c;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars Ca_i and Ca_i;
    vars Cl_i and Cl_i;
  enddef;
  def map between background_currents and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Cl_c and Cl_c;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_p and i_p;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and cleft_space_ion_concentrations for
    vars K_c and K_c;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars i_rel and i_rel;
    vars i_up and i_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars dOCdt and dOCdt;
    vars dOTCdt and dOTCdt;
    vars dOTMgCdt and dOTMgCdt;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars h1 and h1;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars h2 and h2;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_infinity and h_infinity;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars d_L and d_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L_gate for
    vars f_L and f_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_T_gate for
    vars d_T and d_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_T_gate for
    vars f_T and f_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s1_gate for
    vars s1 and s1;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s2_gate for
    vars s2 and s2;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s3_gate for
    vars s3 and s3;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_z_gate for
    vars z and z;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pa_gate for
    vars p_a and p_a;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pi_gate for
    vars p_i and p_i;
    vars time and time;
    vars V and V;
  enddef;
enddef;
