// This CellML file was generated on 06/11/2007 at 17:08:44 using:
//
// COR (0.9.31.807)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Auckland, Bioengineering Institute
// comment: FN James Lawson; This model has had a repeating current stimulus protocol added to allow it to simulate trains of action potentials. This model is known to run in PCEnv and produce the correct output.
// created: W3CDTF 2001-09-15T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-02-25T11:01:56+13:00; Units checked, curated. Some cmeta:id's added to variables to allow referencing by PCEnv session file; Given Penny; Family Noble; Other J
// modification: W3CDTF 2006-03-31; added metadata; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2007-08-17T12:59:52+12:00; Added a repeating stimulus protocol using the stimulus duration (2ms) and amplitude (-25.5 microA_per_cm2) used for the original single stimulus.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-08-17T12:59:52+12:00; Added a repeating stimulus protocol using the stimulus duration (2ms) and amplitude (-25.5 microA_per_cm2) used for the original single stimulus.; Given James; Family Lawson; Other Richard
// simulation: endingValue 10000
// reference: Pubmed_id 1709839; Given C; Family Luo; Other H; Given Y; Family Rudy; title A Model of the Ventricular Cardiac Action Potential. Depolarization, repolarization and their interaction; volume 68(6); first_page 1501; title Circulation Research; W3CDTF 1991-01-01; last_page 1526
// reference: subject_type keyword; Ventricular Myocyte; cardiac; electrophysiology; ventricular myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Luo and Rudy's mathematical model of the membrane action potential of the mammalian ventricular cell. It describes six ionic currents and it is a development of the Beeler-Reuter 1977 mammalian ventricular model, using Hodgkin-Huxley type equations.
def model luo_rudy_1991 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit per_1000_centimetre as
    unit metre {expo: -1, mult: 1000, pref: -2};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -83.853, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96484.6, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: microF_per_cm2 {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_stim: microA_per_cm2;
    var time: millisecond {pub: in};
    var i_Na: microA_per_cm2 {pub: in};
    var i_si: microA_per_cm2 {pub: in};
    var i_K: microA_per_cm2 {pub: in};
    var i_K1: microA_per_cm2 {pub: in};
    var i_Kp: microA_per_cm2 {pub: in};
    var i_b: microA_per_cm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 100};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_end
    var stim_end: millisecond {init: 100000000000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: microA_per_cm2 {init: -25.5};
    I_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_cm2};
    endsel;
    ode(V, time) = -1{dimensionless}/C*(I_stim+i_Na+i_si+i_K+i_K1+i_Kp+i_b);
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: milliS_per_cm2 {init: 23};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var E_Na: millivolt;
    var time: millisecond {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    // range-low: 0
    // range-high: 1
    var m: dimensionless {init: 0.00187018, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.9804713, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var h_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((80{millivolt}+V-shift_INa_inact)/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+310000{per_millisecond}*exp(0.35{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    h_inf = alpha_h*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.98767124, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-127140{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    j_inf = alpha_j*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp slow_inward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_si: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_si: milliS_per_cm2 {init: 0.09};
    var E_si: millivolt;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Cai: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    E_si = 7.7{millivolt}-13.0287{millivolt}*ln(Cai/1{millimolar});
    i_si = P_si*d*f*(V-E_si);
  enddef;

  def comp slow_inward_current_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 0.00316354, pub: out};
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_d = 0.095{per_millisecond}*exp(-0.01{per_millivolt}*(V-5{millivolt}))/(1{dimensionless}+exp(-0.072{per_millivolt}*(V-5{millivolt})));
    beta_d = 0.07{per_millisecond}*exp(-0.017{per_millivolt}*(V+44{millivolt}))/(1{dimensionless}+exp(0.05{per_millivolt}*(V+44{millivolt})));
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp slow_inward_current_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.99427859, pub: out};
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_f = 0.012{per_millisecond}*exp(-0.008{per_millivolt}*(V+28{millivolt}))/(1{dimensionless}+exp(0.15{per_millivolt}*(V+28{millivolt})));
    beta_f = 0.0065{per_millisecond}*exp(-0.02{per_millivolt}*(V+30{millivolt}))/(1{dimensionless}+exp(-0.2{per_millivolt}*(V+30{millivolt})));
    tau_f = 1{dimensionless}/(alpha_f+beta_f);
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp time_dependent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current
    var i_K: microA_per_cm2 {pub: out};
    var g_K: milliS_per_cm2;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current_conductance
    var g_K_max: milliS_per_cm2 {init: 0.282};
    var E_K: millivolt;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = g_K_max*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    i_K = g_K*X*Xi*(V-E_K);
  enddef;

  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.16647703, pub: out};
    var alpha_X: per_millisecond;
    var beta_X: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_X = 0.0005{per_millisecond}*exp(0.083{per_millivolt}*(V+50{millivolt}))/(1{dimensionless}+exp(0.057{per_millivolt}*(V+50{millivolt})));
    beta_X = 0.0013{per_millisecond}*exp(-0.06{per_millivolt}*(V+20{millivolt}))/(1{dimensionless}+exp(-0.04{per_millivolt}*(V+20{millivolt})));
    ode(X, time) = alpha_X*(1{dimensionless}-X)-beta_X*X;
  enddef;

  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var temp_Xi: dimensionless;
    temp_Xi = 2.837{millivolt}*(exp(0.04{per_millivolt}*(V+77{millivolt}))-1{dimensionless})/(V+77{millivolt});
    Xi = sel
      case V > -100{millivolt}:
        temp_Xi/exp(0.04{per_millivolt}*(V+35{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
  enddef;

  def comp time_independent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: microA_per_cm2 {pub: out};
    var E_K1: millivolt {priv: out, pub: out};
    var g_K1: milliS_per_cm2;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_max: milliS_per_cm2 {init: 0.6047};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = g_K1_max*sqrt(Ko/5.4{millimolar});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_millisecond;
    var beta_K1: per_millisecond;
    var V: millivolt {pub: in};
    var E_K1: millivolt {pub: in};
    alpha_K1 = 1.02{per_millisecond}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K1-59.215{millivolt})));
    beta_K1 = (0.49124{per_millisecond}*exp(0.08032{per_millivolt}*(V+5.476{millivolt}-E_K1))+1{per_millisecond}*exp(0.06175{per_millivolt}*(V-(E_K1+594.31{millivolt}))))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K1+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_plateau_potassium_current
    var i_Kp: microA_per_cm2 {pub: out};
    var E_Kp: millivolt;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_plateau_potassium_current_conductance
    var g_Kp: milliS_per_cm2 {init: 0.0183};
    var Kp: dimensionless;
    var V: millivolt {pub: in};
    var E_K1: millivolt {pub: in};
    E_Kp = E_K1;
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  def comp background_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current
    var i_b: microA_per_cm2 {pub: out};
    var E_b: millivolt {init: -59.87};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current_conductance
    var g_b: milliS_per_cm2 {init: 0.03921};
    var V: millivolt {pub: in};
    i_b = g_b*(V-E_b);
  enddef;

  def comp ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: millimolar {init: 18, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: millimolar {init: 145, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp intracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: millimolar {init: 0.0002, pub: out};
    var time: millisecond {pub: in};
    var i_si: microA_per_cm2 {pub: in};
    ode(Cai, time) = -0.0001{per_1000_centimetre}/1{coulomb_per_mole}*i_si+0.07{per_millisecond}*(0.0001{millimolar}-Cai);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp slow_inward_current incl
        comp slow_inward_current_d_gate;
        comp slow_inward_current_f_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp background_current;
      comp ionic_concentrations;
      comp intracellular_calcium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp slow_inward_current incl
      comp slow_inward_current_d_gate;
      comp slow_inward_current_f_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between slow_inward_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_inward_current for
    vars V and V;
    vars i_si and i_si;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and background_current for
    vars V and V;
    vars i_b and i_b;
  enddef;
  def map between slow_inward_current and intracellular_calcium_concentration for
    vars i_si and i_si;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars Ki and Ki;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between time_independent_potassium_current and plateau_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between slow_inward_current and slow_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_inward_current and slow_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars V and V;
    vars E_K1 and E_K1;
  enddef;
  // Luo-Rudy Mammalian Ventricular Model I 1991
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit checked and is known to replicate the published results in PCEnv and COR. A PCEnv session is also available for this model.
  //
  // Model Structure
  //
  // In 1991, Ching-hsing Luo and Yoram Rudy published a mathematical model of the ventricular cardiac action potential. This original model is the first of the two Luo-Rudy models, and it has subsequently come to be known as the Luo-Rudy I model. It is a significant update of the Beeler-Reuter mammalian ventricular model (1977) (see the figure below), and like the the Beeler-Reuter model, the Luo-Rudy I model uses Hodgkin-Huxley type equations to calculate ionic currents.
  //
  // The complete original paper reference is cited below:
  //
  // A Model of the Ventricular Cardiac Action Potential - Depolarisation, Repolarisation and Their Interaction (http://circres.ahajournals.org/cgi/content/abstract/68/6/1501), Ching-hsing Luo and Yoram Rudy, 1991 Circulation Research (http://circres.ahajournals.org/), 68, 1501-1526. PubMed ID: 1709839 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=1709839&dopt=Abstract)
  //
  // cell diagram of the LR-I model showing ionic currents, pumps and exchangers within the sarcolemma
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the LR-I model.
  //
  // the cellml rendering of the Luo-Rudy I model
  //
  // The network defined in the CellML description of the Luo-Rudy I model. A key describing the significance of the shapes of the components and the colours of the connections between them is in the notation guide (${HTML_EXMPL_GRAPHICAL_NOTATION}).
  //
  // The membrane physically contains the currents, as indicated by the blue arrows in . The currents act independently and are not connected to each other. Four of the channels encapsulate and contain further components which represent activation and inactivation gates. The addition of an encapsulation relationship informs modellers and processing software that the gates are important parts of the current model. It also prevents any other components that aren't also encapsulated by the parent component from connecting to its gates, effectively hiding them from the rest of the model.
  //
  // The breakdown of the model into components and the definition of encapsulation and containment relationships between them is somewhat arbitrary. When considering how a model should be broken into components, modellers are encouraged to consider which parts of a model might be re-used and how the physiological elements of the system being modelled are naturally bounded. Containment relationships should be used to provide simple rendering information for processing software (ideally, this will correspond to the layout of the physical system), and encapsulation should be used to group sets of components into sub-models.
enddef;
