<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 30/10/2007 at 17:17:44 using:

COR (0.9.31.801)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
-->
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="mcallister_noble_tsien_1975_modelB" name="mcallister_noble_tsien_1975_modelB">

   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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   </rdf:RDF>

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>McAllister-Noble-Tsien Purkinje Fibre Model 1975</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This is a code and units checked version of the model including two variants - A and B - with different formulations for the transient chloride current r gate. The kinetics for this gate in Model B come from an extensive study by Fozzard and Hiraoka. Results using model A are very dependent on initial conditions. Model B has a notch which is less frequency labile than that of model A. This is model B. The model runs in both OpenCell and COR to replicate the published results. The units have been checked and are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Following Denis Noble's 1962 model of cardiac action potentials in Purkinje fibres, the next significant development in cardiac membrane modelling occurred when R.E. McAllister, D. Noble and R.W. Tsien (1975) published a paper which formulated new ionic current equations based on new experimental data.  The description of the kinetics of the currents is still based on the Hodgkin-Huxley formalism, but the currents themselves incorporate some significant new changes, and the total ionic current is broken down into nine discrete, individual ionic fluxes (see the figure below). 
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Reconstruction of the Electrical Activity of Cardiac Purkinje Fibres, McAllister, R.E. Noble, D. and Tsien, R.W. 1975,
            <emphasis>Journal of Physiology</emphasis>, 251, 1-59.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=1185607&amp;dopt=Abstract">PubMed ID: 1185607</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell diagram of the MNT model showing ionic currents across the sarcoplasmic reticulum</title>
    </objectinfo>
    <imagedata fileref="mcallister_noble_tsien_1975.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram describing the current flows across the cell membrane that are captured in the MNT model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_millisecond">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_millivolt">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit units="millivolt" exponent="-1"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units name="milliS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microF_per_cm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="concentration_units">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="millisecond" public_interface="out" name="time" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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         </rdf:RDF>
      </variable>
   </component>
   <component name="membrane">
      <variable units="millivolt" public_interface="out" name="V" initial_value="-78.041367" cmeta:id="membrane_voltage">
      	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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	</rdf:RDF>
      </variable>
      <variable units="microF_per_cm2" name="C" initial_value="10" cmeta:id="membrane_capacitance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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         </rdf:RDF>
      </variable>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Na"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_si"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_K2"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_x1"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_x2"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_qr"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_K1"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Na_b"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Cl_b"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_si</ci>
                     <ci>i_K2</ci>
                     <ci>i_x1</ci>
                     <ci>i_x2</ci>
                     <ci>i_qr</ci>
                     <ci>i_K1</ci>
                     <ci>i_Na_b</ci>
                     <ci>i_Cl_b</ci>
                  </apply>
               </apply>
               <ci>C</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="fast_sodium_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_Na" cmeta:id="membrane_fast_sodium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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         </rdf:RDF>
      </variable>
      <variable units="millivolt" public_interface="out" name="E_Na" initial_value="40"/>
      <variable units="milliS_per_cm2" name="g_Na" initial_value="150" cmeta:id="membrane_fast_sodium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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         </rdf:RDF>
      </variable>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="m"/>
      <variable units="dimensionless" private_interface="in" name="h"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="fast_sodium_current_m_gate">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="0.02566853"/>
      <variable units="per_millisecond" name="alpha_m"/>
      <variable units="per_millisecond" name="beta_m"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millivolt_millisecond">1</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">47</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">47</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">40</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.056</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="millivolt">72</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="fast_sodium_current_h_gate">
      <variable units="dimensionless" public_interface="out" name="h" initial_value="0.78656359"/>
      <variable units="per_millisecond" name="alpha_h"/>
      <variable units="per_millisecond" name="beta_h"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.0085</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.184</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="millivolt">71</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_millisecond">2.5</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.082</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">10</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="secondary_inward_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_si"/>
      <variable units="milliS_per_cm2" name="g_si" initial_value="0.8"/>
      <variable units="milliS_per_cm2" name="g_si_" initial_value="0.04"/>
      <variable units="dimensionless" name="g_si_mult" initial_value="1.0" cmeta:id="membrane_L_type_calcium_current_conductance">
      	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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      	</rdf:RDF>
      </variable>
      <variable units="millivolt" name="E_si" initial_value="70"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="d"/>
      <variable units="dimensionless" private_interface="in" name="f"/>
      <variable units="dimensionless" private_interface="in" name="d1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_si</ci>
            <apply>
               <times/>
               <ci>g_si_mult</ci>
	       <apply>
               	  <plus/>
                  <apply>
                     <times/>
                     <ci>g_si</ci>
                     <ci>d</ci>
                     <ci>f</ci>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_si</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>g_si_</ci>
                     <ci>d1</ci>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_si</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="secondary_inward_current_d_gate">
      <variable units="dimensionless" public_interface="out" name="d" initial_value="0.00293135"/>
      <variable units="per_millisecond" name="alpha_d"/>
      <variable units="per_millisecond" name="beta_d"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millivolt_millisecond">0.002</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">40</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.1</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">40</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_d</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.02</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.0888</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="millivolt">40</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>d</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_d</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>d</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_d</ci>
                  <ci>d</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="secondary_inward_current_f_gate">
      <variable units="dimensionless" public_interface="out" name="f" initial_value="0.80873917"/>
      <variable units="per_millisecond" name="alpha_f"/>
      <variable units="per_millisecond" name="beta_f"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_f</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.000987</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.04</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="millivolt">60</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_f</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_millisecond">0.02</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.087</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">26</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>f</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_f</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>f</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_f</ci>
                  <ci>f</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="secondary_inward_current_d1_gate">
      <variable units="dimensionless" public_interface="out" name="d1"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>d1</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.15</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">40</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="pacemaker_potassium_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_K2"/>
      <variable units="microA_per_cm2" public_interface="out" name="I_K2"/>
      <variable units="millivolt" name="E_K" initial_value="-110"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="s"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K2</ci>
            <apply>
               <times/>
               <ci>I_K2</ci>
               <ci>s</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>I_K2</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="microA_per_cm2">2.8</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <ci>E_K</ci>
                           </apply>
                           <cn cellml:units="millivolt">25</cn>
                        </apply>
                     </apply>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">60</cn>
                        </apply>
                        <cn cellml:units="millivolt">12.5</cn>
                     </apply>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">60</cn>
                        </apply>
                        <cn cellml:units="millivolt">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="pacemaker_potassium_current_s_gate">
      <variable units="dimensionless" public_interface="out" name="s" initial_value="0.75473994"/>
      <variable units="per_millisecond" name="alpha_s"/>
      <variable units="per_millisecond" name="beta_s"/>
      <variable units="millivolt" name="E_s" initial_value="-52"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_s</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millivolt_millisecond">0.001</cn>
                  <apply>
                     <minus/>
                     <ci>V</ci>
                     <ci>E_s</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.2</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                           <ci>E_s</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_s</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.00005</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.067</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_s</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>s</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_s</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>s</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_s</ci>
                  <ci>s</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="plateau_potassium_current1">
      <variable units="microA_per_cm2" public_interface="out" name="i_x1"/>
      <variable units="microA_per_cm2" name="I_x1"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="x1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_x1</ci>
            <apply>
               <times/>
               <ci>x1</ci>
               <ci>I_x1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>I_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="microA_per_cm2">1.2</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">95</cn>
                           </apply>
                           <cn cellml:units="millivolt">25</cn>
                        </apply>
                     </apply>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
               </apply>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="millivolt">45</cn>
                     </apply>
                     <cn cellml:units="millivolt">25</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="plateau_potassium_current1_x1_gate">
      <variable units="dimensionless" public_interface="out" name="x1" initial_value="0.02030289"/>
      <variable units="per_millisecond" name="alpha_x1"/>
      <variable units="per_millisecond" name="beta_x1"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millisecond" type="e-notation">5<sep/>-4</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">50</cn>
                        </apply>
                        <cn cellml:units="millivolt">12.1</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">50</cn>
                        </apply>
                        <cn cellml:units="millivolt">17.5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millisecond">0.0013</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">16.67</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_x1</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>x1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_x1</ci>
                  <ci>x1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="plateau_potassium_current2">
      <variable units="microA_per_cm2" public_interface="out" name="i_x2"/>
      <variable units="microA_per_cm2" name="I_x2"/>
      <variable units="microA_per_cm2" name="g_x2" initial_value="25"  cmeta:id="membrane_rapid_delayed_rectifier_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
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      	 </rdf:RDF>
      </variable>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="x2"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_x2</ci>
            <apply>
               <times/>
               <ci>x2</ci>
               <ci>I_x2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>I_x2</ci>
            <apply>
               <plus/>
	       <ci>g_x2</ci>
               <cn cellml:units="microA_per_cm2">25</cn>
               <apply>
                  <times/>
                  <cn cellml:units="microA_per_cm2">1</cn>
                  <cn cellml:units="per_millivolt">0.385</cn>
                  <ci>V</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="plateau_potassium_current2_x2_gate">
      <variable units="dimensionless" public_interface="out" name="x2" initial_value="0.0176854"/>
      <variable units="per_millisecond" name="alpha_x2"/>
      <variable units="per_millisecond" name="beta_x2"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_x2</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millisecond">0.000127</cn>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">19</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_x2</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millisecond">0.0003</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">16.67</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_x2</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>x2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_x2</ci>
                  <ci>x2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="transient_chloride_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_qr"/>
      <variable units="millivolt" public_interface="out" name="E_Cl" initial_value="-70"/>
      <variable units="milliS_per_cm2" name="g_qr" initial_value="2.5"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="q"/>
      <variable units="dimensionless" private_interface="in" name="r"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_qr</ci>
            <apply>
               <times/>
               <ci>g_qr</ci>
               <ci>q</ci>
               <ci>r</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Cl</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="transient_chloride_current_q_gate">
      <variable units="dimensionless" public_interface="out" name="q" initial_value="3.11285794"/>
      <variable units="per_millisecond" name="alpha_q"/>
      <variable units="per_millisecond" name="beta_q"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_q</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_millivolt_millisecond">0.008</cn>
                  <ci>V</ci>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_millivolt">0.1</cn>
                        </apply>
                        <ci>V</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_q</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.08</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.0888</cn>
                     </apply>
                     <ci>V</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>q</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_q</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>q</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_q</ci>
                  <ci>q</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="transient_chloride_current_r_gate">
      <variable units="dimensionless" public_interface="out" name="r" initial_value="0.13500116"/>
      <variable units="per_millisecond" name="alpha_r"/>
      <variable units="per_millisecond" name="beta_r"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_r</ci>
            <apply>
               <times/>
               <cn cellml:units="per_millisecond">0.000033</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn cellml:units="millivolt">17</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_r</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_millisecond">0.033</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">8</cn>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>r</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_r</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>r</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_r</ci>
                  <ci>r</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_independent_outward_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_K1"/>
      <variable units="millivolt" name="E_K1" initial_value="-30"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="microA_per_cm2" public_interface="in" name="I_K2"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K1</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <ci>I_K2</ci>
                  <cn cellml:units="dimensionless">2.8</cn>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <cn cellml:units="milliS_per_cm2">0.2</cn>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_K1</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <minus/>
                                 <ci>V</ci>
                                 <ci>E_K1</ci>
                              </apply>
                           </apply>
                           <cn cellml:units="millivolt">25</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_background_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_Na_b"/>
      <variable units="milliS_per_cm2" name="g_Nab" initial_value="0.105"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millivolt" public_interface="in" name="E_Na"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na_b</ci>
            <apply>
               <times/>
               <ci>g_Nab</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="chloride_background_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_Cl_b"/>
      <variable units="milliS_per_cm2" name="g_Clb" initial_value="0.01"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millivolt" public_interface="in" name="E_Cl"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Cl_b</ci>
            <apply>
               <times/>
               <ci>g_Clb</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Cl</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="fast_sodium_current">
            <component_ref component="fast_sodium_current_m_gate"/>
            <component_ref component="fast_sodium_current_h_gate"/>
         </component_ref>
         <component_ref component="secondary_inward_current">
            <component_ref component="secondary_inward_current_d_gate"/>
            <component_ref component="secondary_inward_current_f_gate"/>
            <component_ref component="secondary_inward_current_d1_gate"/>
         </component_ref>
         <component_ref component="pacemaker_potassium_current">
            <component_ref component="pacemaker_potassium_current_s_gate"/>
         </component_ref>
         <component_ref component="plateau_potassium_current1">
            <component_ref component="plateau_potassium_current1_x1_gate"/>
         </component_ref>
         <component_ref component="plateau_potassium_current2">
            <component_ref component="plateau_potassium_current2_x2_gate"/>
         </component_ref>
         <component_ref component="transient_chloride_current">
            <component_ref component="transient_chloride_current_q_gate"/>
            <component_ref component="transient_chloride_current_r_gate"/>
         </component_ref>
         <component_ref component="time_independent_outward_current"/>
         <component_ref component="sodium_background_current"/>
         <component_ref component="chloride_background_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="fast_sodium_current">
         <component_ref component="fast_sodium_current_m_gate"/>
         <component_ref component="fast_sodium_current_h_gate"/>
      </component_ref>
      <component_ref component="secondary_inward_current">
         <component_ref component="secondary_inward_current_d_gate"/>
         <component_ref component="secondary_inward_current_f_gate"/>
         <component_ref component="secondary_inward_current_d1_gate"/>
      </component_ref>
      <component_ref component="pacemaker_potassium_current">
         <component_ref component="pacemaker_potassium_current_s_gate"/>
      </component_ref>
      <component_ref component="transient_chloride_current">
         <component_ref component="transient_chloride_current_q_gate"/>
         <component_ref component="transient_chloride_current_r_gate"/>
      </component_ref>
      <component_ref component="plateau_potassium_current1">
         <component_ref component="plateau_potassium_current1_x1_gate"/>
      </component_ref>
      <component_ref component="plateau_potassium_current2">
         <component_ref component="plateau_potassium_current2_x2_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_2="environment" component_1="membrane"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="fast_sodium_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="secondary_inward_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="pacemaker_potassium_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="plateau_potassium_current1"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="plateau_potassium_current2"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="transient_chloride_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="time_independent_outward_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="sodium_background_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="chloride_background_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="fast_sodium_current" component_1="membrane"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Na" variable_1="i_Na"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="secondary_inward_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_si" variable_1="i_si"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="pacemaker_potassium_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_K2" variable_1="i_K2"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="plateau_potassium_current1"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_x1" variable_1="i_x1"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="plateau_potassium_current2"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_x2" variable_1="i_x2"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="transient_chloride_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_qr" variable_1="i_qr"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="time_independent_outward_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_K1" variable_1="i_K1"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="sodium_background_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Na_b" variable_1="i_Na_b"/>
   </connection>
   <connection>
      <map_components component_2="membrane" component_1="chloride_background_current"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Cl_b" variable_1="i_Cl_b"/>
   </connection>
   <connection>
      <map_components component_2="fast_sodium_current" component_1="sodium_background_current"/>
      <map_variables variable_2="E_Na" variable_1="E_Na"/>
   </connection>
   <connection>
      <map_components component_2="pacemaker_potassium_current" component_1="time_independent_outward_current"/>
      <map_variables variable_2="I_K2" variable_1="I_K2"/>
   </connection>
   <connection>
      <map_components component_2="chloride_background_current" component_1="transient_chloride_current"/>
      <map_variables variable_2="E_Cl" variable_1="E_Cl"/>
   </connection>
   <connection>
      <map_components component_2="fast_sodium_current_m_gate" component_1="fast_sodium_current"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="fast_sodium_current_h_gate" component_1="fast_sodium_current"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="secondary_inward_current_d_gate" component_1="secondary_inward_current"/>
      <map_variables variable_2="d" variable_1="d"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="secondary_inward_current_f_gate" component_1="secondary_inward_current"/>
      <map_variables variable_2="f" variable_1="f"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="secondary_inward_current_d1_gate" component_1="secondary_inward_current"/>
      <map_variables variable_2="d1" variable_1="d1"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="pacemaker_potassium_current_s_gate" component_1="pacemaker_potassium_current"/>
      <map_variables variable_2="s" variable_1="s"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="transient_chloride_current_q_gate" component_1="transient_chloride_current"/>
      <map_variables variable_2="q" variable_1="q"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="transient_chloride_current_r_gate" component_1="transient_chloride_current"/>
      <map_variables variable_2="r" variable_1="r"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="plateau_potassium_current1_x1_gate" component_1="plateau_potassium_current1"/>
      <map_variables variable_2="x1" variable_1="x1"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="plateau_potassium_current2_x2_gate" component_1="plateau_potassium_current2"/>
      <map_variables variable_2="x2" variable_1="x2"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
<rdf:RDF>
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  <rdf:Description rdf:about="rdf:#61216139-b585-4b5d-bb47-51b547c4a479">
    <bqs:Pubmed_id>1185607</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#d1ddce59-9950-4a24-a03c-1299110cf274"/>
  </rdf:Description>
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</rdf:RDF>
</model>
