// This CellML file was generated on 16/01/2008 at 16:52:25 using:
//
// COR (0.9.31.857)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model nygren_atrial_model_1998 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar_4 as
    unit millimolar {expo: -4};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit picoA_per_millimolar_4 as
    unit ampere {pref: pico};
    unit millimolar {expo: -4};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit nanolitre_per_second as
    unit litre {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -74.2525, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 306.15, pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nanoF {init: 0.05};
    var time: second {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 9};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.006};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA {init: -280};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_Na+i_Ca_L+i_t+i_sus+i_K1+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa);
  enddef;

  def comp sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var P_Na: nanolitre_per_second {init: 0.0016};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h1: dimensionless {priv: in};
    var h2: dimensionless {priv: in};
    i_Na = P_Na*pow(m, 3{dimensionless})*(0.9{dimensionless}*h1+0.1{dimensionless}*h2)*Na_c*V*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless});
    E_Na = R*T/F*ln(Na_c/Na_i);
  enddef;

  def comp sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.0032017, pub: out};
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(m, time) = (m_infinity-m)/tau_m;
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+27.12{millivolt})/(-8.21{millivolt})));
    tau_m = 4.2e-5{second}*exp(-sqr((V+25.57{millivolt})/28.8{millivolt}))+2.4e-5{second};
  enddef;

  def comp sodium_current_h1_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h1: dimensionless {init: 0.8814, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var h_infinity: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(h1, time) = (h_infinity-h1)/tau_h1;
    h_infinity = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/(1{dimensionless}+exp((V+63.6{millivolt}-shift_INa_inact)/5.3{millivolt}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    tau_h1 = 0.03{second}/(1{dimensionless}+exp((V+35.1{millivolt}-shift_INa_inact)/3.2{millivolt}))+0.0003{second};
  enddef;

  def comp sodium_current_h2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var h2: dimensionless {init: 0.8742, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_h2: second;
    var h_infinity: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
    tau_h2 = 0.12{second}/(1{dimensionless}+exp((V+35.1{millivolt}-shift_INa_inact)/3.2{millivolt}))+0.003{second};
  enddef;

  def comp L_type_Ca_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: nanoS {init: 6.75};
    var E_Ca_app: millivolt {init: 60};
    var f_Ca: dimensionless;
    var k_Ca: millimolar {init: 0.025};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_d: millimolar {pub: in};
    var d_L: dimensionless {priv: in};
    var f_L_1: dimensionless {priv: in};
    var f_L_2: dimensionless {priv: in};
    i_Ca_L = g_Ca_L*d_L*(f_Ca*f_L_1+(1{dimensionless}-f_Ca)*f_L_2)*(V-E_Ca_app);
    f_Ca = Ca_d/(Ca_d+k_Ca);
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d_L: dimensionless {init: 1.3005e-5, pub: out};
    var d_L_infinity: dimensionless;
    var tau_d_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/(-5.8{millivolt})));
    tau_d_L = 0.0027{second}*exp(-sqr((V+35{millivolt})/30{millivolt}))+0.002{second};
  enddef;

  def comp L_type_Ca_channel_f_L1_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f_L_1: dimensionless {init: 0.9986, pub: out};
    var f_L_infinity: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f_L1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_L_1, time) = (f_L_infinity-f_L_1)/tau_f_L1;
    f_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+27.4{millivolt})/7.1{millivolt}));
    tau_f_L1 = 0.161{second}*exp(-sqr((V+40{millivolt})/14.4{millivolt}))+0.01{second};
  enddef;

  def comp L_type_Ca_channel_f_L2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    var f_L_2: dimensionless {init: 0.9986, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tau_f_L2: second;
    var f_L_infinity: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_L_2, time) = (f_L_infinity-f_L_2)/tau_f_L2;
    tau_f_L2 = 1.3323{second}*exp(-sqr((V+40{millivolt})/14.2{millivolt}))+0.0626{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_t: picoA {pub: out};
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_t: nanoS {init: 7.5};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    i_t = g_t*r*s*(V-E_K);
    E_K = R*T/F*ln(K_c/K_i);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 0.0010678, pub: out};
    var tau_r: second;
    var r_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-1{millivolt})/(-11{millivolt})));
    tau_r = 0.0035{second}*exp(-sqr(V/30{millivolt}))+0.0015{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 0.949, pub: out};
    var tau_s: second;
    var s_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s, time) = (s_infinity-s)/tau_s;
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+40.5{millivolt})/11.5{millivolt}));
    tau_s = 0.4812{second}*exp(-sqr((V+52.45{millivolt})/14.97{millivolt}))+0.01414{second};
  enddef;

  def comp sustained_outward_K_current as
    var i_sus: picoA {pub: out};
    var g_sus: nanoS {init: 2.75};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var r_sus: dimensionless {priv: in};
    var s_sus: dimensionless {priv: in};
    i_sus = g_sus*r_sus*s_sus*(V-E_K);
  enddef;

  def comp sustained_outward_K_current_r_sus_gate as
    var r_sus: dimensionless {init: 0.00015949, pub: out};
    var tau_r_sus: second;
    var r_sus_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r_sus, time) = (r_sus_infinity-r_sus)/tau_r_sus;
    r_sus_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+4.3{millivolt})/(-8{millivolt})));
    tau_r_sus = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp sustained_outward_K_current_s_sus_gate as
    var s_sus: dimensionless {init: 0.9912, pub: out};
    var tau_s_sus: second;
    var s_sus_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s_sus, time) = (s_sus_infinity-s_sus)/tau_s_sus;
    s_sus_infinity = 0.4{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/10{millivolt}))+0.6{dimensionless};
    tau_s_sus = 0.047{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+0.3{second};
  enddef;

  def comp delayed_rectifier_K_currents as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: nanoS {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: nanoS {init: 0.5};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var p_a: dimensionless {priv: in};
    var p_i: dimensionless {priv: in};
    i_Ks = g_Ks*n*(V-E_K);
    i_Kr = g_Kr*p_a*p_i*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_currents_n_gate as
    var n: dimensionless {init: 0.0048357, pub: out};
    var tau_n: second;
    var n_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-19.9{millivolt})/(-12.7{millivolt})));
    tau_n = 0.7{second}+0.4{second}*exp(-sqr((V-20{millivolt})/20{millivolt}));
  enddef;

  def comp delayed_rectifier_K_currents_pa_gate as
    var p_a: dimensionless {init: 0.0001, pub: out};
    var tau_p_a: second;
    var p_a_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(p_a, time) = (p_a_infinity-p_a)/tau_p_a;
    p_a_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+15{millivolt})/(-6{millivolt})));
    tau_p_a = 0.03118{second}+0.21718{second}*exp(-sqr((V+20.1376{millivolt})/22.1996{millivolt}));
  enddef;

  def comp delayed_rectifier_K_currents_pi_gate as
    var p_i: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    p_i = 1{dimensionless}/(1{dimensionless}+exp((V+55{millivolt})/24{millivolt}));
  enddef;

  def comp inward_rectifier as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: nanoS {init: 3};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1 = g_K1*pow(K_c/1{millimolar}, 0.4457{dimensionless})*(V-E_K)/(1{dimensionless}+exp(1.5{dimensionless}*(V-E_K+3.6{millivolt})*F/(R*T)));
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var g_B_Na: nanoS {init: 0.060599};
    var g_B_Ca: nanoS {init: 0.078681};
    var E_Ca: millivolt;
    var E_Na: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_c/Ca_i);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var k_NaK_K: millimolar {init: 1};
    var k_NaK_Na: millimolar {init: 11};
    var i_NaK_max: picoA {init: 70.8253};
    var K_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_c/(K_c+k_NaK_K)*pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(k_NaK_Na, 1.5{dimensionless}))*(V+150{millivolt})/(V+200{millivolt});
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA {init: 4};
    var k_CaP: millimolar {init: 0.0002};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: picoA_per_millimolar_4 {init: 0.0374842};
    var d_NaCa: per_millimolar_4 {init: 0.0003};
    var gamma: dimensionless {init: 0.45};
    var Na_i: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_c*exp(gamma*F*V/(R*T))-pow(Na_c, 3{dimensionless})*Ca_i*exp((gamma-1{dimensionless})*V*F/(R*T)))/(1{dimensionless}+d_NaCa*(pow(Na_c, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_c));
  enddef;

  def comp intracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 8.5547, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 6.729e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 129.435, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_d: millimolar {init: 7.2495e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    var phi_Na_en: picoA {init: -1.68, pub: out};
    var Vol_i: nanolitre {init: 0.005884, pub: out};
    var Vol_d: nanolitre;
    var i_di: picoA;
    var tau_di: second {init: 0.01};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var dOCdt: per_second {pub: in};
    var dOTCdt: per_second {pub: in};
    var dOTMgCdt: per_second {pub: in};
    Vol_d = 0.02{dimensionless}*Vol_i;
    ode(Na_i, time) = -conc_clamp*(i_Na+i_B_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+phi_Na_en)/(Vol_i*F);
    ode(K_i, time) = -conc_clamp*(i_t+i_sus+i_K1+i_Kr+i_Ks-2{dimensionless}*i_NaK)/(Vol_i*F);
    ode(Ca_i, time) = -(-i_di+i_B_Ca+i_CaP-2{dimensionless}*i_NaCa+i_up-i_rel)/(2{dimensionless}*Vol_i*F)-(0.08{millimolar}*dOTCdt+0.16{millimolar}*dOTMgCdt+0.045{millimolar}*dOCdt);
    ode(Ca_d, time) = -(i_Ca_L+i_di)/(2{dimensionless}*Vol_d*F);
    i_di = (Ca_d-Ca_i)*2{dimensionless}*F*Vol_d/tau_di;
  enddef;

  def comp intracellular_Ca_buffering as
    var O_C: dimensionless {init: 0.0275};
    var dOCdt: per_second {pub: out};
    var O_TC: dimensionless {init: 0.0133};
    var dOTCdt: per_second {pub: out};
    var O_TMgC: dimensionless {init: 0.1961};
    var dOTMgCdt: per_second {pub: out};
    var O_TMgMg: dimensionless {init: 0.7094};
    var Mg_i: millimolar {init: 2.5};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    ode(O_C, time) = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_C)-476{per_second}*O_C;
    dOCdt = ode(O_C, time);
    ode(O_TC, time) = 78400{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TC)-392{per_second}*O_TC;
    dOTCdt = ode(O_TC, time);
    ode(O_TMgC, time) = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TMgC-O_TMgMg)-6.6{per_second}*O_TMgC;
    dOTMgCdt = ode(O_TMgC, time);
    ode(O_TMgMg, time) = 2000{per_millimolar_second}*Mg_i*(1{dimensionless}-O_TMgC-O_TMgMg)-666{per_second}*O_TMgMg;
  enddef;

  def comp cleft_space_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_c: millimolar {init: 130.011, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_c: millimolar {init: 1.8147, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_c: millimolar {init: 5.3581, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var Vol_i: nanolitre {pub: in};
    var Vol_c: nanolitre;
    var tau_Na: second {init: 14.3};
    var tau_K: second {init: 10};
    var tau_Ca: second {init: 24.7};
    var Na_b: millimolar {init: 130};
    var Ca_b: millimolar {init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#bath_potassium_concentration
    var K_b: millimolar {init: 5.4};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var phi_Na_en: picoA {pub: in};
    Vol_c = 0.136{dimensionless}*Vol_i;
    ode(Na_c, time) = conc_clamp*((Na_b-Na_c)/tau_Na+(i_Na+i_B_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+phi_Na_en)/(Vol_c*F));
    ode(K_c, time) = conc_clamp*((K_b-K_c)/tau_K+(i_t+i_sus+i_K1+i_Kr+i_Ks-2{dimensionless}*i_NaK)/(Vol_c*F));
    ode(Ca_c, time) = conc_clamp*((Ca_b-Ca_c)/tau_Ca+(i_Ca_L+i_B_Ca+i_CaP-2{dimensionless}*i_NaCa)/(2{dimensionless}*Vol_c*F));
  enddef;

  def comp Ca_handling_by_the_SR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: picoA {pub: out};
    var i_up: picoA {pub: out};
    var i_tr: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up_max: picoA {init: 2800};
    var k_cyca: millimolar {init: 0.0003};
    var k_srca: millimolar {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var alpha_rel: picoA_per_millimolar {init: 200000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 0.6465};
    var Ca_up: millimolar {init: 0.6646};
    var Vol_up: nanolitre {init: 0.0003969};
    var Vol_rel: nanolitre {init: 4.41e-5};
    var r_act: per_second;
    var r_inact: per_second;
    var r_recov: per_second {init: 0.815};
    var O_Calse: dimensionless {init: 0.4369};
    var F1: dimensionless {init: 0.4284};
    var F2: dimensionless {init: 0.0028};
    var tau_tr: second {init: 0.01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcacyt
    var k_rel_i: millimolar {init: 0.0003};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcads
    var k_rel_d: millimolar {init: 0.003};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_d: millimolar {pub: in};
    var F: coulomb_per_mole {pub: in};
    i_up = I_up_max*(Ca_i/k_cyca-sqr(k_xcs)*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    i_tr = (Ca_up-Ca_rel)*2{dimensionless}*F*Vol_rel/tau_tr;
    i_rel = alpha_rel*sqr(F2/(F2+0.25{dimensionless}))*(Ca_rel-Ca_i);
    ode(O_Calse, time) = 480{per_millimolar_second}*Ca_rel*(1{dimensionless}-O_Calse)-400{per_second}*O_Calse;
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*Vol_rel*F)-31{millimolar}*ode(O_Calse, time);
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*Vol_up*F);
    ode(F1, time) = r_recov*(1{dimensionless}-F1-F2)-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    r_act = 203.8{per_second}*(pow(Ca_i/(Ca_i+k_rel_i), 4{dimensionless})+pow(Ca_d/(Ca_d+k_rel_d), 4{dimensionless}));
    r_inact = 33.96{per_second}+339.6{per_second}*pow(Ca_i/(Ca_i+k_rel_i), 4{dimensionless});
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h1_gate;
        comp sodium_current_h2_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_L_gate;
        comp L_type_Ca_channel_f_L1_gate;
        comp L_type_Ca_channel_f_L2_gate;
      endcomp;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
      endcomp;
      comp sustained_outward_K_current incl
        comp sustained_outward_K_current_r_sus_gate;
        comp sustained_outward_K_current_s_sus_gate;
      endcomp;
      comp delayed_rectifier_K_currents incl
        comp delayed_rectifier_K_currents_n_gate;
        comp delayed_rectifier_K_currents_pa_gate;
        comp delayed_rectifier_K_currents_pi_gate;
      endcomp;
      comp inward_rectifier;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
      comp Ca_handling_by_the_SR;
      comp intracellular_ion_concentrations;
      comp intracellular_Ca_buffering;
      comp cleft_space_ion_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h1_gate;
      comp sodium_current_h2_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_L_gate;
      comp L_type_Ca_channel_f_L1_gate;
      comp L_type_Ca_channel_f_L2_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
    endcomp;
    comp sustained_outward_K_current incl
      comp sustained_outward_K_current_r_sus_gate;
      comp sustained_outward_K_current_s_sus_gate;
    endcomp;
    comp delayed_rectifier_K_currents incl
      comp delayed_rectifier_K_currents_n_gate;
      comp delayed_rectifier_K_currents_pa_gate;
      comp delayed_rectifier_K_currents_pi_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between sustained_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_currents and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_ion_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between cleft_space_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars i_t and i_t;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sustained_outward_K_current for
    vars V and V;
    vars i_sus and i_sus;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and delayed_rectifier_K_currents for
    vars V and V;
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between membrane and cleft_space_ion_concentrations for
    vars F and F;
  enddef;
  def map between membrane and Ca_handling_by_the_SR for
    vars F and F;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and cleft_space_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_c and Na_c;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
    vars Ca_d and Ca_d;
  enddef;
  def map between L_type_Ca_channel and cleft_space_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and i_t;
    vars K_i and K_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars i_t and i_t;
    vars K_c and K_c;
  enddef;
  def map between Ca_independent_transient_outward_K_current and sustained_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_currents for
    vars E_K and E_K;
  enddef;
  def map between sustained_outward_K_current and intracellular_ion_concentrations for
    vars i_sus and i_sus;
  enddef;
  def map between sustained_outward_K_current and cleft_space_ion_concentrations for
    vars i_sus and i_sus;
  enddef;
  def map between delayed_rectifier_K_currents and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_currents and cleft_space_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between inward_rectifier and cleft_space_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_c and K_c;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between background_currents and cleft_space_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars Ca_c and Ca_c;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and cleft_space_ion_concentrations for
    vars i_NaK and i_NaK;
    vars K_c and K_c;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between sarcolemmal_calcium_pump_current and cleft_space_ion_concentrations for
    vars i_CaP and i_CaP;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars i_rel and i_rel;
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_d and Ca_d;
  enddef;
  def map between cleft_space_ion_concentrations and intracellular_ion_concentrations for
    vars phi_Na_en and phi_Na_en;
    vars Vol_i and Vol_i;
    vars conc_clamp and conc_clamp;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars dOCdt and dOCdt;
    vars dOTCdt and dOTCdt;
    vars dOTMgCdt and dOTMgCdt;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars h1 and h1;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars h2 and h2;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_infinity and h_infinity;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars d_L and d_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L1_gate for
    vars f_L_1 and f_L_1;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L2_gate for
    vars f_L_2 and f_L_2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L1_gate and L_type_Ca_channel_f_L2_gate for
    vars f_L_infinity and f_L_infinity;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_outward_K_current and sustained_outward_K_current_r_sus_gate for
    vars r_sus and r_sus;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_outward_K_current and sustained_outward_K_current_s_sus_gate for
    vars s_sus and s_sus;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pa_gate for
    vars p_a and p_a;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pi_gate for
    vars p_i and p_i;
    vars time and time;
    vars V and V;
  enddef;
enddef;
