def model ohara_rudy_cipa_v1_2017 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_mole_millivolt as
    unit coulomb;
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
    var celltype: dimensionless {init: 0, pub: out};
  enddef;

  def comp extracellular as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var nao: millimolar {init: 140, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var cao: millimolar {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var zna: dimensionless {init: 1, pub: out};
    var zca: dimensionless {init: 2, pub: out};
    var zk: dimensionless {init: 1, pub: out};
  enddef;

  def comp cell_geometry as
    var L: centimeter {init: 0.01};
    var rad: centimeter {init: 0.0011};
    var vcell: microliter {pub: out};
    var Ageo: centimeter_squared {pub: out};
    var Acap: centimeter_squared {pub: out};
    var vmyo: microliter {pub: out};
    var vnsr: microliter {pub: out};
    var vjsr: microliter {pub: out};
    var vss: microliter {pub: out};
    vcell = 1000{microliter_per_centimeter_cubed}*3.14{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*3.14{dimensionless}*rad*rad+2{dimensionless}*3.14{dimensionless}*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.68{dimensionless}*vcell;
    vnsr = 0.0552{dimensionless}*vcell;
    vjsr = 0.0048{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var v: millivolt {init: -88.00190465, pub: out};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    var ffrt: coulomb_per_mole_millivolt {pub: out};
    var frt: per_millivolt {pub: out};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var Istim: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var i_Stim_Start: millisecond {init: 10};
    var i_Stim_End: millisecond {init: 100000000000000000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var i_Stim_Amplitude: microA_per_microF {init: -80};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var i_Stim_Period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var i_Stim_PulseDuration: millisecond {init: 0.5};
    Istim = sel
      case (time >= i_Stim_Start) and (time <= i_Stim_End) and (time-i_Stim_Start-floor((time-i_Stim_Start)/i_Stim_Period)*i_Stim_Period <= i_Stim_PulseDuration):
        i_Stim_Amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    frt = F/(R*T);
    ffrt = F*frt;
    // vffrt = v*ffrt;
    vfrt = v*frt;
    ode(v, time) = -(INa+INaL+Ito+ICaL+ICaNa+ICaK+IKr+IKs+IK1+INaCa_i+INaCa_ss+INaK+INab+IKb+IpCa+ICab+Istim);
  enddef;

  def comp CaMK as
    var KmCaMK: millimolar {init: 0.15, pub: out};
    var aCaMK: per_millimolar_per_millisecond {init: 0.05};
    var bCaMK: per_millisecond {init: 0.00068};
    var CaMKo: dimensionless {init: 0.05};
    var KmCaM: millimolar {init: 0.0015};
    var CaMKb: millimolar {pub: out};
    var CaMKa: millimolar {pub: out};
    var CaMKt: millimolar {init: 0.0125840447};
    var cass: millimolar {pub: in};
    var time: millisecond {pub: in};
    CaMKb = CaMKo*(1{millimolar}-CaMKt)/(1{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    var cmdnmax_b: millimolar {init: 0.05};
    var cmdnmax: millimolar;
    var kmcmdn: millimolar {init: 0.00238};
    var trpnmax: millimolar {init: 0.07};
    var kmtrpn: millimolar {init: 0.0005};
    var BSRmax: millimolar {init: 0.047};
    var KmBSR: millimolar {init: 0.00087};
    var BSLmax: millimolar {init: 1.124};
    var KmBSL: millimolar {init: 0.0087};
    var csqnmax: millimolar {init: 10};
    var kmcsqn: millimolar {init: 0.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var nai: millimolar {init: 7.268004498, pub: out};
    var nass: millimolar {init: 7.268089977, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var ki: millimolar {init: 144.6555918, pub: out};
    var kss: millimolar {init: 144.6555651, pub: out};
    var cass: millimolar {init: 8.49e-05, pub: out};
    var cansr: millimolar {init: 1.619574538, pub: out};
    var cajsr: millimolar {init: 1.571234014, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var cai: millimolar {init: 8.6e-05, pub: out};
    var celltype: dimensionless {pub: in};
    var Acap: centimeter_squared {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: in};
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jup: millimolar_per_millisecond {pub: in};
    var JdiffK: millimolar_per_millisecond {pub: in};
    var Jrel: millimolar_per_millisecond {pub: in};
    var Jtr: millimolar_per_millisecond {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    var vmyo: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vss: microliter {pub: in};
    var vjsr: microliter {pub: in};
    var Bcai: dimensionless;
    var Bcajsr: dimensionless;
    var Bcass: dimensionless;
    var cm: microF_per_centimeter_squared {init: 1, pub: out};
    cmdnmax = sel
      case celltype == 1{dimensionless}:
        cmdnmax_b*1.3{dimensionless};
      otherwise:
        cmdnmax_b;
    endsel;
    ode(nai, time) = -(INa+INaL+3{dimensionless}*INaCa_i+3{dimensionless}*INaK+INab)*Acap*cm/(F*vmyo)+JdiffNa*vss/vmyo;
    ode(nass, time) = -(ICaNa+3{dimensionless}*INaCa_ss)*cm*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = -(Ito+IKr+IKs+IK1+IKb+Istim-2{dimensionless}*INaK)*cm*Acap/(F*vmyo)+JdiffK*vss/vmyo;
    ode(kss, time) = -ICaK*cm*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(-(IpCa+ICab-2{dimensionless}*INaCa_i)*cm*Acap/(2{dimensionless}*F*vmyo)-Jup*vnsr/vmyo+Jdiff*vss/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL-2{dimensionless}*INaCa_ss)*cm*Acap/(2{dimensionless}*F*vss)+Jrel*vjsr/vss-Jdiff);
    ode(cansr, time) = Jup-Jtr*vjsr/vnsr;
    Bcajsr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+cajsr));
    ode(cajsr, time) = Bcajsr*(Jtr-Jrel);
  enddef;

  def comp reversal_potentials as
    var PKNa: dimensionless {init: 0.01833};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var ENa: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var EK: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENa = R*T/F*ln(nao/nai);
    EK = R*T/F*ln(ko/ki);
    EKs = R*T/F*ln((ko+PKNa*nao)/(ki+PKNa*nai));
  enddef;

  def comp INa as
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var mssV1: millivolt {init: 39.57};
    var mssV2: millivolt {init: 9.871};
    var mtV1: millivolt {init: 11.64};
    var mtV2: millivolt {init: 34.77};
    var mtD1: dimensionless {init: 6.765};
    var mtD2: dimensionless {init: 8.552};
    var mtV3: millivolt {init: 77.42};
    var mtV4: millivolt {init: 5.955};
    var m: dimensionless {init: 0.007344121102};
    var time: millisecond {pub: in};
    var hss: dimensionless;
    var thf: millisecond;
    var ths: millisecond;
    var hssV1: millivolt {init: 82.9};
    var hssV2: millivolt {init: 6.086};
    var Ahs: dimensionless;
    var Ahf: dimensionless {init: 0.99};
    var hf: dimensionless {init: 0.6981071913};
    var hs: dimensionless {init: 0.6980895801};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless;
    // 75/1.045809e+00 = 71.71481599412512
    // 75/1.0 = 75
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var GNa: milliS_per_microF {init: 75};
    var shift_INa_inact: millivolt {init: 0};
    var jss: dimensionless;
    var tj: millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.6979908432};
    var hssp: dimensionless;
    var thsp: millisecond;
    var hsp: dimensionless {init: 0.4549485525};
    var hp: dimensionless;
    var tjp: millisecond;
    var jp: dimensionless {init: 0.6979245865};
    var fINap: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    mss = 1{dimensionless}/(1{dimensionless}+exp(-(v+mssV1)/mssV2));
    tm = 1{millisecond}/(mtD1*exp((v+mtV1)/mtV2)+mtD2*exp(-(v+mtV3)/mtV4));
    ode(m, time) = (mss-m)/tm;
    hss = 1{dimensionless}/(1{dimensionless}+exp((v+hssV1-shift_INa_inact)/hssV2));
    thf = 1{millisecond}/(1.432e-5{dimensionless}*exp(-(v+1.196{millivolt}-shift_INa_inact)/6.285{millivolt})+6.149{dimensionless}*exp((v+0.5096{millivolt}-shift_INa_inact)/20.27{millivolt}));
    ths = 1{millisecond}/(0.009794{dimensionless}*exp(-(v+17.95{millivolt}-shift_INa_inact)/28.05{millivolt})+0.3343{dimensionless}*exp((v+5.73{millivolt}-shift_INa_inact)/56.66{millivolt}));
    Ahs = 1{dimensionless}-Ahf;
    ode(hf, time) = (hss-hf)/thf;
    ode(hs, time) = (hss-hs)/ths;
    h = Ahf*hf+Ahs*hs;
    jss = hss;
    tj = 2.038{millisecond}+1{millisecond}/(0.02136{dimensionless}*exp(-(v+100.6{millivolt}-shift_INa_inact)/8.281{millivolt})+0.3052{dimensionless}*exp((v+0.9941{millivolt}-shift_INa_inact)/38.45{millivolt}));
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/(1{dimensionless}+exp((v+89.1{millivolt}-shift_INa_inact)/6.086{millivolt}));
    thsp = 3{dimensionless}*ths;
    ode(hsp, time) = (hssp-hsp)/thsp;
    hp = Ahf*hf+Ahs*hsp;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  def comp INaL as
    var mLss: dimensionless;
    var tm: millisecond {pub: in};
    var tmL: millisecond;
    var mL: dimensionless {init: 0.0001882617273};
    var thL: millisecond {init: 200};
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 0.5008548855};
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 0.2693065357};
    // 0.0075/3.971290e-01 = 0.01888555104260832
    // 0.0075/0.375798571965427 = 0.019957499999999975
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance_scaling_factor
    var GNaL_b: milliS_per_microF {init: 0.019957499999999975};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var GNaL: milliS_per_microF;
    var fINaLp: dimensionless;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var INaL: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = tm;
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*0.6{dimensionless};
      otherwise:
        GNaL_b;
    endsel;
    fINaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  def comp Ito as
    // 0.02/1.706770e+00 = 0.011718040509266042
    // 0.02/1.0 = 0.02
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance_scaling_factor
    var Gto_b: milliS_per_microF {init: 0.02};
    var ass: dimensionless;
    var ta: millisecond;
    var a: dimensionless {init: 0.001001097687};
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var iss: dimensionless;
    var delta_epi: dimensionless;
    var tiF_b: millisecond;
    var tiS_b: millisecond;
    var tiF: millisecond;
    var tiS: millisecond;
    var AiF: dimensionless;
    var AiS: dimensionless;
    var iF: dimensionless {init: 0.9995541745};
    var iS: dimensionless {init: 0.5865061736};
    var i: dimensionless;
    var assp: dimensionless;
    var ap: dimensionless {init: 0.0005100862934};
    var dti_develop: dimensionless;
    var dti_recover: dimensionless;
    var tiFp: millisecond;
    var tiSp: millisecond;
    var iFp: dimensionless {init: 0.9995541823};
    var iSp: dimensionless {init: 0.6393399482};
    var ip: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var Gto: milliS_per_microF;
    var fItop: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.34{millivolt})/14.82{millivolt}));
    ta = 1.0515{millisecond}/(1{dimensionless}/(1.2089{dimensionless}*(1{dimensionless}+exp(-(v-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1{dimensionless}+exp((v+100{millivolt})/29.3814{millivolt})));
    ode(a, time) = (ass-a)/ta;
    iss = 1{dimensionless}/(1{dimensionless}+exp((v+43.94{millivolt})/5.711{millivolt}));
    delta_epi = sel
      case celltype == 1{dimensionless}:
        1{dimensionless}-0.95{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/5{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    tiF_b = 4.562{millisecond}+1{millisecond}/(0.3933{dimensionless}*exp(-(v+100{millivolt})/100{millivolt})+0.08004{dimensionless}*exp((v+50{millivolt})/16.59{millivolt}));
    tiS_b = 23.62{millisecond}+1{millisecond}/(0.001416{dimensionless}*exp(-(v+96.52{millivolt})/59.05{millivolt})+1.78e-8{dimensionless}*exp((v+114.1{millivolt})/8.079{millivolt}));
    tiF = tiF_b*delta_epi;
    tiS = tiS_b*delta_epi;
    AiF = 1{dimensionless}/(1{dimensionless}+exp((v-213.6{millivolt})/151.2{millivolt}));
    AiS = 1{dimensionless}-AiF;
    ode(iF, time) = (iss-iF)/tiF;
    ode(iS, time) = (iss-iS)/tiS;
    i = AiF*iF+AiS*iS;
    assp = 1{dimensionless}/(1{dimensionless}+exp(-(v-24.34{millivolt})/14.82{millivolt}));
    ode(ap, time) = (assp-ap)/ta;
    dti_develop = 1.354{dimensionless}+1e-4{dimensionless}/(exp((v-167.4{millivolt})/15.89{millivolt})+exp(-(v-12.23{millivolt})/0.2154{millivolt}));
    dti_recover = 1{dimensionless}-0.5{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/20{millivolt}));
    tiFp = dti_develop*dti_recover*tiF;
    tiSp = dti_develop*dti_recover*tiS;
    ode(iFp, time) = (iss-iFp)/tiFp;
    ode(iSp, time) = (iss-iSp)/tiSp;
    ip = AiF*iFp+AiS*iSp;
    Gto = sel
      case celltype == 1{dimensionless}:
        Gto_b*4{dimensionless};
      case celltype == 2{dimensionless}:
        Gto_b*4{dimensionless};
      otherwise:
        Gto_b;
    endsel;
    fItop = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Ito = Gto*(v-EK)*((1{dimensionless}-fItop)*a*i+fItop*ap*ip);
  enddef;

  def comp ICaL as
    var Kmn: millimolar {init: 0.002};
    var k2n: per_millisecond {init: 1000};
    // 0.0001/1.020773e+00 = 9.796497360333787e-05
    // 0.0001/0.99304865938431 = 0.0001007
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance_scaling_factor
    var PCa_b: dimensionless {init: 0.0001007};
    var dss: dimensionless;
    var d: dimensionless {init: 2.34e-9};
    var fss: dimensionless;
    var Aff: dimensionless;
    var Afs: dimensionless;
    var ff: dimensionless {init: 0.9999999909};
    var fs: dimensionless {init: 0.9102412777};
    var f: dimensionless;
    var fcass: dimensionless;
    var Afcaf: dimensionless;
    var Afcas: dimensionless;
    var fcaf: dimensionless {init: 0.9999999909};
    var fcas: dimensionless {init: 0.9998046777};
    var fca: dimensionless;
    var jca: dimensionless {init: 0.9999738312};
    var ffp: dimensionless {init: 0.9999999909};
    var fp: dimensionless;
    var fcafp: dimensionless {init: 0.9999999909};
    var fcap: dimensionless;
    var km2n: per_millisecond;
    var anca: dimensionless;
    var nca: dimensionless {init: 0.002749414044};
    var PhiCaL: dimensionless;
    var PhiCaNa: dimensionless;
    var PhiCaK: dimensionless;
    var PCa: dimensionless;
    var celltype: dimensionless {pub: in};
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var fICaLp: dimensionless;
    var td: millisecond;
    var tff: millisecond;
    var tfs: millisecond;
    var tfcaf: millisecond;
    var tfcas: millisecond;
    var tjca: millisecond;
    var tffp: millisecond;
    var tfcafp: millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_channel_sodium_current
    var ICaNa: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_channel_potassium_current
    var ICaK: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var cass: millimolar {pub: in};
    var cao: millimolar {pub: in};
    // var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var nao: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var ffrt: coulomb_per_mole_millivolt {pub: in};
    var frt: per_millivolt {pub: in};
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(v+3.94{millivolt})/4.23{millivolt}));
    td = 0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}));
    tff = 7{millisecond}+1{millisecond}/(0.0045{dimensionless}*exp(-(v+20{millivolt})/10{millivolt})+0.0045{dimensionless}*exp((v+20{millivolt})/10{millivolt}));
    tfs = 1000{millisecond}+1{millisecond}/(0.000035{dimensionless}*exp(-(v+5{millivolt})/4{millivolt})+0.000035{dimensionless}*exp((v+5{millivolt})/6{millivolt}));
    Aff = 0.6{dimensionless};
    Afs = 1{dimensionless}-Aff;
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 7{millisecond}+1{millisecond}/(0.04{dimensionless}*exp(-(v-4{millivolt})/7{millivolt})+0.04{dimensionless}*exp((v-4{millivolt})/7{millivolt}));
    tfcas = 100{millisecond}+1{millisecond}/(0.00012{dimensionless}*exp(-v/3{millivolt})+0.00012{dimensionless}*exp(v/7{millivolt}));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/10{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    tjca = 75{millisecond};
    ode(jca, time) = (fcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*1{per_millisecond};
    anca = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cass, 4{dimensionless}));
    ode(nca, time) = anca*k2n-nca*km2n;
    // PhiCaL = 4{per_millivolt}*vffrt*(cass*exp(2{dimensionless}*vfrt)-0.341{per_millimolar}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    // PhiCaNa = 1{dimensionless}*vffrt*(0.75{dimensionless}*nass*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    // PhiCaK = 1{dimensionless}*vffrt*(0.75{dimensionless}*kss*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    var v0: millivolt;
    v0 = 0{millivolt};
    var A_1: dimensionless;
    var B_1: per_millivolt;
    var U_1: dimensionless;
    var A_2: dimensionless;
    var B_2: per_millivolt;
    var U_2: dimensionless;
    var A_3: dimensionless;
    var B_3: per_millivolt;
    var U_3: dimensionless;
    B_1 = 2{dimensionless}*frt;
    A_1 = 4{per_millivolt}*ffrt*(cass*exp(2{dimensionless}*vfrt)-0.341{per_millimolar}*cao)/B_1;
    U_1 = B_1*(v-v0);
    PhiCaL = sel
      case (-1e-7{dimensionless} <= U_1) and (U_1 <= 1e-7{dimensionless}):
        A_1*(1{dimensionless}-0.5{dimensionless}*U_1);
      otherwise:
        A_1*U_1/(exp(U_1)-1{dimensionless});
    endsel;
    B_2 = frt;
    A_2 = 0.75{dimensionless}*ffrt*(nass*exp(vfrt)-nao)/B_2;
    U_2 = B_2*(v-v0);
    PhiCaNa = sel
      case (-1e-7{dimensionless} <= U_2) and (U_2 <= 1e-7{dimensionless}):
        A_2*(1{dimensionless}-0.5{dimensionless}*U_2);
      otherwise:
        A_2*U_2/(exp(U_2)-1{dimensionless});
    endsel;
    B_3 = frt;
    A_3 = 0.75{dimensionless}*ffrt*(kss*exp(vfrt)-ko)/B_3;
    U_3 = B_3*(v-v0);
    PhiCaK = sel
      case (-1e-7{dimensionless} <= U_3) and (U_3 <= 1e-7{dimensionless}):
        A_3*(1{dimensionless}-0.5{dimensionless}*U_3);
      otherwise:
        A_3*U_3/(exp(U_3)-1{dimensionless});
    endsel;
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*2.5{dimensionless};
      otherwise:
        PCa_b;
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    ICaL = (1{dimensionless}-fICaLp)*PCa*PhiCaL*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCap*PhiCaL*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaNa = (1{dimensionless}-fICaLp)*PCaNa*PhiCaNa*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaNap*PhiCaNa*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaK = (1{dimensionless}-fICaLp)*PCaK*PhiCaK*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaKp*PhiCaK*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
  enddef;

  def comp IKr as
    // Conductance
    // 0.046/9.874327e-01 = 0.04658545336811309
    // 0.046/0.987432675044883 = 0.04658545454545456
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var GKr_b: milliS_per_microF {init: 0.04658545454545456};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var GKr_total: milliS_per_microF;
    // New state variables (ODEs)
    var IC1: dimensionless {init: 0.999637};
    // y[39]
    var IC2: dimensionless {init: 6.83208e-05};
    // y[40];
    var C1: dimensionless {init: 1.80145e-08};
    // y[41];
    var C2: dimensionless {init: 8.26619e-05};
    // y[42];
    var O: dimensionless {init: 0.00015551};
    // y[43];
    var IO: dimensionless {init: 5.67623e-05};
    // y[44];
    var IObound: dimensionless {init: 0};
    // y[45];
    var Obound: dimensionless {init: 0};
    // y[46];
    var Cbound: dimensionless {init: 0};
    // y[47];
    var D: dimensionless {init: 0};
    // y[48];
    // A lot of constants/variables
    var GKr: milliS_per_microF;
    var A1: per_millisecond {init: 0.0264};
    var B1: per_millivolt {init: 4.631E-05};
    var q1: dimensionless {init: 4.843};
    var A2: per_millisecond {init: 4.986E-06};
    var B2: per_millivolt {init: -0.004226};
    var q2: dimensionless {init: 4.23};
    var A3: per_millisecond {init: 0.001214};
    var B3: per_millivolt {init: 0.008516};
    var q3: dimensionless {init: 4.962};
    var A4: per_millisecond {init: 1.854E-05};
    var B4: per_millivolt {init: -0.04641};
    var q4: dimensionless {init: 3.769};
    var A11: per_millisecond {init: 0.0007868};
    var B11: per_millivolt {init: 1.535E-08};
    var q11: dimensionless {init: 4.942};
    var A21: per_millisecond {init: 5.455E-06};
    var B21: per_millivolt {init: -0.1688};
    var q21: dimensionless {init: 4.156};
    var A31: per_millisecond {init: 0.005509};
    var B31: per_millivolt {init: 7.771E-09};
    var q31: dimensionless {init: 4.22};
    var A41: per_millisecond {init: 0.001416};
    var B41: per_millivolt {init: -0.02877};
    var q41: dimensionless {init: 1.459};
    var A51: per_millisecond {init: 0.4492};
    var B51: per_millivolt {init: 0.008595};
    var q51: dimensionless {init: 5};
    var A52: per_millisecond {init: 0.3181};
    var B52: per_millivolt {init: 3.613E-08};
    var q52: dimensionless {init: 4.663};
    var A53: per_millisecond {init: 0.149};
    var B53: per_millivolt {init: 0.004668};
    var q53: dimensionless {init: 2.412};
    var A61: per_millisecond {init: 0.01241};
    var B61: per_millivolt {init: 0.1725};
    var q61: dimensionless {init: 5.568};
    var A62: per_millisecond {init: 0.3226};
    var B62: per_millivolt {init: -0.0006575};
    var q62: dimensionless {init: 5};
    var A63: per_millisecond {init: 0.008978};
    var B63: per_millivolt {init: -0.02215};
    var q63: dimensionless {init: 5.682};
    var Kmax: dimensionless {init: 0};
    var Ku: per_millisecond {init: 0};
    var n: dimensionless {init: 1};
    var halfmax: dimensionless {init: 1};
    var Kt: per_millisecond {init: 0};
    var Vhalf: millivolt {init: 1};
    var Temp: dimensionless {init: 37};
    // Those going in and out
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: microA_per_microF {pub: out};
    // Main ODEs!
    ode(IC1, time) = -(A11*exp(B11*v)*IC1*exp((Temp-20{dimensionless})*ln(q11)/10{dimensionless})-A21*exp(B21*v)*IC2*exp((Temp-20{dimensionless})*ln(q21)/10{dimensionless}))+A51*exp(B51*v)*C1*exp((Temp-20{dimensionless})*ln(q51)/10{dimensionless})-A61*exp(B61*v)*IC1*exp((Temp-20{dimensionless})*ln(q61)/10{dimensionless});
    ode(IC2, time) = A11*exp(B11*v)*IC1*exp((Temp-20{dimensionless})*ln(q11)/10{dimensionless})-A21*exp(B21*v)*IC2*exp((Temp-20{dimensionless})*ln(q21)/10{dimensionless})-(A3*exp(B3*v)*IC2*exp((Temp-20{dimensionless})*ln(q3)/10{dimensionless})-A4*exp(B4*v)*IO*exp((Temp-20{dimensionless})*ln(q4)/10{dimensionless}))+A52*exp(B52*v)*C2*exp((Temp-20{dimensionless})*ln(q52)/10{dimensionless})-A62*exp(B62*v)*IC2*exp((Temp-20{dimensionless})*ln(q62)/10{dimensionless});
    ode(C1, time) = -(A1*exp(B1*v)*C1*exp((Temp-20{dimensionless})*ln(q1)/10{dimensionless})-A2*exp(B2*v)*C2*exp((Temp-20{dimensionless})*ln(q2)/10{dimensionless}))-(A51*exp(B51*v)*C1*exp((Temp-20{dimensionless})*ln(q51)/10{dimensionless})-A61*exp(B61*v)*IC1*exp((Temp-20{dimensionless})*ln(q61)/10{dimensionless}));
    ode(C2, time) = A1*exp(B1*v)*C1*exp((Temp-20{dimensionless})*ln(q1)/10{dimensionless})-A2*exp(B2*v)*C2*exp((Temp-20{dimensionless})*ln(q2)/10{dimensionless})-(A31*exp(B31*v)*C2*exp((Temp-20{dimensionless})*ln(q31)/10{dimensionless})-A41*exp(B41*v)*O*exp((Temp-20{dimensionless})*ln(q41)/10{dimensionless}))-(A52*exp(B52*v)*C2*exp((Temp-20{dimensionless})*ln(q52)/10{dimensionless})-A62*exp(B62*v)*IC2*exp((Temp-20{dimensionless})*ln(q62)/10{dimensionless}));
    ode(O, time) = A31*exp(B31*v)*C2*exp((Temp-20{dimensionless})*ln(q31)/10{dimensionless})-A41*exp(B41*v)*O*exp((Temp-20{dimensionless})*ln(q41)/10{dimensionless})-(A53*exp(B53*v)*O*exp((Temp-20{dimensionless})*ln(q53)/10{dimensionless})-A63*exp(B63*v)*IO*exp((Temp-20{dimensionless})*ln(q63)/10{dimensionless}))-(Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*O-Ku*Obound);
    ode(IO, time) = A3*exp(B3*v)*IC2*exp((Temp-20{dimensionless})*ln(q3)/10{dimensionless})-A4*exp(B4*v)*IO*exp((Temp-20{dimensionless})*ln(q4)/10{dimensionless})+A53*exp(B53*v)*O*exp((Temp-20{dimensionless})*ln(q53)/10{dimensionless})-A63*exp(B63*v)*IO*exp((Temp-20{dimensionless})*ln(q63)/10{dimensionless})-(Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*IO-Ku*A53*exp(B53*v)*exp((Temp-20{dimensionless})*ln(q53)/10{dimensionless})/(A63*exp(B63*v)*exp((Temp-20{dimensionless})*ln(q63)/10{dimensionless}))*IObound);
    ode(IObound, time) = Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*IO-Ku*A53*exp(B53*v)*exp((Temp-20{dimensionless})*ln(q53)/10{dimensionless})/(A63*exp(B63*v)*exp((Temp-20{dimensionless})*ln(q63)/10{dimensionless}))*IObound+Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*IObound;
    ode(Obound, time) = Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*O-Ku*Obound+Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*Obound;
    ode(Cbound, time) = -(Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*Obound)-(Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*IObound);
    ode(D, time) = 0{dimensionless};
    // Conductance
    GKr = sel
      case celltype == 1{dimensionless}:
        GKr_b*1.3{dimensionless};
      case celltype == 2{dimensionless}:
        GKr_b*0.8{dimensionless};
      otherwise:
        GKr_b;
    endsel;
    // The current
    GKr_total = GKr*sqrt(ko/5.4{millimolar});
    IKr = GKr_total*O*(v-EK);
  enddef;

  def comp IKs as
    // 0.0034/5.347594e-01 = 0.006357999504076038
    // 0.0034/0.53475935828877 = 0.006358000000000001
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance_scaling_factor
    var GKs_b: milliS_per_microF {init: 0.006358000000000001};
    var GKs: milliS_per_microF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var GKs_total: milliS_per_microF;
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var txs1: millisecond;
    var txs1_max: millisecond {init: 817.3};
    var xs1: dimensionless {init: 0.2707758025};
    var xs2: dimensionless {init: 0.0001928503426};
    var KsCa: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EKs: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: microA_per_microF {pub: out};
    var txs2: millisecond;
    var cai: millimolar {pub: in};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt})/8.932{millivolt}));
    txs1 = txs1_max+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt})/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt})/230{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt})/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt})/31{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/cai, 1.4{dimensionless}));
    GKs = sel
      case celltype == 1{dimensionless}:
        GKs_b*1.4{dimensionless};
      otherwise:
        GKs_b;
    endsel;
    GKs_total = GKs*KsCa;
    IKs = GKs_total*xs1*xs2*(v-EKs);
  enddef;

  def comp IK1 as
    var GK1: milliS_per_microF;
    // 0.1908/6.296422e-01 = 0.3030292442279123
    // 0.1908/0.588928150765607 = 0.3239783999999998
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var GK1_b: milliS_per_microF {init: 0.3239783999999998};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var GK1_total: milliS_per_microF;
    var xk1ss: dimensionless;
    var txk1: millisecond;
    var xk1: dimensionless {init: 0.9967597594};
    var rk1: millisecond;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: microA_per_microF {pub: out};
    xk1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+2.5538{millivolt_per_millimole}*ko+144.59{millivolt})/(1.5692{millivolt_per_millimole}*ko+3.8115{millivolt})));
    txk1 = 122.2{millisecond}/(exp(-(v+127.2{millivolt})/20.36{millivolt})+exp((v+236.8{millivolt})/69.33{millivolt}));
    ode(xk1, time) = (xk1ss-xk1)/txk1;
    rk1 = 1{dimensionless}/(1{dimensionless}+exp((v+105.8{millivolt}-2.6{millivolt_per_millimole}*ko)/9.493{millivolt}));
    GK1 = sel
      case celltype == 1{dimensionless}:
        GK1_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        GK1_b*1.3{dimensionless};
      otherwise:
        GK1_b;
    endsel;
    GK1_total = GK1*sqrt(ko);
    IK1 = GK1_total*rk1*xk1*(v-EK);
  enddef;

  def comp INaCa_i as
    var kna1: per_millisecond {init: 15};
    var kna2: per_millisecond {init: 5};
    var kna3: per_millisecond {init: 88.12};
    var kasymm: dimensionless {init: 12.5};
    var wna: dimensionless {init: 6e4};
    var wca: dimensionless {init: 6e4};
    var wnaca: dimensionless {init: 5e3};
    var kcaon: per_millisecond {init: 1.5e6};
    var kcaoff: per_millisecond {init: 5e3};
    var qna: dimensionless {init: 0.5224};
    var qca: dimensionless {init: 0.167};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 150e-6};
    var zna: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var Gncx_b: milliS_per_microF {init: 0.0008};
    var Gncx: milliS_per_microF;
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var celltype: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa_i: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_dyadic_space_current
    var INaCa_ss: microA_per_microF {pub: out};
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    hca = exp(qca*v*F/(R*T));
    hna = exp(qna*v*F/(R*T));
    h1_i = 1{dimensionless}+nai/kna3*(1{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nai/kna1*(1{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cai));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    Gncx = sel
      case celltype == 1{dimensionless}:
        Gncx_b*1.1{dimensionless};
      case celltype == 2{dimensionless}:
        Gncx_b*1.4{dimensionless};
      otherwise:
        Gncx_b;
    endsel;
    INaCa_i = 0.8{dimensionless}*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = 0.2{dimensionless}*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  def comp INaK as
    var k1p: per_millisecond {init: 949.5};
    var k1m: per_millisecond {init: 182.4};
    var k2p: per_millisecond {init: 687.2};
    var k2m: per_millisecond {init: 39.4};
    var k3p: per_millisecond {init: 1899};
    var k3m: per_millisecond {init: 79300};
    var k4p: per_millisecond {init: 639};
    var k4m: per_millisecond {init: 40};
    var Knai0: millimolar {init: 9.073};
    var Knao0: millimolar {init: 27.78};
    var delta: millivolt {init: -0.155};
    var Kki: per_millisecond {init: 0.5};
    var Kko: per_millisecond {init: 0.3582};
    var MgADP: millimolar {init: 0.05};
    var MgATP: millimolar {init: 9.8};
    var Kmgatp: millimolar {init: 1.698e-7};
    var H: millimolar {init: 1e-7};
    var eP: dimensionless {init: 4.2};
    var Khp: millimolar {init: 1.698e-7};
    var Knap: millimolar {init: 224};
    var Kxkur: millimolar {init: 292};
    var zk: dimensionless {pub: in};
    var zna: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var Pnak_b: milliS_per_microF {init: 30};
    var Pnak: milliS_per_microF;
    var celltype: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Knai: millimolar;
    var Knao: millimolar;
    var P: dimensionless;
    var a1: dimensionless;
    var b1: dimensionless;
    var a2: dimensionless;
    var b2: dimensionless;
    var a3: dimensionless;
    var b3: dimensionless;
    var a4: dimensionless;
    var b4: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E1: dimensionless;
    var E2: dimensionless;
    var E3: dimensionless;
    var E4: dimensionless;
    var JnakNa: millimolar_per_millisecond;
    var JnakK: millimolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var INaK: microA_per_microF {pub: out};
    Knai = Knai0*exp(delta*v*F/(3{dimensionless}*R*T));
    Knao = Knao0*exp((1{dimensionless}-delta)*v*F/(3{dimensionless}*R*T));
    P = eP/(1{dimensionless}+H/Khp+nai/Knap+ki/Kxkur);
    a1 = k1p*pow(nai/Knai, 3{dimensionless})/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ki/Kki)/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    Pnak = sel
      case celltype == 1{dimensionless}:
        Pnak_b*0.9{dimensionless};
      case celltype == 2{dimensionless}:
        Pnak_b*0.7{dimensionless};
      otherwise:
        Pnak_b;
    endsel;
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  def comp IKb as
    var xkb: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_potassium_current_conductance
    var GKb_b: milliS_per_microF {init: 0.003};
    var GKb: milliS_per_microF;
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_potassium_current
    var IKb: microA_per_microF {pub: out};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.48{millivolt})/18.34{millivolt}));
    GKb = sel
      case celltype == 1{dimensionless}:
        GKb_b*0.6{dimensionless};
      otherwise:
        GKb_b;
    endsel;
    IKb = GKb*xkb*(v-EK);
  enddef;

  def comp INab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var PNab: milliS_per_microF {init: 3.75e-10};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var INab: microA_per_microF {pub: out};
    var nai: millimolar {pub: in};
    var nao: millimolar {pub: in};
    // var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var ffrt: coulomb_per_mole_millivolt {pub: in};
    var frt: per_millivolt {pub: in};
    var A: microA_per_microF;
    var B: per_millivolt;
    var v0: millivolt;
    var U: dimensionless;
    B = frt;
    v0 = 0{millivolt};
    A = PNab*ffrt*(nai*exp(vfrt)-nao)/B;
    U = B*(v-v0);
    INab = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // INab = PNab*vffrt*(nai*exp(vfrt)-nao)/(exp(vfrt)-1{dimensionless});
  enddef;

  def comp ICab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var PCab: milliS_per_microF {init: 2.5e-8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var ICab: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    // var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var ffrt: coulomb_per_mole_millivolt {pub: in};
    var frt: per_millivolt {pub: in};
    var A: microA_per_microF;
    var B: per_millivolt;
    var v0: millivolt;
    var U: dimensionless;
    B = 2{dimensionless}*frt;
    v0 = 0{millivolt};
    A = PCab*4{dimensionless}*ffrt*(cai*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/B;
    U = B*(v-v0);
    ICab = sel
      case (-1e-7{dimensionless} <= U) and (U <= 1e-7{dimensionless}):
        A*(1{dimensionless}-0.5{dimensionless}*U);
      otherwise:
        A*U/(exp(U)-1{dimensionless});
    endsel;
    // ICab = PCab*4{dimensionless}*vffrt*(cai*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
  enddef;

  def comp IpCa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current_conductance
    var GpCa: milliS_per_microF {init: 0.0005};
    var KmCap: millimolar {init: 0.0005};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    IpCa = GpCa*cai/(KmCap+cai);
  enddef;

  def comp diff as
    var cai: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: out};
    var Jdiff: millimolar_per_millisecond {pub: out};
    var JdiffK: millimolar_per_millisecond {pub: out};
    JdiffNa = (nass-nai)/2{dimensionless};
    JdiffK = (kss-ki)/2{dimensionless};
    Jdiff = (cass-cai)/0.2{dimensionless};
  enddef;

  def comp ryr as
    var bt: millisecond {init: 4.75};
    var a_rel: millisecond;
    var Jrel_inf: dimensionless;
    var tau_rel: millisecond;
    var celltype: dimensionless {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var cajsr: millimolar {pub: in};
    var Jrel_infp: dimensionless;
    var Jrel_temp: dimensionless;
    var tau_relp: millisecond;
    var Jrelnp: dimensionless {init: 2.5e-7};
    var Jrelp: dimensionless {init: 3.12e-7};
    var time: millisecond {pub: in};
    var btp: millisecond;
    var a_relp: millisecond;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var Jrel_inf_temp: dimensionless;
    var fJrelp: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var Jrel: millimolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var Jrel_scaling_factor: dimensionless {init: 1.0};
    var tau_rel_temp: millisecond;
    var tau_relp_temp: millisecond;
    a_rel = 0.5{dimensionless}*bt;
    Jrel_inf_temp = a_rel*(-ICaL)/(1{microA_per_microF}+1{microA_per_microF}*pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_inf = sel
      case celltype == 2{dimensionless}:
        Jrel_inf_temp*1.7{dimensionless};
      otherwise:
        Jrel_inf_temp;
    endsel;
    tau_rel_temp = bt/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_rel = sel
      case tau_rel_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_rel_temp;
    endsel;
    ode(Jrelnp, time) = (Jrel_inf-Jrelnp)/tau_rel;
    btp = 1.25{dimensionless}*bt;
    a_relp = 0.5{dimensionless}*btp;
    Jrel_temp = a_relp*(-ICaL)/(1{dimensionless}+pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_infp = sel
      case celltype == 2{dimensionless}:
        Jrel_temp*1.7{dimensionless};
      otherwise:
        Jrel_temp;
    endsel;
    tau_relp_temp = btp/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_relp = sel
      case tau_relp_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_relp_temp;
    endsel;
    ode(Jrelp, time) = (Jrel_infp-Jrelp)/tau_relp;
    fJrelp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jrel = Jrel_scaling_factor*((1{dimensionless}-fJrelp)*Jrelnp+fJrelp*Jrelp);
  enddef;

  def comp SERCA as
    var upScale: dimensionless;
    var Jupnp: millimolar_per_millisecond;
    var Jupp: millimolar_per_millisecond;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var celltype: dimensionless {pub: in};
    var cai: millimolar {pub: in};
    var cansr: millimolar {pub: in};
    var fJupp: dimensionless;
    var Jleak: millimolar_per_millisecond;
    var Jup: millimolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Jup_b: dimensionless {init: 1.0};
    upScale = sel
      case celltype == 1{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    Jupnp = upScale*0.004375{dimensionless}*cai/(cai+0.00092{millimolar});
    Jupp = upScale*2.75{dimensionless}*0.004375{dimensionless}*cai/(cai+0.00092{millimolar}-0.00017{millimolar});
    fJupp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jleak = 0.0039375{millimolar_per_millisecond}*cansr/15{millimolar};
    Jup = Jup_b*((1{dimensionless}-fJupp)*Jupnp+fJupp*Jupp-Jleak);
  enddef;

  def comp trans_flux as
    var cansr: millimolar {pub: in};
    var cajsr: millimolar {pub: in};
    var Jtr: millimolar_per_millisecond {pub: out};
    Jtr = (cansr-cajsr)/100{millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    vars cajsr and cajsr;
    vars cansr and cansr;
    vars Jtr and Jtr;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars cansr and cansr;
    vars Jup and Jup;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    vars cajsr and cajsr;
    vars Jrel and Jrel;
  enddef;
  def map between ICaL and ryr for
    vars ICaL and ICaL;
  enddef;
  def map between ryr and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars cass and cass;
    vars nai and nai;
    vars nass and nass;
    vars ki and ki;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars Jdiff and Jdiff;
    vars JdiffNa and JdiffNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars cai and cai;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars cai and cai;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars v and v;
    // vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ffrt and ffrt;
    vars frt and frt;
    vars ICab and ICab;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nai and nai;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars v and v;
    // vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ffrt and ffrt;
    vars frt and frt;
    vars INab and INab;
  enddef;
  def map between IKb and membrane for
    vars v and v;
    vars IKb and IKb;
  enddef;
  def map between IKb and environment for
    vars celltype and celltype;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between intracellular_ions and INaK for
    vars ki and ki;
    vars nai and nai;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars INaK and INaK;
  enddef;
  def map between INaK and environment for
    vars celltype and celltype;
  enddef;
  def map between INaK and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa_i for
    vars cai and cai;
    vars nai and nai;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and membrane for
    vars v and v;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and environment for
    vars celltype and celltype;
  enddef;
  def map between INaCa_i and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa_i for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars cai and cai;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and INa for
    vars tm and tm;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between ICaL and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    // vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ffrt and ffrt;
    vars frt and frt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars ki and ki;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
  enddef;
enddef;
