def model tentusscher_model_2006_epi as
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_square as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit mA_pA as
    unit ampere {pref: milli};
    unit picoA {expo: -1};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millivolt_millimoles as
    unit millivolt;
    unit millimolar;
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimolar2_per_millisecond as
    unit millimolar {expo: -2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit cm2 {expo: -1};
  enddef;
  def unit litre_per_farad_second as
    unit litre;
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -85.23, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: joule_per_mole_kelvin {init: 8314.472, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 310, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: coulomb_per_millimole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF {init: 0.185, pub: out};
    var V_c: micrometre3 {init: 0.016404, pub: out};
    var time: millisecond {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 100};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA_per_picoF {init: -52};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -1{dimensionless}/1{dimensionless}*(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim);
  enddef;

  def comp reversal_potentials as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp inward_rectifier_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var g_K1: nanoS_per_picoF {init: 5.405};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_total: nanoS_per_picoF;
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xK1_inf: dimensionless;
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    alpha_K1 = 0.1{dimensionless}/(1{dimensionless}+exp(0.06{per_millivolt}*(V-E_K-200{millivolt})));
    beta_K1 = (3{dimensionless}*exp(0.0002{per_millivolt}*(V-E_K+100{millivolt}))+exp(0.1{per_millivolt}*(V-E_K-10{millivolt})))/(1{dimensionless}+exp(-0.5{per_millivolt}*(V-E_K)));
    xK1_inf = alpha_K1/(alpha_K1+beta_K1);
    g_K1_total = g_K1*sqrt(K_o/5.4{millimolar});
    i_K1 = g_K1_total*xK1_inf*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var g_Kr: nanoS_per_picoF {init: 0.153};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr_total: nanoS_per_picoF;
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    g_Kr_total = g_Kr*sqrt(K_o/5.4{millimolar});
    i_Kr = g_Kr_total*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: dimensionless {init: 0.00621, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr1_inf: dimensionless;
    var alpha_xr1: dimensionless;
    var beta_xr1: dimensionless;
    var tau_xr1: millisecond;
    xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((-26{millivolt}-V)/7{millivolt}));
    alpha_xr1 = 450{dimensionless}/(1{dimensionless}+exp((-45{millivolt}-V)/10{millivolt}));
    beta_xr1 = 6{dimensionless}/(1{dimensionless}+exp((V+30{millivolt})/11.5{millivolt}));
    tau_xr1 = 1{millisecond}*alpha_xr1*beta_xr1;
    ode(Xr1, time) = (xr1_inf-Xr1)/tau_xr1;
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: dimensionless {init: 0.4712, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr2_inf: dimensionless;
    var alpha_xr2: dimensionless;
    var beta_xr2: dimensionless;
    var tau_xr2: millisecond;
    xr2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+88{millivolt})/24{millivolt}));
    alpha_xr2 = 3{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/20{millivolt}));
    beta_xr2 = 1.12{dimensionless}/(1{dimensionless}+exp((V-60{millivolt})/20{millivolt}));
    tau_xr2 = 1{millisecond}*alpha_xr2*beta_xr2;
    ode(Xr2, time) = (xr2_inf-Xr2)/tau_xr2;
  enddef;

  def comp slow_time_dependent_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: nanoS_per_picoF {init: 0.392};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {init: 0.0095, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/14{millivolt}));
    alpha_xs = 1400{dimensionless}/sqrt(1{dimensionless}+exp((5{millivolt}-V)/6{millivolt}));
    beta_xs = 1{dimensionless}/(1{dimensionless}+exp((V-35{millivolt})/15{millivolt}));
    tau_xs = 1{millisecond}*alpha_xs*beta_xs+80{millisecond};
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: nanoS_per_picoF {init: 14.838};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    // range-low: 0
    // range-high: 1
    var m: dimensionless {init: 0.00172, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{millivolt}-V)/9.03{millivolt}));
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/5{millivolt}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/5{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((V-50{millivolt})/200{millivolt}));
    tau_m = 1{millisecond}*alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    // range-low: 0
    // range-high: 1
    var h: dimensionless {init: 0.7444, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: millisecond;
    h_inf = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    alpha_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.057{per_millisecond}*exp(-(V+80{millivolt}-shift_INa_inact)/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        2.7{per_millisecond}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+310000{per_millisecond}*exp(0.3485{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    // range-low: 0
    // range-high: 1
    var j: dimensionless {init: 0.7045, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: millisecond;
    j_inf = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    alpha_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        (-25428{per_millisecond}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))-6.948e-6{per_millisecond}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/1{millivolt}/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.02424{per_millisecond}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.6{per_millisecond}*exp(0.057{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp sodium_background_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var i_b_Na: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var g_bna: nanoS_per_picoF {init: 0.00029};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: litre_per_farad_second {init: 0.0000398};
    var Ca_o: millimolar {pub: in};
    var Ca_ss: millimolar {priv: out, pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in, pub: out};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCass: dimensionless {priv: in};
    var V_low: millivolt {init: 14.999};
    var V_high: millivolt {init: 15.001};
    var temp: millivolt_millimoles;
    i_CaL = temp*g_CaL*d*f*f2*fCass*4{dimensionless}*sqr(F)/(R*T);
    temp = sel
      case (V < V_low) or (V > V_high):
        (V-15{millivolt})*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-1{dimensionless});
      otherwise:
        ((V_low-15{millivolt})*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V_low-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V_low-15{millivolt})*F/(R*T))-1{dimensionless})+(V_high-15{millivolt})*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V_high-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V_high-15{millivolt})*F/(R*T))-1{dimensionless}))/2{dimensionless};
    endsel;
  enddef;

  def comp L_type_Ca_current_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    // range-low: 0
    // range-high: 1
    var d: dimensionless {init: 3.373e-5, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_inf: dimensionless;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: millisecond;
    var tau_d: millisecond;
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((-8{millivolt}-V)/7.5{millivolt}));
    alpha_d = 1.4{dimensionless}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{dimensionless};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = 1{millisecond}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp L_type_Ca_current_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    // range-low: 0
    // range-high: 1
    var f: dimensionless {init: 0.7888, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: millisecond;
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    tau_f = 1102.5{millisecond}*exp(-sqr(V+27{millivolt})/225{millivolt_square})+200{millisecond}/(1{dimensionless}+exp((13{millivolt}-V)/10{millivolt}))+180{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}))+20{millisecond};
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp L_type_Ca_current_f2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    // range-low: 0
    // range-high: 1
    var f2: dimensionless {init: 0.9755, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f2_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tau_f2: millisecond;
    f2_inf = 0.67{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/7{millivolt}))+0.33{dimensionless};
    tau_f2 = 562{millisecond}*exp(-sqr(V+27{millivolt})/240{millivolt_square})+31{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}))+80{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}));
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp L_type_Ca_current_fCass_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    // range-low: 0
    // range-high: 1
    var fCass: dimensionless {init: 0.9953, pub: out};
    var Ca_ss: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fCass_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_fCass: millisecond;
    fCass_inf = 0.6{dimensionless}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+0.4{dimensionless};
    tau_fCass = 80{millisecond}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+2{millisecond};
    ode(fCass, time) = (fCass_inf-fCass)/tau_fCass;
  enddef;

  def comp calcium_background_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var i_b_Ca: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var g_bca: nanoS_per_picoF {init: 0.000592};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: nanoS_per_picoF {init: 0.294};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.999998, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var s_inf: dimensionless;
    var tau_s: millisecond;
    s_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/5{millivolt}));
    tau_s = 85{millisecond}*exp(-sqr(V+45{millivolt})/320{millivolt_square})+5{millisecond}/(1{dimensionless}+exp((V-20{millivolt})/5{millivolt}))+3{millisecond};
    ode(s, time) = (s_inf-s)/tau_s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 2.42e-8, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var r_inf: dimensionless;
    var tau_r: millisecond;
    r_inf = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-V)/6{millivolt}));
    tau_r = 9.5{millisecond}*exp(-sqr(V+40{millivolt})/1800{millivolt_square})+0.8{millisecond};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var P_NaK: picoA_per_picoF {init: 2.724};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {priv: out, pub: in};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp sodium_calcium_exchanger_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: picoA_per_picoF {init: 1000};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp calcium_pump_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_p_Ca: picoA_per_picoF {pub: out};
    var g_pCa: picoA_per_picoF {init: 0.1238};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp potassium_pump_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current
    var i_p_K: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current_conductance
    var g_pK: nanoS_per_picoF {init: 0.0146};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_p_K = g_pK*(V-E_K)/(1{dimensionless}+exp((25{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp calcium_dynamics as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 0.000126, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 2, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_SR: millimolar {init: 3.64};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss: millimolar {init: 0.00036, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: millimolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var i_leak: millimolar_per_millisecond;
    var i_xfer: millimolar_per_millisecond;
    var O: dimensionless;
    var R_prime: dimensionless {init: 0.9073};
    var k1: per_millimolar2_per_millisecond;
    var k2: per_millimolar_per_millisecond;
    var k1_prime: per_millimolar2_per_millisecond {init: 0.15};
    var k2_prime: per_millimolar_per_millisecond {init: 0.045};
    var k3: per_millisecond {init: 0.06};
    var k4: per_millisecond {init: 0.005};
    var EC: millimolar {init: 1.5};
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1};
    var kcasr: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var V_rel: per_millisecond {init: 0.102};
    var V_xfer: per_millisecond {init: 0.0038};
    var K_up: millimolar {init: 0.00025};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var V_leak: per_millisecond {init: 0.00036};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Vmax_up: millimolar_per_millisecond {init: 0.006375};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_i_bufc: dimensionless;
    var Ca_sr_bufsr: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_ss_bufss: dimensionless;
    var Buf_c: millimolar {init: 0.2};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var Buf_ss: millimolar {init: 0.4};
    var K_buf_ss: millimolar {init: 0.00025};
    var V_sr: micrometre3 {init: 0.001094};
    var V_ss: micrometre3 {init: 0.00005468};
    var V: millivolt {pub: in};
    var V_c: micrometre3 {pub: in};
    var time: millisecond {pub: in};
    var d: dimensionless {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    i_rel = V_rel*O*(Ca_SR-Ca_ss);
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = V_leak*(Ca_SR-Ca_i);
    i_xfer = V_xfer*(Ca_ss-Ca_i);
    O = k1*sqr(Ca_ss)*R_prime/(k3+k1*sqr(Ca_ss));
    ode(R_prime, time) = -k2*Ca_ss*R_prime+k4*(1{dimensionless}-R_prime);
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    kcasr = max_sr-(max_sr-min_sr)/(1{dimensionless}+sqr(EC/Ca_SR));
    Ca_i_bufc = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_sr_bufsr = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    Ca_ss_bufss = 1{dimensionless}/(1{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
    ode(Ca_i, time) = Ca_i_bufc*((i_leak-i_up)*V_sr/V_c+i_xfer-1{mA_pA}*(i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*1{litre_micrometre3}*V_c*F));
    ode(Ca_SR, time) = Ca_sr_bufsr*(i_up-(i_rel+i_leak));
    ode(Ca_ss, time) = Ca_ss_bufss*(-1{mA_pA}*i_CaL*Cm/(2{dimensionless}*1{litre_micrometre3}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*V_c/V_ss);
  enddef;

  def comp sodium_dynamics as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 8.604, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    ode(Na_i, time) = -conc_clamp*1{mA_pA}*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_micrometre3}*V_c*F)*Cm;
  enddef;

  def comp potassium_dynamics as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 136.89, pub: out};
    var conc_clamp: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 5.4, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: in};
    ode(K_i, time) = -conc_clamp*1{mA_pA}*(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2{dimensionless}*i_NaK)/(1{litre_micrometre3}*V_c*F)*Cm;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_d_gate;
        comp L_type_Ca_current_f_gate;
        comp L_type_Ca_current_f2_gate;
        comp L_type_Ca_current_fCass_gate;
      endcomp;
      comp inward_rectifier_potassium_current;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchanger_current;
      comp calcium_pump_current;
      comp potassium_pump_current;
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp potassium_dynamics;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_d_gate;
      comp L_type_Ca_current_f_gate;
      comp L_type_Ca_current_f2_gate;
      comp L_type_Ca_current_fCass_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between potassium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_CaL and i_CaL;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and potassium_pump_current for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and potassium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and potassium_pump_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and potassium_dynamics for
    vars K_o and K_o;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars i_K1 and i_K1;
    vars K_o and K_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and potassium_dynamics for
    vars i_Kr and i_Kr;
    vars K_o and K_o;
  enddef;
  def map between slow_time_dependent_potassium_current and potassium_dynamics for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_ss and Ca_ss;
    vars d and d;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_pump_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump_current and potassium_dynamics for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump_current and sodium_dynamics for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger_current and calcium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fCass_gate for
    vars fCass and fCass;
    vars time and time;
    vars Ca_ss and Ca_ss;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and potassium_dynamics for
    vars i_to and i_to;
  enddef;
  def map between potassium_pump_current and potassium_dynamics for
    vars i_p_K and i_p_K;
  enddef;
  def map between sodium_dynamics and potassium_dynamics for
    vars conc_clamp and conc_clamp;
  enddef;
enddef;
