//   FILE :  kneller_model_2002.xml
//
// CREATED :  25th June 2002
//
// LAST MODIFIED : 13th August 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of Kneller et al's 2002 mathematical model of the canine atrial action potential.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   04/06/2003 - CML - Fixed MathML in a few components.
//   13/08/2003 - CML - Corrected equations.
// publisher: The University of Auckland, The Bioengineering Institute
// modification: W3CDTF 2003-06-04; Corrected equations: beta_j_calculation in fast_sodium_current_j_gate, oa_infinity_calculation in transient_outward_K_current_oa_gate, ua_infinity_calculation in ultrarapid_delayed_rectifier_K_current_ua_gate, E_Ca_calculation in background_currents, Fn_calculation in Ca_release_current_from_JSR, and v_infinity_calculation in Ca_release_current_from_JSR_v_gate.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-07-18; Corrected equations: alpha_ui_calculation in ultrarapid_delayed_rectifier_K_current_ui_gate, tau_xs_calculation in slow_delayed_rectifier_K_current_xs_gate component.; Given Catherine; Family Lloyd; Other May
// created: W3CDTF 2002-06-25
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Kneller et al's 2002 Mathematical Model of Canine Atrial Action Potentials.
// bio_entity: Atrial Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Kneller et al's mathematical model of the canine atrial action potential. It is based on the earlier Ramirez et al 2000 model.
// reference: subject_type keyword; Atrial Myocyte; cardiac; electrophysiology
// reference: Pubmed_id 12062346; Given James; Family Kneller; Given Rafael; Family Ramirez; Other J; Given Denis; Family Chartier; Given Marc; Family Courtemanche; Given Stanley; Family Nattel; title Time-dependent transients in an ionically based mathematical model of the canine atrial action potential; volume 282; first_page H1437; title American Journal of Physiology; W3CDTF 2002-05; last_page H1451
// species: Canine
def model kneller_ramirez_chartier_courtemanche_nattel_2002_version01 as
  // Mathematical Model of a Canine Atrial Action Potential, 2002
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // Since the publishment of the DiFrancesco-Noble model of cardiac myocyte electrophysiology in 1985 several other dynamic mathematical models of the cardiac action potential have been developed. These models include equations that describe transmembrane ion channels and pumps, as well as the intracellular calcium uptake and release activity of the sarcoplasmic reticulum and changing intracellular ionic concentrations. Dynamic models are carefully constructed to accurately simulate the experimentally observed electrophysiological behaviour of cells.
  //
  // Time-dependent changes (transients) in ionic concentrations and action potentials are often observed in experiments. In mathematical models, transients may represent artifacts of the equations or may reflect physiological processes. In their 2002 paper, James Kneller, Rafael J. Ramirez, Denis Charter, Marc Courtemanche and Stanley Nattel studied electrophysiological transients in an ionic model of the canine atrial action potential. Their aims were to determine whether dynamic models reach stability during sustained pacing, to investigate the ionic basis of action potential transients in the model, and to compare real physiological action potential transients with those generated by the model. Their model was based on the previously published Ramirez-Nattel-Courtemanche (RNC) model of the canine action potential (see Ramirez et al. Canine Atrial Action Potential Model, 2000, also in the CellML model repository). In this model, I Cl,Ca brings Cl- into the cell, but there is no equation to account for Cl- efflux. In their 2002 modified version of the RNC model, James Kneller, Rafael J. Ramirez, Denis Charter, Marc Courtemanche and Stanley Nattel include an inward, electroneutral Na+-Cl- cotransporter (I Na,Ca), and a constant Cl- efflux through a leakage pathway (I b,Cl) (see the figure below).
  //
  // After comparing the results simulated by the model with experimental data, James Kneller, Rafael J. Ramirez, Denis Chartier, Marc Courtemanche and Stanley Nattel conclude that model action potential duration and ionic transients stabilise with appropriate stimulus current assignment. They also found that their model agrees qualitatively with experimental observations, but quantitative discrepancies highlight limitations of model simulations.
  //
  // The complete original paper reference is cited below:
  //
  // Time-dependent transients in an ionically based mathematical model of the canine atrial action potential (http://ajpheart.physiology.org/cgi/content/abstract/282/4/H1437) James Kneller, Rafael J. Ramirez, Denis Chartier, Marc Courtemanche and Stanley Nattel, 2002, American Journal of Physiology (http://ajpheart.physiology.org/), 282, H1437-H1451. (Full text (http://ajpheart.physiology.org/cgi/content/full/282/4/H1437) and PDF (http://ajpheart.physiology.org/cgi/reprint/282/4/H1437.pdf) versions of the article are available for Journal Members on the AJP website.) PubMed ID: 11893581 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11893581&dopt=Abstract)
  //
  // schematic diagram of a canine atrial myocyte
  //
  // A schematic representation of the canine atrial myocyte. Intracellular compartments (outlined in dashed lines) indicate the intracellular pools of ion species. The ion concentration in each pool is affected by ionic currents, pumps and exchangers. Black rectangular boxes represent sarcolemmal ion currents, black circles represent the pumps and exchangers. The sarcoplasmic reticulum is divided into two compartments: the Ca2+-release compartment, or junctional sarcoplasmic reticulum (JSR) and the Ca2+-uptake compartment, or network sarcoplasmic reticulum (NSR).
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit micrometre_3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {pub: out, init: -82.72};
    var R: joule_per_mole_kelvin {pub: out, init: 8.3143};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_millimole {pub: out, init: 96.4867};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: picoF {init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA {init: -2900};
    i_stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur_d: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Ca: picoA {pub: in};
    var i_Cl_Ca: picoA {pub: in};
    var i_p_Ca: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_Cl: picoA {pub: in};
    ode(V, time) = -(i_Na+i_K1+i_to+i_Kur_d+i_Kr+i_Ks+i_Ca+i_Cl_Ca+i_p_Ca+i_NaCa+i_NaK+i_B_Na+i_B_Ca+i_B_Cl+i_stim)/Cm;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: nanoS_per_picoF {init: 7.8};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.002256};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*((V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt}))));
    beta_m = 0.08{per_millisecond}*exp(V/(-11.0{millivolt}));
    ode(m, time) = alpha_m*(1.0{per_millivolt}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.9750};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40.0{millivolt}:
        0.135{per_millisecond}*exp((V+80.0{millivolt})/(-6.8{millivolt}));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40.0{millivolt}:
        3.56{per_millisecond}*exp(0.079{millivolt}*V)+310000.0{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1.0{dimensionless}/(0.13{millisecond}*(1.0{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.9843};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40.0{millivolt}:
        (-127140.0{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))/(1.0{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})))*(V+37.78{millivolt});
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40.0{millivolt}:
        0.1212{per_millisecond}*(exp(-0.01052{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}))));
      otherwise:
        0.3{per_millisecond}*(exp(-0.0000002535{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1{per_millivolt}*(V+32.0{millivolt}))));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_K1: nanoS_per_picoF {init: 0.15};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var K_i: millimolar {pub: in};
    i_K1 = g_K1*(V-E_K)/(1.0{dimensionless}+exp(0.07{dimensionless}*(V+80.0{millivolt})));
    E_K = R*T/F*ln(K_o/K_i);
  enddef;

  def comp transient_outward_K_current as
    var i_to: picoA {pub: out};
    var g_to: nanoS_per_picoF {init: 0.19824};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var oa: dimensionless {priv: in};
    var oi: dimensionless {priv: in};
    i_to = g_to*pow(oa, 3.0{dimensionless})*oi*(V-E_K);
  enddef;

  def comp transient_outward_K_current_oa_gate as
    var oa: dimensionless {pub: out, init: 0.07351};
    var alpha_oa: per_millisecond;
    var beta_oa: per_millisecond;
    var tau_oa: millisecond;
    var oa_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(oa, time) = (oa_infinity-oa)/tau_oa;
    alpha_oa = 0.65{per_millisecond}*pow(exp((V+18.0{millivolt})/(-8.5{millivolt}))+exp((V-16.0{millivolt})/(-59.0{millivolt})), -1.0{dimensionless});
    beta_oa = 1.2{per_millisecond}*pow(2.2{dimensionless}+exp((V+75.0{millivolt})/18.0{millivolt}), -1.0{dimensionless});
    tau_oa = pow(alpha_oa+beta_oa, -1.0{dimensionless});
    oa_infinity = pow(1.0{dimensionless}+exp((V+0.5{millivolt})/(-10.5{millivolt})), -(1.0{dimensionless}/3.0{dimensionless}));
  enddef;

  def comp transient_outward_K_current_oi_gate as
    var oi: dimensionless {pub: out, init: 0.9978};
    var alpha_oi: per_millisecond;
    var beta_oi: per_millisecond;
    var tau_oi: millisecond;
    var oi_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(oi, time) = (oi_infinity-oi)/tau_oi;
    alpha_oi = pow(6.2{millisecond}+exp((V+105.2{millivolt})/9.85{millivolt}), -1.0{dimensionless});
    beta_oi = pow(7.54{millisecond}+exp((V-8.89{millivolt})/(-12.87{millivolt})), -1.0{dimensionless});
    tau_oi = pow(alpha_oi+beta_oi, -1.0{dimensionless});
    oi_infinity = pow(1.0{dimensionless}+exp((V+43.377{millivolt})/6.45{millivolt}), -1.0{dimensionless});
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current as
    var i_Kur_d: picoA {pub: out};
    var g_Kur_d: nanoS_per_picoF;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var ua: dimensionless {priv: in};
    var ui: dimensionless {priv: in};
    i_Kur_d = g_Kur_d*pow(ua, 3.0{dimensionless})*ui*(V-E_K);
    g_Kur_d = 0.00855{nanoS_per_picoF}+0.0779{nanoS_per_picoF}/(1.0{dimensionless}+exp((V+11.0{millivolt})/(-16.0{millivolt})));
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ua_gate as
    var ua: dimensionless {pub: out, init: 0.06039};
    var alpha_ua: per_millisecond;
    var beta_ua: per_millisecond;
    var tau_ua: millisecond;
    var ua_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(ua, time) = (ua_infinity-ua)/tau_ua;
    alpha_ua = 1.47{per_millisecond}*pow(exp((V+33.2{millivolt})/(-30.63{millivolt}))+exp((V-27.6{millivolt})/(-30.65{millivolt})), -1.0{dimensionless});
    beta_ua = 0.42{per_millisecond}*pow(exp((V+26.64{millivolt})/2.49{millivolt})+exp((V+44.41{millivolt})/20.36{millivolt}), -1.0{dimensionless});
    tau_ua = pow(alpha_ua+beta_ua, -1.0{dimensionless});
    ua_infinity = pow(1.0{dimensionless}+exp((V+2.81{millivolt})/(-9.49{millivolt})), -(1.0{dimensionless}/3.0{dimensionless}));
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ui_gate as
    var ui: dimensionless {pub: out, init: 0.9987};
    var alpha_ui: per_millisecond;
    var beta_ui: per_millisecond;
    var tau_ui: millisecond;
    var ui_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(ui, time) = (ui_infinity-ui)/tau_ui;
    alpha_ui = pow(21.0{millisecond}+exp((V-185.0{millivolt})/(-28.0{millivolt})), -1.0{dimensionless});
    beta_ui = exp((V-158.0{millivolt})/16.0{millivolt});
    tau_ui = pow(alpha_ui+beta_ui, -1.0{dimensionless});
    ui_infinity = pow(1.0{dimensionless}+exp((V-99.45{millivolt})/27.48{millivolt}), -1.0{dimensionless});
  enddef;

  def comp rapid_delayed_rectifier_K_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.06984};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xr: dimensionless {priv: in};
    i_Kr = g_Kr*xr*(0.07{dimensionless}+0.58{dimensionless}/(1.0{dimensionless}+exp((V+15.0{millivolt})/22.4{millivolt})))*(V-E_K);
  enddef;

  def comp rapid_delayed_rectifier_K_current_xr_gate as
    var xr: dimensionless {pub: out, init: 8.647E-7};
    var alpha_xr: per_millisecond;
    var beta_xr: per_millisecond;
    var tau_xr: millisecond;
    var xr_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
    alpha_xr = 0.04{per_millivolt_millisecond}*((V-248.0{millivolt})/(1.0{dimensionless}-exp((V-248.0{millivolt})/(-28.0{millivolt}))));
    beta_xr = 0.028{per_millivolt_millisecond}*((V+163.0{millivolt})/(exp((V+163.0{millivolt})/21.0{millivolt})-1.0{dimensionless}));
    tau_xr = pow(alpha_xr+beta_xr, -1.0{dimensionless});
    xr_infinity = pow(1.0{dimensionless}+exp((V+7.654{millivolt})/(-5.377{millivolt})), -1.0{dimensionless});
  enddef;

  def comp slow_delayed_rectifier_K_current as
    var i_Ks: picoA {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.0561};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(xs)*(V-E_K);
  enddef;

  def comp slow_delayed_rectifier_K_current_xs_gate as
    var xs: dimensionless {pub: out, init: 0.01853};
    var alpha_xs: per_millisecond;
    var beta_xs: per_millisecond;
    var tau_xs: millisecond;
    var xs_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
    alpha_xs = 0.00001{per_millivolt_millisecond}*((V+28.5{millivolt})/(1.0{dimensionless}-exp((V+28.5{millivolt})/(-115.0{millivolt}))));
    beta_xs = 0.00023{per_millivolt_millisecond}*((V+28.5{millivolt})/(exp((V+28.5{millivolt})/3.3{millivolt})-1.0{dimensionless}));
    tau_xs = pow(alpha_xs+beta_xs, -1.0{dimensionless});
    xs_infinity = pow(1.0{dimensionless}+exp((V-13.0{millivolt})/(-12.0{millivolt})), -0.5{dimensionless});
  enddef;

  def comp sarcolemmal_Ca_current as
    var i_Ca: picoA {pub: out};
    var g_Ca: nanoS_per_picoF {init: 0.24};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca = g_Ca*d*f*f_Ca*(V-65.0{millivolt});
  enddef;

  def comp sarcolemmal_Ca_current_d_gate as
    var d: dimensionless {pub: out, init: 5.448E-6};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(d, time) = (d_infinity-d)/tau_d;
    d_infinity = pow(1.0{dimensionless}+exp((V+10.0{millivolt})/(-6.0{millivolt})), -1.0{dimensionless});
    tau_d = (1.0{millisecond}-exp((V+10.0{millivolt})/(-6.24{millivolt})))/(0.035{per_millivolt}*(V+10.0{millivolt})*(1.0{dimensionless}+exp((V+10.0{millivolt})/6.24{millivolt})));
  enddef;

  def comp sarcolemmal_Ca_current_f_gate as
    var f: dimensionless {pub: out, init: 0.9999};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(f, time) = (f_infinity-f)/tau_f;
    f_infinity = pow(1.0{dimensionless}+exp((V+24.6{millivolt})/6.2{millivolt}), -1.0{dimensionless});
    tau_f = 400.0{millisecond}*pow(1.0{dimensionless}+4.5{dimensionless}*exp(-0.0007{dimensionless}*sqr(V-9.0{millivolt})), -1.0{dimensionless});
  enddef;

  def comp sarcolemmal_Ca_current_f_Ca_gate as
    var f_Ca: dimensionless {pub: out, init: 0.6535};
    var f_Ca_infinity: dimensionless;
    var tau_f_Ca: millisecond {init: 2.0};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
    f_Ca_infinity = 0.29{dimensionless}+0.8{dimensionless}*pow(1.0{dimensionless}+exp((Ca_i-0.00012{millimolar})/0.00006{millimolar}), -1.0{dimensionless});
  enddef;

  def comp Ca_activated_Cl_current as
    var i_Cl_Ca: picoA {pub: out};
    var g_Cl_Ca: nanoS_per_picoF {init: 0.3};
    var E_Cl: millivolt {pub: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Fn: dimensionless {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var Cl_i: millimolar {pub: in};
    var Cl_o: millimolar {pub: in};
    var q_Ca: dimensionless {priv: in};
    i_Cl_Ca = g_Cl_Ca*q_Ca*(V-E_Cl);
    E_Cl = R*T/F*ln(Cl_o/Cl_i);
  enddef;

  def comp Ca_activated_Cl_current_q_Ca_gate as
    var q_Ca: dimensionless {pub: out, init: 0.0};
    var q_Ca_infinity: dimensionless;
    var tau_q_Ca: millisecond {init: 2.0};
    var Fn: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    q_Ca_infinity = 1.0{dimensionless}-pow(1.0{dimensionless}+pow(Fn/0.00000000011{dimensionless}, 3.0{dimensionless}), -1.0{dimensionless});
  enddef;

  def comp Na_Cl_cotransporter as
    var CT_NaCl: picoA {pub: out};
    var n: dimensionless {init: 4.0};
    var delta_CT_n: dimensionless {init: 87.8251};
    var g_CT: nanoS_per_picoF {init: 0.115};
    var E_Cl: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    CT_NaCl = g_CT*(delta_CT_n/(E_Na-E_Cl+delta_CT_n));
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var Km_Na_i: millimolar {init: 10.0};
    var Km_K_o: millimolar {init: 1.5};
    var i_NaK_max: picoA {init: 0.6};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var time: millisecond {pub: in};
    i_NaK = i_NaK_max*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless})))*(K_o/(K_o+Km_K_o));
    f_NaK = pow(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(F*V/(R*T)))+0.0365{dimensionless}*sigma*exp(-(F*V/(R*T))), -1.0{dimensionless});
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Na_o/67.3{millimolar})-1.0{dimensionless});
  enddef;

  def comp Na_Ca_exchanger_current as
    var i_NaCa: picoA {pub: out};
    var I_NaCa_max: picoA {init: 1600.0};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = I_NaCa_max*(exp(0.35{dimensionless}*F*V/(R*T))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp(-0.65{dimensionless}*F*V/(R*T))*pow(Na_o, 3.0{dimensionless})*Ca_i)/((pow(K_mNa, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))*(K_mCa+Ca_o)*(1.0{dimensionless}+K_sat*exp(-0.65{dimensionless}*V*F/(R*T))));
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_K: picoA {pub: out};
    var i_B_Cl: picoA {pub: out};
    var g_B_Na: nanoS_per_picoF {init: 0.000674};
    var g_B_Ca: nanoS_per_picoF {init: 0.00113};
    var g_B_K: nanoS_per_picoF {init: 0.0};
    var g_B_Cl: nanoS_per_picoF {init: 0.0018};
    var E_Ca: millivolt;
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    i_B_K = g_B_K*(V-E_K);
    i_B_Cl = g_B_Cl*(V-E_Cl);
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i);
  enddef;

  def comp Ca_pump_current as
    var i_p_Ca: picoA {pub: out};
    var i_p_Ca_max: picoA {init: 0.275};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_p_Ca = i_p_Ca_max*(Ca_i/(0.0005{millimolar}+Ca_i));
  enddef;

  def comp Ca_release_current_from_JSR as
    var i_rel: picoA {pub: out};
    var Fn: dimensionless {pub: out, priv: out};
    var K_rel: per_millisecond {init: 30.0};
    var V_rel: micrometre_3 {init: 96.48};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    var i_Ca: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var u: dimensionless {priv: in};
    var v: dimensionless {priv: in};
    var w: dimensionless {priv: in};
    i_rel = K_rel*sqr(u)*v*w*(Ca_rel-Ca_i);
    Fn = 1E-12{dimensionless}*V_rel*i_rel-5E-13{dimensionless}*(1.0{dimensionless}/(2.0{dimensionless}*F)*i_Ca-1.0{dimensionless}/(5.0{dimensionless}*F)*i_NaCa);
  enddef;

  def comp Ca_release_current_from_JSR_u_gate as
    var u: dimensionless {pub: out, init: 0.0};
    var tau_u: millisecond;
    var u_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    ode(u, time) = (u_infinity-u)/tau_u;
    tau_u = 8.0{millisecond};
    u_infinity = pow(1.0{dimensionless}+exp((Fn-3.4175E-13{dimensionless})/(-13.67E-16{dimensionless})), -1.0{dimensionless});
  enddef;

  def comp Ca_release_current_from_JSR_v_gate as
    var v: dimensionless {pub: out, init: 1.0};
    var tau_v: millisecond;
    var v_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    ode(v, time) = (v_infinity-v)/tau_v;
    tau_v = 1.91{millisecond}+2.09{millisecond}*pow(1.0{dimensionless}+exp((Fn-3.4175E-13{dimensionless})/(-13.67E-16{dimensionless})), -1.0{dimensionless});
    v_infinity = 1.0{dimensionless}-pow(1.0{dimensionless}+exp((Fn-6.835E-14{dimensionless})/(-13.67E-16{dimensionless})), -1.0{dimensionless});
  enddef;

  def comp Ca_release_current_from_JSR_w_gate as
    var w: dimensionless {pub: out, init: 0.9993};
    var tau_w: millisecond;
    var w_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(w, time) = (w_infinity-w)/tau_w;
    tau_w = (6.0{millisecond}-6.0{dimensionless}*exp((V-7.9{millivolt})/(-5.0{millivolt})))/((1.0{dimensionless}+0.3{dimensionless}*exp((V-7.9{millivolt})/(-5.0{millivolt})))*(V-7.9{millivolt}));
    w_infinity = 1.0{dimensionless}-pow(1.0{dimensionless}+exp((V-40.0{millivolt})/(-17.0{millivolt})), -1.0{dimensionless});
  enddef;

  def comp transfer_current_from_NSR_to_JSR as
    var i_tr: picoA {pub: out};
    var tau_tr: millisecond {init: 180.0};
    var time: millisecond {pub: in};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    i_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp Ca_uptake_current_by_the_NSR as
    var I_up_max: picoA {pub: out, init: 0.005};
    var i_up: picoA {pub: out};
    var K_up: millimolar {init: 0.00092};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    i_up = I_up_max/(1.0{dimensionless}+K_up/Ca_i);
  enddef;

  def comp Ca_leak_current_by_the_NSR as
    var i_up_leak: picoA {pub: out};
    var Ca_up_max: millimolar {init: 15.0};
    var time: millisecond {pub: in};
    var Ca_up: millimolar {pub: in};
    var I_up_max: picoA {pub: in};
    i_up_leak = I_up_max*(Ca_up/Ca_up_max);
  enddef;

  def comp Ca_buffers as
    var CMDN_max: millimolar {pub: out, init: 0.045};
    var TRPN_max: millimolar {pub: out, init: 0.35};
    var CSQN_max: millimolar {pub: out, init: 10.0};
    var J_Ca_CMDN: millimolar_per_millisecond {pub: out};
    var J_Ca_TRPN: millimolar_per_millisecond {pub: out};
    var J_Ca_CSQN: millimolar_per_millisecond {pub: out};
    var Ca_CMDN: millimolar {init: 2.347E-3};
    var Ca_TRPN: millimolar {init: 8.933E-3};
    var Ca_CSQN: millimolar {init: 6.916};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    Ca_CMDN = 200.0{dimensionless}*Ca_i*(1.0{dimensionless}-Ca_CMDN/CMDN_max)-0.476{dimensionless}*(Ca_CMDN/CMDN_max);
    J_Ca_CMDN = ode(Ca_CMDN, time);
    Ca_TRPN = 78.4{dimensionless}*Ca_i*(1.0{dimensionless}-Ca_TRPN/TRPN_max)-0.392{dimensionless}*(Ca_TRPN/TRPN_max);
    J_Ca_TRPN = ode(Ca_TRPN, time);
    Ca_CSQN = 0.48{dimensionless}*Ca_rel*(1.0{dimensionless}-Ca_CSQN/CSQN_max)-0.4{dimensionless}*(Ca_CSQN/CSQN_max);
    J_Ca_CSQN = ode(Ca_CSQN, time);
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {pub: out, init: 13.86};
    var Ca_i: millimolar {pub: out, init: 1.310E-4};
    var Cl_i: millimolar {pub: out, init: 29.95};
    var K_i: millimolar {pub: out, init: 136.9};
    var Ca_rel: millimolar {pub: out, init: 1.869};
    var Ca_up: millimolar {pub: out, init: 1.869};
    var V_i: micrometre_3 {init: 13668.0};
    var V_rel: micrometre_3 {init: 96.48};
    var V_up: micrometre_3 {init: 1109.52};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur_d: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_p_Ca: picoA {pub: in};
    var i_Ca: picoA {pub: in};
    var i_Cl_Ca: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_K: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_up_leak: picoA {pub: in};
    var i_tr: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var CMDN_max: millimolar {pub: in};
    var CSQN_max: millimolar {pub: in};
    var TRPN_max: millimolar {pub: in};
    var J_Ca_CMDN: millimolar_per_millisecond {pub: in};
    var J_Ca_CSQN: millimolar_per_millisecond {pub: in};
    var J_Ca_TRPN: millimolar_per_millisecond {pub: in};
    ode(Na_i, time) = (-3.0{dimensionless}*i_NaK-(3.0{dimensionless}*i_NaCa+i_B_Na+i_Na))/(V_i*F);
    ode(K_i, time) = (2.0{dimensionless}*i_NaK-(i_K1+i_to+i_Kur_d+i_Kr+i_Ks+i_B_K))/(V_i*F);
    ode(Cl_i, time) = i_Cl_Ca/(V_i*F);
    ode(Ca_i, time) = (2.0{dimensionless}*i_NaCa-(i_p_Ca+i_Ca+i_B_Ca))/(2.0{dimensionless}*V_i*F)+(V_up*(i_up_leak-i_up)+i_rel*V_rel)/V_i-(TRPN_max*J_Ca_TRPN+CMDN_max*J_Ca_CMDN);
    ode(Ca_up, time) = i_up-(i_up_leak+i_tr*(V_rel/V_up));
    ode(Ca_rel, time) = i_tr-(i_rel+31.0{dimensionless}*J_Ca_CSQN);
  enddef;

  def comp standard_ionic_concentrations as
    var Na_o: millimolar {pub: out, init: 140.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {pub: out, init: 1.8};
    var K_o: millimolar {pub: out, init: 5.4};
    var Cl_o: millimolar {pub: out, init: 132.0};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_K_current incl
        comp transient_outward_K_current_oa_gate;
        comp transient_outward_K_current_oi_gate;
      endcomp;
      comp ultrarapid_delayed_rectifier_K_current incl
        comp ultrarapid_delayed_rectifier_K_current_ua_gate;
        comp ultrarapid_delayed_rectifier_K_current_ui_gate;
      endcomp;
      comp rapid_delayed_rectifier_K_current incl
        comp rapid_delayed_rectifier_K_current_xr_gate;
      endcomp;
      comp slow_delayed_rectifier_K_current incl
        comp slow_delayed_rectifier_K_current_xs_gate;
      endcomp;
      comp sarcolemmal_Ca_current incl
        comp sarcolemmal_Ca_current_d_gate;
        comp sarcolemmal_Ca_current_f_gate;
        comp sarcolemmal_Ca_current_f_Ca_gate;
      endcomp;
      comp Ca_activated_Cl_current incl
        comp Ca_activated_Cl_current_q_Ca_gate;
      endcomp;
      comp Na_Cl_cotransporter;
      comp sodium_potassium_pump;
      comp background_currents;
      comp Na_Ca_exchanger_current;
      comp Ca_pump_current;
      comp Ca_release_current_from_JSR incl
        comp Ca_release_current_from_JSR_u_gate;
        comp Ca_release_current_from_JSR_v_gate;
        comp Ca_release_current_from_JSR_w_gate;
      endcomp;
      comp transfer_current_from_NSR_to_JSR;
      comp Ca_uptake_current_by_the_NSR;
      comp Ca_leak_current_by_the_NSR;
      comp Ca_buffers;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp transient_outward_K_current incl
      comp transient_outward_K_current_oa_gate;
      comp transient_outward_K_current_oi_gate;
    endcomp;
    comp ultrarapid_delayed_rectifier_K_current incl
      comp ultrarapid_delayed_rectifier_K_current_ua_gate;
      comp ultrarapid_delayed_rectifier_K_current_ui_gate;
    endcomp;
    comp rapid_delayed_rectifier_K_current incl
      comp rapid_delayed_rectifier_K_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_K_current incl
      comp slow_delayed_rectifier_K_current_xs_gate;
    endcomp;
    comp sarcolemmal_Ca_current incl
      comp sarcolemmal_Ca_current_d_gate;
      comp sarcolemmal_Ca_current_f_gate;
      comp sarcolemmal_Ca_current_f_Ca_gate;
    endcomp;
    comp Ca_activated_Cl_current incl
      comp Ca_activated_Cl_current_q_Ca_gate;
    endcomp;
    comp Ca_release_current_from_JSR incl
      comp Ca_release_current_from_JSR_u_gate;
      comp Ca_release_current_from_JSR_v_gate;
      comp Ca_release_current_from_JSR_w_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_Ca_current and environment for
    vars time and time;
  enddef;
  def map between Ca_activated_Cl_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Cl_cotransporter and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between Ca_pump_current and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR and environment for
    vars time and time;
  enddef;
  def map between transfer_current_from_NSR_to_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_uptake_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_leak_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_buffers and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_K_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kur_d and i_Kur_d;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and sarcolemmal_Ca_current for
    vars V and V;
    vars i_Ca and i_Ca;
  enddef;
  def map between membrane and Ca_activated_Cl_current for
    vars V and V;
    vars i_Cl_Ca and i_Cl_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_Cl and i_B_Cl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Ca_pump_current for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between Ca_release_current_from_JSR and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and Na_Cl_cotransporter for
    vars E_Na and E_Na;
  enddef;
  def map between Ca_activated_Cl_current and Na_Cl_cotransporter for
    vars E_Cl and E_Cl;
  enddef;
  def map between Ca_activated_Cl_current and background_currents for
    vars E_Cl and E_Cl;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ultrarapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and slow_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kur_d and i_Kur_d;
  enddef;
  def map between rapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_K_current for
    vars i_to and i_to;
  enddef;
  def map between sarcolemmal_Ca_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca and i_Ca;
  enddef;
  def map between sarcolemmal_Ca_current and Ca_release_current_from_JSR for
    vars i_Ca and i_Ca;
  enddef;
  def map between Ca_activated_Cl_current and intracellular_ion_concentrations for
    vars Cl_i and Cl_i;
    vars i_Cl_Ca and i_Cl_Ca;
  enddef;
  def map between Ca_activated_Cl_current and standard_ionic_concentrations for
    vars Cl_o and Cl_o;
  enddef;
  def map between Ca_activated_Cl_current and Ca_release_current_from_JSR for
    vars Fn and Fn;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between Na_Ca_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger_current and Ca_release_current_from_JSR for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Ca_pump_current and intracellular_ion_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ion_concentrations and Ca_release_current_from_JSR for
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between intracellular_ion_concentrations and transfer_current_from_NSR_to_JSR for
    vars i_tr and i_tr;
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between intracellular_ion_concentrations and Ca_uptake_current_by_the_NSR for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_leak_current_by_the_NSR and Ca_uptake_current_by_the_NSR for
    vars I_up_max and I_up_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and intracellular_ion_concentrations for
    vars i_up_leak and i_up_leak;
    vars Ca_up and Ca_up;
  enddef;
  def map between Ca_buffers and intracellular_ion_concentrations for
    vars CMDN_max and CMDN_max;
    vars CSQN_max and CSQN_max;
    vars TRPN_max and TRPN_max;
    vars J_Ca_CMDN and J_Ca_CMDN;
    vars J_Ca_CSQN and J_Ca_CSQN;
    vars J_Ca_TRPN and J_Ca_TRPN;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between sarcolemmal_Ca_current and sarcolemmal_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between sarcolemmal_Ca_current and sarcolemmal_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between sarcolemmal_Ca_current and sarcolemmal_Ca_current_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_activated_Cl_current and Ca_activated_Cl_current_q_Ca_gate for
    vars q_Ca and q_Ca;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oa_gate for
    vars oa and oa;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oi_gate for
    vars oi and oi;
    vars time and time;
    vars V and V;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars ua and ua;
    vars time and time;
    vars V and V;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars ui and ui;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_K_current and rapid_delayed_rectifier_K_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_K_current and slow_delayed_rectifier_K_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_u_gate for
    vars u and u;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_v_gate for
    vars v and v;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_w_gate for
    vars w and w;
    vars time and time;
    vars V and V;
  enddef;
enddef;
